<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:CreateSerialPort">
          <io:Name>ArduinoSerial</io:Name>
          <io:PortName>COM3</io:PortName>
          <io:BaudRate>1000000</io:BaudRate>
          <io:Encoding>utf-8</io:Encoding>
          <io:Parity>None</io:Parity>
          <io:ParityReplace>63</io:ParityReplace>
          <io:DataBits>8</io:DataBits>
          <io:StopBits>One</io:StopBits>
          <io:Handshake>None</io:Handshake>
          <io:DiscardNull>false</io:DiscardNull>
          <io:DtrEnable>true</io:DtrEnable>
          <io:RtsEnable>false</io:RtsEnable>
          <io:ReadBufferSize>4096</io:ReadBufferSize>
          <io:WriteBufferSize>2048</io:WriteBufferSize>
          <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringRead">
          <io:PortName>ArduinoSerial</io:PortName>
          <io:NewLine>\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:SampleOnRenderFrame" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>@returns(bool)
def process(value):
  mylist = value.split("\t")

  if len(mylist) == 3:
    return True
  else:
    return False

</ipy:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Parse">
        <Pattern>%i\t%i\t%i\t%i</Pattern>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Left Licks</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item3</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Right Licks</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>l300</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>ArduinoSerial</io:PortName>
          <io:NewLine>\r</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>D</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>r300</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>ArduinoSerial</io:PortName>
          <io:NewLine>\r</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>800</gl:Width>
          <gl:Height>600</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Fixed</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties>
            <cv:CapturePropertyAssignment>
              <cv:Property>Fps</cv:Property>
              <cv:Value>30</cv:Value>
            </cv:CapturePropertyAssignment>
            <cv:CapturePropertyAssignment>
              <cv:Property>Saturation</cv:Property>
              <cv:Value>0</cv:Value>
            </cv:CapturePropertyAssignment>
            <cv:CapturePropertyAssignment>
              <cv:Property>Exposure</cv:Property>
              <cv:Value>0</cv:Value>
            </cv:CapturePropertyAssignment>
            <cv:CapturePropertyAssignment>
              <cv:Property>Gain</cv:Property>
              <cv:Value>30</cv:Value>
            </cv:CapturePropertyAssignment>
            <cv:CapturePropertyAssignment>
              <cv:Property>Contrast</cv:Property>
              <cv:Value>121</cv:Value>
            </cv:CapturePropertyAssignment>
            <cv:CapturePropertyAssignment>
              <cv:Property>Brightness</cv:Property>
              <cv:Value>143</cv:Value>
            </cv:CapturePropertyAssignment>
            <cv:CapturePropertyAssignment>
              <cv:Property>Sharpness</cv:Property>
              <cv:Value>50</cv:Value>
            </cv:CapturePropertyAssignment>
            <cv:CapturePropertyAssignment>
              <cv:Property>Gamma</cv:Property>
              <cv:Value>0</cv:Value>
            </cv:CapturePropertyAssignment>
            <cv:CapturePropertyAssignment>
              <cv:Property>Backlight</cv:Property>
              <cv:Value>100</cv:Value>
            </cv:CapturePropertyAssignment>
            <cv:CapturePropertyAssignment>
              <cv:Property>FrameWidth</cv:Property>
              <cv:Value>2560</cv:Value>
            </cv:CapturePropertyAssignment>
            <cv:CapturePropertyAssignment>
              <cv:Property>FrameHeight</cv:Property>
              <cv:Value>1440</cv:Value>
            </cv:CapturePropertyAssignment>
          </cv:CaptureProperties>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Flip">
          <cv:Mode>Vertical</cv:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:Crop">
            <cv:RegionOfInterest>
              <cv:X>1676</cv:X>
              <cv:Y>176</cv:Y>
              <cv:Width>76</cv:Width>
              <cv:Height>62</cv:Height>
            </cv:RegionOfInterest>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Height</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Width</Selector>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="5" To="7" Label="Source1" />
      <Edge From="5" To="10" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="21" To="23" Label="Source1" />
      <Edge From="21" To="24" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>