<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:CreateSerialPort">
          <io:Name>ArduinoSerial</io:Name>
          <io:PortName>COM3</io:PortName>
          <io:BaudRate>1000000</io:BaudRate>
          <io:Encoding>utf-8</io:Encoding>
          <io:Parity>None</io:Parity>
          <io:ParityReplace>63</io:ParityReplace>
          <io:DataBits>8</io:DataBits>
          <io:StopBits>One</io:StopBits>
          <io:Handshake>None</io:Handshake>
          <io:DiscardNull>false</io:DiscardNull>
          <io:DtrEnable>true</io:DtrEnable>
          <io:RtsEnable>false</io:RtsEnable>
          <io:ReadBufferSize>4096</io:ReadBufferSize>
          <io:WriteBufferSize>2048</io:WriteBufferSize>
          <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>l999999999</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>ArduinoSerial</io:PortName>
          <io:NewLine>\r</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>D</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>r999999999</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>ArduinoSerial</io:PortName>
          <io:NewLine>\r</io:NewLine>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>