<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="nReps" Category="Parameters" />
        <Property Name="AutoReadScale?" Category="Parameters" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitialiseVariables</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>nReps</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>OpenTime</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>ValveBool</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="AutoReadScale?" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>AutoReadScale?</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>ReadScaleBool</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="OpenTimesList" Category="Parameters" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GetCurrentOpenTime</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>OpenTimeIndex</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ThisList" DisplayName="OpenTimesList" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateList">
                <p1:ThisList>
                  <p1:float>50</p1:float>
                  <p1:float>100</p1:float>
                </p1:ThisList>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>OpenTimesList</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TotalOpenTimes</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="LessThan" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.Item1[it.Item2]</scr:Expression>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>OpenTime</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Count</Selector>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>TotalOpenTimes</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="9" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GetOpenTimeIndex</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>IncrementIndex</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>OpenTimeIndex</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>csvFileName</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>WriteCSVFile</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>OpenTime</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ScaleReading</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>nReps</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(Item1.Item1 as OpenTime, Item1.Item2 as ScaleReading, Item2 as nReps)</scr:Expression>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" />
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>LPCAL_Rig_TestRig_Lickport_l_.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GenerateSerialString</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>OpenTime</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.ToString()</scr:Expression>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LickportID</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.Item1+it.Item2</scr:Expression>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>String2Send</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="InterOpenInterval" Category="Parameters" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SendSerialString</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>String2Send</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Period" DisplayName="InterOpenInterval" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT1S</rx:DueTime>
                <rx:Period>PT0.5S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ValveBool</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>l100</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
              <Property Name="NewLine" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="io:SerialStringWrite">
                  <io:PortName>ArduinoInput</io:PortName>
                  <io:NewLine>\r</io:NewLine>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="5" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>UpdateNReps</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>nReps</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Mod" />
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ValveBool</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ReadScaleBool</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ScaleValue" Category="CurrentScaleValue" />
        <Property Name="EnterValueFilter" Category="KeyFilters" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SubmitScaleReading</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="ScaleValue" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>10</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="EnterValueFilter" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>A</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>AutoReadScale</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ReadScaleBool</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>ScaleReading</Name>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>IncrementIndex</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ValveBool</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ReadScaleBool</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="6" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="7" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="10" To="15" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Filter" DisplayName="StartWorkflowFilter" Category="KeyFilters" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>B</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigInfo</Name>
      </Expression>
      <Expression xsi:type="Format">
        <Format>LPCAL_Rig_{0}_Lickport_{1}_.csv</Format>
        <Selector>Item1,Item2</Selector>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>csvFileName</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EndWorkflow</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Last" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="SubscribeSubject">
        <Name>OpenTimeIndex</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TotalOpenTimes</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>EndWorkflow</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="RigName" Category="Filename" />
        <Property Name="l or r" Category="Filename" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CreateFilename</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="RigName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>TestRig</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>RigID</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="l or r" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>l</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>LickportID</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>RigInfo</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="16" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="17" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="15" To="17" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="22" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="26" To="28" Label="Source1" />
      <Edge From="27" To="28" Label="Source2" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>