<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:CreateSerialPort">
          <io:Name>Scales</io:Name>
          <io:PortName>COM1</io:PortName>
          <io:BaudRate>9600</io:BaudRate>
          <io:Encoding>utf-8</io:Encoding>
          <io:Parity>None</io:Parity>
          <io:ParityReplace>63</io:ParityReplace>
          <io:DataBits>8</io:DataBits>
          <io:StopBits>One</io:StopBits>
          <io:Handshake>None</io:Handshake>
          <io:DiscardNull>false</io:DiscardNull>
          <io:DtrEnable>true</io:DtrEnable>
          <io:RtsEnable>false</io:RtsEnable>
          <io:ReadBufferSize>4096</io:ReadBufferSize>
          <io:WriteBufferSize>2048</io:WriteBufferSize>
          <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:CreateSerialPort">
          <io:Name>ArduinoSerial</io:Name>
          <io:PortName>COM5</io:PortName>
          <io:BaudRate>1000000</io:BaudRate>
          <io:Encoding>utf-8</io:Encoding>
          <io:Parity>None</io:Parity>
          <io:ParityReplace>63</io:ParityReplace>
          <io:DataBits>8</io:DataBits>
          <io:StopBits>One</io:StopBits>
          <io:Handshake>None</io:Handshake>
          <io:DiscardNull>false</io:DiscardNull>
          <io:DtrEnable>true</io:DtrEnable>
          <io:RtsEnable>false</io:RtsEnable>
          <io:ReadBufferSize>4096</io:ReadBufferSize>
          <io:WriteBufferSize>2048</io:WriteBufferSize>
          <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="nReps" Category="Parameters" />
        <Property Name="AutoReadScale?" Category="Parameters" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitialiseVariables</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>200</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>nReps</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>OpenTime</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ValveBool</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="AutoReadScale?" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>AutoReadScale?</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ReadScaleBool</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Q</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>serial2send</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="OpenTimesList" Category="Parameters" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GetCurrentOpenTime</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>OpenTimeIndex</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ThisList" DisplayName="OpenTimesList" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateList">
                <p1:ThisList>
                  <p1:float>30</p1:float>
                  <p1:float>40</p1:float>
                  <p1:float>50</p1:float>
                  <p1:float>60</p1:float>
                  <p1:float>80</p1:float>
                  <p1:float>100</p1:float>
                </p1:ThisList>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>OpenTimesList</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TotalOpenTimes</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="LessThan" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.Item1[it.Item2]</scr:Expression>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>OpenTime</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Count</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TotalOpenTimes</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="9" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GetOpenTimeIndex</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>IncrementIndex</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>OpenTimeIndex</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>csvFileName</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>WriteCSVFile</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>OpenTime</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ScaleReading</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>nReps</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(Item1.Item1 as OpenTime, Item1.Item2 as ScaleReading, Item2 as nReps)</scr:Expression>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" />
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>lpCal_Switch_l_.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GenerateSerialString</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>OpenTime</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.ToString()</scr:Expression>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LickportID</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.Item1+it.Item2</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>String2Send</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="InterOpenInterval" Category="Parameters" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SendSerialString</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>String2Send</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Period" DisplayName="InterOpenInterval" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT1S</rx:DueTime>
                <rx:Period>PT0.5S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ValveBool</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>r20</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
              <Property Name="NewLine" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EndWorkflow</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringWrite">
                <io:PortName>ArduinoSerial</io:PortName>
                <io:NewLine>\r</io:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="5" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="6" To="9" Label="Source2" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>UpdateNReps</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>nReps</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Mod" />
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ValveBool</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ReadScaleBool</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ScaleValue" Category="CurrentScaleValue" />
        <Property Name="EnterValueFilter" Category="KeyFilters" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SubmitScaleReading</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="ScaleValue" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="EnterValueFilter" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>A</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ReadScaleBool</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringRead">
                <io:PortName>Scales</io:PortName>
                <io:NewLine>\r\n</io:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>ReadScales?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ReadScaleBool</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Parse">
              <Pattern>%s%s,+%d %s</Pattern>
              <Separator />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>Stable</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="StringProperty">
                      <Value>ST</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>NotStable</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="NotEqual">
                    <Operand xsi:type="StringProperty">
                      <Value>ST</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Q</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>serial2send</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item3</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ScaleReading</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>IncrementIndex</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ValveBool</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ReadScaleBool</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>serial2send</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringWrite">
                <io:PortName>Scales</io:PortName>
                <io:NewLine>\r\n</io:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ReadScaleBool</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>ReadyForScaleReading?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>AutoReadScale?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>AutoReadScale?</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Q</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>serial2send</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="17" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="9" To="15" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="16" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="18" To="23" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Filter" DisplayName="StartWorkflowFilter" Category="KeyFilters" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>B</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigInfo</Name>
      </Expression>
      <Expression xsi:type="Format">
        <Format>lpCal_{0}_{1}_.csv</Format>
        <Selector>Item1,Item2</Selector>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>csvFileName</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EndWorkflow</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Last" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="SubscribeSubject">
        <Name>OpenTimeIndex</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TotalOpenTimes</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>EndWorkflow</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="RigName" Category="Filename" />
        <Property Name="l or r" Category="Filename" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CreateFilename</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="RigName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Switch</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RigID</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="l or r" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>l</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>LickportID</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RigInfo</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>O</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>l50</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>ArduinoSerial</io:PortName>
          <io:NewLine>\r</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>P</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>r50</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>ArduinoSerial</io:PortName>
          <io:NewLine>\r</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>m</Value>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="18" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="19" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="17" To="19" Label="Source2" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="24" Label="Source1" />
      <Edge From="23" To="24" Label="Source2" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="28" To="30" Label="Source1" />
      <Edge From="29" To="30" Label="Source2" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>