<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT1S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>6</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>RewardVolume</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" />
        <Property Name="Name" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GetValveOpenTime</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" />
            </Expression>
            <Expression xsi:type="io:CsvReader">
              <io:FileName>Bonsai_LPCAL_Rig_TrinityTest_Lickport_l_2023-06-20T17_49_14.csv</io:FileName>
              <io:ListSeparator />
              <io:ScanPattern>%f,%f</io:ScanPattern>
              <io:SkipRows>0</io:SkipRows>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToList" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToList" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RewardVolume</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>6</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:FindListIndex" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item1[Item2]</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="12" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="10" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>