WorkflowBuilder(Version=2.7.1)
GroupWorkflow "Display And Resources"
    Bonsai.Shaders.CreateWindow
      Width=1800
      Height=800
      VSync=Off
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=false
      Location=nil
      WindowBorder=Hidden
      WindowState=Fullscreen
      DisplayDevice=Second
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=3
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=plaid
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\plaid.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=vertGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\vertGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn1
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn1.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn2
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn2.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn3
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn3.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=fwn4
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\fwn4.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=grayEnd
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\grayEnd.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=horGrat
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\horGrat.jpg
          ColorType=Unchanged
          FlipMode=Vertical
    -> Bonsai.Shaders.MeshResources(Meshes(MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cube3d, FileName=cube3d.obj)))
    -> Bonsai.Shaders.ShaderResources
      Shaders
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=MeshMapSphere
          RenderState=""
          ShaderUniforms=""
          BufferBindings
            BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D)
            BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture1, TextureTarget=Texture2D)
          FramebufferAttachments=""
          VertexShader=Shaders\MeshMapSphere.vert
          FragmentShader=Shaders\MeshMapSphere.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=MeshMapGradient
          RenderState=""
          ShaderUniforms=""
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=Shaders\MeshMapSphere.vert
          FragmentShader=Shaders\gradient.frag
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=MeshMapVector
          RenderState=""
          ShaderUniforms=""
          BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture0, TextureName=plaid, TextureTarget=Texture2D))
          FramebufferAttachments=""
          VertexShader=Shaders\MeshMapSphere.vert
          FragmentShader=Shaders\vector.frag
    -> Bonsai.Resources.LoadResources => #5
    Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey A P Q Control", SuppressRepetitions=false) => #6
    SubscribeSubject EndWorkflow
    -> Skip(Count=1) => #8
    #6, #8 -> Sample
    -> Bonsai.Shaders.Delay(DueTime=PT15S)
    -> Bonsai.Shaders.SampleOnRenderFrame => #11
    #5, #11 -> TakeUntil
    -> WorkflowOutput

    Bonsai.Shaders.UpdateFrame => #14
    -> PublishSubject DrawStimuli
    #14 -> PublishSubject DrawQuad

    Disable GroupWorkflow "Dome Render"
        Bonsai.Shaders.RenderFrame
        -> Disable GroupWorkflow FrameEventLoggers => #1
            WorkflowInput Source1 => #0
            SubscribeSubject WheelName
            -> PropertyMapping(FileName) => #2
            #0, #2 -> IncludeWorkflow Events(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test2_WheelLog.csv) => #3
            SubscribeSubject EyeName
            -> PropertyMapping(FileName) => #5
            #3, #5 -> IncludeWorkflow EyeEvents(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test2_EyeLog.csv) => #6
            SubscribeSubject TrialName
            -> PropertyMapping(FileName) => #8
            #6, #8 -> IncludeWorkflow TrialEvents(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test2_Trial.csv) => #9
            SubscribeSubject PDname
            -> PropertyMapping(FileName) => #11
            #9, #11 -> IncludeWorkflow PDAsyncEvents(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=test2_PDAsync.csv)
            -> WorkflowOutput
        -> Bonsai.Shaders.CreateCubemapCamera(Eye(X=0, Y=0, Z=-100), NearClip=0.1, FarClip=1000)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
          Expression:
            new(
            ViewMatrix as ViewMatrix,
            ProjectionMatrix as ProjectionMatrix,
            ViewMatrix.Row3.Yzw as Light)
        -> BehaviorSubject Draw3DStim
        -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear)
        -> GroupWorkflow MeshMapping(Description="Renders the current scene to a texture and applies mesh mapping and brightness correction as a post-processing effect.")
            WorkflowInput Source1
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=MeshMapSphere, TextureTarget=TextureCubeMap) => #1
            ExternalizedMapping(Path)
            -> Bonsai.Dsp.MatrixReader(Path=meshmap_py_minus_hires.bin, Offset=0, SampleRate=10000000, ChannelCount=1001, BufferLength=3003, Depth=F32, Layout=RowMajor)
            -> Bonsai.Dsp.Reshape(Channels=3, Rows=0)
            -> Bonsai.Vision.Flip(Mode=Vertical)
            -> Bonsai.Shaders.LatestOnUpdateFrame
            -> Bonsai.Shaders.StoreImage(InternalFormat=Rgb32f, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear) => #7
            #1, #7 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=MeshMapSphere, TextureTarget=Texture2D)
            -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=MeshMapVector, TextureTarget=Texture2D)
            -> Bonsai.Shaders.DrawMesh(ShaderName=MeshMapSphere, MeshName=ViewportQuad)
            -> Disable Bonsai.Shaders.DrawMesh(ShaderName=MeshMapVector, MeshName=ViewportQuad)
            -> WorkflowOutput

            Disable Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
            -> Disable Bonsai.Shaders.StoreImage(InternalFormat=Rgb32f, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)

            Disable ExternalizedMapping(Path)
            -> Disable Bonsai.Dsp.MatrixReader(Path=meshmap8.bin, Offset=0, SampleRate=10000000, ChannelCount=101, BufferLength=303, Depth=U8, Layout=RowMajor)
            -> Disable Bonsai.Dsp.Reshape(Channels=3, Rows=0)
            -> Disable Bonsai.Vision.ConvertToImage
        -> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
        #3 -> BehaviorSubject Draw3DQuad
        #1 -> Disable MemberSelector(Selector=TimeStep.ElapsedRealTime)

    Disable Bonsai.Shaders.RenderFrame
    -> Disable GroupWorkflow FrameEventLoggers => #19
        WorkflowInput Source1 => #0
        SubscribeSubject WheelName
        -> PropertyMapping(FileName) => #2
        #0, #2 -> IncludeWorkflow Events(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=M99999_SDTraining_WheelLog.csv) => #3
        SubscribeSubject EyeName
        -> PropertyMapping(FileName) => #5
        #3, #5 -> IncludeWorkflow EyeEvents(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=M99999_SDTraining_EyeLog.csv) => #6
        SubscribeSubject TrialName
        -> PropertyMapping(FileName) => #8
        #6, #8 -> IncludeWorkflow TrialEvents(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=M99999_SDTraining_Trial.csv) => #9
        SubscribeSubject PDname
        -> PropertyMapping(FileName) => #11
        #9, #11 -> IncludeWorkflow PDAsyncEvents(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=M99999_SDTraining_PDAsync.csv)
        -> WorkflowOutput
    -> Disable Bonsai.Shaders.CreateCubemapCamera(Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=1000)
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #21
      Expression:
        new(
        ViewMatrix as ViewMatrix,
        ProjectionMatrix as ProjectionMatrix,
        ViewMatrix.Row3.Yzw as Light)
    -> Disable BehaviorSubject Draw3DStim
    -> Disable Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear)
    -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
    #21 -> Disable BehaviorSubject Draw3DQuad
    #19 -> Disable MemberSelector(Selector=TimeStep.ElapsedRealTime)

    Bonsai.Shaders.RenderFrame => #27
    -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=-100), NearClip=0.1, FarClip=10000, Light(X=0, Y=0, Z=0))
    -> BehaviorSubject Draw3DStim
    -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #30
    -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=60.000001669652114, Z=0), Translation(X=-12, Y=0, Z=-9))
    -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.333, Height=1)
    -> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=0.333, Height=1)))
    #30 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-15))
    -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333, Y=0, Width=0.333, Height=1)
    -> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0.333, Y=0, Width=0.333, Height=1)))
    #30 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=-60.000001669652114, Z=0), Translation(X=12, Y=0, Z=-9))
    -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.665, Y=0, Width=0.333, Height=1)
    -> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0.665, Y=0, Width=0.333, Height=1)))
    #27 -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
    #27 -> ElementIndex
    -> MemberSelector(Selector=Index)
    -> BehaviorSubject RenderFrameCount

WorkflowInput Source1 => #1
ExternalizedMapping(TrialClassPostStimTime, 3dMotionCorrection) => #2
#1, #2 -> GroupWorkflow Task
    WorkflowInput Source1
    -> GroupWorkflow "Standard Trial Settings" => #1
        WorkflowInput Source1
        -> GroupWorkflow s2d25 => #1
            WorkflowInput Source1
            -> SpeedDiscSpecification2
              Trials
                SpeedDiscParameters2
                  Duration=2
                  Size=4.6542
                  Colour1=0
                  Colour2=1
                  numDots1=476
                  numDots2=476
                  dotLifeBool=0
                  dotLifetime=200
                  Contrast=1
                  VelocityXLeft=0
                  VelocityYLeft=0
                  CoherenceLeft=100
                  VelocityXRight=0
                  VelocityYRight=0
                  CoherenceRight=100
                  transXLeft=-100
                  transXRight=100
            -> GroupWorkflow EnsureSpeedDiscParameters
                WorkflowInput Source1
                -> ElementIndex => #1
                -> MemberSelector(Selector=Index) => #2
                #1 -> MemberSelector(Selector=Value.Duration) => #3
                ExternalizedMapping(Value(DisplayName=DotSize)) => #4
                ExternalizedMapping(Value(DisplayName=Colour1)) => #5
                ExternalizedMapping(Value(DisplayName=Colour2)) => #6
                ExternalizedMapping(Value(DisplayName=numDots1)) => #7
                ExternalizedMapping(Value(DisplayName=numDots2)) => #8
                ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
                ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
                ExternalizedMapping(Value(DisplayName=Contrast)) => #11
                ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
                ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
                ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
                ExternalizedMapping(Value(DisplayName=VelXright)) => #15
                ExternalizedMapping(Value(DisplayName=VelYright)) => #16
                ExternalizedMapping(Value(DisplayName=CohRight)) => #17
                ExternalizedMapping(Value(DisplayName=Duration)) => #18
                #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
                #1 -> MemberSelector(Selector=Value.Size) => #20
                #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
                #1 -> MemberSelector(Selector=Value.Colour1) => #22
                #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
                #1 -> MemberSelector(Selector=Value.Colour2) => #24
                #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
                #1 -> MemberSelector(Selector=Value.numDots1) => #26
                #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
                #1 -> MemberSelector(Selector=Value.numDots2) => #28
                #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
                #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
                #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
                #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
                #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
                #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
                #1 -> MemberSelector(Selector=Value.Contrast) => #35
                #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
                #32, #34, #36 -> Zip => #37
                #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
                #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
                #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
                #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
                #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
                #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
                #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
                #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
                #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
                #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
                #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
                #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
                #39, #41, #43, #45, #47, #49 -> Zip => #50
                #1 -> MemberSelector(Selector=Value.transXLeft) => #51
                ExternalizedMapping(Value(DisplayName=transXL)) => #52
                #51, #52 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #53
                #1 -> MemberSelector(Selector=Value.transXRight) => #54
                ExternalizedMapping(Value(DisplayName=transXR)) => #55
                #54, #55 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #56
                #53, #56 -> Zip => #57
                #30, #37, #50, #57 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression:
                    new(
                    Item1.Item1 as Id,
                    Item1.Item2 as Duration,
                    Item1.Item3 as Size,
                    Item1.Item4 as Colour1,
                    Item1.Item5 as Colour2,
                    Item1.Item6 as numDots1,
                    Item1.Item7 as numDots2,
                    Item2.Item1 as dotLifeBool,
                    Item2.Item2 as dotLifetime,
                    Item2.Item3 as Contrast,
                    Item3.Item1 as VelXLeft,
                    Item3.Item2 as VelYLeft,
                    Item3.Item3 as CohLeft,
                    Item3.Item4 as VelXRight,
                    Item3.Item5 as VelYRight,
                    Item3.Item6 as CohRight,
                    Item4.Item1 as transXL,
                    Item4.Item2 as transXR)
                -> WorkflowOutput
            -> WorkflowOutput
        Source3=#1 -> WorkflowOutput
    ExternalizedMapping(3dMotionCorrection, TrialClassPostStimTime) => #2
    #1, #2 -> CreateObservable CreateTrial
        WorkflowInput Source1
        -> ReplaySubject Parameters(BufferSize=nil)
        -> GroupWorkflow GetStimParams
            WorkflowInput Source1 => #0
            -> Condition IfNotPause
                SubscribeSubject PauseFlag
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> Take(Count=1)
            -> Unit => #3
            SubscribeSubject ProbDistArray
            -> PropertyMapping(ProbabilityDistributions) => #5
            SubscribeSubject CurrentState
            -> Take(Count=1)
            -> Condition EnsureCorrectStateIndex
                WorkflowInput Source1 => #0
                SubscribeSubject nStates => #1
                #0, #1 -> CombineLatest
                -> LessThan
                -> WorkflowOutput
            -> PropertyMapping(DistributionIndex) => #9
            #9, #5, #3 -> RandSampleFromIndexedDistribution
              ProbabilityDistributions
                ArrayOfFloat
                  float=11.1111107
                  float=11.1111107
                  float=11.1111107
                  float=11.1111107
                  float=0
                  float=0
                  float=11.1111107
                  float=11.1111107
                  float=0
                  float=11.1111107
                  float=11.1111107
                  float=0
                  float=11.1111107
                ArrayOfFloat
                  float=0
                  float=16.666666
                  float=0
                  float=16.666666
                  float=16.666666
                  float=16.666666
                  float=0
                  float=0
                  float=16.666666
                  float=0
                  float=16.666666
                  float=0
                  float=0
              DistributionIndex=1
            -> BehaviorSubject CurrentStimIndex => #11
            #0 -> Condition IfPause
                SubscribeSubject PauseFlag
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> GroupWorkflow GetPauseParams => #13
                WorkflowInput Source1
                -> GroupWorkflow Blank
                    WorkflowInput Source1 => #0
                    -> FloatProperty(Value=0) => #1
                    #0, #1 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        Item1.Id as Id,
                        Item1.Duration as Duration,
                        Item1.Size as Size,
                        Item1.Colour1 as Colour1,
                        Item1.Colour2 as Colour2,
                        Item1.numDots1 as numDots1,
                        Item1.numDots2 as numDots2,
                        Item1.dotLifeBool as dotLifeBool,
                        Item1.dotLifetime as dotLifetime,
                        Item2 as Contrast,
                        Item1.VelXLeft as VelXLeft,
                        Item1.VelYLeft as VelYLeft,
                        Item1.CohLeft as CohLeft,
                        Item1.VelXRight as VelXRight,
                        Item1.VelYRight as VelYRight,
                        Item1.CohRight as CohRight,
                        Item1.transXL as transXL,
                        Item1.transXR as transXR)
                    -> WorkflowOutput
                -> WorkflowOutput
            #11, #0 -> Zip
            -> GroupWorkflow GetParams
                WorkflowInput Source1 => #0
                -> Condition 32_trans
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item1)
                    -> Equal(Operand=IntProperty(Value=0))
                    -> WorkflowOutput
                -> GroupWorkflow 32_trans => #2
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item2) => #1
                    #0 -> FloatProperty(Value=32) => #2
                    #0 -> FloatProperty(Value=32) => #3
                    #1, #2, #3 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        Item1.Id as Id,
                        Item1.Duration as Duration,
                        Item1.Size as Size,
                        Item1.Colour1 as Colour1,
                        Item1.Colour2 as Colour2,
                        Item1.numDots1 as numDots1,
                        Item1.numDots2 as numDots2,
                        Item1.dotLifeBool as dotLifeBool,
                        Item1.dotLifetime as dotLifetime,
                        Item1.Contrast as Contrast,
                        Item2 as VelXLeft,
                        Item1.VelYLeft as VelYLeft,
                        Item1.CohLeft as CohLeft,
                        Item3 as VelXRight,
                        Item1.VelYRight as VelYRight,
                        Item1.CohRight as CohRight,
                        Item1.transXL as transXL,
                        Item1.transXR as transXR)
                    -> WorkflowOutput
                #0 -> Condition 32_rot
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item1)
                    -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> GroupWorkflow 32_rot => #4
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item2) => #1
                    #0 -> FloatProperty(Value=32) => #2
                    #0 -> FloatProperty(Value=-32) => #3
                    #1, #2, #3 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        Item1.Id as Id,
                        Item1.Duration as Duration,
                        Item1.Size as Size,
                        Item1.Colour1 as Colour1,
                        Item1.Colour2 as Colour2,
                        Item1.numDots1 as numDots1,
                        Item1.numDots2 as numDots2,
                        Item1.dotLifeBool as dotLifeBool,
                        Item1.dotLifetime as dotLifetime,
                        Item1.Contrast as Contrast,
                        Item2 as VelXLeft,
                        Item1.VelYLeft as VelYLeft,
                        Item1.CohLeft as CohLeft,
                        Item3 as VelXRight,
                        Item1.VelYRight as VelYRight,
                        Item1.CohRight as CohRight,
                        Item1.transXL as transXL,
                        Item1.transXR as transXR)
                    -> WorkflowOutput
                #0 -> Condition 32_orthog
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item1)
                    -> Equal(Operand=IntProperty(Value=2))
                    -> WorkflowOutput
                -> GroupWorkflow 32_orthog => #6
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item2) => #1
                    #0 -> FloatProperty(Value=32) => #2
                    #0 -> FloatProperty(Value=0) => #3
                    #0 -> FloatProperty(Value=32) => #4
                    #1, #2, #3, #4 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        Item1.Id as Id,
                        Item1.Duration as Duration,
                        Item1.Size as Size,
                        Item1.Colour1 as Colour1,
                        Item1.Colour2 as Colour2,
                        Item1.numDots1 as numDots1,
                        Item1.numDots2 as numDots2,
                        Item1.dotLifeBool as dotLifeBool,
                        Item1.dotLifetime as dotLifetime,
                        Item1.Contrast as Contrast,
                        Item2 as VelXLeft,
                        Item1.VelYLeft as VelYLeft,
                        Item1.CohLeft as CohLeft,
                        Item3 as VelXRight,
                        Item4 as VelYRight,
                        Item1.CohRight as CohRight,
                        Item1.transXL as transXL,
                        Item1.transXR as transXR)
                    -> WorkflowOutput
                #0 -> Condition 32_stat
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item1)
                    -> Equal(Operand=IntProperty(Value=3))
                    -> WorkflowOutput
                -> GroupWorkflow 32_stat => #8
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item2) => #1
                    #0 -> FloatProperty(Value=32) => #2
                    #0 -> FloatProperty(Value=0) => #3
                    #1, #2, #3 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        Item1.Id as Id,
                        Item1.Duration as Duration,
                        Item1.Size as Size,
                        Item1.Colour1 as Colour1,
                        Item1.Colour2 as Colour2,
                        Item1.numDots1 as numDots1,
                        Item1.numDots2 as numDots2,
                        Item1.dotLifeBool as dotLifeBool,
                        Item1.dotLifetime as dotLifetime,
                        Item1.Contrast as Contrast,
                        Item2 as VelXLeft,
                        Item1.VelYLeft as VelYLeft,
                        Item1.CohLeft as CohLeft,
                        Item3 as VelXRight,
                        Item1.VelYRight as VelYRight,
                        Item1.CohRight as CohRight,
                        Item1.transXL as transXL,
                        Item1.transXR as transXR)
                    -> WorkflowOutput
                #0 -> Condition 32_incoh
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item1)
                    -> Equal(Operand=IntProperty(Value=4))
                    -> WorkflowOutput
                -> GroupWorkflow 32_incoh => #10
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item2) => #1
                    #0 -> FloatProperty(Value=32) => #2
                    #0 -> FloatProperty(Value=32) => #3
                    #0 -> FloatProperty(Value=0) => #4
                    #1, #2, #3, #4 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        Item1.Id as Id,
                        Item1.Duration as Duration,
                        Item1.Size as Size,
                        Item1.Colour1 as Colour1,
                        Item1.Colour2 as Colour2,
                        Item1.numDots1 as numDots1,
                        Item1.numDots2 as numDots2,
                        Item1.dotLifeBool as dotLifeBool,
                        Item1.dotLifetime as dotLifetime,
                        Item1.Contrast as Contrast,
                        Item2 as VelXLeft,
                        Item1.VelYLeft as VelYLeft,
                        Item1.CohLeft as CohLeft,
                        Item3 as VelXRight,
                        Item1.VelYRight as VelYRight,
                        Item4 as CohRight,
                        Item1.transXL as transXL,
                        Item1.transXR as transXR)
                    -> WorkflowOutput
                #0 -> Condition 32_monoc
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item1)
                    -> Equal(Operand=IntProperty(Value=5))
                    -> WorkflowOutput
                -> GroupWorkflow 32_monoc => #12
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item2) => #1
                    #0 -> FloatProperty(Value=128) => #2
                    #0 -> FloatProperty(Value=0) => #3
                    #0 -> FloatProperty(Value=1E+13) => #4
                    #1, #2, #3, #4 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        Item1.Id as Id,
                        Item1.Duration as Duration,
                        Item1.Size as Size,
                        Item1.Colour1 as Colour1,
                        Item1.Colour2 as Colour2,
                        Item1.numDots1 as numDots1,
                        Item1.numDots2 as numDots2,
                        Item1.dotLifeBool as dotLifeBool,
                        Item1.dotLifetime as dotLifetime,
                        Item1.Contrast as Contrast,
                        Item2 as VelXLeft,
                        Item1.VelYLeft as VelYLeft,
                        Item1.CohLeft as CohLeft,
                        Item3 as VelXRight,
                        Item1.VelYRight as VelYRight,
                        Item1.CohRight as CohRight,
                        Item1.transXL as transXL,
                        Item4 as transXR)
                    -> WorkflowOutput
                #0 -> Condition 128_trans
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item1)
                    -> Equal(Operand=IntProperty(Value=6))
                    -> WorkflowOutput
                -> GroupWorkflow 128_trans => #14
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item2) => #1
                    #0 -> FloatProperty(Value=128) => #2
                    #0 -> FloatProperty(Value=128) => #3
                    #1, #2, #3 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        Item1.Id as Id,
                        Item1.Duration as Duration,
                        Item1.Size as Size,
                        Item1.Colour1 as Colour1,
                        Item1.Colour2 as Colour2,
                        Item1.numDots1 as numDots1,
                        Item1.numDots2 as numDots2,
                        Item1.dotLifeBool as dotLifeBool,
                        Item1.dotLifetime as dotLifetime,
                        Item1.Contrast as Contrast,
                        Item2 as VelXLeft,
                        Item1.VelYLeft as VelYLeft,
                        Item1.CohLeft as CohLeft,
                        Item3 as VelXRight,
                        Item1.VelYRight as VelYRight,
                        Item1.CohRight as CohRight,
                        Item1.transXL as transXL,
                        Item1.transXR as transXR)
                    -> WorkflowOutput
                #0 -> Condition 128_rot
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item1)
                    -> Equal(Operand=IntProperty(Value=7))
                    -> WorkflowOutput
                -> GroupWorkflow 128_rot => #16
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item2) => #1
                    #0 -> FloatProperty(Value=128) => #2
                    #0 -> FloatProperty(Value=-128) => #3
                    #1, #2, #3 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        Item1.Id as Id,
                        Item1.Duration as Duration,
                        Item1.Size as Size,
                        Item1.Colour1 as Colour1,
                        Item1.Colour2 as Colour2,
                        Item1.numDots1 as numDots1,
                        Item1.numDots2 as numDots2,
                        Item1.dotLifeBool as dotLifeBool,
                        Item1.dotLifetime as dotLifetime,
                        Item1.Contrast as Contrast,
                        Item2 as VelXLeft,
                        Item1.VelYLeft as VelYLeft,
                        Item1.CohLeft as CohLeft,
                        Item3 as VelXRight,
                        Item1.VelYRight as VelYRight,
                        Item1.CohRight as CohRight,
                        Item1.transXL as transXL,
                        Item1.transXR as transXR)
                    -> WorkflowOutput
                #0 -> Condition 128_orthog
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item1)
                    -> Equal(Operand=IntProperty(Value=8))
                    -> WorkflowOutput
                -> GroupWorkflow 128_orthog => #18
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item2) => #1
                    #0 -> FloatProperty(Value=128) => #2
                    #0 -> FloatProperty(Value=0) => #3
                    #0 -> FloatProperty(Value=128) => #4
                    #1, #2, #3, #4 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        Item1.Id as Id,
                        Item1.Duration as Duration,
                        Item1.Size as Size,
                        Item1.Colour1 as Colour1,
                        Item1.Colour2 as Colour2,
                        Item1.numDots1 as numDots1,
                        Item1.numDots2 as numDots2,
                        Item1.dotLifeBool as dotLifeBool,
                        Item1.dotLifetime as dotLifetime,
                        Item1.Contrast as Contrast,
                        Item2 as VelXLeft,
                        Item1.VelYLeft as VelYLeft,
                        Item1.CohLeft as CohLeft,
                        Item3 as VelXRight,
                        Item4 as VelYRight,
                        Item1.CohRight as CohRight,
                        Item1.transXL as transXL,
                        Item1.transXR as transXR)
                    -> WorkflowOutput
                #0 -> Condition 128_stat
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item1)
                    -> Equal(Operand=IntProperty(Value=9))
                    -> WorkflowOutput
                -> GroupWorkflow 128_stat => #20
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item2) => #1
                    #0 -> FloatProperty(Value=128) => #2
                    #0 -> FloatProperty(Value=0) => #3
                    #1, #2, #3 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        Item1.Id as Id,
                        Item1.Duration as Duration,
                        Item1.Size as Size,
                        Item1.Colour1 as Colour1,
                        Item1.Colour2 as Colour2,
                        Item1.numDots1 as numDots1,
                        Item1.numDots2 as numDots2,
                        Item1.dotLifeBool as dotLifeBool,
                        Item1.dotLifetime as dotLifetime,
                        Item1.Contrast as Contrast,
                        Item2 as VelXLeft,
                        Item1.VelYLeft as VelYLeft,
                        Item1.CohLeft as CohLeft,
                        Item3 as VelXRight,
                        Item1.VelYRight as VelYRight,
                        Item1.CohRight as CohRight,
                        Item1.transXL as transXL,
                        Item1.transXR as transXR)
                    -> WorkflowOutput
                #0 -> Condition 128_incoh
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item1)
                    -> Equal(Operand=IntProperty(Value=10))
                    -> WorkflowOutput
                -> GroupWorkflow 128_incoh => #22
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item2) => #1
                    #0 -> FloatProperty(Value=128) => #2
                    #0 -> FloatProperty(Value=128) => #3
                    #0 -> FloatProperty(Value=0) => #4
                    #1, #2, #3, #4 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        Item1.Id as Id,
                        Item1.Duration as Duration,
                        Item1.Size as Size,
                        Item1.Colour1 as Colour1,
                        Item1.Colour2 as Colour2,
                        Item1.numDots1 as numDots1,
                        Item1.numDots2 as numDots2,
                        Item1.dotLifeBool as dotLifeBool,
                        Item1.dotLifetime as dotLifetime,
                        Item1.Contrast as Contrast,
                        Item2 as VelXLeft,
                        Item1.VelYLeft as VelYLeft,
                        Item1.CohLeft as CohLeft,
                        Item3 as VelXRight,
                        Item1.VelYRight as VelYRight,
                        Item4 as CohRight,
                        Item1.transXL as transXL,
                        Item1.transXR as transXR)
                    -> WorkflowOutput
                #0 -> Condition 128_monoc
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item1)
                    -> Equal(Operand=IntProperty(Value=11))
                    -> WorkflowOutput
                -> GroupWorkflow 128_monoc => #24
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item2) => #1
                    #0 -> FloatProperty(Value=128) => #2
                    #0 -> FloatProperty(Value=0) => #3
                    #0 -> FloatProperty(Value=1E+13) => #4
                    #1, #2, #3, #4 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        Item1.Id as Id,
                        Item1.Duration as Duration,
                        Item1.Size as Size,
                        Item1.Colour1 as Colour1,
                        Item1.Colour2 as Colour2,
                        Item1.numDots1 as numDots1,
                        Item1.numDots2 as numDots2,
                        Item1.dotLifeBool as dotLifeBool,
                        Item1.dotLifetime as dotLifetime,
                        Item1.Contrast as Contrast,
                        Item2 as VelXLeft,
                        Item1.VelYLeft as VelYLeft,
                        Item1.CohLeft as CohLeft,
                        Item3 as VelXRight,
                        Item1.VelYRight as VelYRight,
                        Item1.CohRight as CohRight,
                        Item1.transXL as transXL,
                        Item4 as transXR)
                    -> WorkflowOutput
                #0 -> Condition Blank
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item1)
                    -> Equal(Operand=IntProperty(Value=12))
                    -> WorkflowOutput
                -> GroupWorkflow Blank => #26
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item2) => #1
                    #0 -> FloatProperty(Value=0) => #2
                    #1, #2 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        Item1.Id as Id,
                        Item1.Duration as Duration,
                        Item1.Size as Size,
                        Item1.Colour1 as Colour1,
                        Item1.Colour2 as Colour2,
                        Item1.numDots1 as numDots1,
                        Item1.numDots2 as numDots2,
                        Item1.dotLifeBool as dotLifeBool,
                        Item1.dotLifetime as dotLifetime,
                        Item2 as Contrast,
                        Item1.VelXLeft as VelXLeft,
                        Item1.VelYLeft as VelYLeft,
                        Item1.CohLeft as CohLeft,
                        Item1.VelXRight as VelXRight,
                        Item1.VelYRight as VelYRight,
                        Item1.CohRight as CohRight,
                        Item1.transXL as transXL,
                        Item1.transXR as transXR)
                    -> WorkflowOutput
                #2, #4, #6, #8, #10, #12, #14, #16, #18, #20, #22, #24, #26 -> Amb
                -> WorkflowOutput
            -> Condition IfNotPause => #16
                SubscribeSubject PauseFlag
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            #16, #13 -> Merge
            -> WorkflowOutput
        -> ReplaySubject Parameters2(BufferSize=nil)
        -> MulticastSubject TrialParams => #4
        ExternalizedMapping(3dMotionCorrection, TrialClassPostStimTime) => #5
        #4, #5 -> GroupWorkflow ThisTrial
            WorkflowInput Source1 => #0
            ExternalizedMapping(3dMotionCorrection) => #1
            #0, #1 -> GroupWorkflow DotTextures
                WorkflowInput Source1 => #0
                SubscribeSubject EndStimulus => #1
                ExternalizedMapping(3dMotionCorrection) => #2
                #0, #2 -> GroupWorkflow CreateTextures
                    SubscribeSubject Borders
                    -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #1
                    SubscribeSubject DrawStimuli => #2
                    #1, #2 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-360, Right=360, Bottom=-90, Top=90) => #3
                    Bonsai.Shaders.UpdateFrame
                    -> MemberSelector(Selector=TimeStep.ElapsedTime)
                    -> Take(Count=1) => #6
                    WorkflowInput Source1 => #7
                    -> MemberSelector(Selector=VelXLeft) => #8
                    #6, #8 -> Zip
                    -> Multiply => #10
                    #7 -> MemberSelector(Selector=VelXRight) => #11
                    #7 -> MemberSelector(Selector=VelYLeft) => #12
                    #7 -> MemberSelector(Selector=Contrast)
                    -> PropertyMapping(ColorA) => #14
                    #7 -> PropertyMapping(Diameter(Selector=Size), dotLifetime(Selector=dotLifetime), dotLifetimeBool(Selector=dotLifeBool)) => #15
                    #7 -> MemberSelector(Selector=CohLeft)
                    -> PropertyMapping(Coherence) => #17
                    #7 -> MemberSelector(Selector=CohRight)
                    -> PropertyMapping(Coherence) => #19
                    #7 -> MemberSelector(Selector=VelYRight) => #20
                    ExternalizedMapping(Value(DisplayName=3dMotionCorrection)) => #21
                    #10, #21 -> Multiply(Operand=DoubleProperty(Value=3.4907))
                    -> Multiply(Operand=DoubleProperty(Value=-1))
                    -> PropertyMapping(VelX) => #24
                    #6, #11 -> Zip
                    -> Multiply => #26
                    #26, #21 -> Multiply(Operand=DoubleProperty(Value=3.4907))
                    -> Multiply(Operand=DoubleProperty(Value=-1))
                    -> PropertyMapping(VelX) => #29
                    #12, #6 -> Zip
                    -> Multiply => #31
                    #31, #21 -> Multiply(Operand=DoubleProperty(Value=3.4907))
                    -> PropertyMapping(VelY) => #33
                    #20, #6 -> Zip
                    -> Multiply => #35
                    #35, #21 -> Multiply(Operand=DoubleProperty(Value=3.4907))
                    -> PropertyMapping(VelY) => #37
                    #3, #15, #29, #19, #37, #14 -> GroupWorkflow MovingDots_SpeedDiscrim
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                        SubscribeSubject Parameters
                        -> MemberSelector(Selector=numDots1)
                        -> Divide(Operand=FloatProperty(Value=2))
                        -> PropertyMapping(numDots) => #5
                        SubscribeSubject Parameters
                        -> MemberSelector(Selector=numDots2)
                        -> Divide(Operand=FloatProperty(Value=2))
                        -> PropertyMapping(numDots) => #9
                        ExternalizedMapping(VelX, VelY) => #10
                        ExternalizedMapping(rndseed(DisplayName=rndSeed1)) => #11
                        ExternalizedMapping(rndseed(DisplayName=rndSeed2)) => #12
                        ExternalizedMapping(rndseed(DisplayName=rndSeed3)) => #13
                        ExternalizedMapping(rndseed(DisplayName=rndSeed4)) => #14
                        SubscribeSubject MotionDelay
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: TimeSpan.FromSeconds(it)
                        -> PropertyMapping(MotionDelay(Selector=it)) => #17
                        #0, #1, #5, #10, #11, #17 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #18
                            FloatProperty(Value=0) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                            ExternalizedMapping(dotLifetime) => #9
                            ExternalizedMapping(numDots) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #15
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #19
                            FloatProperty(Value=0) => #20
                            ExternalizedMapping(LocationX) => #21
                            ExternalizedMapping(LocationY) => #22
                            ExternalizedMapping(Z) => #23
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=0)
                            -> PropertyMapping(W) => #26
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #29
                            #4, #21, #22, #29 -> GroupWorkflow Transform => #30
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #30, #1, #2, #23, #26 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=0)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #32
                            ExternalizedMapping(Coherence) => #33
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #35
                            ExternalizedMapping(rndseed) => #36
                            #8, #10, #36 -> GenerateDotField(numDots=238, left=-360, right=360, top=90, bottom=-90, rndseed=0) => #37
                            #9, #10 -> GenerateDotLives(dotLifetime=200, numDots=238) => #38
                            #37, #38 -> Zip => #39
                            #39, #32 -> CombineLatest => #40
                            #40, #32 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #15, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #20, #35 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #19, #43 -> Delay(DueTime=PT0.5S) => #47
                            #47, #20, #35 -> Merge
                            -> PropertyMapping(VelocityY) => #49
                            #42, #46, #49, #33, #6, #9, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-360, right=360, top=90, bottom=-90)
                            -> MemberSelector(Selector=Item1) => #51
                            #51, #6 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #0, #1, #9, #10, #12, #17 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #19
                            FloatProperty(Value=1) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            #0 -> PropertyMapping(Z) => #3
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                            ExternalizedMapping(dotLifetime) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(numDots) => #12
                            #10, #12 -> GenerateDotLives(dotLifetime=200, numDots=238) => #13
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #17
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #21
                            FloatProperty(Value=0) => #22
                            ExternalizedMapping(LocationX) => #23
                            ExternalizedMapping(LocationY) => #24
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=0)
                            -> PropertyMapping(W) => #27
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #30
                            #5, #23, #24, #30 -> GroupWorkflow Transform => #31
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #31, #1, #2, #3, #27 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=0)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #33
                            ExternalizedMapping(Coherence) => #34
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #36
                            ExternalizedMapping(rndseed) => #37
                            #9, #12, #37 -> GenerateDotField(numDots=238, left=-360, right=360, top=90, bottom=-90, rndseed=1) => #38
                            #38, #13 -> Zip => #39
                            #39, #33 -> CombineLatest => #40
                            #40, #33 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #17, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #22, #36 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #21, #43 -> Delay(DueTime=PT0.5S) => #47
                            #47, #22, #36 -> Merge
                            -> PropertyMapping(VelocityY) => #49
                            #42, #46, #49, #34, #7, #10, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-360, right=360, top=90, bottom=-90)
                            -> MemberSelector(Selector=Item1) => #51
                            #51, #7 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #0, #1, #9, #10, #13, #17 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #20
                            FloatProperty(Value=1) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            #0 -> PropertyMapping(Z) => #3
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                            ExternalizedMapping(dotLifetime) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(numDots) => #12
                            #10, #12 -> GenerateDotLives(dotLifetime=200, numDots=238) => #13
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #17
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #21
                            FloatProperty(Value=0) => #22
                            ExternalizedMapping(LocationX) => #23
                            ExternalizedMapping(LocationY) => #24
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=0)
                            -> PropertyMapping(W) => #27
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #30
                            #5, #23, #24, #30 -> GroupWorkflow Transform => #31
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #31, #1, #2, #3, #27 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=0)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #33
                            ExternalizedMapping(Coherence) => #34
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #36
                            ExternalizedMapping(rndseed) => #37
                            #9, #12, #37 -> GenerateDotField(numDots=238, left=-360, right=360, top=90, bottom=-90, rndseed=2) => #38
                            #38, #13 -> Zip => #39
                            #39, #33 -> CombineLatest => #40
                            #40, #33 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #17, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #22, #36 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #21, #43 -> Delay(DueTime=PT0.5S) => #47
                            #47, #22, #36 -> Merge
                            -> PropertyMapping(VelocityY) => #49
                            #42, #46, #49, #34, #7, #10, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-360, right=360, top=90, bottom=-90)
                            -> MemberSelector(Selector=Item1) => #51
                            #51, #7 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #0, #1, #5, #10, #14, #17 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #21
                            FloatProperty(Value=0) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                            ExternalizedMapping(dotLifetime) => #9
                            ExternalizedMapping(numDots) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #15
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #19
                            FloatProperty(Value=0) => #20
                            ExternalizedMapping(LocationX) => #21
                            ExternalizedMapping(LocationY) => #22
                            ExternalizedMapping(Z) => #23
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=0)
                            -> PropertyMapping(W) => #26
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #29
                            #4, #21, #22, #29 -> GroupWorkflow Transform => #30
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #30, #1, #2, #23, #26 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=0)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #32
                            ExternalizedMapping(Coherence) => #33
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #35
                            ExternalizedMapping(rndseed) => #36
                            #8, #10, #36 -> GenerateDotField(numDots=238, left=-360, right=360, top=90, bottom=-90, rndseed=3) => #37
                            #9, #10 -> GenerateDotLives(dotLifetime=200, numDots=238) => #38
                            #37, #38 -> Zip => #39
                            #39, #32 -> CombineLatest => #40
                            #40, #32 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #15, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #20, #35 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #19, #43 -> Delay(DueTime=PT0.5S) => #47
                            #47, #20, #35 -> Merge
                            -> PropertyMapping(VelocityY) => #49
                            #42, #46, #49, #33, #6, #9, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-360, right=360, top=90, bottom=-90)
                            -> MemberSelector(Selector=Item1) => #51
                            #51, #6 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #18, #19, #20, #21 -> Zip
                        -> WorkflowOutput
                    -> Bonsai.Shaders.RenderTexture
                      RenderState=""
                      ClearColor=Gray
                      ClearMask="DepthBufferBit ColorBufferBit"
                      Width=nil
                      Height=nil
                      InternalFormat=Rgba
                      WrapS=Repeat
                      WrapT=Repeat
                      MinFilter=Linear
                      MagFilter=Linear
                    -> BehaviorSubject TextureRight
                    #3, #15, #24, #17, #33, #14 -> GroupWorkflow MovingDots_SpeedDiscrim
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                        SubscribeSubject Parameters
                        -> MemberSelector(Selector=numDots1)
                        -> Divide(Operand=FloatProperty(Value=2))
                        -> PropertyMapping(numDots) => #5
                        SubscribeSubject Parameters
                        -> MemberSelector(Selector=numDots2)
                        -> Divide(Operand=FloatProperty(Value=2))
                        -> PropertyMapping(numDots) => #9
                        ExternalizedMapping(VelX, VelY) => #10
                        ExternalizedMapping(rndseed(DisplayName=rndSeed1)) => #11
                        ExternalizedMapping(rndseed(DisplayName=rndSeed2)) => #12
                        ExternalizedMapping(rndseed(DisplayName=rndSeed3)) => #13
                        ExternalizedMapping(rndseed(DisplayName=rndSeed4)) => #14
                        SubscribeSubject MotionDelay
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: TimeSpan.FromSeconds(it)
                        -> PropertyMapping(MotionDelay(Selector=it)) => #17
                        #0, #1, #5, #10, #11, #17 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #18
                            FloatProperty(Value=0) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                            ExternalizedMapping(dotLifetime) => #9
                            ExternalizedMapping(numDots) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #15
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #19
                            FloatProperty(Value=0) => #20
                            ExternalizedMapping(LocationX) => #21
                            ExternalizedMapping(LocationY) => #22
                            ExternalizedMapping(Z) => #23
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=0)
                            -> PropertyMapping(W) => #26
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #29
                            #4, #21, #22, #29 -> GroupWorkflow Transform => #30
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #30, #1, #2, #23, #26 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=0)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #32
                            ExternalizedMapping(Coherence) => #33
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #35
                            ExternalizedMapping(rndseed) => #36
                            #8, #10, #36 -> GenerateDotField(numDots=238, left=-360, right=360, top=90, bottom=-90, rndseed=0) => #37
                            #9, #10 -> GenerateDotLives(dotLifetime=200, numDots=238) => #38
                            #37, #38 -> Zip => #39
                            #39, #32 -> CombineLatest => #40
                            #40, #32 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #15, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #20, #35 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #44 -> Take(Count=1)
                            -> StringProperty(Value=dotsMOVE) => #48
                            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                            #48 -> FloatProperty(Value=1)
                            -> MulticastSubject QuadState
                            #19, #43 -> Delay(DueTime=PT0.5S) => #52
                            #52, #20, #35 -> Merge
                            -> PropertyMapping(VelocityY) => #54
                            #42, #46, #54, #33, #6, #9, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-360, right=360, top=90, bottom=-90)
                            -> MemberSelector(Selector=Item1) => #56
                            #56, #6 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #0, #1, #9, #10, #12, #17 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #19
                            FloatProperty(Value=1) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            #0 -> PropertyMapping(Z) => #3
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                            ExternalizedMapping(dotLifetime) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(numDots) => #12
                            #10, #12 -> GenerateDotLives(dotLifetime=200, numDots=238) => #13
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #17
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #21
                            FloatProperty(Value=0) => #22
                            ExternalizedMapping(LocationX) => #23
                            ExternalizedMapping(LocationY) => #24
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=0)
                            -> PropertyMapping(W) => #27
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #30
                            #5, #23, #24, #30 -> GroupWorkflow Transform => #31
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #31, #1, #2, #3, #27 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=0)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #33
                            ExternalizedMapping(Coherence) => #34
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #36
                            ExternalizedMapping(rndseed) => #37
                            #9, #12, #37 -> GenerateDotField(numDots=238, left=-360, right=360, top=90, bottom=-90, rndseed=1) => #38
                            #38, #13 -> Zip => #39
                            #39, #33 -> CombineLatest => #40
                            #40, #33 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #17, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #22, #36 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #21, #43 -> Delay(DueTime=PT0.5S) => #47
                            #47, #22, #36 -> Merge
                            -> PropertyMapping(VelocityY) => #49
                            #42, #46, #49, #34, #7, #10, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-360, right=360, top=90, bottom=-90)
                            -> MemberSelector(Selector=Item1) => #51
                            #51, #7 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #0, #1, #9, #10, #13, #17 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #20
                            FloatProperty(Value=1) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            #0 -> PropertyMapping(Z) => #3
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                            ExternalizedMapping(dotLifetime) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(numDots) => #12
                            #10, #12 -> GenerateDotLives(dotLifetime=200, numDots=238) => #13
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #17
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #21
                            FloatProperty(Value=0) => #22
                            ExternalizedMapping(LocationX) => #23
                            ExternalizedMapping(LocationY) => #24
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=0)
                            -> PropertyMapping(W) => #27
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #30
                            #5, #23, #24, #30 -> GroupWorkflow Transform => #31
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #31, #1, #2, #3, #27 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=0)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #33
                            ExternalizedMapping(Coherence) => #34
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #36
                            ExternalizedMapping(rndseed) => #37
                            #9, #12, #37 -> GenerateDotField(numDots=238, left=-360, right=360, top=90, bottom=-90, rndseed=2) => #38
                            #38, #13 -> Zip => #39
                            #39, #33 -> CombineLatest => #40
                            #40, #33 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #17, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #22, #36 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #21, #43 -> Delay(DueTime=PT0.5S) => #47
                            #47, #22, #36 -> Merge
                            -> PropertyMapping(VelocityY) => #49
                            #42, #46, #49, #34, #7, #10, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-360, right=360, top=90, bottom=-90)
                            -> MemberSelector(Selector=Item1) => #51
                            #51, #7 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #0, #1, #5, #10, #14, #17 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #21
                            FloatProperty(Value=0) => #0
                            -> PropertyMapping(X) => #1
                            #0 -> PropertyMapping(Y) => #2
                            WorkflowInput Source1
                            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                            SubscribeSubject Borders
                            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                            ExternalizedMapping(dotLifetime) => #9
                            ExternalizedMapping(numDots) => #10
                            ExternalizedMapping(dotLifetimeBool) => #11
                            ExternalizedMapping(Value(DisplayName=VelX))
                            -> FloatProperty(Value=-0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #15
                            ExternalizedMapping(Value(DisplayName=VelY))
                            -> FloatProperty(Value=0)
                            -> Disable Take(Count=1)
                            -> Skip(Count=1) => #19
                            FloatProperty(Value=0) => #20
                            ExternalizedMapping(LocationX) => #21
                            ExternalizedMapping(LocationY) => #22
                            ExternalizedMapping(Z) => #23
                            ExternalizedMapping(Value(DisplayName=ColorA))
                            -> FloatProperty(Value=0)
                            -> PropertyMapping(W) => #26
                            ExternalizedMapping(Value(DisplayName=Diameter))
                            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                            -> PropertyMapping(ExtentX, ExtentY) => #29
                            #4, #21, #22, #29 -> GroupWorkflow Transform => #30
                                WorkflowInput Source1 => #0
                                ExternalizedMapping(Angle) => #1
                                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                                -> WorkflowOutput
                            #30, #1, #2, #23, #26 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=0)
                            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #32
                            ExternalizedMapping(Coherence) => #33
                            Disable FloatProperty(Value=0)
                            -> Disable Delay(DueTime=PT1.5S) => #35
                            ExternalizedMapping(rndseed) => #36
                            #8, #10, #36 -> GenerateDotField(numDots=238, left=-360, right=360, top=90, bottom=-90, rndseed=3) => #37
                            #9, #10 -> GenerateDotLives(dotLifetime=200, numDots=238) => #38
                            #37, #38 -> Zip => #39
                            #39, #32 -> CombineLatest => #40
                            #40, #32 -> Sample
                            -> MemberSelector(Selector=Item1) => #42
                            ExternalizedMapping(DueTime(DisplayName=MotionDelay)) => #43
                            #15, #43 -> Delay(DueTime=PT0.5S) => #44
                            #44, #20, #35 -> Merge
                            -> PropertyMapping(VelocityX) => #46
                            #19, #43 -> Delay(DueTime=PT0.5S) => #47
                            #47, #20, #35 -> Merge
                            -> PropertyMapping(VelocityY) => #49
                            #42, #46, #49, #33, #6, #9, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=200, left=-360, right=360, top=90, bottom=-90)
                            -> MemberSelector(Selector=Item1) => #51
                            #51, #6 -> Disable wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                            -> Bonsai.Shaders.DrawMeshInstanced
                              ShaderName=CircleArray
                              MeshName=Quad
                              Usage=DynamicDraw
                              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                            -> WorkflowOutput
                        #18, #19, #20, #21 -> Zip
                        -> WorkflowOutput
                    -> Bonsai.Shaders.RenderTexture
                      RenderState=""
                      ClearColor=Gray
                      ClearMask="DepthBufferBit ColorBufferBit"
                      Width=nil
                      Height=nil
                      InternalFormat=Rgba
                      WrapS=Repeat
                      WrapT=Repeat
                      MinFilter=Linear
                      MagFilter=Linear
                    -> BehaviorSubject TextureLeft
                    -> WorkflowOutput
                -> Unit
                -> BehaviorSubject ReadyToDraw => #5
                #5, #1 -> TakeUntil
                -> WorkflowOutput
            #0 -> Take(Count=1)
            -> StringProperty(Value=stimON) => #4
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
            #4 -> FloatProperty(Value=1)
            -> MulticastSubject QuadState
            #4 -> Delay(DueTime=PT0.2S)
            -> FloatProperty(Value=0)
            -> MulticastSubject QuadState

            GroupWorkflow "Calculate ISI Duration"
                SubscribeSubject "ISI Lower"
                -> PropertyMapping(Lower) => #1
                SubscribeSubject "ISI Upper"
                -> PropertyMapping(Upper) => #3
                #1, #3 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=1.8, Upper=2.2)
                -> Bonsai.Numerics.Distributions.Sample
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> WorkflowOutput
            -> PropertyMapping(DueTime) => #12
            GroupWorkflow TexturedModels
                GroupWorkflow DrawTexturedModels => #0
                    SubscribeSubject Draw3DStim => #0
                    -> Sink BindLeft => #1
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Name)
                        -> SubscribeSubject TextureLeft => #2
                        #0, #2 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2) => #4
                        ExternalizedMapping(ShaderName) => #5
                        #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                        -> WorkflowOutput
                    SubscribeSubject Borders => #2
                    -> MemberSelector(Selector=Item1) => #3
                    #2 -> MemberSelector(Selector=Item2) => #4
                    #3, #4 -> Zip
                    -> Subtract
                    -> PropertyMapping(ScaleY) => #7
                    #2 -> MemberSelector(Selector=Item3) => #8
                    #2 -> MemberSelector(Selector=Item4) => #9
                    #9, #8 -> Zip
                    -> Subtract
                    -> PropertyMapping(ScaleX) => #12
                    SubscribeSubject Parameters2 => #13
                    -> MemberSelector(Selector=transXL)
                    -> PropertyMapping(TranslationX) => #15
                    #1, #15, #7, #12 -> IncludeWorkflow => #16
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=-100
                      TranslationY=0
                      TranslationZ=0
                      ScaleX=720
                      ScaleY=180
                      ScaleZ=1
                      MeshName=Plane
                      Ambient(X=1, Y=1, Z=1)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=100
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    #0 -> Sink BindRight => #17
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Name)
                        -> SubscribeSubject TextureRight => #2
                        #0, #2 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2) => #4
                        ExternalizedMapping(ShaderName) => #5
                        #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                        -> WorkflowOutput
                    #13 -> MemberSelector(Selector=transXR)
                    -> PropertyMapping(TranslationX) => #19
                    #17, #19, #7, #12 -> IncludeWorkflow => #20
                      Path=BonVision:Primitives.DrawTexturedModel.bonsai
                      TranslationX=100
                      TranslationY=0
                      TranslationZ=0
                      ScaleX=720
                      ScaleY=180
                      ScaleZ=1
                      MeshName=Plane
                      Ambient(X=1, Y=1, Z=1)
                      Diffuse(X=0, Y=0, Z=0)
                      Specular(X=0, Y=0, Z=0)
                      SpecularExponent=100
                      RotationZ=0
                      RotationY=90
                      RotationX=0
                    #16, #20 -> Zip
                    -> WorkflowOutput
                SubscribeSubject ReadyToDraw
                -> Disable Skip(Count=10)
                -> Bonsai.Shaders.SampleOnRenderFrame => #3
                #0, #3 -> SubscribeWhen => #4
                SubscribeSubject EndStimulus => #5
                #4, #5 -> TakeUntil
                -> Last => #7
                -> WorkflowOutput
                #7 -> StringProperty(Value=stimOFF) => #9
                -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                #9 -> FloatProperty(Value=0)
                -> MulticastSubject QuadState
            -> Unit
            -> BehaviorSubject StimulusEnded
            -> Unit => #16
            #16, #12 -> Bonsai.Shaders.Delay(DueTime=PT2.039S)
            -> BehaviorSubject TrialOver
            -> Unit
            -> WorkflowOutput

            Disable GroupWorkflow "Draw Masking Planes"
                SubscribeSubject Draw3DStim
                -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawModel.bonsai
                  TranslationX=0
                  TranslationY=0
                  TranslationZ=-25
                  ScaleX=1000
                  ScaleY=2500
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=0, Y=0, Z=0)
                  SpecularExponent=0
                  RotationZ=0
                  RotationY=0
                  RotationX=0
                -> StringProperty(Value="Background plane (stops flickering)")

                SubscribeSubject Draw3DStim
                -> IncludeWorkflow
                  Path=BonVision:Primitives.DrawModel.bonsai
                  TranslationX=0
                  TranslationY=40
                  TranslationZ=-7
                  ScaleX=300
                  ScaleY=25
                  ScaleZ=0
                  MeshName=Plane
                  Ambient(X=0.5, Y=0.5, Z=0.5)
                  Diffuse(X=0, Y=0, Z=0)
                  Specular(X=0, Y=0, Z=0)
                  SpecularExponent=0
                  RotationZ=0
                  RotationY=0
                  RotationX=0
                -> StringProperty(Value="ceiling mask for pole")

            GroupWorkflow StimulusTimer
                SubscribeSubject Parameters
                -> MemberSelector(Selector=Duration)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime)
                -> Bonsai.Shaders.Timer(DueTime=PT2S)
                -> Unit
                -> WorkflowOutput
            -> BehaviorSubject EndStimulus

            ExternalizedMapping(DueTime(DisplayName=TrialClassPostStimTime)) => #24
            SubscribeSubject EndStimulus => #25
            #25, #24 -> Bonsai.Shaders.Delay(DueTime=PT0.1S)
            -> GroupWorkflow ClasifyTrialAndUpdateCounters
                SubscribeSubject MovMeanWheelSpeed => #0
                WorkflowInput Source1 => #1
                #0, #1 -> TakeUntil
                -> Average
                -> BehaviorSubject MeanRunSpeed => #4
                -> Condition RunTrial?
                    WorkflowInput Source1
                    -> GreaterThan(Operand=DoubleProperty(Value=3))
                    -> WorkflowOutput
                -> IntProperty(Value=1) => #6
                #4 -> Condition StatTrial?
                    WorkflowInput Source1
                    -> LessThanOrEqual(Operand=DoubleProperty(Value=3))
                    -> WorkflowOutput
                -> IntProperty(Value=0) => #8
                #6, #8 -> Merge
                -> First
                -> BehaviorSubject TrialStateClass
                #0 -> FloatProperty(Value=1)
                -> Accumulate => #13
                #13, #1 -> TakeUntil
                -> Last => #15
                ExternalizedMapping(RunMinPropThresh) => #16
                #0, #16 -> Condition OverRunThresh?
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=RunMinPropThresh)) => #1
                    #0, #1 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0.5))
                    -> WorkflowOutput
                -> FloatProperty(Value=1)
                -> Accumulate => #19
                ExternalizedMapping(StatMaxPropThresh) => #20
                FloatProperty(Value=0) => #21
                #19, #21 -> Merge => #22
                #22, #1 -> TakeUntil
                -> Last => #24
                #24, #15 -> Zip
                -> Divide
                -> BehaviorSubject RunProp
                #0, #20 -> Condition UnderStatThresh?
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=StatMaxPropThresh)) => #1
                    #0, #1 -> LessThanOrEqual(Operand=DoubleProperty(Value=3))
                    -> WorkflowOutput
                -> FloatProperty(Value=1)
                -> Accumulate => #30
                #30, #21 -> Merge => #31
                #31, #1 -> TakeUntil
                -> Last => #33
                #33, #15 -> Zip
                -> Divide
                -> BehaviorSubject StatProp

                SubscribeSubject TrialCounters
                -> PropertyMapping(TrialCounterArray) => #38
                SubscribeSubject CurrentStimIndex => #39
                SubscribeSubject TrialStateClass => #40
                #40, #39 -> Zip => #41
                #38, #41 -> IncrementStateDependentTrialCounter
                  TrialCounterArray
                    ArrayOfInt(int=1, int=1, int=1, int=1, int=2, int=2, int=1, int=1, int=2, int=1, int=1, int=2, int=1)
                    ArrayOfInt(int=31, int=30, int=31, int=30, int=30, int=30, int=31, int=31, int=30, int=31, int=30, int=31, int=31)
                -> MulticastSubject TrialCounters => #43
                #40, #39, #43 -> Zip
                -> MulticastSubject MonitorTrialCountsSub
        -> Unit
        -> WorkflowOutput
    -> BehaviorSubject TrialEnd
    -> Concat
    -> Repeat
    -> GroupWorkflow "Start and End Task"
        Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false) => #0
        Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey A P Q Shift", SuppressRepetitions=false) => #1
        SubscribeSubject TrialEnd => #2
        #1, #2 -> Sample
        -> Bonsai.Shaders.SampleOnRenderFrame => #4
        WorkflowInput Source1 => #5
        #5, #0 -> SubscribeWhen => #6
        #6, #4 -> TakeUntil
        -> BehaviorSubject WriteMetadata
        -> Unit
        -> MulticastSubject EndWorkflow
        -> WorkflowOutput
    -> WorkflowOutput
-> WorkflowOutput

ExternalizedMapping(MetadataFileToLoad, pEngagedThreshold(DisplayName=pEngagedThresh, Category=PerfTracking))

ExternalizedMapping
  ISILower(Category=Timing)
  "ISI Upper"(Category=Timing)
  RespWindowDelay(Category=Timing)
  RespWindowLength(Category=Timing)
  NoLickTime(Category=Timing)
  TimeoutTime(Category=PerfTracking)
  PreMotionAbortBool
-> GroupWorkflow "Initialise Variables"
    GroupWorkflow Borders(Description="Set values for borders of display")
        ExternalizedMapping(Value(DisplayName=TopBorder))
        -> FloatProperty(Value=90)
        -> ReplaySubject Top(BufferSize=nil) => #2
        ExternalizedMapping(Value(DisplayName=BottomBorder))
        -> FloatProperty(Value=-90)
        -> ReplaySubject Bottom(BufferSize=nil) => #5
        ExternalizedMapping(Value(DisplayName=LeftBorder))
        -> FloatProperty(Value=-360)
        -> ReplaySubject Left(BufferSize=nil) => #8
        ExternalizedMapping(Value(DisplayName=RightBorder))
        -> FloatProperty(Value=360)
        -> ReplaySubject Right(BufferSize=nil) => #11
        #2, #5, #8, #11 -> Disable Zip
        -> CombineLatest
        -> ReplaySubject Borders(BufferSize=nil)
        -> WorkflowOutput

    ExternalizedMapping(ISILower, "ISI Upper", RespWindowDelay, RespWindowLength, NoLickTime, TimeoutTime)
    -> GroupWorkflow "Timing Variables"
        FloatProperty(Value=0.5)
        -> BehaviorSubject MotionDelay

        ExternalizedMapping(Value(DisplayName=ISILower))
        -> DoubleProperty(Value=1.8)
        -> BehaviorSubject "ISI Lower"

        ExternalizedMapping(Value(DisplayName="ISI Upper"))
        -> DoubleProperty(Value=2.2)
        -> BehaviorSubject "ISI Upper"

        ExternalizedMapping(Value(DisplayName=RespWindowDelay))
        -> FloatProperty(Value=0.7)
        -> BehaviorSubject ResponseWindowDelay

        ExternalizedMapping(Value(DisplayName=RespWindowLength))
        -> FloatProperty(Value=6)
        -> BehaviorSubject ResponseWindowLength

        ExternalizedMapping(Value(DisplayName=NoLickTime))
        -> DoubleProperty(Value=0)
        -> BehaviorSubject NoLickTime

        FloatProperty(Value=2)
        -> BehaviorSubject StimulusDuration

        ExternalizedMapping(Value(DisplayName=TimeoutTime))
        -> FloatProperty(Value=0)
        -> BehaviorSubject TimeoutTime

        BooleanProperty(Value=false)
        -> BehaviorSubject DoTimeout

    GroupWorkflow TrialOutcomes
        Unit
        -> BehaviorSubject IncorrectResponse

        Unit
        -> BehaviorSubject LeftCorrect

        Unit
        -> BehaviorSubject RightCorrect

        Unit
        -> BehaviorSubject NoResponse

        IntProperty(Value=0)
        -> Skip(Count=1)
        -> BehaviorSubject TrialResults

    Bonsai.Numerics.CreateRandom(Seed=42)
    -> BehaviorSubject Random

    FloatProperty(Value=0)
    -> PublishSubject Sync

    FloatProperty(Value=1)
    -> BehaviorSubject TrialProgress

    IntProperty(Value=0)
    -> BehaviorSubject SyncPulse

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

    IntProperty(Value=0)
    -> BehaviorSubject VideoFrameCount

    FloatProperty(Value=0)
    -> BehaviorSubject runTrial

    Unit
    -> BehaviorSubject EndWorkflow

    Unit
    -> BehaviorSubject EndStimulus

    StringProperty
    -> BehaviorSubject LeftRewardString

    StringProperty
    -> BehaviorSubject RightRewardString

    StringProperty
    -> BehaviorSubject SerialToSend

    FloatProperty(Value=0)
    -> BehaviorSubject Response

    DoubleProperty(Value=0)
    -> BehaviorSubject LeftVel

    DoubleProperty(Value=0)
    -> BehaviorSubject RightVel

    FloatProperty(Value=1)
    -> BehaviorSubject Contrast

    ExternalizedMapping(Value(DisplayName=PreMotionAbortBool, Category=PerfTracking))
    -> BooleanProperty(Value=false)
    -> BehaviorSubject PreMotionAbortBool

    DoubleProperty(Value=0)
    -> BehaviorSubject TrialMeanRunningSpeed

    IntProperty(Value=0)
    -> BehaviorSubject itrial

GroupWorkflow Arduino
    Bonsai.IO.CreateSerialPort
      Name=ArduinoSerial
      PortName=COM4
      BaudRate=1000000
      Encoding=us-ascii
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    ExternalizedMapping(PortName)
    -> Bonsai.IO.SerialStringRead(PortName=ArduinoSerial, NewLine=\n)
    -> Parse(Pattern="%i,%i,%i,%i,%i,%i")
    -> Retry => #4
    -> MemberSelector(Selector=Item1)
    -> BehaviorSubject WheelInput
    #4 -> MemberSelector(Selector=Item2)
    -> DistinctUntilChanged
    -> BehaviorSubject LeftLick
    #4 -> MemberSelector(Selector=Item3)
    -> DistinctUntilChanged
    -> BehaviorSubject RightLick
    #4 -> MemberSelector(Selector=Item4)
    -> BehaviorSubject LastSyncPulseTime
    #4 -> MemberSelector(Selector=Item5)
    -> BehaviorSubject Photodiode
    #4 -> MemberSelector(Selector=Item6)
    -> BehaviorSubject ArduinoTime

    SubscribeSubject SerialToSend
    -> Skip(Count=1)
    -> Bonsai.IO.SerialStringWrite(PortName=ArduinoSerial, NewLine=\r)
    -> IntProperty(Value=1)
    -> Accumulate

    Bonsai.IO.CreateSerialPort
      Name=ArduinoPD
      PortName=COM5
      BaudRate=250000
      Encoding=us-ascii
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Bonsai.IO.SerialStringRead(PortName=ArduinoPD, NewLine=\n)
    -> Parse(Pattern="%i,%i")
    -> Retry
    -> BehaviorSubject PDandAsync
    -> MemberSelector(Selector=Item1)

GroupWorkflow Logging
    GroupWorkflow InitialiseLogging_AndRespWindow
        Disable StringProperty(Value=StartSession)
        -> Disable Take(Count=1)
        -> Disable GroupWorkflow LicksLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.")
            SubscribeSubject Licks => #0
            ExternalizedMapping(Overwrite) => #1
            ExternalizedMapping(Suffix) => #2
            SubscribeSubject FilenamePrefix => #3
            StringProperty(Value=_Licks) => #4
            #3, #4 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1+it.Item2
            -> Take(Count=1)
            -> Format(Format={0}.csv)
            -> PropertyMapping(FileName) => #9
            #9, #1, #2, #0 -> Bonsai.IO.CsvWriter(FileName=eddTest_SDTraining_Licks.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector="")
        -> Disable SubscribeWhen

        Disable StringProperty(Value=StartSession)
        -> Disable Take(Count=1)

    GroupWorkflow WheelLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #1
        ExternalizedMapping(Overwrite) => #0
        ExternalizedMapping(Suffix) => #1
        ExternalizedMapping(Name)
        -> SubscribeSubject WheelLog => #3
        SubscribeSubject WheelName
        -> PropertyMapping(FileName) => #5
        #5, #0, #1, #3 -> Bonsai.IO.CsvWriter
          FileName=C:\\Data\M25071\20250806\M25071_DotCorridor_AsymFlow_WheelLog.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""
    Bonsai.Windows.Input.KeyDown(Filter="MButton Back Clear D H L Shift", SuppressRepetitions=false) => #2
    #1, #2 -> SubscribeWhen
    GroupWorkflow LicksLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #4
    #4, #2 -> SubscribeWhen
    GroupWorkflow EventsLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #6
        ExternalizedMapping(Overwrite) => #0
        ExternalizedMapping(Suffix) => #1
        SubscribeSubject EventsLog => #2
        SubscribeSubject EventsName
        -> PropertyMapping(FileName) => #4
        #4, #0, #1, #2 -> Bonsai.IO.CsvWriter
          FileName=C:\\Data\M25071\20250806\M25071_DotCorridor_AsymFlow_Events.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""
        #2 -> MemberSelector(Selector=Event)
    #6, #2 -> SubscribeWhen
    GroupWorkflow TrialLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #8
        SubscribeSubject TrialParams => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #2
        #0, #2 -> Zip => #3
        ExternalizedMapping(Overwrite) => #4
        ExternalizedMapping(Suffix) => #5
        SubscribeSubject ArduinoTime => #6
        #3, #6 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #8
          Expression:
            new(
            Item1.Item1.Id as Id,
            Item1.Item1.Duration as Duration,
            Item1.Item1.Size as Size,
            Item1.Item1.Colour1 as Colour1,
            Item1.Item1.Colour2 as Colour2,
            Item1.Item1.numDots1 as numDots1,
            Item1.Item1.numDots2 as numDots2,
            Item1.Item1.dotLifeBool as dotLifeBool,
            Item1.Item1.dotLifetime as dotLifetime,
            Item1.Item1.Contrast as Contrast,
            Item1.Item1.VelXLeft as VelXLeft,
            Item1.Item1.VelYLeft as VelYLeft,
            Item1.Item1.CohLeft as CohLeft,
            Item1.Item1.VelXRight as VelXRight,
            Item1.Item1.VelYRight as VelYRight,
            Item1.Item1.CohRight as CohRight,
            Item1.Item1.transXL as transXL,
            Item1.Item1.transXR as transXR,
            Item1.Item2 as BonsaiTime,
            Item2 as ArudinoTime)
        SubscribeSubject TrialName
        -> PropertyMapping(FileName) => #10
        #10, #4, #5, #8 -> Bonsai.IO.CsvWriter
          FileName=C:\\Data\M25071\20250806\M25071_DotCorridor_AsymFlow_Trial.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""
    #8, #2 -> SubscribeWhen
    GroupWorkflow VideoLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #10
        SubscribeSubject VideoLog => #0
        ExternalizedMapping(Overwrite) => #1
        ExternalizedMapping(Suffix) => #2
        SubscribeSubject VideoCSVName
        -> PropertyMapping(FileName) => #4
        #4, #1, #2, #0 -> Bonsai.IO.CsvWriter
          FileName=C:\\Data\M25071\20250806\M25071_DotCorridor_AsymFlow_Video.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""
    #10, #2 -> SubscribeWhen
    GroupWorkflow PhotodiodeLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #12
        ExternalizedMapping(Overwrite) => #0
        ExternalizedMapping(Suffix) => #1
        ExternalizedMapping(Name)
        -> SubscribeSubject PDLog => #3
        SubscribeSubject PDname
        -> PropertyMapping(FileName) => #5
        #5, #0, #1, #3 -> Bonsai.IO.CsvWriter
          FileName=C:\\Data\M25071\20250806\M25071_DotCorridor_AsymFlow_PDAsync.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""
    #12, #2 -> SubscribeWhen

    GroupWorkflow WheelLogging
        SubscribeSubject WheelInput => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        SubscribeSubject LastSyncPulseTime => #3
        SubscribeSubject ArduinoTime => #4
        #0, #3, #4, #2 -> Zip => #5
        SubscribeSubject RenderFrameCount => #6
        #5, #6 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as Wheel, Item1.Item2 as LastSyncPulseTime, Item1.Item3 as ArduinoTime, Item1.Item4 as BonsaiTime, Item2 as RenderFrameCount)
        -> BehaviorSubject WheelLog
        -> WorkflowOutput

    GroupWorkflow LickLogging
        SubscribeSubject LeftLick => #0
        SubscribeSubject RightLick => #1
        #0, #1 -> CombineLatest => #2
        SubscribeSubject LastSyncPulseTime => #3
        SubscribeSubject ArduinoTime => #4
        #3, #4 -> Zip => #5
        #2, #5 -> WithLatestFrom => #6
        #2 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #8
        #6, #8 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1.Item1 as LeftLick, Item1.Item1.Item2 as RightLick, Item1.Item2.Item1 as LastSyncPulseTime, Item1.Item2.Item2 as ArduinoTime, Item2 as BonsaiTime)
        -> BehaviorSubject LickLog
        -> WorkflowOutput

    GroupWorkflow EventsLogging
        SubscribeSubject Events => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        Source1=#0, Source3=#2 -> Zip => #3
        SubscribeSubject ArduinoTime => #4
        SubscribeSubject LastSyncPulseTime => #5
        #4, #5 -> Zip => #6
        #3, #6 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as Event, Item2.Item2 as LastSyncPulseTime, Item2.Item1 as ArduinoTime, Item1.Item2 as BonsaiTime)
        -> BehaviorSubject EventsLog
        -> WorkflowOutput

    GroupWorkflow LogResponseWindowInfo
        SubscribeSubject ResponseWindowDelay
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
          Expression: it.ToString()
        StringProperty(Value=respDelay) => #2
        #2, #1 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

        SubscribeSubject ResponseWindowLength
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
          Expression: it.ToString()
        StringProperty(Value=respSize) => #8
        #8, #7 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

    GroupWorkflow VideoLogging
        SubscribeSubject VideoFrameCount => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        SubscribeSubject ArduinoTime => #3
        SubscribeSubject VideoLEDAsync => #4
        #0, #2, #4 -> Zip => #5
        #5, #3 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as VideoFrameCount, Item1.Item3 as LEDAsync, Item2 as ArduinoTime, Item1.Item2 as BonsaiTime)
        -> BehaviorSubject VideoLog
        -> WorkflowOutput

    GroupWorkflow IntialiseTrialParams
        Disable FloatProperty(Value=0) => #0
        Disable FloatProperty(Value=0) => #1
        Disable IntProperty(Value=0) => #2
        Disable DoubleProperty(Value=0) => #3
        Disable DoubleProperty(Value=0) => #4
        #0, #1, #2, #3, #4 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1 as TrialType, Item2 as Response, Item3 as TrialResult, Item4 as LeftVel, Item5 as RightVel)
        -> Disable Skip(Count=1)
        -> Disable BehaviorSubject TrialParams
        -> Disable WorkflowOutput

        SpeedDiscSpecification2(Trials="")
        -> GroupWorkflow EnsureSpeedDiscParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=DotSize)) => #4
            ExternalizedMapping(Value(DisplayName=Colour1)) => #5
            ExternalizedMapping(Value(DisplayName=Colour2)) => #6
            ExternalizedMapping(Value(DisplayName=numDots1)) => #7
            ExternalizedMapping(Value(DisplayName=numDots2)) => #8
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
            ExternalizedMapping(Value(DisplayName=Contrast)) => #11
            ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
            ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
            ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
            ExternalizedMapping(Value(DisplayName=VelXright)) => #15
            ExternalizedMapping(Value(DisplayName=VelYright)) => #16
            ExternalizedMapping(Value(DisplayName=CohRight)) => #17
            ExternalizedMapping(Value(DisplayName=Duration)) => #18
            #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
            #1 -> MemberSelector(Selector=Value.Size) => #20
            #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
            #1 -> MemberSelector(Selector=Value.Colour1) => #22
            #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
            #1 -> MemberSelector(Selector=Value.Colour2) => #24
            #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
            #1 -> MemberSelector(Selector=Value.numDots1) => #26
            #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
            #1 -> MemberSelector(Selector=Value.numDots2) => #28
            #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
            #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
            #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
            #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
            #1 -> MemberSelector(Selector=Value.Contrast) => #35
            #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
            #32, #34, #36 -> Zip => #37
            #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
            #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
            #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
            #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
            #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
            #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
            #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
            #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
            #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
            #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
            #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #39, #41, #43, #45, #47, #49 -> Zip => #50
            #1 -> MemberSelector(Selector=Value.transXLeft) => #51
            ExternalizedMapping(Value(DisplayName=transXL)) => #52
            #51, #52 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #53
            #1 -> MemberSelector(Selector=Value.transXRight) => #54
            ExternalizedMapping(Value(DisplayName=transXR)) => #55
            #54, #55 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #56
            #53, #56 -> Zip => #57
            #30, #37, #50, #57 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,
                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast,
                Item3.Item1 as VelXLeft,
                Item3.Item2 as VelYLeft,
                Item3.Item3 as CohLeft,
                Item3.Item4 as VelXRight,
                Item3.Item5 as VelYRight,
                Item3.Item6 as CohRight,
                Item4.Item1 as transXL,
                Item4.Item2 as transXR)
            -> WorkflowOutput
        -> Skip(Count=1)
        -> BehaviorSubject TrialParams
        -> WorkflowOutput

    GroupWorkflow InitialiseEvents
        StringProperty
        -> Skip(Count=1)
        -> BehaviorSubject Events
        -> WorkflowOutput

    SubscribeSubject TrialResults

    GroupWorkflow PhotodiodeLogging
        SubscribeSubject PDandAsync => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        #0, #2 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as Photodiode, Item1.Item2 as AsyncPulse, Item2 as BonsaiTime)
        -> BehaviorSubject PDLog
        -> WorkflowOutput

GroupWorkflow Video => #10
    Bonsai.Vision.CameraCapture => #0
      Index=0
      CaptureProperties
        CapturePropertyAssignment(Property=Fps, Value=30)
        CapturePropertyAssignment(Property=Saturation, Value=0)
        CapturePropertyAssignment(Property=Exposure, Value=-5)
        CapturePropertyAssignment(Property=Gain, Value=0)
        CapturePropertyAssignment(Property=Contrast, Value=100)
        CapturePropertyAssignment(Property=Brightness, Value=0)
        CapturePropertyAssignment(Property=Sharpness, Value=0)
        CapturePropertyAssignment(Property=Gamma, Value=0)
        CapturePropertyAssignment(Property=Backlight, Value=0)
        CapturePropertyAssignment(Property=FrameWidth, Value=2560)
        CapturePropertyAssignment(Property=FrameHeight, Value=1440)
    -> Bonsai.Vision.Flip(Mode=Both) => #1
    -> ElementIndex
    -> MemberSelector(Selector=Index)
    -> MulticastSubject VideoFrameCount
    #1 -> Disable MemberSelector(Selector=Width)
    #1 -> Disable MemberSelector(Selector=Height)
    #1 -> Disable TimeInterval
    #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=496, Y=0, Width=552, Height=330))
    #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=2280, Y=24, Width=88, Height=66))
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Dsp.Sum
    -> MemberSelector(Selector=Val0)
    -> BehaviorSubject VideoLEDAsync
    Bonsai.Windows.Input.KeyDown(Filter="MButton Back Clear D H L Shift", SuppressRepetitions=false) => #14
    SubscribeSubject BodyVideoName
    -> PropertyMapping(FileName) => #16
    #0, #16 -> Bonsai.Vision.VideoWriter => #17
      FileName=C:\\Data\M25071\20250806\M25071_DotCorridor_AsymFlow_BodyVideo.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    #17, #14 -> SubscribeWhen
    -> Disable Bonsai.FFmpeg.VideoWriter(FileName=eddTest_SDTraining_video.avi, Suffix=Timestamp, Overwrite=false, FrameRate=30, OutputArguments="-vb 15M -vcodec mpeg4")
Bonsai.Windows.Input.KeyDown(Filter="LButton MButton XButton1 Back Tab Clear Return Enter A D E H I L M Shift", SuppressRepetitions=true) => #11
#10, #11 -> SubscribeWhen

SubscribeSubject Draw3DStim => #13
SubscribeSubject QuadState
-> PropertyMapping(Ambient) => #15
#13, #15 -> IncludeWorkflow
  Path=BonVision:Primitives.DrawModel.bonsai
  TranslationX=-28
  TranslationY=-16
  TranslationZ=-102
  ScaleX=10
  ScaleY=10
  ScaleZ=40
  MeshName=cube3d
  Ambient(X=0, Y=0, Z=0)
  Diffuse(X=0, Y=0, Z=0)
  Specular(X=0, Y=0, Z=0)
  SpecularExponent=0
  RotationZ=-71.16279
  RotationY=175.813965
  RotationX=-8.372093

ExternalizedMapping(FileName(Category=StimControl), UpdateProbabilityDistsBool(Category=StimControl), scalingFactor(Category=StimControl))
-> GroupWorkflow AdaptiveStimControl
    ExternalizedMapping(FileName(Category=StimControl))
    -> GroupWorkflow GenStimProbDists
        ExternalizedMapping(FileName)
        -> Bonsai.IO.CsvReader(FileName=DotCorr_PassiveAsymFlow_spec.csv, ScanPattern="%f,%f,%f", SkipRows=1) => #1
        -> MemberSelector(Selector=Item1)
        -> ToArray
        -> BehaviorSubject StimulusValues
        #1 -> MemberSelector(Selector=Item2)
        -> ToArray
        -> BehaviorSubject ProbDist1 => #7
        #1 -> MemberSelector(Selector=Item3)
        -> ToArray
        -> BehaviorSubject ProbDist2 => #10
        -> Delay(DueTime=PT1S) => #11
        #7, #11 -> Merge
        -> ToList
        -> Disable ToArray => #14
        -> BehaviorSubject ProbDistArray
        -> MemberSelector(Selector=Count)
        -> Disable MemberSelector(Selector=Length)
        -> BehaviorSubject nStates
        -> BehaviorSubject initCountersSub
        -> WorkflowOutput
        #14 -> BehaviorSubject OriginalProbDistArray
        #10 -> MemberSelector(Selector=Length)
        -> BehaviorSubject nStim

    GroupWorkflow InitTrialCounters
        IntProperty(Value=0)
        -> Take(Count=1) => #1
        SubscribeSubject nStim
        -> PropertyMapping(Count) => #3
        #1, #3 -> RepeatCount(Count=13)
        -> ToArray => #5
        SubscribeSubject nStates
        -> PropertyMapping(Count) => #7
        #5, #7 -> RepeatCount(Count=2)
        -> ToList
        -> Disable ToArray
        -> Disable MemberSelector(Selector=Count)
        -> BehaviorSubject TrialCounters => #12
        SubscribeSubject initCountersSub => #13
        #12, #13 -> SubscribeWhen
        -> WorkflowOutput
        IntProperty(Value=0) => #16
        IntProperty(Value=0) => #17
        #17, #16, #12 -> Zip
        -> Skip(Count=1)
        -> BehaviorSubject MonitorTrialCountsSub => #20
        #20, #13 -> SubscribeWhen

    ExternalizedMapping(UpdateProbabilityDistsBool(Category=StimControl), scalingFactor(Category=StimControl))
    -> GroupWorkflow UpdateProbabilityDists
        SubscribeSubject OriginalProbDistArray => #0
        SubscribeSubject TrialCounters => #1
        #1, #0 -> CombineLatest
        -> Skip(Count=1) => #3
        ExternalizedMapping(scalingFactor) => #4
        #3, #4 -> UpdateProbDistArray(scalingFactor=1E+21)
        -> Condition
            SubscribeSubject UpdateProbDistsBool
            -> WorkflowOutput
        -> MulticastSubject ProbDistArray
        -> WorkflowOutput

        ExternalizedMapping(Value(DisplayName=UpdateProbabilityDistsBool))
        -> BooleanProperty(Value=true)
        -> BehaviorSubject UpdateProbDistsBool

    Disable GroupWorkflow SimulateState
        Disable Timer(DueTime=PT0S, Period=PT2S)
        -> Disable Bonsai.Numerics.CreateRandom(Seed=nil)
        -> Disable Bonsai.Numerics.Distributions.CreateNormal(Mean=0, StdDev=4)
        -> Disable Bonsai.Numerics.Distributions.Sample
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            it < 0 ? 0 :
            1
        -> Disable BehaviorSubject CurrentState
        -> Disable WorkflowOutput

        Disable ExternalizedMapping(Value(DisplayName=CurrentState))
        -> Disable IntProperty(Value=2)
        -> Disable BehaviorSubject CurrentState

    GroupWorkflow MonitorTrialCounts
        GroupWorkflow InitBarGraph => #0
            IntProperty(Value=0) => #0
            Timer(DueTime=PT0S, Period=PT0.1S)
            -> IntProperty(Value=1)
            -> Accumulate => #3
            SubscribeSubject nStim
            -> Subtract(Operand=IntProperty(Value=1))
            -> PropertyMapping(Count) => #6
            #3, #6 -> Take(Count=12) => #7
            #0, #7 -> Merge => #8
            Timer(DueTime=PT0S, Period=PT0.001S)
            -> IntProperty(Value=0) => #10
            SubscribeSubject nStim
            -> PropertyMapping(Count) => #12
            #10, #12 -> Take(Count=13) => #13
            #13, #8 -> Zip
            -> WorkflowOutput
        SubscribeSubject MonitorTrialCountsSub => #1
        -> Condition State1? => #2
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
          Expression: Item3[Item1][Item2]
        #2 -> MemberSelector(Selector=Item2) => #4
        #3, #4 -> Zip => #5
        #1 -> Condition State0? => #6
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
          Expression: Item3[Item1][Item2]
        #6 -> MemberSelector(Selector=Item2) => #8
        #7, #8 -> Zip => #9
        #9, #0 -> Merge => #10
        #5, #0 -> Merge => #11
        #10, #11 -> CombineLatest => #12
        -> MemberSelector(Selector=Item1)
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Item2, ValueSelector=Item1, BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        -> VisualizerMapping => #15
        #12 -> MemberSelector(Selector=Item2)
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Item2, ValueSelector=Item1, BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        -> VisualizerMapping => #18
        SubscribeSubject MovMeanWheelSpeed
        -> VisualizerMapping => #20
        SubscribeSubject CurrentState
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.TimeSeriesVisualizer>) => #22
        #15, #18, #20, #22 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")

GroupWorkflow CalcWheelSpeed
    SubscribeSubject WheelInput => #0
    SubscribeSubject ArduinoTime => #1
    #0, #1 -> Zip => #2
    -> MemberSelector(Selector=Item1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToSingle(it)
    -> Bonsai.Dsp.Difference(Order=1)
    -> Bonsai.Numerics.Abs
    -> Condition IgnoreOverflowTicks => #7
        WorkflowInput Source1
        -> Bonsai.Dsp.Abs
        -> LessThan(Operand=DoubleProperty(Value=512))
        -> WorkflowOutput
    SubscribeSubject cmPerTick => #8
    #7, #8 -> CombineLatest
    -> Multiply => #10
    #2 -> MemberSelector(Selector=Item2)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToSingle(it)
    -> Bonsai.Dsp.Difference(Order=1)
    -> Divide(Operand=DoubleProperty(Value=1000)) => #14
    #10, #14 -> Zip
    -> Divide
    -> BehaviorSubject RawWheelSpeed => #17
    ExternalizedMapping(TimeSpan(DisplayName=RunningAverageTimeWindow)) => #18
    #17, #18 -> WindowTime(TimeSpan=PT0.05S)
    -> SelectMany
        WorkflowInput Source1
        -> Average
        -> WorkflowOutput
    -> Retry
    -> BehaviorSubject MovMeanWheelSpeed => #22
    -> Condition
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=3))
        -> WorkflowOutput
    -> IntProperty(Value=1) => #24
    #22 -> Condition
        WorkflowInput Source1
        -> LessThanOrEqual(Operand=DoubleProperty(Value=3))
        -> WorkflowOutput
    -> IntProperty(Value=0) => #26
    #24, #26 -> Merge
    -> BehaviorSubject CurrentState

    ExternalizedMapping(Value(DisplayName=TicksPerRev))
    -> FloatProperty(Value=4096) => #30
    ExternalizedMapping(Value(DisplayName=WheelDiam))
    -> FloatProperty(Value=19.5) => #32
    FloatProperty(Value=3.14159274) => #33
    #32, #33 -> CombineLatest
    -> Multiply
    -> BehaviorSubject WheelCircumference => #36
    #36, #30 -> CombineLatest
    -> Divide
    -> BehaviorSubject cmPerTick
-> DelaySubscription(DueTime=PT1S)

Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false)
-> IntProperty(Value=0) => #22
Bonsai.Windows.Input.KeyDown(Filter="ShiftKey P Shift", SuppressRepetitions=false)
-> IntProperty(Value=1) => #24
#22, #24 -> Merge
-> BehaviorSubject PauseFlag

ExternalizedMapping(StimulusID(Category=Filename), MouseID(Category=Filename), SavingDirBase(Category=Filename))
-> GroupWorkflow "Generate File Names"
    ExternalizedMapping(Value(DisplayName=StimulusID))
    -> StringProperty(Value=DotCorridor_AsymFlow) => #1
    ExternalizedMapping(Value(DisplayName=MouseID))
    -> StringProperty(Value=M25071) => #3
    SubscribeSubject DateDir => #4
    ExternalizedMapping(Value(DisplayName=SavingDirBase))
    -> StringProperty(Value=C:\) => #6
    #3, #1, #6, #4 -> Zip
    -> Format(Format={2}\Data\{0}\{3}\{0}_{1}, Selector="Item1,Item2,Item3,Item4")
    -> BehaviorSubject FilenamePrefix

    SubscribeSubject FilenamePrefix => #10
    -> Format(Format={0}_WheelLog.csv, Selector=it)
    -> BehaviorSubject WheelName
    #10 -> Format(Format={0}_Trial.csv, Selector=it)
    -> BehaviorSubject TrialName
    #10 -> Format(Format={0}_Video.csv, Selector=it)
    -> BehaviorSubject VideoCSVName
    #10 -> Format(Format={0}_BodyVideo.avi, Selector=it)
    -> BehaviorSubject BodyVideoName
    #10 -> Format(Format={0}_ArduinoStim.csv, Selector=it)
    -> BehaviorSubject PWMCSVName
    #10 -> Format(Format={0}_PDAsync.csv, Selector=it)
    -> BehaviorSubject PDname
    #10 -> Format(Format={0}_Events.csv, Selector=it)
    -> BehaviorSubject EventsName

    Bonsai.Scripting.IronPython.PythonSource
      Script:
        from System import DateTime,String

        @returns(String)
        def generate():
          yield (DateTime.Now).ToString("yyyyMMdd")
    -> BehaviorSubject DateDir
