WorkflowBuilder(Version=2.7.1)
Bonsai.Shaders.CreateWindow
  Width=1280
  Height=800
  VSync=On
  SwapSync=false
  ClearColor=Gray
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Resizable
  WindowState=Fullscreen
  DisplayDevice=First
  TargetRenderFrequency=60
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Shaders.TextureResources
  Textures
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=plaid
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\plaid.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=vertGrat
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\vertGrat.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn1
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn1.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn2
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn2.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn3
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn3.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=fwn4
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\fwn4.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=grayEnd
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\grayEnd.jpg
      ColorType=Unchanged
      FlipMode=Vertical
    TextureConfiguration=Bonsai.Shaders.ImageTexture
      Name=horGrat
      Width=nil
      Height=nil
      InternalFormat=Rgba
      WrapS=Repeat
      WrapT=Repeat
      MinFilter=Linear
      MagFilter=Linear
      FileName=Textures\horGrat.jpg
      ColorType=Unchanged
      FlipMode=Vertical
-> Bonsai.Shaders.MeshResources(Meshes(MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=cube3d, FileName=cube3d.obj)))
-> Bonsai.Shaders.ShaderResources
  Shaders
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=MeshMapSphere
      RenderState=""
      ShaderUniforms=""
      BufferBindings
        BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D)
        BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture1, TextureTarget=Texture2D)
      FramebufferAttachments=""
      VertexShader=Shaders\MeshMapSphere.vert
      FragmentShader=Shaders\MeshMapSphere.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=MeshMapGradient
      RenderState=""
      ShaderUniforms=""
      BufferBindings=""
      FramebufferAttachments=""
      VertexShader=Shaders\MeshMapSphere.vert
      FragmentShader=Shaders\gradient.frag
    ShaderConfiguration=Bonsai.Shaders.Material
      Name=MeshMapVector
      RenderState=""
      ShaderUniforms=""
      BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=meshMap, TextureSlot=Texture0, TextureName=plaid, TextureTarget=Texture2D))
      FramebufferAttachments=""
      VertexShader=Shaders\MeshMapSphere.vert
      FragmentShader=Shaders\vector.frag
-> Bonsai.Resources.LoadResources
-> WorkflowOutput

GroupWorkflow VarInIt
    Bonsai.Numerics.CreateRandom(Seed=42)
    -> BehaviorSubject Random

    FloatProperty(Value=0)
    -> PublishSubject Sync

    FloatProperty(Value=1)
    -> BehaviorSubject TrialProgress

    IntProperty(Value=0)
    -> BehaviorSubject SyncPulse

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

    IntProperty(Value=0)
    -> BehaviorSubject EyeFrameCount

Bonsai.Shaders.UpdateFrame => #8
-> PublishSubject DrawStimuli
#8 -> PublishSubject DrawQuadSubject

WorkflowInput Source1
-> GroupWorkflow Stimulus => #12
    WorkflowInput Source1
    -> GroupWorkflow vel64 => #1
        WorkflowInput Source1
        -> SpeedDiscSpecification2
          Trials
            SpeedDiscParameters2
              Duration=300
              Size=4.6542
              Colour1=0
              Colour2=1
              numDots1=476
              numDots2=476
              dotLifeBool=1
              dotLifetime=600
              Contrast=1
              VelocityXLeft=0
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=0
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
        -> GroupWorkflow EnsureSpeedDiscParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=DotSize)) => #4
            ExternalizedMapping(Value(DisplayName=Colour1)) => #5
            ExternalizedMapping(Value(DisplayName=Colour2)) => #6
            ExternalizedMapping(Value(DisplayName=numDots1)) => #7
            ExternalizedMapping(Value(DisplayName=numDots2)) => #8
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
            ExternalizedMapping(Value(DisplayName=Contrast)) => #11
            ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
            ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
            ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
            ExternalizedMapping(Value(DisplayName=VelXright)) => #15
            ExternalizedMapping(Value(DisplayName=VelYright)) => #16
            ExternalizedMapping(Value(DisplayName=CohRight)) => #17
            ExternalizedMapping(Value(DisplayName=Duration)) => #18
            #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
            #1 -> MemberSelector(Selector=Value.Size) => #20
            #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
            #1 -> MemberSelector(Selector=Value.Colour1) => #22
            #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
            #1 -> MemberSelector(Selector=Value.Colour2) => #24
            #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
            #1 -> MemberSelector(Selector=Value.numDots1) => #26
            #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
            #1 -> MemberSelector(Selector=Value.numDots2) => #28
            #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
            #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
            #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
            #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
            #1 -> MemberSelector(Selector=Value.Contrast) => #35
            #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
            #32, #34, #36 -> Zip => #37
            #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
            #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
            #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
            #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
            #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
            #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
            #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
            #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
            #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
            #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
            #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #39, #41, #43, #45, #47, #49 -> Zip => #50
            #1 -> MemberSelector(Selector=Value.transXLeft) => #51
            ExternalizedMapping(Value(DisplayName=transXL)) => #52
            #51, #52 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #53
            #1 -> MemberSelector(Selector=Value.transXRight) => #54
            ExternalizedMapping(Value(DisplayName=transXR)) => #55
            #54, #55 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #56
            #53, #56 -> Zip => #57
            #30, #37, #50, #57 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,
                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast,
                Item3.Item1 as VelXLeft,
                Item3.Item2 as VelYLeft,
                Item3.Item3 as CohLeft,
                Item3.Item4 as VelXRight,
                Item3.Item5 as VelYRight,
                Item3.Item6 as CohRight,
                Item4.Item1 as transXL,
                Item4.Item2 as transXR)
            -> WorkflowOutput
        -> WorkflowOutput
    SubscribeSubject Random => #2
    #1, #2 -> Bonsai.Numerics.Permutation
    -> CreateObservable CreateTrial
        WorkflowInput Source1 => #0
        -> ReplaySubject Parameters(BufferSize=nil)
        -> Disable IncludeWorkflow SpeedAndOtherInfo(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        #0 -> SelectMany DrawStimulus
            SubscribeSubject Draw3DStim => #0
            Disable WorkflowInput Source1
            -> Disable MemberSelector(Selector=Duration)
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> Disable PropertyMapping(DueTime)
            -> Disable Bonsai.Shaders.Timer(DueTime=PT5M) => #5
            SubscribeSubject Borders => #6
            -> MemberSelector(Selector=Item1) => #7
            #6 -> MemberSelector(Selector=Item2) => #8
            #7, #8 -> Zip
            -> Subtract
            -> PropertyMapping(ScaleY) => #11
            #6 -> MemberSelector(Selector=Item3) => #12
            #6 -> MemberSelector(Selector=Item4) => #13
            #13, #12 -> Zip
            -> Subtract
            -> PropertyMapping(ScaleX) => #16
            SubscribeSubject Draw3DStim
            -> Take(Count=1)
            -> FloatProperty(Value=1) => #19
            SubscribeSubject Parameters => #20
            -> MemberSelector(Selector=transXL)
            -> PropertyMapping(TranslationX) => #22
            #20 -> MemberSelector(Selector=transXR)
            -> PropertyMapping(TranslationX) => #24
            ExternalizedMapping(Lower(DisplayName="ISI lower bound"), Upper(DisplayName="ISI upper bound"))
            -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=1, Upper=1)
            -> Bonsai.Numerics.Distributions.Sample
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #29
            Timer(DueTime=PT0.06S, Period=PT0S) => #30
            #0, #30 -> SubscribeWhen => #31
            -> Sink BindLeft => #32
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureLeft => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #5
                #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            #32, #16, #22, #11 -> IncludeWorkflow => #33
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-100
              TranslationY=0
              TranslationZ=0
              ScaleX=360
              ScaleY=360
              ScaleZ=1
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
              RotationZ=0
              RotationY=90
              RotationX=0
            #31 -> Sink BindRight => #34
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureRight => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #5
                #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            #34, #16, #24, #11 -> IncludeWorkflow => #35
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=100
              TranslationY=0
              TranslationZ=0
              ScaleX=360
              ScaleY=360
              ScaleZ=1
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
              RotationZ=0
              RotationY=90
              RotationX=0
            #33, #35 -> Zip => #36
            #36, #5 -> Disable TakeUntil
            -> Last => #38
            #38, #29 -> Bonsai.Shaders.Delay(DueTime=PT1S)
            -> Unit
            -> WorkflowOutput
            #38 -> FloatProperty(Value=0) => #42
            #42, #19 -> Merge
            -> Disable MulticastSubject QuadState

            SubscribeSubject Parameters
            -> PropertyMapping(ColorA(Selector=Contrast), Diameter(Selector=Size), dotLifetime(Selector=dotLifetime), dotLifetimeBool(Selector=dotLifeBool)) => #46
            SubscribeSubject Borders
            -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #48
            SubscribeSubject DrawStimuli => #49
            #48, #49 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-180, Right=180, Bottom=-180, Top=180) => #50
            Bonsai.Shaders.UpdateFrame
            -> MemberSelector(Selector=TimeStep.ElapsedTime)
            -> Take(Count=1) => #53
            SubscribeSubject Parameters => #54
            -> Disable MemberSelector(Selector=VelXLeft)
            #54 -> MemberSelector(Selector=VelYLeft) => #56
            SubscribeSubject Parameters
            -> MemberSelector(Selector=CohLeft)
            -> PropertyMapping(Coherence) => #59
            SubscribeSubject Parameters
            -> MemberSelector(Selector=CohRight)
            -> PropertyMapping(Coherence) => #62
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelYRight) => #64
            SubscribeSubject WheelSpeed => #65
            #53, #65 -> CombineLatest => #66
            -> Multiply
            -> PropertyMapping(VelX) => #68
            #66 -> Multiply => #69
            -> PropertyMapping(VelX) => #70
            #69 -> Disable IncludeWorkflow SpeedAndOtherInfo(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
            #56, #53 -> Zip
            -> Multiply
            -> PropertyMapping(VelY) => #74
            #64, #53 -> Zip
            -> Multiply
            -> PropertyMapping(VelY) => #77
            #50, #46, #68, #59, #74 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #5
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots2)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #9
                ExternalizedMapping(VelX, VelY) => #10
                ExternalizedMapping(DueTime) => #11
                #0, #1, #5, #10, #11 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #12
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(numDots) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #15
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #19
                    FloatProperty(Value=0) => #20
                    ExternalizedMapping(LocationX) => #21
                    ExternalizedMapping(LocationY) => #22
                    ExternalizedMapping(Z) => #23
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #26
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                    -> PropertyMapping(ExtentX, ExtentY) => #29
                    #4, #21, #22, #29 -> GroupWorkflow Transform => #30
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #30, #1, #2, #23, #26 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #32
                    ExternalizedMapping(Coherence) => #33
                    ExternalizedMapping(DueTime) => #34
                    #15, #34 -> Delay(DueTime=PT0S) => #35
                    #35, #20 -> Merge
                    -> PropertyMapping(VelocityX) => #37
                    #19, #34 -> Delay(DueTime=PT0S) => #38
                    #38, #20 -> Merge
                    -> PropertyMapping(VelocityY) => #40
                    ExternalizedMapping(rndseed) => #41
                    #8, #10, #41 -> GenerateDotField(numDots=238, left=-180, right=180, top=180, bottom=-180, rndseed=0) => #42
                    #9, #10 -> GenerateDotLives(dotLifetime=600, numDots=238) => #43
                    #42, #43 -> Zip => #44
                    #44, #32 -> CombineLatest => #45
                    #45, #32 -> Sample
                    -> MemberSelector(Selector=Item1) => #47
                    #47, #37, #40, #33, #6, #9, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=1, dotLifetime=600, left=-180, right=180, top=180, bottom=-180)
                    -> MemberSelector(Selector=Item1) => #49
                    #49, #6 -> wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10, #11 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #10, #12 -> GenerateDotLives(dotLifetime=600, numDots=238) => #13
                    #9, #12 -> GenerateDotField(numDots=238, left=-180, right=180, top=180, bottom=-180, rndseed=1) => #14
                    #14, #13 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #19
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #23
                    FloatProperty(Value=0) => #24
                    ExternalizedMapping(LocationX) => #25
                    ExternalizedMapping(LocationY) => #26
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #29
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                    -> PropertyMapping(ExtentX, ExtentY) => #32
                    #5, #25, #26, #32 -> GroupWorkflow Transform => #33
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #33, #1, #2, #3, #29 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #35
                    #15, #35 -> CombineLatest => #36
                    #36, #35 -> Sample
                    -> MemberSelector(Selector=Item1) => #38
                    ExternalizedMapping(Coherence) => #39
                    ExternalizedMapping(DueTime) => #40
                    #19, #40 -> Delay(DueTime=PT0S) => #41
                    #41, #24 -> Merge
                    -> PropertyMapping(VelocityX) => #43
                    #23, #40 -> Delay(DueTime=PT0S) => #44
                    #44, #24 -> Merge
                    -> PropertyMapping(VelocityY) => #46
                    #38, #43, #46, #39, #7, #10, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=1, dotLifetime=600, left=-180, right=180, top=180, bottom=-180)
                    -> MemberSelector(Selector=Item1) => #48
                    #48, #7 -> wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10, #11 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #10, #12 -> GenerateDotLives(dotLifetime=600, numDots=238) => #13
                    #9, #12 -> GenerateDotField(numDots=238, left=-180, right=180, top=180, bottom=-180, rndseed=2) => #14
                    #14, #13 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #19
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #23
                    FloatProperty(Value=0) => #24
                    ExternalizedMapping(LocationX) => #25
                    ExternalizedMapping(LocationY) => #26
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #29
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                    -> PropertyMapping(ExtentX, ExtentY) => #32
                    #5, #25, #26, #32 -> GroupWorkflow Transform => #33
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #33, #1, #2, #3, #29 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #35
                    #15, #35 -> CombineLatest => #36
                    #36, #35 -> Sample
                    -> MemberSelector(Selector=Item1) => #38
                    ExternalizedMapping(Coherence) => #39
                    ExternalizedMapping(DueTime) => #40
                    #19, #40 -> Delay(DueTime=PT0S) => #41
                    #41, #24 -> Merge
                    -> PropertyMapping(VelocityX) => #43
                    #23, #40 -> Delay(DueTime=PT0S) => #44
                    #44, #24 -> Merge
                    -> PropertyMapping(VelocityY) => #46
                    #38, #43, #46, #39, #7, #10, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=1, dotLifetime=600, left=-180, right=180, top=180, bottom=-180)
                    -> MemberSelector(Selector=Item1) => #48
                    #48, #7 -> wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #5, #10, #11 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #15
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(numDots) => #10
                    #8, #10 -> GenerateDotField(numDots=238, left=-180, right=180, top=180, bottom=-180, rndseed=3) => #11
                    #9, #10 -> GenerateDotLives(dotLifetime=600, numDots=238) => #12
                    #11, #12 -> Zip => #13
                    ExternalizedMapping(dotLifetimeBool) => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #22
                    FloatProperty(Value=0) => #23
                    ExternalizedMapping(LocationX) => #24
                    ExternalizedMapping(LocationY) => #25
                    ExternalizedMapping(Z) => #26
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #29
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                    -> PropertyMapping(ExtentX, ExtentY) => #32
                    #4, #24, #25, #32 -> GroupWorkflow Transform => #33
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #33, #1, #2, #26, #29 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #35
                    #13, #35 -> CombineLatest => #36
                    #36, #35 -> Sample
                    -> MemberSelector(Selector=Item1) => #38
                    ExternalizedMapping(Coherence) => #39
                    ExternalizedMapping(DueTime) => #40
                    #18, #40 -> Delay(DueTime=PT0S) => #41
                    #41, #23 -> Merge
                    -> PropertyMapping(VelocityX) => #43
                    #22, #40 -> Delay(DueTime=PT0S) => #44
                    #44, #23 -> Merge
                    -> PropertyMapping(VelocityY) => #46
                    #38, #43, #46, #39, #6, #9, #14 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=1, dotLifetime=600, left=-180, right=180, top=180, bottom=-180)
                    -> MemberSelector(Selector=Item1) => #48
                    #48, #6 -> wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #12, #13, #14, #15 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureLeft
            #50, #46, #70, #62, #77 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #5
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots2)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #9
                ExternalizedMapping(VelX, VelY) => #10
                ExternalizedMapping(DueTime) => #11
                #0, #1, #5, #10, #11 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #12
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(numDots) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #15
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #19
                    FloatProperty(Value=0) => #20
                    ExternalizedMapping(LocationX) => #21
                    ExternalizedMapping(LocationY) => #22
                    ExternalizedMapping(Z) => #23
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #26
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                    -> PropertyMapping(ExtentX, ExtentY) => #29
                    #4, #21, #22, #29 -> GroupWorkflow Transform => #30
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #30, #1, #2, #23, #26 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #32
                    ExternalizedMapping(Coherence) => #33
                    ExternalizedMapping(DueTime) => #34
                    #15, #34 -> Delay(DueTime=PT0S) => #35
                    #35, #20 -> Merge
                    -> PropertyMapping(VelocityX) => #37
                    #19, #34 -> Delay(DueTime=PT0S) => #38
                    #38, #20 -> Merge
                    -> PropertyMapping(VelocityY) => #40
                    ExternalizedMapping(rndseed) => #41
                    #8, #10, #41 -> GenerateDotField(numDots=238, left=-180, right=180, top=180, bottom=-180, rndseed=0) => #42
                    #9, #10 -> GenerateDotLives(dotLifetime=600, numDots=238) => #43
                    #42, #43 -> Zip => #44
                    #44, #32 -> CombineLatest => #45
                    #45, #32 -> Sample
                    -> MemberSelector(Selector=Item1) => #47
                    #47, #37, #40, #33, #6, #9, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=1, dotLifetime=600, left=-180, right=180, top=180, bottom=-180)
                    -> MemberSelector(Selector=Item1) => #49
                    #49, #6 -> wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10, #11 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #10, #12 -> GenerateDotLives(dotLifetime=600, numDots=238) => #13
                    #9, #12 -> GenerateDotField(numDots=238, left=-180, right=180, top=180, bottom=-180, rndseed=1) => #14
                    #14, #13 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #19
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #23
                    FloatProperty(Value=0) => #24
                    ExternalizedMapping(LocationX) => #25
                    ExternalizedMapping(LocationY) => #26
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #29
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                    -> PropertyMapping(ExtentX, ExtentY) => #32
                    #5, #25, #26, #32 -> GroupWorkflow Transform => #33
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #33, #1, #2, #3, #29 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #35
                    #15, #35 -> CombineLatest => #36
                    #36, #35 -> Sample
                    -> MemberSelector(Selector=Item1) => #38
                    ExternalizedMapping(Coherence) => #39
                    ExternalizedMapping(DueTime) => #40
                    #19, #40 -> Delay(DueTime=PT0S) => #41
                    #41, #24 -> Merge
                    -> PropertyMapping(VelocityX) => #43
                    #23, #40 -> Delay(DueTime=PT0S) => #44
                    #44, #24 -> Merge
                    -> PropertyMapping(VelocityY) => #46
                    #38, #43, #46, #39, #7, #10, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=1, dotLifetime=600, left=-180, right=180, top=180, bottom=-180)
                    -> MemberSelector(Selector=Item1) => #48
                    #48, #7 -> wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10, #11 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #10, #12 -> GenerateDotLives(dotLifetime=600, numDots=238) => #13
                    #9, #12 -> GenerateDotField(numDots=238, left=-180, right=180, top=180, bottom=-180, rndseed=2) => #14
                    #14, #13 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #19
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #23
                    FloatProperty(Value=0) => #24
                    ExternalizedMapping(LocationX) => #25
                    ExternalizedMapping(LocationY) => #26
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #29
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                    -> PropertyMapping(ExtentX, ExtentY) => #32
                    #5, #25, #26, #32 -> GroupWorkflow Transform => #33
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #33, #1, #2, #3, #29 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #35
                    #15, #35 -> CombineLatest => #36
                    #36, #35 -> Sample
                    -> MemberSelector(Selector=Item1) => #38
                    ExternalizedMapping(Coherence) => #39
                    ExternalizedMapping(DueTime) => #40
                    #19, #40 -> Delay(DueTime=PT0S) => #41
                    #41, #24 -> Merge
                    -> PropertyMapping(VelocityX) => #43
                    #23, #40 -> Delay(DueTime=PT0S) => #44
                    #44, #24 -> Merge
                    -> PropertyMapping(VelocityY) => #46
                    #38, #43, #46, #39, #7, #10, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=1, dotLifetime=600, left=-180, right=180, top=180, bottom=-180)
                    -> MemberSelector(Selector=Item1) => #48
                    #48, #7 -> wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #5, #10, #11 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #15
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(numDots) => #10
                    #8, #10 -> GenerateDotField(numDots=238, left=-180, right=180, top=180, bottom=-180, rndseed=3) => #11
                    #9, #10 -> GenerateDotLives(dotLifetime=600, numDots=238) => #12
                    #11, #12 -> Zip => #13
                    ExternalizedMapping(dotLifetimeBool) => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Disable Take(Count=1)
                    -> Skip(Count=1) => #22
                    FloatProperty(Value=0) => #23
                    ExternalizedMapping(LocationX) => #24
                    ExternalizedMapping(LocationY) => #25
                    ExternalizedMapping(Z) => #26
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #29
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=4.6542)
                    -> PropertyMapping(ExtentX, ExtentY) => #32
                    #4, #24, #25, #32 -> GroupWorkflow Transform => #33
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=4.6542, Y=4.6542, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #33, #1, #2, #26, #29 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #35
                    #13, #35 -> CombineLatest => #36
                    #36, #35 -> Sample
                    -> MemberSelector(Selector=Item1) => #38
                    ExternalizedMapping(Coherence) => #39
                    ExternalizedMapping(DueTime) => #40
                    #18, #40 -> Delay(DueTime=PT0S) => #41
                    #41, #23 -> Merge
                    -> PropertyMapping(VelocityX) => #43
                    #22, #40 -> Delay(DueTime=PT0S) => #44
                    #44, #23 -> Merge
                    -> PropertyMapping(VelocityY) => #46
                    #38, #43, #46, #39, #6, #9, #14 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=1, dotLifetime=600, left=-180, right=180, top=180, bottom=-180)
                    -> MemberSelector(Selector=Item1) => #48
                    #48, #6 -> wrapAroundDots(Left=-180, Right=180, Top=180, Bottom=-180)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #12, #13, #14, #15 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureRight

            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelXRight)

            Disable SubscribeSubject DrawQuad
            -> Disable IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-120, Right=120, Bottom=90, Top=-30) => #87
            Disable SubscribeSubject QuadState => #88
            -> Disable PropertyMapping(ColorR(Selector=it), ColorB(Selector=it), ColorG(Selector=it)) => #89
            #87, #89 -> Disable IncludeWorkflow
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=10
              ExtentY=10
              LocationX=5.7
              LocationY=11
              Layer=-1
              Angle=0
              ColorR=1
              ColorG=1
              ColorB=1
              ColorA=1
            #88 -> Disable PropertyMapping(Ambient(Selector=it), Diffuse(Selector=it), Specular(Selector=it)) => #91
            Disable SubscribeSubject Draw3DQuad => #92
            #92, #91 -> Disable IncludeWorkflow
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=60
              TranslationY=-33
              TranslationZ=-70
              ScaleX=1
              ScaleY=70
              ScaleZ=100
              MeshName=cube3d
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=1, Y=1, Z=1)
              SpecularExponent=0
              RotationZ=0
              RotationY=0
              RotationX=0

            Disable SubscribeSubject Draw3DStim
            -> Disable IncludeWorkflow
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=0
              TranslationY=0
              TranslationZ=-25
              ScaleX=1000
              ScaleY=2500
              ScaleZ=0
              MeshName=Plane
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=0
              RotationZ=0
              RotationY=0
              RotationX=0
            -> Disable StringProperty(Value="Background plane (stops flickering)")

            Disable SubscribeSubject Draw3DStim
            -> Disable IncludeWorkflow
              Path=BonVision:Primitives.DrawModel.bonsai
              TranslationX=0
              TranslationY=40
              TranslationZ=-7
              ScaleX=300
              ScaleY=25
              ScaleZ=0
              MeshName=Plane
              Ambient(X=0.5, Y=0.5, Z=0.5)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=0
              RotationZ=0
              RotationY=0
              RotationX=0
            -> Disable StringProperty(Value="ceiling mask for pole")
        -> Unit
        -> WorkflowOutput
    -> Concat
    -> RepeatCount(Count=1)
    -> WorkflowOutput

    GroupWorkflow Quad(Description=Quad) => #8
        GroupWorkflow "Black quad" => #0
            SubscribeSubject DrawQuadSubject
            -> FloatProperty(Value=0)
            -> WorkflowOutput
        GroupWorkflow "White quad" => #1
            SubscribeSubject DrawQuadSubject
            -> FloatProperty(Value=1)
            -> WorkflowOutput
        Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=200000, Upper=500000)
        -> Bonsai.Numerics.Permutation
        -> Bonsai.Numerics.Distributions.Sample
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT0.0354014S, Period=PT0S)
        -> Unit => #7
        #0, #7 -> TakeUntil => #8
        Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=200000, Upper=500000)
        -> Bonsai.Numerics.Permutation
        -> Bonsai.Numerics.Distributions.Sample
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT0.0241841S, Period=PT0S)
        -> Unit => #14
        #1, #14 -> TakeUntil => #15
        #8, #15 -> Concat
        -> Repeat
        -> MulticastSubject QuadState => #18
        -> WorkflowOutput
        #18 -> PropertyMapping(ColorR, ColorG, ColorB) => #20
        SubscribeSubject Draw2D => #21
        #20, #21 -> IncludeWorkflow(Path=BonVision:Primitives.DrawQuad.bonsai, ExtentX=2, ExtentY=2, LocationX=95, LocationY=37, Layer=0, Angle=1, ColorR=0, ColorG=0, ColorB=0, ColorA=1)
    Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey A P Q Shift", SuppressRepetitions=false) => #9
    #8, #9 -> SubscribeWhen
Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false) => #13
#12, #13 -> SubscribeWhen

GroupWorkflow Borders(Description="Set values for borders of display")
    ExternalizedMapping(Value(DisplayName=TopBorder))
    -> FloatProperty(Value=180)
    -> ReplaySubject Top(BufferSize=nil) => #2
    ExternalizedMapping(Value(DisplayName=BottomBorder))
    -> FloatProperty(Value=-180)
    -> ReplaySubject Bottom(BufferSize=nil) => #5
    ExternalizedMapping(Value(DisplayName=LeftBorder))
    -> FloatProperty(Value=-180)
    -> ReplaySubject Left(BufferSize=nil) => #8
    ExternalizedMapping(Value(DisplayName=RightBorder))
    -> FloatProperty(Value=180)
    -> ReplaySubject Right(BufferSize=nil) => #11
    #2, #5, #8, #11 -> Zip
    -> ReplaySubject Borders(BufferSize=nil)
    -> WorkflowOutput

Bonsai.Windows.Input.KeyDown(Filter="RButton B Shift", SuppressRepetitions=false) => #16
GroupWorkflow Arduino => #17
    Bonsai.IO.CreateSerialPort
      Name=ArduinoSerial
      PortName=COM4
      BaudRate=1000000
      Encoding=utf-8
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    ExternalizedMapping(PortName)
    -> Bonsai.IO.SerialStringRead(PortName=ArduinoSerial, NewLine=\n)
    -> Bonsai.Shaders.SampleOnRenderFrame
    -> Parse(Pattern="%i,%i,%i,%i,%i,%i")
    -> Retry => #5
    -> MemberSelector(Selector=Item1)
    -> BehaviorSubject Wheel
    -> Bonsai.Dsp.Difference(Order=1)
    -> Multiply(Operand=DoubleProperty(Value=-0.0522)) => #9
    ExternalizedMapping(Value(DisplayName=Gain)) => #10
    Bonsai.Shaders.UpdateFrame
    -> MemberSelector(Selector=TimeStep.ElapsedTime)
    -> Take(Count=1) => #13
    #9, #13 -> CombineLatest
    -> Divide => #15
    #15, #10 -> Multiply(Operand=DoubleProperty(Value=10))
    -> Condition IgnoreOverflowTicks
        WorkflowInput Source1
        -> Bonsai.Dsp.Abs
        -> LessThan(Operand=DoubleProperty(Value=1000))
        -> WorkflowOutput
    -> Disable WindowCount(Count=6, Skip=nil)
    -> Disable SelectMany
        WorkflowInput Source1
        -> Average
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        Math.Abs(it) < 50 ? 0 :
        it
    -> PublishSubject WheelSpeed
    #5 -> MemberSelector(Selector=Item2)
    -> DistinctUntilChanged
    -> BehaviorSubject LeftLick
    #5 -> MemberSelector(Selector=Item3)
    -> DistinctUntilChanged
    -> BehaviorSubject RightLick

    Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=false)
    -> StringProperty(Value=l20)
    -> Bonsai.IO.SerialStringWrite(PortName=ArduinoSerial, NewLine=\r)

    Bonsai.Windows.Input.KeyDown(Filter=D, SuppressRepetitions=false)
    -> StringProperty(Value=r20)
    -> Bonsai.IO.SerialStringWrite(PortName=ArduinoSerial, NewLine=\r)
#16, #17 -> SubscribeWhen
GroupWorkflow EyeCamera => #19
    Disable SubscribeSubject SyncPulse => #0
    Bonsai.Vision.CameraCapture
      Index=0
      CaptureProperties
        CapturePropertyAssignment(Property=Backlight, Value=0)
        CapturePropertyAssignment(Property=Brightness, Value=100)
        CapturePropertyAssignment(Property=Contrast, Value=50)
        CapturePropertyAssignment(Property=Exposure, Value=-5)
        CapturePropertyAssignment(Property=Fps, Value=30)
        CapturePropertyAssignment(Property=FrameWidth, Value=2560)
        CapturePropertyAssignment(Property=FrameHeight, Value=1440)
        CapturePropertyAssignment(Property=Gain, Value=0)
        CapturePropertyAssignment(Property=Gamma, Value=0)
        CapturePropertyAssignment(Property=Saturation, Value=0)
        CapturePropertyAssignment(Property=Sharpness, Value=100)
    -> Bonsai.Vision.Flip(Mode=Vertical) => #2
    -> Disable First
    -> Disable Delay(DueTime=PT0.5S)
    -> Disable Timestamp
    -> Disable Format
      Format: -f rawvideo -vcodec rawvideo -y -s 1280x960 -r 60 -pix_fmt gray -i \\.\pipe\video -vb 20M -vcodec mpeg4 D:\Data\edd_cam_test\EyeTracking_{0:yyyy-MM-dd_hh-mm-ss}.avi
      Selector=Timestamp
    -> Disable Format
      Format: -f rawvideo -vcodec rawvideo -y -s 1280x960 -r 60 -pix_fmt gray -i \\.\pipe\video -vb 20M -vcodec mpeg4 D:\Data\Masa\EyeTracking_{0:yyyy-MM-dd_hh-mm-ss}.avi
      Selector=Timestamp
    -> Disable InputMapping(Arguments)
    -> Disable Bonsai.IO.StartProcess
      FileName=D:\Software\Extensions\ffmpeg.exe
      Arguments: -f rawvideo -vcodec rawvideo -y -s 1280x960 -r 60 -pix_fmt gray -i \\.\pipe\video -vb 20M -vcodec mpeg4 D:\Data\Masa\EyeTracking_2023-03-22_02-44-38.avi
    #2 -> Disable Bonsai.Vision.Grayscale
    -> Disable Bonsai.Vision.ImageWriter(Path=\\.\pipe\video, Suffix=None, Overwrite=false)
    -> Bonsai.Vision.Crop(RegionOfInterest(X=276, Y=320, Width=188, Height=196))
    -> Disable Bonsai.Vision.Threshold(ThresholdValue=77, MaxValue=255, ThresholdType=BinaryInv)
    -> Disable Bonsai.Vision.MorphologicalOperator(Size(Width=3, Height=3), Anchor(X=1, Y=1), Shape=Ellipse, Iterations=1, Operation=Close)
    -> Disable Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
    -> Disable Bonsai.Vision.BinaryRegionAnalysis
    -> Disable Bonsai.Vision.LargestBinaryRegion => #17
    #2 -> Disable Timestamp
    -> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #19
    #19, #0 -> Disable WithLatestFrom => #20
    #2 -> Disable MemberSelector(Selector=ElementType)
    -> Disable IntProperty(Value=1)
    -> Disable Accumulate
    -> Disable MulticastSubject EyeFrameCount => #24
    #17, #20, #24 -> Disable Zip
    -> Disable MemberSelector(Selector="Item1.Centroid.X,Item1.Centroid.Y,Item1.Orientation,Item1.MajorAxisLength,Item1.MinorAxisLength,Item1.Area,Item2.Item1,Item2.Item2,Item3")
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(Item1 as X, Item2 as Y, Item3 as Orientation, Item4 as MajorAxisLength, Item5 as MinorAxisLength, Item6 as Area, Item7 as Time, Rest.Item1 as Sync, Rest.Item2 as EyeFrame)
    -> Disable IncludeWorkflow EyeEvents(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector="X,Y,Orientation,MajorAxisLength,MinorAxisLength,Area,Time,Sync,EyeFrame")
    -> Disable Bonsai.IO.CsvWriter(FileName=D:\Data\ECT\DriftingGratings__EyeTrackingData_Session_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)

    Disable Format
      Format: -f rawvideo -vcodec rawvideo -y -s 1280x960 -r 60 -pix_fmt gray -i \\.\pipe\video -vb 20M -vcodec mpeg4 D:\Data\Masa\EyeTracking_{0:yyyy-MM-dd_hh-mm-ss}.avi
      Selector=Timestamp
#19, #16 -> SubscribeWhen

Bonsai.Shaders.RenderFrame => #21
-> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=-25), NearClip=0.1, FarClip=10000, Light(X=0, Y=0, Z=0))
-> BehaviorSubject Draw3DStim
-> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #24
-> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0, Z=0), Translation(X=-13.5, Y=0, Z=-11))
-> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.333, Height=1)
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=0.333, Height=1)))
#24 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-18.5))
-> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333, Y=0, Width=0.333, Height=1)
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0.333, Y=0, Width=0.333, Height=1)))
#24 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0, Z=0), Translation(X=13.5, Y=0, Z=-11))
-> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.665, Y=0, Width=0.333, Height=1)
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0.665, Y=0, Width=0.333, Height=1)))
#21 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-180, Right=180, Bottom=-90, Top=90)
-> BehaviorSubject Draw2D

GroupWorkflow Dome
    Disable Bonsai.Shaders.RenderFrame
    -> Disable GroupWorkflow ArduinoSerial_New => #1
        Bonsai.IO.CreateSerialPort
          Name=ArduinoInput
          PortName=COM6
          BaudRate=250000
          Encoding=utf-8
          Parity=None
          ParityReplace=63
          DataBits=8
          StopBits=One
          Handshake=None
          DiscardNull=false
          DtrEnable=true
          RtsEnable=false
          ReadBufferSize=4096
          WriteBufferSize=2048
          ReceivedBytesThreshold=1

        Bonsai.IO.SerialStringRead(PortName=ArduinoInput, NewLine=\n)
        -> Bonsai.Shaders.SampleOnRenderFrame => #2
        -> Condition
            WorkflowInput Source1
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(bool)
                def process(value):
                  mylist = value.split("\t")

                  if len(mylist) == 3:
                    return True
                  else:
                    return False
            -> WorkflowOutput
        -> Parse(Pattern=%i\t%i\t%i) => #4
        -> MemberSelector(Selector=Item2) => #5
        #4 -> MemberSelector(Selector=Item3)
        -> MulticastSubject SyncPulse => #7
        #4 -> MemberSelector(Selector=Item1)
        -> PublishSubject Wheel => #9
        -> Bonsai.Dsp.Difference(Order=1)
        -> Multiply(Operand=DoubleProperty(Value=-0.0522)) => #11
        SubscribeSubject QuadState => #12
        SubscribeSubject EyeFrameCount => #13
        ExternalizedMapping(Value(DisplayName=Gain)) => #14
        Bonsai.Shaders.UpdateFrame
        -> MemberSelector(Selector=TimeStep.ElapsedTime)
        -> Take(Count=1) => #17
        #11, #17 -> CombineLatest
        -> Divide => #19
        #19, #14 -> Multiply(Operand=DoubleProperty(Value=10))
        -> Condition IgnoreOverflowTicks
            WorkflowInput Source1
            -> Bonsai.Dsp.Abs
            -> LessThan(Operand=DoubleProperty(Value=1000))
            -> WorkflowOutput
        -> Disable WindowCount(Count=6, Skip=nil)
        -> Disable SelectMany
            WorkflowInput Source1
            -> Average
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            Math.Abs(it) < 50 ? 0 :
            it
        -> PublishSubject WheelSpeed
        #2 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #27
        #27, #12 -> WithLatestFrom => #28
        -> MemberSelector(Selector=Item1) => #29
        #29, #13 -> WithLatestFrom => #30
        -> MemberSelector(Selector=Item1) => #31
        #30 -> MemberSelector(Selector=Item2) => #32
        #28 -> MemberSelector(Selector=Item2) => #33
        #9, #5, #7, #33, #32, #31 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1 as Wheel, Item2 as Lick, Item3 as Sync, Item4 as QuadState, Item5 as EyeFrameCount, Item6 as Time)
        -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

        GroupWorkflow AnalogOutputs
            Bonsai.IO.CreateSerialPort
              Name=ArduinoAnalog
              PortName=COM14
              BaudRate=250000
              Encoding=utf-8
              Parity=None
              ParityReplace=63
              DataBits=8
              StopBits=One
              Handshake=None
              DiscardNull=false
              DtrEnable=true
              RtsEnable=false
              ReadBufferSize=4096
              WriteBufferSize=2048
              ReceivedBytesThreshold=1

            Bonsai.IO.SerialStringRead(PortName=ArduinoAnalog, NewLine=\n) => #1
            -> Condition
                WorkflowInput Source1
                -> Bonsai.Scripting.IronPython.PythonTransform
                  Script:
                    @returns(bool)
                    def process(value):
                      mylist = value.split("\t")

                      if len(mylist) == 2:
                        return True
                      else:
                        return False
                -> WorkflowOutput
            -> Parse(Pattern=%i\t%i) => #3
            -> MemberSelector(Selector=Item2) => #4
            #3 -> MemberSelector(Selector=Item1) => #5
            #1 -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #7
            #5, #4, #7 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: new(Item1 as Photodiode, Item2 as SyncPulse, Item3 as Time)
            -> IncludeWorkflow PDAsyncEvents(Path=BonVision:Logging.LogEvent.bonsai, Format="", Selector="Photodiode,SyncPulse,Time")
    Disable ExternalizedMapping(BehaviourFileName(DisplayName=TestBehaviour), EyeFileName, TrialParamsFileName, PDAsyncFileName) => #2
    #1, #2 -> Disable GroupWorkflow FrameEventLoggers
        WorkflowInput Source1 => #0
        ExternalizedMapping(FileName(DisplayName=BehaviourFileName)) => #1
        #0, #1 -> Disable IncludeWorkflow Events => #2
          Path=Extensions\FrameEventLoggerWithTime.bonsai
          Append=false
          Overwrite=false
          Suffix=Timestamp
          FileName=C:\Users\lab\Desktop\masa\ClosedLoop_WheelLog.csv
        ExternalizedMapping(FileName(DisplayName=EyeFileName)) => #3
        #2, #3 -> Disable IncludeWorkflow EyeEvents => #4
          Path=Extensions\FrameEventLoggerWithTime.bonsai
          Append=false
          Overwrite=false
          Suffix=Timestamp
          FileName=C:\Users\lab\Desktop\masa\ClosedLoop_EyeLog.csv
        ExternalizedMapping(FileName(DisplayName=TrialParamsFileName)) => #5
        #4, #5 -> Disable IncludeWorkflow TrialEvents => #6
          Path=Extensions\FrameEventLoggerWithTime.bonsai
          Append=false
          Overwrite=false
          Suffix=Timestamp
          FileName=C:\Users\lab\Desktop\masa\ClosedLoop_Trial.csv
        ExternalizedMapping(FileName(DisplayName=PDAsyncFileName)) => #7
        #6, #7 -> Disable IncludeWorkflow PDAsyncEvents
          Path=Extensions\FrameEventLoggerWithTime.bonsai
          Append=false
          Overwrite=false
          Suffix=Timestamp
          FileName=C:\Users\lab\Desktop\masa\ClosedLoop_PDAsync.csv
        -> WorkflowOutput
    -> Disable Bonsai.Shaders.CreateCubemapCamera(Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=1000)
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        ViewMatrix as ViewMatrix,
        ProjectionMatrix as ProjectionMatrix,
        ViewMatrix.Row3.Yzw as Light)
    -> Disable BehaviorSubject Draw3DStim
    -> Disable Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear)
    -> Disable GroupWorkflow MeshMapping(Description="Renders the current scene to a texture and applies mesh mapping and brightness correction as a post-processing effect.")
        WorkflowInput Source1
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=MeshMapSphere, TextureTarget=TextureCubeMap) => #1
        ExternalizedMapping(Path)
        -> Bonsai.Dsp.MatrixReader(Path=meshmap_py_minus_hires.bin, Offset=0, SampleRate=10000000, ChannelCount=1001, BufferLength=3003, Depth=F32, Layout=RowMajor)
        -> Bonsai.Dsp.Reshape(Channels=3, Rows=0)
        -> Bonsai.Vision.Flip(Mode=Vertical)
        -> Bonsai.Shaders.LatestOnUpdateFrame
        -> Bonsai.Shaders.StoreImage(InternalFormat=Rgb32f, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear) => #7
        #1, #7 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture1, ShaderName=MeshMapSphere, TextureTarget=Texture2D)
        -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=MeshMapVector, TextureTarget=Texture2D)
        -> Bonsai.Shaders.DrawMesh(ShaderName=MeshMapSphere, MeshName=ViewportQuad)
        -> Disable Bonsai.Shaders.DrawMesh(ShaderName=MeshMapVector, MeshName=ViewportQuad)
        -> WorkflowOutput

        Disable Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
        -> Disable Bonsai.Shaders.StoreImage(InternalFormat=Rgb32f, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)

        Disable ExternalizedMapping(Path)
        -> Disable Bonsai.Dsp.MatrixReader(Path=meshmap8.bin, Offset=0, SampleRate=10000000, ChannelCount=101, BufferLength=303, Depth=U8, Layout=RowMajor)
        -> Disable Bonsai.Dsp.Reshape(Channels=3, Rows=0)
        -> Disable Bonsai.Vision.ConvertToImage
    -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
    -> Disable WorkflowOutput

    Disable GroupWorkflow keeping
        Bonsai.IO.CreateSerialPort
          Name=ArduinoInput
          PortName=COM6
          BaudRate=250000
          Encoding=utf-8
          Parity=None
          ParityReplace=63
          DataBits=8
          StopBits=One
          Handshake=None
          DiscardNull=false
          DtrEnable=true
          RtsEnable=false
          ReadBufferSize=4096
          WriteBufferSize=2048
          ReceivedBytesThreshold=1

        Bonsai.IO.SerialStringRead(PortName=ArduinoInput, NewLine=\n)
        -> Disable SampleInterval(Interval=PT0.01S)
        -> Bonsai.Shaders.SampleOnRenderFrame
        -> Condition => #4
            WorkflowInput Source1
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(bool)
                def process(value):
                  mylist = value.split("\t")

                  if len(mylist) == 3:
                    return True
                  else:
                    return False
            -> WorkflowOutput
        -> Parse(Pattern=%i\t%i\t%i) => #5
        -> MemberSelector(Selector=Item2) => #6
        -> DistinctUntilChanged
        #5 -> MemberSelector(Selector=Item3)
        -> MulticastSubject SyncPulse => #9
        #5 -> MemberSelector(Selector=Item1)
        -> PublishSubject Wheel => #11
        -> Bonsai.Dsp.Difference(Order=1)
        -> Multiply(Operand=DoubleProperty(Value=0.0522)) => #13
        ExternalizedMapping(Value(DisplayName=Gain)) => #14
        SubscribeSubject QuadState => #15
        SubscribeSubject EyeFrameCount => #16
        Bonsai.Shaders.UpdateFrame
        -> MemberSelector(Selector=TimeStep.ElapsedTime)
        -> Take(Count=1) => #19
        #13, #19 -> CombineLatest
        -> Divide => #21
        #21, #14 -> Multiply(Operand=DoubleProperty(Value=10))
        -> Condition IgnoreOverflowTicks
            WorkflowInput Source1
            -> Bonsai.Dsp.Abs
            -> LessThan(Operand=DoubleProperty(Value=1000))
            -> WorkflowOutput
        -> Disable WindowCount(Count=6, Skip=nil)
        -> Disable SelectMany
            WorkflowInput Source1
            -> Average
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            Math.Abs(it) < 50 ? 0 :
            it
        -> PublishSubject WheelSpeed
        #4 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #29
        #29, #15 -> WithLatestFrom => #30
        -> MemberSelector(Selector=Item1) => #31
        #31, #16 -> WithLatestFrom => #32
        -> MemberSelector(Selector=Item1) => #33
        #32 -> MemberSelector(Selector=Item2) => #34
        #30 -> MemberSelector(Selector=Item2) => #35
        #9, #6, #11, #34, #35, #33 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1 as Sync, Item2 as Lick, Item3 as Wheel, Item4 as EyeFrameCount, Item5 as Photodiode, Item6 as Time)
        -> Bonsai.IO.CsvWriter
          FileName=D:\Data\Edd\ClosedLoop_BehaviourData.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector="Wheel,Sync,EyeFrameCount,Photodiode,Time"

    Disable GroupWorkflow EddArduinoSerial
        Bonsai.IO.CreateSerialPort
          Name=ArduinoInput
          PortName=COM3
          BaudRate=250000
          Encoding=utf-8
          Parity=None
          ParityReplace=63
          DataBits=8
          StopBits=One
          Handshake=None
          DiscardNull=false
          DtrEnable=true
          RtsEnable=false
          ReadBufferSize=4096
          WriteBufferSize=2048
          ReceivedBytesThreshold=1

        Disable ExternalizedMapping(Value(DisplayName=Gain)) => #1
        Bonsai.IO.SerialStringRead(PortName=ArduinoInput, NewLine=\n)
        -> Disable SampleInterval(Interval=PT0.001S) => #3
        -> Condition
            WorkflowInput Source1
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(bool)
                def process(value):
                  mylist = value.split("\t")

                  if len(mylist) == 4:
                    return True
                  else:
                    return False
            -> WorkflowOutput
        -> Parse(Pattern=%i\t%i\t%i\t%i) => #5
        -> MemberSelector(Selector=Item2)
        -> Disable DistinctUntilChanged => #7
        #5 -> MemberSelector(Selector=Item3)
        -> MulticastSubject SyncPulse => #9
        #5 -> MemberSelector(Selector=Item1)
        -> PublishSubject Wheel
        -> Disable Bonsai.Dsp.Difference(Order=1)
        -> Disable Multiply(Operand=DoubleProperty(Value=0.04)) => #13
        #13, #1 -> Disable Multiply(Operand=DoubleProperty(Value=1))
        -> Disable Condition IgnoreOverflowTicks
            WorkflowInput Source1
            -> Bonsai.Dsp.Abs
            -> LessThan(Operand=DoubleProperty(Value=1000))
            -> WorkflowOutput
        -> Disable PublishSubject Displacement => #16
        #5 -> MemberSelector(Selector=Item4) => #17
        #3 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #19
        SubscribeSubject QuadState => #20
        #19, #20 -> WithLatestFrom => #21
        -> MemberSelector(Selector=Item1) => #22
        SubscribeSubject EyeFrameCount => #23
        #22, #23 -> WithLatestFrom => #24
        -> MemberSelector(Selector=Item1) => #25
        #24 -> MemberSelector(Selector=Item2) => #26
        #21 -> MemberSelector(Selector=Item2) => #27
        #16, #7, #9, #17, #27, #26, #25 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1 as Wheel, Item2 as Lick, Item3 as Sync, Item4 as Photodiode, Item5 as QuadState, Item6 as EyeFrameCount, Item7 as Time)
        -> Disable SampleInterval(Interval=PT0.001S)
        -> Bonsai.IO.CsvWriter
          FileName=D:\Data\Edd\BehavInputs_.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector="Wheel,Lick,Sync,Photodiode,QuadState,EyeFrameCount,Time"
