WorkflowBuilder(Version=2.7.1)
ExternalizedMapping(DisplayDevice, WindowState)
-> GroupWorkflow DisplayAndResources
    ExternalizedMapping(DisplayDevice, WindowState)
    -> Bonsai.Shaders.CreateWindow
      Width=1800
      Height=800
      VSync=Off
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=false
      Location=nil
      WindowBorder=Hidden
      WindowState=Fullscreen
      DisplayDevice=First
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=DynamicVideo, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Nearest, MagFilter=Nearest)
    -> Bonsai.Resources.LoadResources

    Bonsai.Shaders.RenderFrame => #5
    SubscribeSubject Borders
    -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #7
    #5, #7 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-120, Right=120, Bottom=-60, Top=60)
    -> PublishSubject DrawStimuli
    -> IncludeWorkflow(Path=BonVision:Environment.SphereMapping.bonsai, FaceSize=nil, ClearColor=Gray, Width=nil, Height=nil, RotationZ=0, RotationY=0, RotationX=0) => #10
    -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=60.000001669652114, Z=0), Translation(X=-12, Y=0, Z=-9))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.334, Height=1)
    -> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=0.333, Height=1)))
    #10 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-15))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333, Y=0, Width=0.333, Height=1)
    -> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0.333, Y=0, Width=0.333, Height=1)))
    #10 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=-60.000001669652114, Z=0), Translation(X=12, Y=0, Z=-9))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.667, Y=0, Width=0.333, Height=1)
    -> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0.665, Y=0, Width=0.333, Height=1)))
    #5 -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
    #5 -> ElementIndex
    -> MemberSelector(Selector=Index)
    -> BehaviorSubject RenderFrameCount

GroupWorkflow Borders
    ExternalizedMapping(Value(DisplayName=TopBorder))
    -> FloatProperty(Value=60)
    -> ReplaySubject Top(BufferSize=nil) => #2
    ExternalizedMapping(Value(DisplayName=BottomBorder))
    -> FloatProperty(Value=-60)
    -> ReplaySubject Bottom(BufferSize=nil) => #5
    ExternalizedMapping(Value(DisplayName=LeftBorder))
    -> FloatProperty(Value=-120)
    -> ReplaySubject Left(BufferSize=nil) => #8
    ExternalizedMapping(Value(DisplayName=RightBorder))
    -> FloatProperty(Value=120)
    -> ReplaySubject Right(BufferSize=nil) => #11
    #2, #5, #8, #11 -> Zip
    -> ReplaySubject Borders(BufferSize=nil)

WorkflowInput Source1 => #3
Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false) => #4
ExternalizedMapping(Count(DisplayName=nReps, Category=Trial)) => #5
#3, #5 -> GroupWorkflow Speed2D => #6
    WorkflowInput Source1 => #0
    -> Disable GroupWorkflow S2
        WorkflowInput Source1
        -> MotionCoherenceSpecification
          Trials
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=0
              VelocityX2=0
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=16
              VelocityX2=16
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=32
              VelocityX2=32
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=64
              VelocityX2=64
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=128
              VelocityX2=128
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=256
              VelocityX2=256
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
        -> GroupWorkflow EnsureMotionCoherenceParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=DotSize)) => #4
            ExternalizedMapping(Value(DisplayName=Colour1)) => #5
            ExternalizedMapping(Value(DisplayName=Colour2)) => #6
            ExternalizedMapping(Value(DisplayName=numDots1)) => #7
            ExternalizedMapping(Value(DisplayName=numDots2)) => #8
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
            ExternalizedMapping(Value(DisplayName=Duration)) => #11
            #3, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #12
            #1 -> MemberSelector(Selector=Value.Size) => #13
            #13, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #14
            #1 -> MemberSelector(Selector=Value.Colour1) => #15
            #15, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #16
            #1 -> MemberSelector(Selector=Value.Colour2) => #17
            #17, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #18
            #1 -> MemberSelector(Selector=Value.numDots1) => #19
            #19, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
            #1 -> MemberSelector(Selector=Value.numDots2) => #21
            #21, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #22
            #2, #12, #14, #16, #18, #20, #22 -> Zip => #23
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #24
            #24, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #25
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #26
            #26, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #27
            #1 -> MemberSelector(Selector=Value.Contrast1) => #28
            ExternalizedMapping(Value(DisplayName=Contrast1)) => #29
            #28, #29 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #30
            #1 -> MemberSelector(Selector=Value.Contrast2) => #31
            ExternalizedMapping(Value(DisplayName=Contrast2)) => #32
            #31, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #33
            #25, #27, #30, #33 -> Zip => #34
            #1 -> MemberSelector(Selector=Value.VelocityX1) => #35
            ExternalizedMapping(Value(DisplayName=VelocityX1)) => #36
            #35, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #37
            #1 -> MemberSelector(Selector=Value.VelocityX2) => #38
            ExternalizedMapping(Value(DisplayName=VelocityX2)) => #39
            #38, #39 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #40
            #1 -> MemberSelector(Selector=Value.VelocityY1) => #41
            ExternalizedMapping(Value(DisplayName=VelocityY1)) => #42
            #41, #42 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityY2) => #44
            ExternalizedMapping(Value(DisplayName=VelocityY2)) => #45
            #44, #45 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #46
            #1 -> MemberSelector(Selector=Value.Coherence1) => #47
            ExternalizedMapping(Value(DisplayName=Coherence1)) => #48
            #47, #48 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #1 -> MemberSelector(Selector=Value.Coherence2) => #50
            ExternalizedMapping(Value(DisplayName=Coherence2)) => #51
            #50, #51 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #52
            #37, #40, #43, #46, #49, #52 -> Zip => #53
            #23, #34, #53 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,

                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast1,
                Item2.Item4 as Contrast2,

                Item3.Item1 as VelX1,
                Item3.Item2 as VelX2,
                Item3.Item3 as VelY1,
                Item3.Item4 as VelY2,
                Item3.Item5 as Coherence1,
                Item3.Item6 as Coherence2)
            -> WorkflowOutput
        -> WorkflowOutput
    -> Disable GroupWorkflow S2dirRecordLeft => #2
        WorkflowInput Source1
        -> MotionCoherenceSpecification
          Trials
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-32
              VelocityX2=-32
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-22.6274
              VelocityX2=-22.6274
              VelocityY1=-22.6274
              VelocityY2=-22.6274
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=0
              VelocityX2=0
              VelocityY1=-32
              VelocityY2=-32
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=22.6274
              VelocityX2=22.6274
              VelocityY1=-22.6274
              VelocityY2=-22.6274
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=32
              VelocityX2=32
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=22.6274
              VelocityX2=22.6274
              VelocityY1=22.6274
              VelocityY2=22.6274
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=0
              VelocityX2=0
              VelocityY1=32
              VelocityY2=32
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-22.6274
              VelocityX2=-22.6274
              VelocityY1=32
              VelocityY2=32
              Coherence1=100
              Coherence2=100
        -> GroupWorkflow EnsureMotionCoherenceParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=DotSize)) => #4
            ExternalizedMapping(Value(DisplayName=Colour1)) => #5
            ExternalizedMapping(Value(DisplayName=Colour2)) => #6
            ExternalizedMapping(Value(DisplayName=numDots1)) => #7
            ExternalizedMapping(Value(DisplayName=numDots2)) => #8
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
            ExternalizedMapping(Value(DisplayName=Duration)) => #11
            #3, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #12
            #1 -> MemberSelector(Selector=Value.Size) => #13
            #13, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #14
            #1 -> MemberSelector(Selector=Value.Colour1) => #15
            #15, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #16
            #1 -> MemberSelector(Selector=Value.Colour2) => #17
            #17, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #18
            #1 -> MemberSelector(Selector=Value.numDots1) => #19
            #19, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
            #1 -> MemberSelector(Selector=Value.numDots2) => #21
            #21, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #22
            #2, #12, #14, #16, #18, #20, #22 -> Zip => #23
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #24
            #24, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #25
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #26
            #26, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #27
            #1 -> MemberSelector(Selector=Value.Contrast1) => #28
            ExternalizedMapping(Value(DisplayName=Contrast1)) => #29
            #28, #29 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #30
            #1 -> MemberSelector(Selector=Value.Contrast2) => #31
            ExternalizedMapping(Value(DisplayName=Contrast2)) => #32
            #31, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #33
            #25, #27, #30, #33 -> Zip => #34
            #1 -> MemberSelector(Selector=Value.VelocityX1) => #35
            ExternalizedMapping(Value(DisplayName=VelocityX1)) => #36
            #35, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #37
            #1 -> MemberSelector(Selector=Value.VelocityX2) => #38
            ExternalizedMapping(Value(DisplayName=VelocityX2)) => #39
            #38, #39 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #40
            #1 -> MemberSelector(Selector=Value.VelocityY1) => #41
            ExternalizedMapping(Value(DisplayName=VelocityY1)) => #42
            #41, #42 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityY2) => #44
            ExternalizedMapping(Value(DisplayName=VelocityY2)) => #45
            #44, #45 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #46
            #1 -> MemberSelector(Selector=Value.Coherence1) => #47
            ExternalizedMapping(Value(DisplayName=Coherence1)) => #48
            #47, #48 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #1 -> MemberSelector(Selector=Value.Coherence2) => #50
            ExternalizedMapping(Value(DisplayName=Coherence2)) => #51
            #50, #51 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #52
            #37, #40, #43, #46, #49, #52 -> Zip => #53
            #23, #34, #53 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,

                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast1,
                Item2.Item4 as Contrast2,

                Item3.Item1 as VelX1,
                Item3.Item2 as VelX2,
                Item3.Item3 as VelY1,
                Item3.Item4 as VelY2,
                Item3.Item5 as Coherence1,
                Item3.Item6 as Coherence2)
            -> WorkflowOutput
        -> WorkflowOutput
    #0 -> GroupWorkflow Blank => #3
        WorkflowInput Source1
        -> MotionCoherenceSpecification
          Trials
            MotionCoherenceParams
              Duration=1
              Size=nil
              dotLifeBool=nil
              dotLifetime=nil
              Colour1=nil
              Colour2=nil
              numDots1=0
              numDots2=0
              Contrast1=nil
              Contrast2=nil
              VelocityX1=nil
              VelocityX2=nil
              VelocityY1=nil
              VelocityY2=nil
              Coherence1=nil
              Coherence2=nil
        -> GroupWorkflow EnsureMotionCoherenceParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=DotSize)) => #4
            ExternalizedMapping(Value(DisplayName=Colour1)) => #5
            ExternalizedMapping(Value(DisplayName=Colour2)) => #6
            ExternalizedMapping(Value(DisplayName=numDots1)) => #7
            ExternalizedMapping(Value(DisplayName=numDots2)) => #8
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
            ExternalizedMapping(Value(DisplayName=Duration)) => #11
            #3, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #12
            #1 -> MemberSelector(Selector=Value.Size) => #13
            #13, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #14
            #1 -> MemberSelector(Selector=Value.Colour1) => #15
            #15, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #16
            #1 -> MemberSelector(Selector=Value.Colour2) => #17
            #17, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #18
            #1 -> MemberSelector(Selector=Value.numDots1) => #19
            #19, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
            #1 -> MemberSelector(Selector=Value.numDots2) => #21
            #21, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #22
            #2, #12, #14, #16, #18, #20, #22 -> Zip => #23
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #24
            #24, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #25
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #26
            #26, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #27
            #1 -> MemberSelector(Selector=Value.Contrast1) => #28
            ExternalizedMapping(Value(DisplayName=Contrast1)) => #29
            #28, #29 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #30
            #1 -> MemberSelector(Selector=Value.Contrast2) => #31
            ExternalizedMapping(Value(DisplayName=Contrast2)) => #32
            #31, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #33
            #25, #27, #30, #33 -> Zip => #34
            #1 -> MemberSelector(Selector=Value.VelocityX1) => #35
            ExternalizedMapping(Value(DisplayName=VelocityX1)) => #36
            #35, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #37
            #1 -> MemberSelector(Selector=Value.VelocityX2) => #38
            ExternalizedMapping(Value(DisplayName=VelocityX2)) => #39
            #38, #39 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #40
            #1 -> MemberSelector(Selector=Value.VelocityY1) => #41
            ExternalizedMapping(Value(DisplayName=VelocityY1)) => #42
            #41, #42 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityY2) => #44
            ExternalizedMapping(Value(DisplayName=VelocityY2)) => #45
            #44, #45 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #46
            #1 -> MemberSelector(Selector=Value.Coherence1) => #47
            ExternalizedMapping(Value(DisplayName=Coherence1)) => #48
            #47, #48 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #1 -> MemberSelector(Selector=Value.Coherence2) => #50
            ExternalizedMapping(Value(DisplayName=Coherence2)) => #51
            #50, #51 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #52
            #37, #40, #43, #46, #49, #52 -> Zip => #53
            #23, #34, #53 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,

                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast1,
                Item2.Item4 as Contrast2,

                Item3.Item1 as VelX1,
                Item3.Item2 as VelX2,
                Item3.Item3 as VelY1,
                Item3.Item4 as VelY2,
                Item3.Item5 as Coherence1,
                Item3.Item6 as Coherence2)
            -> WorkflowOutput
        -> WorkflowOutput
    #0 -> GroupWorkflow S2dirRecordLeft_50degs_12dirs => #4
        WorkflowInput Source1
        -> MotionCoherenceSpecification
          Trials
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=0
              VelocityX2=0
              VelocityY1=50
              VelocityY2=50
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=25
              VelocityX2=25
              VelocityY1=43.3013
              VelocityY2=43.3013
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=43.3013
              VelocityX2=43.3013
              VelocityY1=25
              VelocityY2=25
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=50
              VelocityX2=50
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=43.3013
              VelocityX2=43.3013
              VelocityY1=-25
              VelocityY2=-25
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=25
              VelocityX2=25
              VelocityY1=-43.3013
              VelocityY2=-43.3013
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=0
              VelocityX2=0
              VelocityY1=-50
              VelocityY2=-50
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-25
              VelocityX2=-25
              VelocityY1=-43.3013
              VelocityY2=-43.3013
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-43.3013
              VelocityX2=-43.3013
              VelocityY1=-25
              VelocityY2=-25
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-50
              VelocityX2=-50
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-43.3013
              VelocityX2=-43.3013
              VelocityY1=25
              VelocityY2=25
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-25
              VelocityX2=-25
              VelocityY1=43.3013
              VelocityY2=43.3013
              Coherence1=100
              Coherence2=100
        -> GroupWorkflow EnsureMotionCoherenceParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=DotSize)) => #4
            ExternalizedMapping(Value(DisplayName=Colour1)) => #5
            ExternalizedMapping(Value(DisplayName=Colour2)) => #6
            ExternalizedMapping(Value(DisplayName=numDots1)) => #7
            ExternalizedMapping(Value(DisplayName=numDots2)) => #8
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
            ExternalizedMapping(Value(DisplayName=Duration)) => #11
            #3, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #12
            #1 -> MemberSelector(Selector=Value.Size) => #13
            #13, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #14
            #1 -> MemberSelector(Selector=Value.Colour1) => #15
            #15, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #16
            #1 -> MemberSelector(Selector=Value.Colour2) => #17
            #17, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #18
            #1 -> MemberSelector(Selector=Value.numDots1) => #19
            #19, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
            #1 -> MemberSelector(Selector=Value.numDots2) => #21
            #21, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #22
            #2, #12, #14, #16, #18, #20, #22 -> Zip => #23
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #24
            #24, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #25
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #26
            #26, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #27
            #1 -> MemberSelector(Selector=Value.Contrast1) => #28
            ExternalizedMapping(Value(DisplayName=Contrast1)) => #29
            #28, #29 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #30
            #1 -> MemberSelector(Selector=Value.Contrast2) => #31
            ExternalizedMapping(Value(DisplayName=Contrast2)) => #32
            #31, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #33
            #25, #27, #30, #33 -> Zip => #34
            #1 -> MemberSelector(Selector=Value.VelocityX1) => #35
            ExternalizedMapping(Value(DisplayName=VelocityX1)) => #36
            #35, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #37
            #1 -> MemberSelector(Selector=Value.VelocityX2) => #38
            ExternalizedMapping(Value(DisplayName=VelocityX2)) => #39
            #38, #39 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #40
            #1 -> MemberSelector(Selector=Value.VelocityY1) => #41
            ExternalizedMapping(Value(DisplayName=VelocityY1)) => #42
            #41, #42 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityY2) => #44
            ExternalizedMapping(Value(DisplayName=VelocityY2)) => #45
            #44, #45 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #46
            #1 -> MemberSelector(Selector=Value.Coherence1) => #47
            ExternalizedMapping(Value(DisplayName=Coherence1)) => #48
            #47, #48 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #1 -> MemberSelector(Selector=Value.Coherence2) => #50
            ExternalizedMapping(Value(DisplayName=Coherence2)) => #51
            #50, #51 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #52
            #37, #40, #43, #46, #49, #52 -> Zip => #53
            #23, #34, #53 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,

                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast1,
                Item2.Item4 as Contrast2,

                Item3.Item1 as VelX1,
                Item3.Item2 as VelX2,
                Item3.Item3 as VelY1,
                Item3.Item4 as VelY2,
                Item3.Item5 as Coherence1,
                Item3.Item6 as Coherence2)
            -> WorkflowOutput
        -> WorkflowOutput
    #2, #3, #4 -> Concat => #5
    SubscribeSubject Random => #6
    #5, #6 -> Bonsai.Numerics.Permutation
    -> CreateObservable CreateTrial
        WorkflowInput Source1 => #0
        -> SelectMany DrawStimulus
            SubscribeSubject Borders
            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #1
            WorkflowInput Source1
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT1S) => #6
            ExternalizedMapping(Lower(DisplayName="ISI lower bound"), Upper(DisplayName="ISI upper bound"))
            -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=1, Upper=1)
            -> Bonsai.Numerics.Distributions.Sample
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #11
            Disable Timer(DueTime=PT0.05S, Period=PT0S) => #12
            SubscribeSubject DrawStimuli
            -> Take(Count=1)
            -> FloatProperty(Value=1) => #15
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelX1) => #17
            Bonsai.Shaders.UpdateFrame
            -> MemberSelector(Selector=TimeStep.ElapsedTime)
            -> Take(Count=1) => #20
            #20, #17 -> Zip
            -> Multiply
            -> PropertyMapping(VelocityX) => #23
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelX2) => #25
            #20, #25 -> Zip
            -> Multiply
            -> PropertyMapping(VelocityX) => #28
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelY1) => #30
            #20, #30 -> Zip
            -> Multiply
            -> PropertyMapping(VelocityY) => #33
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelY2) => #35
            #20, #35 -> Zip
            -> Multiply
            -> PropertyMapping(VelocityY) => #38
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Coherence1)
            -> PropertyMapping(Coherence) => #41
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Coherence2)
            -> PropertyMapping(Coherence) => #44
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Contrast1)
            -> PropertyMapping(ColorA) => #47
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Contrast2)
            -> PropertyMapping(ColorA) => #50
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Colour1)
            -> PropertyMapping(ColorR, ColorG, ColorB) => #53
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Colour2)
            -> PropertyMapping(ColorR, ColorG, ColorB) => #56
            SubscribeSubject Parameters
            -> MemberSelector(Selector=numDots1)
            -> PropertyMapping(numDots) => #59
            SubscribeSubject Parameters
            -> MemberSelector(Selector=dotLifetime) => #61
            #61, #20 -> Zip
            -> Divide
            -> PropertyMapping(dotLifetime) => #64
            SubscribeSubject Parameters
            -> MemberSelector(Selector=dotLifeBool)
            -> PropertyMapping(dotLifetimeBool) => #67
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Size)
            -> PropertyMapping(Diameter) => #70
            SubscribeSubject Parameters
            -> MemberSelector(Selector=numDots2)
            -> PropertyMapping(numDots) => #73
            SubscribeSubject Parameters
            -> MemberSelector(Selector=dotLifetime) => #75
            IntProperty(Value=10)
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.Seconds)
            -> PropertyMapping(rndseed) => #79
            #1, #59, #79 -> GenerateDotField(numDots=573, left=-120, right=120, top=60, bottom=-60, rndseed=23) => #80
            #59, #64 -> GenerateDotLives(dotLifetime=60, numDots=573) => #81
            #80, #81 -> Zip => #82
            #82, #70, #23, #33, #41, #47, #53, #67, #64 -> GroupWorkflow DrawMovingCircleArray-2d(Description="Draws multiple colored circles using the input array as position data.") => #83
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                SubscribeSubject DrawStimuli
                -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #3
                ExternalizedMapping(LocationX) => #4
                ExternalizedMapping(LocationY) => #5
                ExternalizedMapping(Value(DisplayName=ColorR))
                -> FloatProperty(Value=0)
                -> PropertyMapping(X) => #8
                ExternalizedMapping(Value(DisplayName=ColorG))
                -> FloatProperty(Value=0)
                -> PropertyMapping(Y) => #11
                ExternalizedMapping(Value(DisplayName=ColorB))
                -> FloatProperty(Value=0)
                -> PropertyMapping(Z) => #14
                ExternalizedMapping(Value(DisplayName=ColorA))
                -> FloatProperty(Value=1)
                -> PropertyMapping(W) => #17
                ExternalizedMapping(Value(DisplayName=Diameter))
                -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=2)
                -> PropertyMapping(ExtentX, ExtentY) => #20
                #3, #4, #5, #20 -> GroupWorkflow Transform => #21
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Angle) => #1
                    ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                    ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                    ExternalizedMapping(X(DisplayName=LocationX)) => #4
                    ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                    #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=120, Y=0, Z=0) => #6
                    #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=2, Y=2, Z=1) => #7
                    #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                    -> WorkflowOutput
                #21, #8, #11, #14, #17 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #23
                #1, #23 -> CombineLatest => #24
                #24, #23 -> Sample
                -> MemberSelector(Selector=Item1) => #26
                #0 -> MemberSelector(Selector=Item2) => #27
                #26, #27 -> CombineLatest => #28
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #30
                ExternalizedMapping(VelocityX) => #31
                ExternalizedMapping(VelocityY) => #32
                ExternalizedMapping(Coherence) => #33
                ExternalizedMapping(dotLifetimeBool, dotLifetime) => #34
                #31, #32, #33, #30, #34, #28 -> moveDots_2dLife(VelocityX=-0.72168833, VelocityY=0.416666657, Coherence=100, dotLifetimeBool=0, dotLifetime=60, left=-120, right=120, top=60, bottom=-60)
                -> MemberSelector(Selector=Item1)
                -> Bonsai.Shaders.DrawMeshInstanced
                  ShaderName=CircleArray
                  MeshName=Quad
                  Usage=DynamicDraw
                  InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                -> WorkflowOutput
            #75, #20 -> Zip
            -> Divide
            -> PropertyMapping(dotLifetime) => #86
            IntProperty(Value=10)
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.Seconds)
            -> Add(Operand=IntProperty(Value=99))
            -> PropertyMapping(rndseed) => #91
            #1, #73, #91 -> GenerateDotField(numDots=573, left=-120, right=120, top=60, bottom=-60, rndseed=122) => #92
            #73, #86 -> GenerateDotLives(dotLifetime=60, numDots=573) => #93
            #92, #93 -> Zip => #94
            #94, #70, #28, #38, #44, #50, #56, #67, #86 -> GroupWorkflow DrawMovingCircleArray-2d(Description="Draws multiple colored circles using the input array as position data.") => #95
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                SubscribeSubject DrawStimuli
                -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #3
                ExternalizedMapping(LocationX) => #4
                ExternalizedMapping(LocationY) => #5
                ExternalizedMapping(Value(DisplayName=ColorR))
                -> FloatProperty(Value=1)
                -> PropertyMapping(X) => #8
                ExternalizedMapping(Value(DisplayName=ColorG))
                -> FloatProperty(Value=1)
                -> PropertyMapping(Y) => #11
                ExternalizedMapping(Value(DisplayName=ColorB))
                -> FloatProperty(Value=1)
                -> PropertyMapping(Z) => #14
                ExternalizedMapping(Value(DisplayName=ColorA))
                -> FloatProperty(Value=1)
                -> PropertyMapping(W) => #17
                ExternalizedMapping(Value(DisplayName=Diameter))
                -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=2)
                -> PropertyMapping(ExtentX, ExtentY) => #20
                #3, #4, #5, #20 -> GroupWorkflow Transform => #21
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Angle) => #1
                    ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                    ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                    ExternalizedMapping(X(DisplayName=LocationX)) => #4
                    ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                    #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=120, Y=0, Z=0) => #6
                    #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=2, Y=2, Z=1) => #7
                    #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                    -> WorkflowOutput
                #21, #8, #11, #14, #17 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #23
                #1, #23 -> CombineLatest => #24
                #24, #23 -> Sample
                -> MemberSelector(Selector=Item1) => #26
                #0 -> MemberSelector(Selector=Item2) => #27
                #26, #27 -> CombineLatest => #28
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #30
                ExternalizedMapping(VelocityX) => #31
                ExternalizedMapping(VelocityY) => #32
                ExternalizedMapping(Coherence) => #33
                ExternalizedMapping(dotLifetimeBool, dotLifetime) => #34
                #31, #32, #33, #30, #34, #28 -> moveDots_2dLife(VelocityX=-0.72168833, VelocityY=0.416666657, Coherence=100, dotLifetimeBool=0, dotLifetime=60, left=-120, right=120, top=60, bottom=-60)
                -> MemberSelector(Selector=Item1)
                -> Bonsai.Shaders.DrawMeshInstanced
                  ShaderName=CircleArray
                  MeshName=Quad
                  Usage=DynamicDraw
                  InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                -> WorkflowOutput
            #83, #95 -> Zip => #96
            #96, #12 -> Disable SubscribeWhen => #97
            #97, #6 -> TakeUntil
            -> Last => #99
            #99, #11 -> Bonsai.Shaders.Delay(DueTime=PT1S)
            -> Unit
            -> WorkflowOutput
            #99 -> FloatProperty(Value=0) => #103
            #103, #15 -> Merge
            -> MulticastSubject QuadState
        -> Unit
        -> WorkflowOutput
        #0 -> ReplaySubject Parameters(BufferSize=nil)
        -> MulticastSubject TrialParams
    -> Concat => #9
    ExternalizedMapping(Count) => #10
    #9, #10 -> RepeatCount(Count=50)
    -> WorkflowOutput

    Disable GroupWorkflow S2dirRecordLeft
        WorkflowInput Source1
        -> MotionCoherenceSpecification
          Trials
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-32
              VelocityX2=-32
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-22.6274
              VelocityX2=-22.6274
              VelocityY1=-22.6274
              VelocityY2=-22.6274
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=0
              VelocityX2=0
              VelocityY1=-32
              VelocityY2=-32
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=22.6274
              VelocityX2=22.6274
              VelocityY1=-22.6274
              VelocityY2=-22.6274
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=32
              VelocityX2=32
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=22.6274
              VelocityX2=22.6274
              VelocityY1=22.6274
              VelocityY2=22.6274
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=0
              VelocityX2=0
              VelocityY1=32
              VelocityY2=32
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-22.6274
              VelocityX2=-22.6274
              VelocityY1=32
              VelocityY2=32
              Coherence1=100
              Coherence2=100
        -> GroupWorkflow EnsureMotionCoherenceParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=DotSize)) => #4
            ExternalizedMapping(Value(DisplayName=Colour1)) => #5
            ExternalizedMapping(Value(DisplayName=Colour2)) => #6
            ExternalizedMapping(Value(DisplayName=numDots1)) => #7
            ExternalizedMapping(Value(DisplayName=numDots2)) => #8
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
            ExternalizedMapping(Value(DisplayName=Duration)) => #11
            #3, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #12
            #1 -> MemberSelector(Selector=Value.Size) => #13
            #13, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #14
            #1 -> MemberSelector(Selector=Value.Colour1) => #15
            #15, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #16
            #1 -> MemberSelector(Selector=Value.Colour2) => #17
            #17, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #18
            #1 -> MemberSelector(Selector=Value.numDots1) => #19
            #19, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
            #1 -> MemberSelector(Selector=Value.numDots2) => #21
            #21, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #22
            #2, #12, #14, #16, #18, #20, #22 -> Zip => #23
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #24
            #24, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #25
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #26
            #26, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #27
            #1 -> MemberSelector(Selector=Value.Contrast1) => #28
            ExternalizedMapping(Value(DisplayName=Contrast1)) => #29
            #28, #29 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #30
            #1 -> MemberSelector(Selector=Value.Contrast2) => #31
            ExternalizedMapping(Value(DisplayName=Contrast2)) => #32
            #31, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #33
            #25, #27, #30, #33 -> Zip => #34
            #1 -> MemberSelector(Selector=Value.VelocityX1) => #35
            ExternalizedMapping(Value(DisplayName=VelocityX1)) => #36
            #35, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #37
            #1 -> MemberSelector(Selector=Value.VelocityX2) => #38
            ExternalizedMapping(Value(DisplayName=VelocityX2)) => #39
            #38, #39 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #40
            #1 -> MemberSelector(Selector=Value.VelocityY1) => #41
            ExternalizedMapping(Value(DisplayName=VelocityY1)) => #42
            #41, #42 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityY2) => #44
            ExternalizedMapping(Value(DisplayName=VelocityY2)) => #45
            #44, #45 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #46
            #1 -> MemberSelector(Selector=Value.Coherence1) => #47
            ExternalizedMapping(Value(DisplayName=Coherence1)) => #48
            #47, #48 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #1 -> MemberSelector(Selector=Value.Coherence2) => #50
            ExternalizedMapping(Value(DisplayName=Coherence2)) => #51
            #50, #51 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #52
            #37, #40, #43, #46, #49, #52 -> Zip => #53
            #23, #34, #53 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,

                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast1,
                Item2.Item4 as Contrast2,

                Item3.Item1 as VelX1,
                Item3.Item2 as VelX2,
                Item3.Item3 as VelY1,
                Item3.Item4 as VelY2,
                Item3.Item5 as Coherence1,
                Item3.Item6 as Coherence2)
            -> WorkflowOutput
        -> WorkflowOutput

    Disable GroupWorkflow S2dir
        WorkflowInput Source1
        -> MotionCoherenceSpecification
          Trials
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-32
              VelocityX2=-32
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-22.6274
              VelocityX2=-22.6274
              VelocityY1=-22.6274
              VelocityY2=-22.6274
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=0
              VelocityX2=0
              VelocityY1=-32
              VelocityY2=-32
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=22.6274
              VelocityX2=22.6274
              VelocityY1=-22.6274
              VelocityY2=-22.6274
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=32
              VelocityX2=32
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=22.6274
              VelocityX2=22.6274
              VelocityY1=22.6274
              VelocityY2=22.6274
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=0
              VelocityX2=0
              VelocityY1=32
              VelocityY2=32
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-22.6274
              VelocityX2=-22.6274
              VelocityY1=32
              VelocityY2=32
              Coherence1=100
              Coherence2=100
        -> GroupWorkflow EnsureMotionCoherenceParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=DotSize)) => #4
            ExternalizedMapping(Value(DisplayName=Colour1)) => #5
            ExternalizedMapping(Value(DisplayName=Colour2)) => #6
            ExternalizedMapping(Value(DisplayName=numDots1)) => #7
            ExternalizedMapping(Value(DisplayName=numDots2)) => #8
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
            ExternalizedMapping(Value(DisplayName=Duration)) => #11
            #3, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #12
            #1 -> MemberSelector(Selector=Value.Size) => #13
            #13, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #14
            #1 -> MemberSelector(Selector=Value.Colour1) => #15
            #15, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #16
            #1 -> MemberSelector(Selector=Value.Colour2) => #17
            #17, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #18
            #1 -> MemberSelector(Selector=Value.numDots1) => #19
            #19, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
            #1 -> MemberSelector(Selector=Value.numDots2) => #21
            #21, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #22
            #2, #12, #14, #16, #18, #20, #22 -> Zip => #23
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #24
            #24, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #25
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #26
            #26, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #27
            #1 -> MemberSelector(Selector=Value.Contrast1) => #28
            ExternalizedMapping(Value(DisplayName=Contrast1)) => #29
            #28, #29 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #30
            #1 -> MemberSelector(Selector=Value.Contrast2) => #31
            ExternalizedMapping(Value(DisplayName=Contrast2)) => #32
            #31, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #33
            #25, #27, #30, #33 -> Zip => #34
            #1 -> MemberSelector(Selector=Value.VelocityX1) => #35
            ExternalizedMapping(Value(DisplayName=VelocityX1)) => #36
            #35, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #37
            #1 -> MemberSelector(Selector=Value.VelocityX2) => #38
            ExternalizedMapping(Value(DisplayName=VelocityX2)) => #39
            #38, #39 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #40
            #1 -> MemberSelector(Selector=Value.VelocityY1) => #41
            ExternalizedMapping(Value(DisplayName=VelocityY1)) => #42
            #41, #42 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityY2) => #44
            ExternalizedMapping(Value(DisplayName=VelocityY2)) => #45
            #44, #45 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #46
            #1 -> MemberSelector(Selector=Value.Coherence1) => #47
            ExternalizedMapping(Value(DisplayName=Coherence1)) => #48
            #47, #48 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #1 -> MemberSelector(Selector=Value.Coherence2) => #50
            ExternalizedMapping(Value(DisplayName=Coherence2)) => #51
            #50, #51 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #52
            #37, #40, #43, #46, #49, #52 -> Zip => #53
            #23, #34, #53 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,

                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast1,
                Item2.Item4 as Contrast2,

                Item3.Item1 as VelX1,
                Item3.Item2 as VelX2,
                Item3.Item3 as VelY1,
                Item3.Item4 as VelY2,
                Item3.Item5 as Coherence1,
                Item3.Item6 as Coherence2)
            -> WorkflowOutput
        -> WorkflowOutput
#6, #4 -> SubscribeWhen

GroupWorkflow VarInIt
    Bonsai.Numerics.CreateRandom(Seed=42)
    -> BehaviorSubject Random

    FloatProperty(Value=0)
    -> PublishSubject Sync

    FloatProperty(Value=1)
    -> BehaviorSubject TrialProgress

    IntProperty(Value=0)
    -> BehaviorSubject SyncPulse

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

    IntProperty(Value=0)
    -> BehaviorSubject EyeFrameCount

    BooleanProperty(Value=false)
    -> BehaviorSubject TimerExpired

    StringProperty(Value=C:\Users\saleem_lab\Documents\VisualStimuli_Temp\)
    -> BehaviorSubject "Saving Dir"

    FloatProperty(Value=1)
    -> BehaviorSubject RepCounter

    ExternalizedMapping(Value(DisplayName=binFileName, Category=Filename))
    -> StringProperty(Value=SparseNoise_Log_.bin)
    -> BehaviorSubject "Bin FileName"

    FloatProperty(Value=200)
    -> BehaviorSubject MousePos

    IntProperty(Value=0)
    -> BehaviorSubject VideoFrameCount

    FloatProperty(Value=0.1)
    -> BehaviorSubject DurationSingleImage

SubscribeSubject DrawStimuli => #9
SubscribeSubject QuadState
-> PropertyMapping(ColorR(Selector=it), ColorB(Selector=it), ColorG(Selector=it)) => #11
#9, #11 -> IncludeWorkflow
  Path=BonVision:Primitives.DrawQuad.bonsai
  ExtentX=5
  ExtentY=5
  LocationX=-80
  LocationY=-30
  Layer=1
  Angle=0
  ColorR=0
  ColorG=0
  ColorB=0
  ColorA=1

GroupWorkflow Arduino
    Bonsai.IO.CreateSerialPort
      Name=ArduinoSerial
      PortName=COM4
      BaudRate=1000000
      Encoding=us-ascii
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    ExternalizedMapping(PortName)
    -> Bonsai.IO.SerialStringRead(PortName=ArduinoSerial, NewLine=\n)
    -> Parse(Pattern="%i,%i,%i,%i,%i,%i")
    -> Retry => #4
    -> MemberSelector(Selector=Item1)
    -> BehaviorSubject WheelInput
    #4 -> MemberSelector(Selector=Item2)
    -> DistinctUntilChanged
    -> BehaviorSubject LeftLick
    #4 -> MemberSelector(Selector=Item3)
    -> DistinctUntilChanged
    -> BehaviorSubject RightLick
    #4 -> MemberSelector(Selector=Item4)
    -> BehaviorSubject LastSyncPulseTime
    #4 -> MemberSelector(Selector=Item5)
    -> BehaviorSubject Photodiode
    #4 -> MemberSelector(Selector=Item6)
    -> BehaviorSubject ArduinoTime

    Bonsai.IO.CreateSerialPort
      Name=ArduinoPD
      PortName=COM5
      BaudRate=250000
      Encoding=us-ascii
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Bonsai.IO.SerialStringRead(PortName=ArduinoPD, NewLine=\n)
    -> Parse(Pattern="%i,%i")
    -> Retry
    -> BehaviorSubject PDandAsync
    -> MemberSelector(Selector=Item1)

GroupWorkflow Logging
    GroupWorkflow WheelLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #0
        ExternalizedMapping(Overwrite) => #0
        ExternalizedMapping(Suffix) => #1
        SubscribeSubject FilenamePrefix => #2
        StringProperty(Value=_Wheel) => #3
        #2, #3 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #8
        ExternalizedMapping(Name)
        -> SubscribeSubject WheelLog => #10
        #8, #0, #1, #10 -> Bonsai.IO.CsvWriter(FileName=test_DotMotion_Dir_Wheel.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")
    Bonsai.Windows.Input.KeyDown(Filter="MButton Back Clear D H L Shift", SuppressRepetitions=false) => #1
    #0, #1 -> SubscribeWhen
    GroupWorkflow VideoLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #3
        SubscribeSubject VideoLog => #0
        ExternalizedMapping(Overwrite) => #1
        ExternalizedMapping(Suffix) => #2
        SubscribeSubject FilenamePrefix => #3
        StringProperty(Value=_Video) => #4
        #3, #4 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #9
        #9, #1, #2, #0 -> Bonsai.IO.CsvWriter(FileName=test_DotMotion_Dir_Video.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")
    #3, #1 -> SubscribeWhen
    GroupWorkflow PhotodiodeLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #5
        ExternalizedMapping(Overwrite) => #0
        ExternalizedMapping(Suffix) => #1
        SubscribeSubject FilenamePrefix => #2
        StringProperty(Value=_Photodiode) => #3
        #2, #3 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #8
        ExternalizedMapping(Name)
        -> SubscribeSubject PDLog => #10
        #8, #0, #1, #10 -> Bonsai.IO.CsvWriter(FileName=test_DotMotion_Dir_Photodiode.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")
    #5, #1 -> SubscribeWhen
    GroupWorkflow TrialLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #7
        SubscribeSubject TrialParams => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #2
        #0, #2 -> Zip => #3
        ExternalizedMapping(Overwrite) => #4
        ExternalizedMapping(Suffix) => #5
        SubscribeSubject FilenamePrefix => #6
        StringProperty(Value=_TrialParams) => #7
        #6, #7 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #12
        SubscribeSubject ArduinoTime => #13
        #3, #13 -> WithLatestFrom
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #15
          Expression: new(Item1.Item1.TrialType as TrialType, Item1.Item1.Response as Response, Item1.Item1.TrialResult as TrialResult, Item1.Item1.LeftVel as LeftVel, Item1.Item1.RightVel as RightVel, Item2 as ArduinoTime, Item1.Item2 as BonsaiTime)
        #12, #4, #5, #15 -> Bonsai.IO.CsvWriter(FileName=test_DotMotion_Dir_TrialParams.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")
    #7, #1 -> SubscribeWhen

    GroupWorkflow WheelLogging
        SubscribeSubject WheelInput => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        SubscribeSubject LastSyncPulseTime => #3
        SubscribeSubject ArduinoTime => #4
        #0, #3, #4, #2 -> Zip => #5
        SubscribeSubject RenderFrameCount => #6
        #5, #6 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as Wheel, Item1.Item2 as LastSyncPulseTime, Item1.Item3 as ArduinoTime, Item1.Item4 as BonsaiTime, Item2 as RenderFrameCount)
        -> BehaviorSubject WheelLog
        -> WorkflowOutput

    GroupWorkflow VideoLogging
        SubscribeSubject VideoFrameCount => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        SubscribeSubject ArduinoTime => #3
        SubscribeSubject VideoLEDAsync => #4
        #0, #2, #4 -> Zip => #5
        #5, #3 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as VideoFrameCount, Item1.Item3 as LEDAsync, Item2 as ArduinoTime, Item1.Item2 as BonsaiTime)
        -> BehaviorSubject VideoLog
        -> WorkflowOutput

    GroupWorkflow PhotodiodeLogging
        SubscribeSubject PDandAsync => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        #0, #2 -> Zip => #3
        SubscribeSubject ArduinoTime => #4
        #3, #4 -> WithLatestFrom
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as Photodiode, Item1.Item2 as AsyncPulse, Item2 as BonsaiTime, Item3 as ArduinoTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1.Item1 as Photodiode, Item1.Item1.Item2 as AsyncPulse, Item1.Item2 as BonsaiTime, Item2 as ArduinoTime)
        -> BehaviorSubject PDLog
        -> WorkflowOutput

    GroupWorkflow IntialiseTrialParams
        IntProperty(Value=0) => #0
        FloatProperty(Value=0) => #1
        FloatProperty(Value=0) => #2
        FloatProperty(Value=0) => #3
        FloatProperty(Value=0) => #4
        FloatProperty(Value=0) => #5
        FloatProperty(Value=0) => #6
        #0, #5, #1, #2, #3, #4, #6 -> Zip => #7
        IntProperty(Value=0) => #8
        IntProperty(Value=0) => #9
        FloatProperty(Value=0) => #10
        FloatProperty(Value=0) => #11
        FloatProperty(Value=0) => #12
        FloatProperty(Value=0) => #13
        FloatProperty(Value=0) => #14
        #8, #9, #10, #11, #12, #13, #14 -> Zip => #15
        FloatProperty(Value=0) => #16
        FloatProperty(Value=0) => #17
        FloatProperty(Value=0) => #18
        #16, #17, #18 -> Zip => #19
        #7, #15, #19 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1.Item1 as Id,
            Item1.Item2 as Duration,
            Item1.Item3 as Size,
            Item1.Item4 as Colour1,
            Item1.Item5 as Colour2,
            Item1.Item6 as numDots1,
            Item1.Item7 as numDots2,

            Item2.Item1 as dotLifeBool,
            Item2.Item2 as dotLifetime,
            Item2.Item3 as Contrast1,
            Item2.Item4 as Contrast2,
            Item2.Item5 as VelX1,
            Item2.Item6 as VelX2,
            Item2.Item7 as VelY1,

            Item3.Item1 as VelY2,
            Item3.Item2 as Coherence1,
            Item3.Item3 as Coherence2)
        -> Skip(Count=1)
        -> BehaviorSubject TrialParams

GroupWorkflow Video => #15
    Bonsai.Vision.CameraCapture => #0
      Index=0
      CaptureProperties
        CapturePropertyAssignment(Property=Fps, Value=30)
        CapturePropertyAssignment(Property=Saturation, Value=0)
        CapturePropertyAssignment(Property=Exposure, Value=-5)
        CapturePropertyAssignment(Property=Gain, Value=0)
        CapturePropertyAssignment(Property=Contrast, Value=100)
        CapturePropertyAssignment(Property=Brightness, Value=0)
        CapturePropertyAssignment(Property=Sharpness, Value=0)
        CapturePropertyAssignment(Property=Gamma, Value=0)
        CapturePropertyAssignment(Property=Backlight, Value=0)
        CapturePropertyAssignment(Property=FrameWidth, Value=2560)
        CapturePropertyAssignment(Property=FrameHeight, Value=1440)
    -> Bonsai.Vision.Flip(Mode=Both) => #1
    -> ElementIndex
    -> MemberSelector(Selector=Index)
    -> MulticastSubject VideoFrameCount
    #1 -> Disable MemberSelector(Selector=Width)
    #1 -> Disable MemberSelector(Selector=Height)
    #1 -> Disable TimeInterval
    #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=496, Y=0, Width=552, Height=330))
    #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=1936, Y=54, Width=128, Height=84))
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Dsp.Sum
    -> MemberSelector(Selector=Val0)
    -> BehaviorSubject VideoLEDAsync
    SubscribeSubject FilenamePrefix
    -> Format(Format={0}_video.avi, Selector=it)
    -> PropertyMapping(FileName) => #16
    #0, #16 -> Bonsai.Vision.VideoWriter => #17
      FileName=test_DotMotion_Dir_video.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    Bonsai.Windows.Input.KeyDown(Filter="MButton Back Clear D H L Shift", SuppressRepetitions=false) => #18
    #17, #18 -> SubscribeWhen => #19
    #19, #16 -> Disable Bonsai.FFmpeg.VideoWriter(FileName=eddTest_SDTraining_video.avi, Suffix=Timestamp, Overwrite=false, FrameRate=30, OutputArguments="-vb 15M -vcodec mpeg4")
Bonsai.Windows.Input.KeyDown(Filter="LButton MButton XButton1 Back Tab Clear Return Enter A D E H I L M Shift", SuppressRepetitions=true) => #16
#15, #16 -> SubscribeWhen

ExternalizedMapping(StimulusID(Category=Filename), MouseID(Category=Filename))
-> GroupWorkflow "Generate File Names"
    ExternalizedMapping(Value(DisplayName=StimulusID))
    -> StringProperty(Value=DotMotion_Dir) => #1
    ExternalizedMapping(Value(DisplayName=MouseID))
    -> StringProperty(Value=M24019) => #3
    #1, #3 -> Zip
    -> Format(Format={0}_{1}, Selector="Item2,Item1")
    -> BehaviorSubject FilenamePrefix

    SubscribeSubject FilenamePrefix => #7
    -> Format(Format={0}_EyeLog.csv, Selector=it)
    -> BehaviorSubject EyeName
    #7 -> Format(Format={0}_PDAsync.csv, Selector=it)
    -> BehaviorSubject PDname
    #7 -> Format(Format={0}_WheelLog.csv, Selector=it)
    -> BehaviorSubject WheelName
    #7 -> Format(Format={0}_Trial.csv, Selector=it)
    -> BehaviorSubject TrialName
    #7 -> Format(Format={0}_Metadata.csv, Selector=it)
    -> BehaviorSubject MetadataName
