WorkflowBuilder(Version=2.7.1)
Bonsai.Shaders.CreateWindow
  Width=1280
  Height=800
  VSync=On
  SwapSync=false
  ClearColor=Gray
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=false
  Location=nil
  WindowBorder=Hidden
  WindowState=Fullscreen
  DisplayDevice=Second
  TargetRenderFrequency=0
  TargetUpdateFrequency=nil
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Shaders.ShaderResources(Shaders="")
-> Bonsai.Shaders.MeshResources(Meshes="")
-> Bonsai.Shaders.TextureResources(Textures="")
-> Bonsai.Resources.LoadResources

Bonsai.Shaders.RenderFrame => #6
SubscribeSubject Borders
-> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #8
ExternalizedMapping(BehaviourFileName(DisplayName=TestBehaviour), EyeFileName, TrialParamsFileName, PDAsyncFileName) => #9
#6, #9 -> GroupWorkflow FrameEventLoggers => #10
    WorkflowInput Source1 => #0
    ExternalizedMapping(FileName(DisplayName=BehaviourFileName)) => #1
    #0, #1 -> IncludeWorkflow Events(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=Speed2DContrast_WheelLog.csv) => #2
    ExternalizedMapping(FileName(DisplayName=EyeFileName)) => #3
    #2, #3 -> IncludeWorkflow EyeEvents(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=Speed2DContrast_EyeLog.csv) => #4
    ExternalizedMapping(FileName(DisplayName=TrialParamsFileName)) => #5
    #4, #5 -> IncludeWorkflow TrialEvents(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=Speed2DContrast_Trial.csv) => #6
    ExternalizedMapping(FileName(DisplayName=PDAsyncFileName)) => #7
    #6, #7 -> IncludeWorkflow PDAsyncEvents(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=Timestamp, FileName=Speed2DContrast_PDAsync_.csv)
    -> WorkflowOutput
#10, #8 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-120, Right=120, Bottom=-30, Top=90)
-> PublishSubject DrawStimuli
-> Disable IncludeWorkflow(Path=BonVision:Environment.MeshMapping.bonsai, ClearColor=Gray, FileName=MeshMapCorr_MatlabOut_NEO_EH_270721.csv)
-> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
-> WorkflowOutput
#10 -> MemberSelector(Selector=TimeStep.ElapsedRealTime)

GroupWorkflow Borders
    ExternalizedMapping(Value(DisplayName=TopBorder))
    -> FloatProperty(Value=90)
    -> ReplaySubject Top(BufferSize=nil) => #2
    ExternalizedMapping(Value(DisplayName=BottomBorder))
    -> FloatProperty(Value=-30)
    -> ReplaySubject Bottom(BufferSize=nil) => #5
    ExternalizedMapping(Value(DisplayName=LeftBorder))
    -> FloatProperty(Value=-120)
    -> ReplaySubject Left(BufferSize=nil) => #8
    ExternalizedMapping(Value(DisplayName=RightBorder))
    -> FloatProperty(Value=120)
    -> ReplaySubject Right(BufferSize=nil) => #11
    #2, #5, #8, #11 -> Zip
    -> ReplaySubject Borders(BufferSize=nil)

WorkflowInput Source1 => #18
Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false) => #19
ExternalizedMapping(Count) => #20
#18, #20 -> GroupWorkflow Speed2D => #21
    WorkflowInput Source1
    -> GroupWorkflow S2 => #1
        WorkflowInput Source1
        -> MotionCoherenceSpecification
          Trials
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=0
              VelocityX2=0
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-16
              VelocityX2=-16
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-32
              VelocityX2=-32
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-64
              VelocityX2=-64
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-128
              VelocityX2=-128
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-256
              VelocityX2=-256
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
        -> GroupWorkflow EnsureMotionCoherenceParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=DotSize)) => #4
            ExternalizedMapping(Value(DisplayName=Colour1)) => #5
            ExternalizedMapping(Value(DisplayName=Colour2)) => #6
            ExternalizedMapping(Value(DisplayName=numDots1)) => #7
            ExternalizedMapping(Value(DisplayName=numDots2)) => #8
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
            ExternalizedMapping(Value(DisplayName=Duration)) => #11
            #3, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #12
            #1 -> MemberSelector(Selector=Value.Size) => #13
            #13, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #14
            #1 -> MemberSelector(Selector=Value.Colour1) => #15
            #15, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #16
            #1 -> MemberSelector(Selector=Value.Colour2) => #17
            #17, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #18
            #1 -> MemberSelector(Selector=Value.numDots1) => #19
            #19, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
            #1 -> MemberSelector(Selector=Value.numDots2) => #21
            #21, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #22
            #2, #12, #14, #16, #18, #20, #22 -> Zip => #23
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #24
            #24, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #25
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #26
            #26, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #27
            #1 -> MemberSelector(Selector=Value.Contrast1) => #28
            ExternalizedMapping(Value(DisplayName=Contrast1)) => #29
            #28, #29 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #30
            #1 -> MemberSelector(Selector=Value.Contrast2) => #31
            ExternalizedMapping(Value(DisplayName=Contrast2)) => #32
            #31, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #33
            #25, #27, #30, #33 -> Zip => #34
            #1 -> MemberSelector(Selector=Value.VelocityX1) => #35
            ExternalizedMapping(Value(DisplayName=VelocityX1)) => #36
            #35, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #37
            #1 -> MemberSelector(Selector=Value.VelocityX2) => #38
            ExternalizedMapping(Value(DisplayName=VelocityX2)) => #39
            #38, #39 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #40
            #1 -> MemberSelector(Selector=Value.VelocityY1) => #41
            ExternalizedMapping(Value(DisplayName=VelocityY1)) => #42
            #41, #42 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityY2) => #44
            ExternalizedMapping(Value(DisplayName=VelocityY2)) => #45
            #44, #45 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #46
            #1 -> MemberSelector(Selector=Value.Coherence1) => #47
            ExternalizedMapping(Value(DisplayName=Coherence1)) => #48
            #47, #48 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #1 -> MemberSelector(Selector=Value.Coherence2) => #50
            ExternalizedMapping(Value(DisplayName=Coherence2)) => #51
            #50, #51 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #52
            #37, #40, #43, #46, #49, #52 -> Zip => #53
            #23, #34, #53 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,

                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast1,
                Item2.Item4 as Contrast2,

                Item3.Item1 as VelX1,
                Item3.Item2 as VelX2,
                Item3.Item3 as VelY1,
                Item3.Item4 as VelY2,
                Item3.Item5 as Coherence1,
                Item3.Item6 as Coherence2)
            -> WorkflowOutput
        -> WorkflowOutput
    SubscribeSubject Random => #2
    #1, #2 -> Bonsai.Numerics.Permutation
    -> CreateObservable CreateTrial
        WorkflowInput Source1 => #0
        -> SelectMany DrawStimulus
            SubscribeSubject Borders
            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #1
            WorkflowInput Source1
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT1S) => #6
            ExternalizedMapping(Lower(DisplayName="ISI lower bound"), Upper(DisplayName="ISI upper bound"))
            -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=1, Upper=1)
            -> Bonsai.Numerics.Distributions.Sample
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #11
            Disable Timer(DueTime=PT0.05S, Period=PT0S) => #12
            SubscribeSubject DrawStimuli
            -> Take(Count=1)
            -> FloatProperty(Value=1) => #15
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelX1) => #17
            Bonsai.Shaders.UpdateFrame
            -> MemberSelector(Selector=TimeStep.ElapsedTime)
            -> Take(Count=1) => #20
            #20, #17 -> Zip
            -> Multiply
            -> PropertyMapping(VelocityX) => #23
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelX2) => #25
            #20, #25 -> Zip
            -> Multiply
            -> PropertyMapping(VelocityX) => #28
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelY1) => #30
            #20, #30 -> Zip
            -> Multiply
            -> PropertyMapping(VelocityY) => #33
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelY2) => #35
            #20, #35 -> Zip
            -> Multiply
            -> PropertyMapping(VelocityY) => #38
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Coherence1)
            -> PropertyMapping(Coherence) => #41
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Coherence2)
            -> PropertyMapping(Coherence) => #44
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Contrast1)
            -> PropertyMapping(ColorA) => #47
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Contrast2)
            -> PropertyMapping(ColorA) => #50
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Colour1)
            -> PropertyMapping(ColorR, ColorG, ColorB) => #53
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Colour2)
            -> PropertyMapping(ColorR, ColorG, ColorB) => #56
            SubscribeSubject Parameters
            -> MemberSelector(Selector=numDots1)
            -> PropertyMapping(numDots) => #59
            SubscribeSubject Parameters
            -> MemberSelector(Selector=dotLifetime) => #61
            #61, #20 -> Zip
            -> Divide
            -> PropertyMapping(dotLifetime) => #64
            SubscribeSubject Parameters
            -> MemberSelector(Selector=dotLifeBool)
            -> PropertyMapping(dotLifetimeBool) => #67
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Size)
            -> PropertyMapping(Diameter) => #70
            SubscribeSubject Parameters
            -> MemberSelector(Selector=numDots2)
            -> PropertyMapping(numDots) => #73
            SubscribeSubject Parameters
            -> MemberSelector(Selector=dotLifetime) => #75
            IntProperty(Value=10)
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.Seconds)
            -> PropertyMapping(rndseed) => #79
            #1, #59, #79 -> GenerateDotField(numDots=573, left=-120, right=120, top=90, bottom=-30, rndseed=48) => #80
            #59, #64 -> GenerateDotLives(dotLifetime=60, numDots=573) => #81
            #80, #81 -> Zip => #82
            #82, #70, #23, #33, #41, #47, #53, #67, #64 -> GroupWorkflow DrawMovingCircleArray-2d(Description="Draws multiple colored circles using the input array as position data.") => #83
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                SubscribeSubject DrawStimuli
                -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #3
                ExternalizedMapping(LocationX) => #4
                ExternalizedMapping(LocationY) => #5
                ExternalizedMapping(Value(DisplayName=ColorR))
                -> FloatProperty(Value=0)
                -> PropertyMapping(X) => #8
                ExternalizedMapping(Value(DisplayName=ColorG))
                -> FloatProperty(Value=0)
                -> PropertyMapping(Y) => #11
                ExternalizedMapping(Value(DisplayName=ColorB))
                -> FloatProperty(Value=0)
                -> PropertyMapping(Z) => #14
                ExternalizedMapping(Value(DisplayName=ColorA))
                -> FloatProperty(Value=1)
                -> PropertyMapping(W) => #17
                ExternalizedMapping(Value(DisplayName=Diameter))
                -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=2)
                -> PropertyMapping(ExtentX, ExtentY) => #20
                #3, #4, #5, #20 -> GroupWorkflow Transform => #21
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Angle) => #1
                    ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                    ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                    ExternalizedMapping(X(DisplayName=LocationX)) => #4
                    ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                    #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=120, Y=0, Z=0) => #6
                    #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=2, Y=2, Z=1) => #7
                    #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                    -> WorkflowOutput
                #21, #8, #11, #14, #17 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #23
                #1, #23 -> CombineLatest => #24
                #24, #23 -> Sample
                -> MemberSelector(Selector=Item1) => #26
                #0 -> MemberSelector(Selector=Item2) => #27
                #26, #27 -> CombineLatest => #28
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #30
                ExternalizedMapping(VelocityX) => #31
                ExternalizedMapping(VelocityY) => #32
                ExternalizedMapping(Coherence) => #33
                ExternalizedMapping(dotLifetimeBool, dotLifetime) => #34
                #31, #32, #33, #30, #34, #28 -> moveDots_2dLife(VelocityX=-4.266667, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=60, left=-120, right=120, top=90, bottom=-30)
                -> MemberSelector(Selector=Item1)
                -> Bonsai.Shaders.DrawMeshInstanced
                  ShaderName=CircleArray
                  MeshName=Quad
                  Usage=DynamicDraw
                  InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                -> WorkflowOutput
            #75, #20 -> Zip
            -> Divide
            -> PropertyMapping(dotLifetime) => #86
            IntProperty(Value=10)
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.Seconds)
            -> Add(Operand=IntProperty(Value=99))
            -> PropertyMapping(rndseed) => #91
            #1, #73, #91 -> GenerateDotField(numDots=573, left=-120, right=120, top=90, bottom=-30, rndseed=147) => #92
            #73, #86 -> GenerateDotLives(dotLifetime=60, numDots=573) => #93
            #92, #93 -> Zip => #94
            #94, #70, #28, #38, #44, #50, #56, #67, #86 -> GroupWorkflow DrawMovingCircleArray-2d(Description="Draws multiple colored circles using the input array as position data.") => #95
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1) => #1
                SubscribeSubject DrawStimuli
                -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #3
                ExternalizedMapping(LocationX) => #4
                ExternalizedMapping(LocationY) => #5
                ExternalizedMapping(Value(DisplayName=ColorR))
                -> FloatProperty(Value=1)
                -> PropertyMapping(X) => #8
                ExternalizedMapping(Value(DisplayName=ColorG))
                -> FloatProperty(Value=1)
                -> PropertyMapping(Y) => #11
                ExternalizedMapping(Value(DisplayName=ColorB))
                -> FloatProperty(Value=1)
                -> PropertyMapping(Z) => #14
                ExternalizedMapping(Value(DisplayName=ColorA))
                -> FloatProperty(Value=1)
                -> PropertyMapping(W) => #17
                ExternalizedMapping(Value(DisplayName=Diameter))
                -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=2)
                -> PropertyMapping(ExtentX, ExtentY) => #20
                #3, #4, #5, #20 -> GroupWorkflow Transform => #21
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Angle) => #1
                    ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                    ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                    ExternalizedMapping(X(DisplayName=LocationX)) => #4
                    ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                    #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=120, Y=0, Z=0) => #6
                    #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=2, Y=2, Z=1) => #7
                    #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                    -> WorkflowOutput
                #21, #8, #11, #14, #17 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #23
                #1, #23 -> CombineLatest => #24
                #24, #23 -> Sample
                -> MemberSelector(Selector=Item1) => #26
                #0 -> MemberSelector(Selector=Item2) => #27
                #26, #27 -> CombineLatest => #28
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #30
                ExternalizedMapping(VelocityX) => #31
                ExternalizedMapping(VelocityY) => #32
                ExternalizedMapping(Coherence) => #33
                ExternalizedMapping(dotLifetimeBool, dotLifetime) => #34
                #31, #32, #33, #30, #34, #28 -> moveDots_2dLife(VelocityX=-4.266667, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=60, left=-120, right=120, top=90, bottom=-30)
                -> MemberSelector(Selector=Item1)
                -> Bonsai.Shaders.DrawMeshInstanced
                  ShaderName=CircleArray
                  MeshName=Quad
                  Usage=DynamicDraw
                  InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                -> WorkflowOutput
            #83, #95 -> Zip => #96
            #96, #12 -> Disable SubscribeWhen => #97
            #97, #6 -> TakeUntil
            -> Last => #99
            #99, #11 -> Bonsai.Shaders.Delay(DueTime=PT1S)
            -> Unit
            -> WorkflowOutput
            #99 -> FloatProperty(Value=0) => #103
            #103, #15 -> Merge
            -> MulticastSubject QuadState

            SubscribeSubject QuadState
            -> PropertyMapping(ColorR(Selector=it), ColorB(Selector=it), ColorG(Selector=it)) => #107
            SubscribeSubject DrawStimuli
            -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-120, Right=120, Bottom=90, Top=-30) => #109
            #109, #107 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=30
              ExtentY=10
              LocationX=121
              LocationY=87
              Layer=1
              Angle=0
              ColorR=0
              ColorG=0
              ColorB=0
              ColorA=1
        -> Unit
        -> WorkflowOutput
        #0 -> ReplaySubject Parameters(BufferSize=nil) => #4
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #6
        #4, #6 -> Zip
        -> IncludeWorkflow TrialEvents(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
    -> Concat => #5
    ExternalizedMapping(Count) => #6
    #5, #6 -> RepeatCount(Count=30)
    -> WorkflowOutput

    Disable GroupWorkflow S2dirRecordLeft
        WorkflowInput Source1
        -> MotionCoherenceSpecification
          Trials
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-32
              VelocityX2=-32
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-22.6274
              VelocityX2=-22.6274
              VelocityY1=-22.6274
              VelocityY2=-22.6274
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=0
              VelocityX2=0
              VelocityY1=-32
              VelocityY2=-32
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=22.6274
              VelocityX2=22.6274
              VelocityY1=-22.6274
              VelocityY2=-22.6274
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=32
              VelocityX2=32
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=22.6274
              VelocityX2=22.6274
              VelocityY1=22.6274
              VelocityY2=22.6274
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=0
              VelocityX2=0
              VelocityY1=32
              VelocityY2=32
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-22.6274
              VelocityX2=-22.6274
              VelocityY1=32
              VelocityY2=32
              Coherence1=100
              Coherence2=100
        -> GroupWorkflow EnsureMotionCoherenceParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=DotSize)) => #4
            ExternalizedMapping(Value(DisplayName=Colour1)) => #5
            ExternalizedMapping(Value(DisplayName=Colour2)) => #6
            ExternalizedMapping(Value(DisplayName=numDots1)) => #7
            ExternalizedMapping(Value(DisplayName=numDots2)) => #8
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
            ExternalizedMapping(Value(DisplayName=Duration)) => #11
            #3, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #12
            #1 -> MemberSelector(Selector=Value.Size) => #13
            #13, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #14
            #1 -> MemberSelector(Selector=Value.Colour1) => #15
            #15, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #16
            #1 -> MemberSelector(Selector=Value.Colour2) => #17
            #17, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #18
            #1 -> MemberSelector(Selector=Value.numDots1) => #19
            #19, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
            #1 -> MemberSelector(Selector=Value.numDots2) => #21
            #21, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #22
            #2, #12, #14, #16, #18, #20, #22 -> Zip => #23
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #24
            #24, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #25
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #26
            #26, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #27
            #1 -> MemberSelector(Selector=Value.Contrast1) => #28
            ExternalizedMapping(Value(DisplayName=Contrast1)) => #29
            #28, #29 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #30
            #1 -> MemberSelector(Selector=Value.Contrast2) => #31
            ExternalizedMapping(Value(DisplayName=Contrast2)) => #32
            #31, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #33
            #25, #27, #30, #33 -> Zip => #34
            #1 -> MemberSelector(Selector=Value.VelocityX1) => #35
            ExternalizedMapping(Value(DisplayName=VelocityX1)) => #36
            #35, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #37
            #1 -> MemberSelector(Selector=Value.VelocityX2) => #38
            ExternalizedMapping(Value(DisplayName=VelocityX2)) => #39
            #38, #39 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #40
            #1 -> MemberSelector(Selector=Value.VelocityY1) => #41
            ExternalizedMapping(Value(DisplayName=VelocityY1)) => #42
            #41, #42 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityY2) => #44
            ExternalizedMapping(Value(DisplayName=VelocityY2)) => #45
            #44, #45 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #46
            #1 -> MemberSelector(Selector=Value.Coherence1) => #47
            ExternalizedMapping(Value(DisplayName=Coherence1)) => #48
            #47, #48 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #1 -> MemberSelector(Selector=Value.Coherence2) => #50
            ExternalizedMapping(Value(DisplayName=Coherence2)) => #51
            #50, #51 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #52
            #37, #40, #43, #46, #49, #52 -> Zip => #53
            #23, #34, #53 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,

                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast1,
                Item2.Item4 as Contrast2,

                Item3.Item1 as VelX1,
                Item3.Item2 as VelX2,
                Item3.Item3 as VelY1,
                Item3.Item4 as VelY2,
                Item3.Item5 as Coherence1,
                Item3.Item6 as Coherence2)
            -> WorkflowOutput
        -> WorkflowOutput

    Disable GroupWorkflow S2dir
        WorkflowInput Source1
        -> MotionCoherenceSpecification
          Trials
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-32
              VelocityX2=-32
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-22.6274
              VelocityX2=-22.6274
              VelocityY1=-22.6274
              VelocityY2=-22.6274
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=0
              VelocityX2=0
              VelocityY1=-32
              VelocityY2=-32
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=22.6274
              VelocityX2=22.6274
              VelocityY1=-22.6274
              VelocityY2=-22.6274
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=32
              VelocityX2=32
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=22.6274
              VelocityX2=22.6274
              VelocityY1=22.6274
              VelocityY2=22.6274
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=0
              VelocityX2=0
              VelocityY1=32
              VelocityY2=32
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-22.6274
              VelocityX2=-22.6274
              VelocityY1=32
              VelocityY2=32
              Coherence1=100
              Coherence2=100
        -> GroupWorkflow EnsureMotionCoherenceParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=DotSize)) => #4
            ExternalizedMapping(Value(DisplayName=Colour1)) => #5
            ExternalizedMapping(Value(DisplayName=Colour2)) => #6
            ExternalizedMapping(Value(DisplayName=numDots1)) => #7
            ExternalizedMapping(Value(DisplayName=numDots2)) => #8
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
            ExternalizedMapping(Value(DisplayName=Duration)) => #11
            #3, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #12
            #1 -> MemberSelector(Selector=Value.Size) => #13
            #13, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #14
            #1 -> MemberSelector(Selector=Value.Colour1) => #15
            #15, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #16
            #1 -> MemberSelector(Selector=Value.Colour2) => #17
            #17, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #18
            #1 -> MemberSelector(Selector=Value.numDots1) => #19
            #19, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
            #1 -> MemberSelector(Selector=Value.numDots2) => #21
            #21, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #22
            #2, #12, #14, #16, #18, #20, #22 -> Zip => #23
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #24
            #24, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #25
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #26
            #26, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #27
            #1 -> MemberSelector(Selector=Value.Contrast1) => #28
            ExternalizedMapping(Value(DisplayName=Contrast1)) => #29
            #28, #29 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #30
            #1 -> MemberSelector(Selector=Value.Contrast2) => #31
            ExternalizedMapping(Value(DisplayName=Contrast2)) => #32
            #31, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #33
            #25, #27, #30, #33 -> Zip => #34
            #1 -> MemberSelector(Selector=Value.VelocityX1) => #35
            ExternalizedMapping(Value(DisplayName=VelocityX1)) => #36
            #35, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #37
            #1 -> MemberSelector(Selector=Value.VelocityX2) => #38
            ExternalizedMapping(Value(DisplayName=VelocityX2)) => #39
            #38, #39 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #40
            #1 -> MemberSelector(Selector=Value.VelocityY1) => #41
            ExternalizedMapping(Value(DisplayName=VelocityY1)) => #42
            #41, #42 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityY2) => #44
            ExternalizedMapping(Value(DisplayName=VelocityY2)) => #45
            #44, #45 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #46
            #1 -> MemberSelector(Selector=Value.Coherence1) => #47
            ExternalizedMapping(Value(DisplayName=Coherence1)) => #48
            #47, #48 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #1 -> MemberSelector(Selector=Value.Coherence2) => #50
            ExternalizedMapping(Value(DisplayName=Coherence2)) => #51
            #50, #51 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #52
            #37, #40, #43, #46, #49, #52 -> Zip => #53
            #23, #34, #53 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,

                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast1,
                Item2.Item4 as Contrast2,

                Item3.Item1 as VelX1,
                Item3.Item2 as VelX2,
                Item3.Item3 as VelY1,
                Item3.Item4 as VelY2,
                Item3.Item5 as Coherence1,
                Item3.Item6 as Coherence2)
            -> WorkflowOutput
        -> WorkflowOutput
#21, #19 -> SubscribeWhen

GroupWorkflow VarInIt
    Bonsai.Numerics.CreateRandom(Seed=42)
    -> BehaviorSubject Random

    FloatProperty(Value=0)
    -> PublishSubject Sync

    FloatProperty(Value=1)
    -> BehaviorSubject TrialProgress

    IntProperty(Value=0)
    -> BehaviorSubject SyncPulse

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

    IntProperty(Value=0)
    -> BehaviorSubject EyeFrameCount

GroupWorkflow EyeCamera => #24
    Bonsai.Video.VideoCaptureDevice(Index=0, Format(FrameSize(Width=1280, Height=960), AverageFrameRate=60, MaximumFrameRate=60, BitCount=24), CaptureProperties="") => #0
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.ImageWriter(Path=\\.\pipe\video, Suffix=None, Overwrite=false)
    -> Bonsai.Vision.Crop(RegionOfInterest(X=444, Y=292, Width=276, Height=204))
    -> Bonsai.Vision.Threshold(ThresholdValue=50, MaxValue=255, ThresholdType=BinaryInv)
    -> Bonsai.Vision.MorphologicalOperator(Size(Width=3, Height=3), Anchor(X=1, Y=1), Shape=Ellipse, Iterations=1, Operation=Close)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> Disable SubscribeWhen => #9
    #0 -> First
    -> Delay(DueTime=PT0.5S)
    -> Timestamp
    -> Disable Format
      Format: -f rawvideo -vcodec rawvideo -y -s 1280x960 -r 60 -pix_fmt gray -i \\.\pipe\video -vb 20M -vcodec mpeg4 D:\Data\edd_cam_test\EyeTracking_{0:yyyy-MM-dd_hh-mm-ss}.avi
      Selector=Timestamp
    -> Format
      Format: -f rawvideo -vcodec rawvideo -y -s 1280x960 -r 60 -pix_fmt gray -i \\.\pipe\video -vb 20M -vcodec mpeg4 D:\Data\Edd\EyeTracking_{0:yyyy-MM-dd_hh-mm-ss}.avi
      Selector=Timestamp
    -> InputMapping(Arguments)
    -> Bonsai.IO.StartProcess
      FileName=D:\Software\Extensions\ffmpeg.exe
      Arguments: -f rawvideo -vcodec rawvideo -y -s 1280x960 -r 60 -pix_fmt gray -i \\.\pipe\video -vb 20M -vcodec mpeg4 D:\Data\Edd\EyeTracking_2022-04-07_10-15-10.avi
    #0 -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #18
    SubscribeSubject SyncPulse => #19
    #18, #19 -> WithLatestFrom => #20
    #0 -> MemberSelector(Selector=ElementType)
    -> IntProperty(Value=1)
    -> Accumulate
    -> MulticastSubject EyeFrameCount => #24
    #9, #20, #24 -> Zip
    -> MemberSelector(Selector="Item1.Centroid.X,Item1.Centroid.Y,Item1.Orientation,Item1.MajorAxisLength,Item1.MinorAxisLength,Item1.Area,Item2.Item1,Item2.Item2,Item3")
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(Item1 as X, Item2 as Y, Item3 as Orientation, Item4 as MajorAxisLength, Item5 as MinorAxisLength, Item6 as Area, Item7 as Time, Rest.Item1 as Sync, Rest.Item2 as EyeFrame)
    -> IncludeWorkflow EyeEvents(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector="X,Y,Orientation,MajorAxisLength,MinorAxisLength,Area,Time,Sync,EyeFrame")
    -> Disable Bonsai.IO.CsvWriter(FileName=D:\Data\ECT\DriftingGratings__EyeTrackingData_Session_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
GroupWorkflow ArduinoSerial_New => #25
    Bonsai.IO.CreateSerialPort
      Name=ArduinoInput
      PortName=COM6
      BaudRate=250000
      Encoding=utf-8
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Bonsai.IO.SerialStringRead(PortName=ArduinoInput, NewLine=\n)
    -> Bonsai.Shaders.SampleOnRenderFrame => #2
    -> Condition
        WorkflowInput Source1
        -> Bonsai.Scripting.IronPython.PythonTransform
          Script:
            @returns(bool)
            def process(value):
              mylist = value.split("\t")

              if len(mylist) == 3:
                return True
              else:
                return False
        -> WorkflowOutput
    -> Parse(Pattern=%i\t%i\t%i) => #4
    -> MemberSelector(Selector=Item2) => #5
    #4 -> MemberSelector(Selector=Item3)
    -> MulticastSubject SyncPulse => #7
    #4 -> MemberSelector(Selector=Item1)
    -> PublishSubject Wheel => #9
    #2 -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #11
    SubscribeSubject QuadState => #12
    #11, #12 -> WithLatestFrom => #13
    -> MemberSelector(Selector=Item1) => #14
    SubscribeSubject EyeFrameCount => #15
    #14, #15 -> WithLatestFrom => #16
    -> MemberSelector(Selector=Item1) => #17
    #16 -> MemberSelector(Selector=Item2) => #18
    #13 -> MemberSelector(Selector=Item2) => #19
    #9, #5, #7, #19, #18, #17 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(Item1 as Wheel, Item2 as Lick, Item3 as Sync, Item4 as QuadState, Item5 as EyeFrameCount, Item6 as Time)
    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

    GroupWorkflow AnalogOutputs
        Bonsai.IO.CreateSerialPort
          Name=ArduinoAnalog
          PortName=COM14
          BaudRate=250000
          Encoding=utf-8
          Parity=None
          ParityReplace=63
          DataBits=8
          StopBits=One
          Handshake=None
          DiscardNull=false
          DtrEnable=true
          RtsEnable=false
          ReadBufferSize=4096
          WriteBufferSize=2048
          ReceivedBytesThreshold=1

        Bonsai.IO.SerialStringRead(PortName=ArduinoAnalog, NewLine=\n) => #1
        -> Condition
            WorkflowInput Source1
            -> Bonsai.Scripting.IronPython.PythonTransform
              Script:
                @returns(bool)
                def process(value):
                  mylist = value.split("\t")

                  if len(mylist) == 2:
                    return True
                  else:
                    return False
            -> WorkflowOutput
        -> Parse(Pattern=%i\t%i) => #3
        -> MemberSelector(Selector=Item2) => #4
        #3 -> MemberSelector(Selector=Item1) => #5
        #1 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #7
        #5, #4, #7 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1 as Photodiode, Item2 as SyncPulse, Item3 as Time)
        -> IncludeWorkflow PDAsyncEvents(Path=BonVision:Logging.LogEvent.bonsai, Format="", Selector="Photodiode,SyncPulse,Time")
Bonsai.Windows.Input.KeyDown(Filter=B, SuppressRepetitions=false) => #26
#24, #26 -> SubscribeWhen
#25, #26 -> SubscribeWhen
