WorkflowBuilder(Version=2.7.1)
ExternalizedMapping(DisplayDevice, WindowState)
-> GroupWorkflow DisplayAndResources
    ExternalizedMapping(DisplayDevice, WindowState)
    -> Bonsai.Shaders.CreateWindow
      Width=1800
      Height=800
      VSync=Off
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=false
      Location=nil
      WindowBorder=Hidden
      WindowState=Fullscreen
      DisplayDevice=Second
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=DynamicVideo, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Nearest, MagFilter=Nearest)
    -> Bonsai.Resources.LoadResources

    Bonsai.Shaders.RenderFrame => #5
    SubscribeSubject Borders
    -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #7
    #5, #7 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-120, Right=120, Bottom=-60, Top=60)
    -> PublishSubject DrawStimuli
    -> IncludeWorkflow(Path=BonVision:Environment.SphereMapping.bonsai, FaceSize=nil, ClearColor=Gray, Width=nil, Height=nil, RotationZ=0, RotationY=0, RotationX=0) => #10
    -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=60.000001669652114, Z=0), Translation(X=-12, Y=0, Z=-9))
    -> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.334, Height=1)
    -> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=0.333, Height=1)))
    #10 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-15))
    -> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333, Y=0, Width=0.333, Height=1)
    -> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0.333, Y=0, Width=0.333, Height=1)))
    #10 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=-60.000001669652114, Z=0), Translation(X=12, Y=0, Z=-9))
    -> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.667, Y=0, Width=0.333, Height=1)
    -> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0.665, Y=0, Width=0.333, Height=1)))
    #5 -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
    #5 -> ElementIndex
    -> MemberSelector(Selector=Index)
    -> BehaviorSubject RenderFrameCount

    GroupWorkflow Borders
        ExternalizedMapping(Value(DisplayName=TopBorder))
        -> FloatProperty(Value=60)
        -> ReplaySubject Top(BufferSize=nil) => #2
        ExternalizedMapping(Value(DisplayName=BottomBorder))
        -> FloatProperty(Value=-60)
        -> ReplaySubject Bottom(BufferSize=nil) => #5
        ExternalizedMapping(Value(DisplayName=LeftBorder))
        -> FloatProperty(Value=-120)
        -> ReplaySubject Left(BufferSize=nil) => #8
        ExternalizedMapping(Value(DisplayName=RightBorder))
        -> FloatProperty(Value=120)
        -> ReplaySubject Right(BufferSize=nil) => #11
        #2, #5, #8, #11 -> Zip
        -> ReplaySubject Borders(BufferSize=nil)

WorkflowInput Source1 => #2
Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false) => #3
Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey A P Q Shift", SuppressRepetitions=false) => #4
SubscribeSubject TrialEnds => #5
#4, #5 -> Sample => #6
ExternalizedMapping(SpeedMultiplier, TrialClassPostStimTime) => #7
#2, #7 -> GroupWorkflow Stimulus => #8
    WorkflowInput Source1
    -> GroupWorkflow BasicParameters => #1
        WorkflowInput Source1
        -> MotionCoherenceSpecification
          Trials
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=0
              VelocityX2=0
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
        -> GroupWorkflow EnsureMotionCoherenceParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=DotSize)) => #4
            ExternalizedMapping(Value(DisplayName=Colour1)) => #5
            ExternalizedMapping(Value(DisplayName=Colour2)) => #6
            ExternalizedMapping(Value(DisplayName=numDots1)) => #7
            ExternalizedMapping(Value(DisplayName=numDots2)) => #8
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
            ExternalizedMapping(Value(DisplayName=Duration)) => #11
            #3, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #12
            #1 -> MemberSelector(Selector=Value.Size) => #13
            #13, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #14
            #1 -> MemberSelector(Selector=Value.Colour1) => #15
            #15, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #16
            #1 -> MemberSelector(Selector=Value.Colour2) => #17
            #17, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #18
            #1 -> MemberSelector(Selector=Value.numDots1) => #19
            #19, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
            #1 -> MemberSelector(Selector=Value.numDots2) => #21
            #21, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #22
            #2, #12, #14, #16, #18, #20, #22 -> Zip => #23
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #24
            #24, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #25
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #26
            #26, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #27
            #1 -> MemberSelector(Selector=Value.Contrast1) => #28
            ExternalizedMapping(Value(DisplayName=Contrast1)) => #29
            #28, #29 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #30
            #1 -> MemberSelector(Selector=Value.Contrast2) => #31
            ExternalizedMapping(Value(DisplayName=Contrast2)) => #32
            #31, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #33
            #25, #27, #30, #33 -> Zip => #34
            #1 -> MemberSelector(Selector=Value.VelocityX1) => #35
            ExternalizedMapping(Value(DisplayName=VelocityX1)) => #36
            #35, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #37
            #1 -> MemberSelector(Selector=Value.VelocityX2) => #38
            ExternalizedMapping(Value(DisplayName=VelocityX2)) => #39
            #38, #39 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #40
            #1 -> MemberSelector(Selector=Value.VelocityY1) => #41
            ExternalizedMapping(Value(DisplayName=VelocityY1)) => #42
            #41, #42 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityY2) => #44
            ExternalizedMapping(Value(DisplayName=VelocityY2)) => #45
            #44, #45 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #46
            #1 -> MemberSelector(Selector=Value.Coherence1) => #47
            ExternalizedMapping(Value(DisplayName=Coherence1)) => #48
            #47, #48 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #1 -> MemberSelector(Selector=Value.Coherence2) => #50
            ExternalizedMapping(Value(DisplayName=Coherence2)) => #51
            #50, #51 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #52
            #37, #40, #43, #46, #49, #52 -> Zip => #53
            #23, #34, #53 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,

                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast1,
                Item2.Item4 as Contrast2,

                Item3.Item1 as VelX1,
                Item3.Item2 as VelX2,
                Item3.Item3 as VelY1,
                Item3.Item4 as VelY2,
                Item3.Item5 as Coherence1,
                Item3.Item6 as Coherence2)
            -> WorkflowOutput
        -> WorkflowOutput
    Source2=#1 -> Disable Concat => #2
    Disable SubscribeSubject Random => #3
    #2, #3 -> Disable Bonsai.Numerics.Permutation => #4
    Disable ExternalizedMapping(Count) => #5
    ExternalizedMapping(SpeedMultiplier, TrialClassPostStimTime) => #6
    #4, #6 -> CreateObservable CreateTrial
        WorkflowInput Source1
        -> ReplaySubject Parameters(BufferSize=nil) => #1
        -> Disable MulticastSubject TrialParams
        SubscribeSubject Borders
        -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #4
        ExternalizedMapping(Lower(DisplayName="ISI lower bound"), Upper(DisplayName="ISI upper bound"))
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=1, Upper=1)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #9
        SubscribeSubject DrawStimuli
        -> Take(Count=1)
        -> FloatProperty(Value=1) => #12
        Bonsai.Shaders.UpdateFrame
        -> MemberSelector(Selector=TimeStep.ElapsedTime)
        -> Take(Count=1) => #15
        SubscribeSubject Parameters
        -> MemberSelector(Selector=VelY1) => #17
        #15, #17 -> Zip
        -> Multiply
        -> PropertyMapping(VelocityY) => #20
        SubscribeSubject Parameters
        -> MemberSelector(Selector=VelY2) => #22
        #15, #22 -> Zip
        -> Multiply
        -> PropertyMapping(VelocityY) => #25
        SubscribeSubject Parameters
        -> MemberSelector(Selector=dotLifetime) => #27
        #27, #15 -> Zip
        -> Divide
        -> PropertyMapping(dotLifetime) => #30
        SubscribeSubject Parameters
        -> MemberSelector(Selector=dotLifetime) => #32
        IntProperty(Value=10)
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.Seconds)
        -> PropertyMapping(rndseed) => #36
        IntProperty(Value=10)
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.Seconds)
        -> Add(Operand=IntProperty(Value=99))
        -> PropertyMapping(rndseed) => #41
        SubscribeSubject StimulusXLoc
        -> PropertyMapping(LocationX) => #43
        SubscribeSubject StimulusXLoc
        -> PropertyMapping(LocationX) => #45
        SubscribeSubject Parameters
        -> PropertyMapping(Diameter(Selector=Size), dotLifetimeBool(Selector=dotLifeBool)) => #47
        SubscribeSubject Parameters
        -> MemberSelector(Selector=Duration)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT1S) => #52
        SubscribeSubject Parameters
        -> PropertyMapping(Diameter(Selector=Size), dotLifetimeBool(Selector=dotLifeBool)) => #54
        SubscribeSubject Parameters
        -> MemberSelector(Selector=numDots1)
        -> PropertyMapping(numDots) => #57
        #4, #57, #36 -> GenerateDotField(numDots=573, left=-120, right=120, top=60, bottom=-60, rndseed=26) => #58
        #57, #30 -> GenerateDotLives(dotLifetime=60, numDots=573) => #59
        #58, #59 -> Zip => #60
        #32, #15 -> Zip
        -> Divide
        -> PropertyMapping(dotLifetime) => #63
        SubscribeSubject Parameters
        -> MemberSelector(Selector=numDots2)
        -> PropertyMapping(numDots) => #66
        #4, #66, #41 -> GenerateDotField(numDots=573, left=-120, right=120, top=60, bottom=-60, rndseed=125) => #67
        #66, #63 -> GenerateDotLives(dotLifetime=60, numDots=573) => #68
        #67, #68 -> Zip => #69
        SubscribeSubject Contrast
        -> PropertyMapping(ColorA) => #71
        SubscribeSubject Contrast
        -> PropertyMapping(ColorA) => #73
        ExternalizedMapping(DueTime(DisplayName=TrialClassPostStimTime)) => #74
        ExternalizedMapping(SpeedMultiplier) => #75
        #1, #75 -> GroupWorkflow GetStimulusParameters
            WorkflowInput Source1 => #0
            -> Condition IfNotPause
                SubscribeSubject PauseFlag
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> Take(Count=1)
            -> Unit => #3
            SubscribeSubject ProbDistArray
            -> PropertyMapping(ProbabilityDistributions) => #5
            SubscribeSubject CurrentState
            -> Take(Count=1)
            -> Condition EnsureCorrectStateIndex
                WorkflowInput Source1 => #0
                SubscribeSubject nStates => #1
                #0, #1 -> CombineLatest
                -> LessThan
                -> WorkflowOutput
            -> PropertyMapping(DistributionIndex) => #9
            #9, #5, #3 -> RandSampleFromIndexedDistribution
              ProbabilityDistributions
                ArrayOfFloat(float=16.6666679, float=0, float=16.6666679, float=16.6666679, float=16.6666679, float=0, float=16.6666679, float=0, float=0, float=16.6666679)
                ArrayOfFloat(float=12.5, float=12.5, float=12.5, float=12.5, float=0, float=12.5, float=12.5, float=0, float=12.5, float=12.5)
              DistributionIndex=1
            -> BehaviorSubject CurrentStimIndex => #11
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                it == 0 ? 100 :
                it == 1 ? 40  :
                it == 2 ? 10  :
                it == 3 ? 5   :
                it == 4 ? 0   :
                it == 5 ? 5   :
                it == 6 ? 10  :
                it == 7 ? 40  :
                it == 8 ? 100 :
                it == 9 ? 0  : 0
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Convert.ToSingle(it)
            -> BehaviorSubject Coherence
            #11 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                it == 0 ? 32 :
                it == 1 ? 32 :
                it == 2 ? 32 :
                it == 3 ? 32 :
                it == 4 ? 32 :
                it == 5 ? -32 :
                it == 6 ? -32 :
                it == 7 ? -32 :
                it == 8 ? -32 :
                it == 9 ? 99  : 99
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Convert.ToSingle(it)
            -> Condition IfNotPause => #17
                SubscribeSubject PauseFlag
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Contrast1) => #19
            #11, #19 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                Item1 == 9 ? 0 :
                Item2
            -> Condition IfNotPause => #22
                SubscribeSubject PauseFlag
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            #0 -> Condition IfPause => #23
                SubscribeSubject PauseFlag
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> FloatProperty(Value=0) => #24
            #22, #24 -> Merge
            -> BehaviorSubject Contrast
            #23 -> FloatProperty(Value=99) => #27
            #27, #17 -> Merge => #28
            ExternalizedMapping(Value(DisplayName=SpeedMultiplier)) => #29
            #28, #29 -> Multiply(Operand=FloatProperty(Value=-1))
            -> WorkflowOutput
        -> BehaviorSubject Speed => #77
        #15, #77 -> Zip
        -> Multiply
        -> PropertyMapping(VelocityX) => #80
        SubscribeSubject Coherence
        -> PropertyMapping(Coherence) => #82
        SubscribeSubject Coherence
        -> PropertyMapping(Coherence) => #84
        #69, #80, #25, #63, #45, #54, #73, #84 -> GroupWorkflow DrawMovingCircleArray-2d(Description="Draws multiple colored circles using the input array as position data.") => #85
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1) => #1
            SubscribeSubject DrawStimuli
            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #3
            ExternalizedMapping(LocationX) => #4
            ExternalizedMapping(LocationY) => #5
            ExternalizedMapping(Value(DisplayName=ColorR))
            -> FloatProperty(Value=1)
            -> PropertyMapping(X) => #8
            ExternalizedMapping(Value(DisplayName=ColorG))
            -> FloatProperty(Value=1)
            -> PropertyMapping(Y) => #11
            ExternalizedMapping(Value(DisplayName=ColorB))
            -> FloatProperty(Value=1)
            -> PropertyMapping(Z) => #14
            ExternalizedMapping(Value(DisplayName=ColorA))
            -> FloatProperty(Value=1)
            -> PropertyMapping(W) => #17
            ExternalizedMapping(Value(DisplayName=Diameter))
            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=2)
            -> PropertyMapping(ExtentX, ExtentY) => #20
            #3, #4, #5, #20 -> GroupWorkflow Transform => #21
                WorkflowInput Source1 => #0
                ExternalizedMapping(Angle) => #1
                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=-120, Y=0, Z=0) => #6
                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=2, Y=2, Z=1) => #7
                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                -> WorkflowOutput
            #21, #8, #11, #14, #17 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #23
            #1, #23 -> CombineLatest => #24
            #24, #23 -> Sample
            -> MemberSelector(Selector=Item1) => #26
            #0 -> MemberSelector(Selector=Item2) => #27
            #26, #27 -> CombineLatest => #28
            SubscribeSubject Borders
            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #30
            ExternalizedMapping(VelocityX) => #31
            ExternalizedMapping(VelocityY) => #32
            ExternalizedMapping(Coherence) => #33
            ExternalizedMapping(dotLifetimeBool, dotLifetime) => #34
            #31, #32, #33, #30, #34, #28 -> moveDots_2dLife(VelocityX=-0.533333361, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=60, left=-120, right=120, top=60, bottom=-60)
            -> MemberSelector(Selector=Item1)
            -> Bonsai.Shaders.DrawMeshInstanced
              ShaderName=CircleArray
              MeshName=Quad
              Usage=DynamicDraw
              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
            -> WorkflowOutput
        #15, #77 -> Zip
        -> Multiply
        -> PropertyMapping(VelocityX) => #88
        #60, #88, #20, #30, #43, #47, #71, #82 -> GroupWorkflow DrawMovingCircleArray-2d(Description="Draws multiple colored circles using the input array as position data.") => #89
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1) => #1
            SubscribeSubject DrawStimuli
            -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #3
            ExternalizedMapping(LocationX) => #4
            ExternalizedMapping(LocationY) => #5
            ExternalizedMapping(Value(DisplayName=ColorR))
            -> FloatProperty(Value=0)
            -> PropertyMapping(X) => #8
            ExternalizedMapping(Value(DisplayName=ColorG))
            -> FloatProperty(Value=0)
            -> PropertyMapping(Y) => #11
            ExternalizedMapping(Value(DisplayName=ColorB))
            -> FloatProperty(Value=0)
            -> PropertyMapping(Z) => #14
            ExternalizedMapping(Value(DisplayName=ColorA))
            -> FloatProperty(Value=1)
            -> PropertyMapping(W) => #17
            ExternalizedMapping(Value(DisplayName=Diameter))
            -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=2)
            -> PropertyMapping(ExtentX, ExtentY) => #20
            #3, #4, #5, #20 -> GroupWorkflow Transform => #21
                WorkflowInput Source1 => #0
                ExternalizedMapping(Angle) => #1
                ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                ExternalizedMapping(X(DisplayName=LocationX)) => #4
                ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=-120, Y=0, Z=0) => #6
                #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=2, Y=2, Z=1) => #7
                #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                -> WorkflowOutput
            #21, #8, #11, #14, #17 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
            -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #23
            #1, #23 -> CombineLatest => #24
            #24, #23 -> Sample
            -> MemberSelector(Selector=Item1) => #26
            #0 -> MemberSelector(Selector=Item2) => #27
            #26, #27 -> CombineLatest => #28
            SubscribeSubject Borders
            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #30
            ExternalizedMapping(VelocityX) => #31
            ExternalizedMapping(VelocityY) => #32
            ExternalizedMapping(Coherence) => #33
            ExternalizedMapping(dotLifetimeBool, dotLifetime) => #34
            #31, #32, #33, #30, #34, #28 -> moveDots_2dLife(VelocityX=-0.533333361, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=60, left=-120, right=120, top=60, bottom=-60)
            -> MemberSelector(Selector=Item1)
            -> Bonsai.Shaders.DrawMeshInstanced
              ShaderName=CircleArray
              MeshName=Quad
              Usage=DynamicDraw
              InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
            -> WorkflowOutput
        #89, #85 -> Zip => #90
        #90, #52 -> TakeUntil
        -> Last => #92
        #92, #9 -> Bonsai.Shaders.Delay(DueTime=PT1S)
        -> Unit
        -> MulticastSubject TrialEnds
        -> Unit
        -> WorkflowOutput
        #92 -> FloatProperty(Value=0) => #98
        #98, #12 -> Merge
        -> MulticastSubject QuadState
        #92, #74 -> Bonsai.Shaders.Delay(DueTime=PT0.1S)
        -> GroupWorkflow ClasifyTrialAndUpdateCounters
            SubscribeSubject MovMeanWheelSpeed => #0
            WorkflowInput Source1 => #1
            #0, #1 -> TakeUntil
            -> Average
            -> BehaviorSubject MeanRunSpeed => #4
            -> Condition RunTrial?
                WorkflowInput Source1
                -> GreaterThan(Operand=DoubleProperty(Value=3))
                -> WorkflowOutput
            -> IntProperty(Value=1) => #6
            #4 -> Condition StatTrial?
                WorkflowInput Source1
                -> LessThanOrEqual(Operand=DoubleProperty(Value=3))
                -> WorkflowOutput
            -> IntProperty(Value=0) => #8
            #6, #8 -> Merge
            -> First
            -> BehaviorSubject TrialStateClass
            #0 -> FloatProperty(Value=1)
            -> Accumulate => #13
            #13, #1 -> TakeUntil
            -> Last => #15
            ExternalizedMapping(RunMinPropThresh) => #16
            #0, #16 -> Condition OverRunThresh?
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=RunMinPropThresh)) => #1
                #0, #1 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0.5))
                -> WorkflowOutput
            -> FloatProperty(Value=1)
            -> Accumulate => #19
            ExternalizedMapping(StatMaxPropThresh) => #20
            FloatProperty(Value=0) => #21
            #19, #21 -> Merge => #22
            #22, #1 -> TakeUntil
            -> Last => #24
            #24, #15 -> Zip
            -> Divide
            -> BehaviorSubject RunProp
            #0, #20 -> Condition UnderStatThresh?
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=StatMaxPropThresh)) => #1
                #0, #1 -> LessThanOrEqual(Operand=DoubleProperty(Value=3))
                -> WorkflowOutput
            -> FloatProperty(Value=1)
            -> Accumulate => #30
            #30, #21 -> Merge => #31
            #31, #1 -> TakeUntil
            -> Last => #33
            #33, #15 -> Zip
            -> Divide
            -> BehaviorSubject StatProp

            SubscribeSubject TrialCounters
            -> PropertyMapping(TrialCounterArray) => #38
            SubscribeSubject CurrentStimIndex => #39
            SubscribeSubject TrialStateClass => #40
            #40, #39 -> Zip => #41
            #38, #41 -> IncrementStateDependentTrialCounter
              TrialCounterArray
                ArrayOfInt(int=3, int=4, int=3, int=3, int=3, int=4, int=3, int=4, int=4, int=3)
                ArrayOfInt(int=2, int=1, int=1, int=1, int=2, int=1, int=1, int=2, int=1, int=1)
            -> MulticastSubject TrialCounters => #43
            #40, #39, #43 -> Zip
            -> MulticastSubject MonitorTrialCountsSub

        SubscribeSubject Parameters => #103
        SubscribeSubject Contrast => #104
        SubscribeSubject Speed => #105
        SubscribeSubject Coherence => #106
        #103, #105, #104, #106 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1.Id as Id,
            Item1.Duration as Duration,
            Item1.Size as Size,
            Item1.Colour1 as Colour1,
            Item1.Colour2 as Colour2,
            Item1.numDots1 as numDots1,
            Item1.numDots2 as numDots2,
            Item1.dotLifeBool as dotLifeBool,
            Item1.dotLifetime as dotLifetime,
            Item3 as Contrast1,
            Item3 as Contrast2,
            Item2 as VelX1,
            Item2 as VelX2,
            Item1.VelY1 as VelY1,
            Item1.VelY2 as VelY2,
            Item4 as Coherence1,
            Item4 as Coherence2)
        -> MulticastSubject TrialParams
    -> Concat
    -> Repeat => #9
    #9, #5 -> Disable RepeatCount(Count=100)
    -> WorkflowOutput

    SubscribeSubject DrawStimuli => #12
    SubscribeSubject QuadState
    -> PropertyMapping(ColorR(Selector=it), ColorB(Selector=it), ColorG(Selector=it)) => #14
    #12, #14 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawQuad.bonsai
      ExtentX=5
      ExtentY=5
      LocationX=-80
      LocationY=-32
      Layer=1
      Angle=0
      ColorR=0
      ColorG=0
      ColorB=0
      ColorA=1
#8, #3 -> SubscribeWhen => #9
#9, #6 -> TakeUntil
-> WorkflowOutput

Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false)
-> IntProperty(Value=0) => #13
Bonsai.Windows.Input.KeyDown(Filter="ShiftKey P Shift", SuppressRepetitions=false)
-> IntProperty(Value=1) => #15
#13, #15 -> Merge
-> BehaviorSubject PauseFlag

ExternalizedMapping(FileName(Category=StimControl), UpdateProbabilityDistsBool(Category=StimControl), scalingFactor(Category=StimControl))
-> GroupWorkflow AdaptiveStimControl
    ExternalizedMapping(FileName(Category=StimControl))
    -> GroupWorkflow GenStimProbDists
        ExternalizedMapping(FileName)
        -> Bonsai.IO.CsvReader(FileName=MotionCoherenceSpecCSV.csv, ScanPattern="%f,%f,%f", SkipRows=1) => #1
        -> MemberSelector(Selector=Item1)
        -> ToArray
        -> BehaviorSubject StimulusValues
        #1 -> MemberSelector(Selector=Item2)
        -> ToArray
        -> BehaviorSubject ProbDist1 => #7
        #1 -> MemberSelector(Selector=Item3)
        -> ToArray
        -> BehaviorSubject ProbDist2 => #10
        -> Delay(DueTime=PT1S) => #11
        #7, #11 -> Merge
        -> ToList
        -> Disable ToArray => #14
        -> BehaviorSubject ProbDistArray
        -> MemberSelector(Selector=Count)
        -> Disable MemberSelector(Selector=Length)
        -> BehaviorSubject nStates
        -> BehaviorSubject initCountersSub
        -> WorkflowOutput
        #14 -> BehaviorSubject OriginalProbDistArray
        #10 -> MemberSelector(Selector=Length)
        -> BehaviorSubject nStim

    GroupWorkflow InitTrialCounters
        IntProperty(Value=0)
        -> Take(Count=1) => #1
        SubscribeSubject nStim
        -> PropertyMapping(Count) => #3
        #1, #3 -> RepeatCount(Count=10)
        -> ToArray => #5
        SubscribeSubject nStates
        -> PropertyMapping(Count) => #7
        #5, #7 -> RepeatCount(Count=2)
        -> ToList
        -> Disable ToArray
        -> Disable MemberSelector(Selector=Count)
        -> BehaviorSubject TrialCounters => #12
        SubscribeSubject initCountersSub => #13
        #12, #13 -> SubscribeWhen
        -> WorkflowOutput
        IntProperty(Value=0) => #16
        IntProperty(Value=0) => #17
        #17, #16, #12 -> Zip
        -> Skip(Count=1)
        -> BehaviorSubject MonitorTrialCountsSub => #20
        #20, #13 -> SubscribeWhen

    ExternalizedMapping(UpdateProbabilityDistsBool(Category=StimControl), scalingFactor(Category=StimControl))
    -> GroupWorkflow UpdateProbabilityDists
        SubscribeSubject OriginalProbDistArray => #0
        SubscribeSubject TrialCounters => #1
        #1, #0 -> CombineLatest
        -> Skip(Count=1) => #3
        ExternalizedMapping(scalingFactor) => #4
        #3, #4 -> UpdateProbDistArray(scalingFactor=1E+21)
        -> Condition
            SubscribeSubject UpdateProbDistsBool
            -> WorkflowOutput
        -> MulticastSubject ProbDistArray
        -> WorkflowOutput

        ExternalizedMapping(Value(DisplayName=UpdateProbabilityDistsBool))
        -> BooleanProperty(Value=true)
        -> BehaviorSubject UpdateProbDistsBool

    Disable GroupWorkflow SimulateState
        Disable Timer(DueTime=PT0S, Period=PT2S)
        -> Disable Bonsai.Numerics.CreateRandom(Seed=nil)
        -> Disable Bonsai.Numerics.Distributions.CreateNormal(Mean=0, StdDev=4)
        -> Disable Bonsai.Numerics.Distributions.Sample
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            it < 0 ? 0 :
            1
        -> Disable BehaviorSubject CurrentState
        -> Disable WorkflowOutput

        Disable ExternalizedMapping(Value(DisplayName=CurrentState))
        -> Disable IntProperty(Value=2)
        -> Disable BehaviorSubject CurrentState

    GroupWorkflow MonitorTrialCounts
        GroupWorkflow InitBarGraph => #0
            IntProperty(Value=0) => #0
            Timer(DueTime=PT0S, Period=PT0.1S)
            -> IntProperty(Value=1)
            -> Accumulate => #3
            SubscribeSubject nStim
            -> Subtract(Operand=IntProperty(Value=1))
            -> PropertyMapping(Count) => #6
            #3, #6 -> Take(Count=9) => #7
            #0, #7 -> Merge => #8
            Timer(DueTime=PT0S, Period=PT0.001S)
            -> IntProperty(Value=0) => #10
            SubscribeSubject nStim
            -> PropertyMapping(Count) => #12
            #10, #12 -> Take(Count=10) => #13
            #13, #8 -> Zip
            -> WorkflowOutput
        SubscribeSubject MonitorTrialCountsSub => #1
        -> Condition State1? => #2
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
          Expression: Item3[Item1][Item2]
        #2 -> MemberSelector(Selector=Item2) => #4
        #3, #4 -> Zip => #5
        #1 -> Condition State0? => #6
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
          Expression: Item3[Item1][Item2]
        #6 -> MemberSelector(Selector=Item2) => #8
        #7, #8 -> Zip => #9
        #9, #0 -> Merge => #10
        #5, #0 -> Merge => #11
        #10, #11 -> CombineLatest => #12
        -> MemberSelector(Selector=Item1)
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Item2, ValueSelector=Item1, BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        #12 -> MemberSelector(Selector=Item2)
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Item2, ValueSelector=Item1, BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)

ExternalizedMapping(Value(DisplayName=StimulusLocationX))
-> GroupWorkflow VarInIt
    Bonsai.Numerics.CreateRandom(Seed=42)
    -> BehaviorSubject Random

    FloatProperty(Value=0)
    -> PublishSubject Sync

    FloatProperty(Value=1)
    -> BehaviorSubject TrialProgress

    IntProperty(Value=0)
    -> BehaviorSubject SyncPulse

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

    IntProperty(Value=0)
    -> BehaviorSubject EyeFrameCount

    BooleanProperty(Value=false)
    -> BehaviorSubject TimerExpired

    StringProperty(Value=C:\Users\saleem_lab\Documents\VisualStimuli_Temp\)
    -> BehaviorSubject "Saving Dir"

    FloatProperty(Value=1)
    -> BehaviorSubject RepCounter

    ExternalizedMapping(Value(DisplayName=binFileName, Category=Filename))
    -> StringProperty(Value=SparseNoise_Log_.bin)
    -> BehaviorSubject "Bin FileName"

    FloatProperty(Value=200)
    -> BehaviorSubject MousePos

    IntProperty(Value=0)
    -> BehaviorSubject VideoFrameCount

    FloatProperty(Value=0.1)
    -> BehaviorSubject DurationSingleImage

    ExternalizedMapping(Value)
    -> FloatProperty(Value=-120)
    -> BehaviorSubject StimulusXLoc

    Unit
    -> BehaviorSubject TrialEnds

GroupWorkflow Arduino
    Bonsai.IO.CreateSerialPort
      Name=ArduinoSerial
      PortName=COM4
      BaudRate=1000000
      Encoding=us-ascii
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    ExternalizedMapping(PortName)
    -> Bonsai.IO.SerialStringRead(PortName=ArduinoSerial, NewLine=\n)
    -> Parse(Pattern="%i,%i,%i,%i,%i,%i")
    -> Retry => #4
    -> MemberSelector(Selector=Item1)
    -> BehaviorSubject WheelInput
    #4 -> MemberSelector(Selector=Item2)
    -> DistinctUntilChanged
    -> BehaviorSubject LeftLick
    #4 -> MemberSelector(Selector=Item3)
    -> DistinctUntilChanged
    -> BehaviorSubject RightLick
    #4 -> MemberSelector(Selector=Item4)
    -> BehaviorSubject LastSyncPulseTime
    #4 -> MemberSelector(Selector=Item5)
    -> BehaviorSubject Photodiode
    #4 -> MemberSelector(Selector=Item6)
    -> BehaviorSubject ArduinoTime

    Bonsai.IO.CreateSerialPort
      Name=ArduinoPD
      PortName=COM5
      BaudRate=250000
      Encoding=us-ascii
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Bonsai.IO.SerialStringRead(PortName=ArduinoPD, NewLine=\n)
    -> Parse(Pattern="%i,%i")
    -> Retry => #22
    -> BehaviorSubject PDandAsync
    #22 -> MemberSelector(Selector=Item1)

GroupWorkflow Logging
    GroupWorkflow WheelLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #0
        ExternalizedMapping(Overwrite) => #0
        ExternalizedMapping(Suffix) => #1
        ExternalizedMapping(Name)
        -> SubscribeSubject WheelLog => #3
        SubscribeSubject WheelName
        -> PropertyMapping(FileName) => #5
        #5, #0, #1, #3 -> Bonsai.IO.CsvWriter
          FileName=C:\Data\Data\DotMotion_SpeedTuning\20250611\M25065_DotMotion_SpeedTuning_WheelLog.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""
    Bonsai.Windows.Input.KeyDown(Filter="MButton Back Clear D H L Shift", SuppressRepetitions=false) => #1
    #0, #1 -> SubscribeWhen
    GroupWorkflow VideoLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #3
        SubscribeSubject VideoLog => #0
        ExternalizedMapping(Overwrite) => #1
        ExternalizedMapping(Suffix) => #2
        SubscribeSubject VideoCSVName
        -> PropertyMapping(FileName) => #4
        #4, #1, #2, #0 -> Bonsai.IO.CsvWriter
          FileName=C:\Data\Data\DotMotion_SpeedTuning\20250611\M25065_DotMotion_SpeedTuning_Video.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""
    #3, #1 -> SubscribeWhen
    GroupWorkflow PhotodiodeLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #5
        ExternalizedMapping(Overwrite) => #0
        ExternalizedMapping(Suffix) => #1
        ExternalizedMapping(Name)
        -> SubscribeSubject PDLog => #3
        SubscribeSubject PDname
        -> PropertyMapping(FileName) => #5
        #5, #0, #1, #3 -> Bonsai.IO.CsvWriter
          FileName=C:\Data\Data\DotMotion_SpeedTuning\20250611\M25065_DotMotion_SpeedTuning_PDAsync.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""
    #5, #1 -> SubscribeWhen
    GroupWorkflow TrialLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #7
        SubscribeSubject TrialParams => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #2
        #0, #2 -> Zip => #3
        ExternalizedMapping(Overwrite) => #4
        ExternalizedMapping(Suffix) => #5
        SubscribeSubject ArduinoTime => #6
        #3, #6 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #8
          Expression:
            new(Item1.Item1.Id as Id,
            Item1.Item1.Duration as Duration,
            Item1.Item1.Size as Size,
            Item1.Item1.Colour1 as Colour1,
            Item1.Item1.Colour2 as Colour2,
            Item1.Item1.numDots1 as numDots1,
            Item1.Item1.numDots2 as numDots2,
            Item1.Item1.dotLifeBool as dotLifeBool,
            Item1.Item1.dotLifetime as dotLifetime,
            Item1.Item1.Contrast1 as Contrast1,
            Item1.Item1.Contrast2 as Contrast2,
            Item1.Item1.VelX1 as VelX1,
            Item1.Item1.VelX2 as VelX2,
            Item1.Item1.Coherence1 as Coherence1,
            Item1.Item1.Coherence1 as Coherence1,
            Item1.Item2 as BonsaiTime,
            Item2 as ArduinoTime)
        SubscribeSubject TrialName
        -> PropertyMapping(FileName) => #10
        #10, #4, #5, #8 -> Bonsai.IO.CsvWriter
          FileName=C:\Data\Data\DotMotion_SpeedTuning\20250611\M25065_DotMotion_SpeedTuning_Trial.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector="Id,Duration,Size,Colour1,Colour2,numDots1,numDots2,dotLifeBool,dotLifetime,Contrast1,Contrast2,VelX1,VelX2,Coherence1,BonsaiTime,ArduinoTime"
    #7, #1 -> SubscribeWhen

    GroupWorkflow WheelLogging
        SubscribeSubject WheelInput => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        SubscribeSubject LastSyncPulseTime => #3
        SubscribeSubject ArduinoTime => #4
        #0, #3, #4, #2 -> Zip => #5
        SubscribeSubject RenderFrameCount => #6
        #5, #6 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as Wheel, Item1.Item2 as LastSyncPulseTime, Item1.Item3 as ArduinoTime, Item1.Item4 as BonsaiTime, Item2 as RenderFrameCount)
        -> BehaviorSubject WheelLog
        -> WorkflowOutput

    GroupWorkflow VideoLogging
        SubscribeSubject VideoFrameCount => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        SubscribeSubject ArduinoTime => #3
        SubscribeSubject VideoLEDAsync => #4
        #0, #2, #4 -> Zip => #5
        #5, #3 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as VideoFrameCount, Item1.Item3 as LEDAsync, Item2 as ArduinoTime, Item1.Item2 as BonsaiTime)
        -> BehaviorSubject VideoLog
        -> WorkflowOutput

    GroupWorkflow PhotodiodeLogging
        SubscribeSubject PDandAsync => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        #0, #2 -> Zip => #3
        SubscribeSubject ArduinoTime => #4
        #3, #4 -> WithLatestFrom
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as Photodiode, Item1.Item2 as AsyncPulse, Item2 as BonsaiTime, Item3 as ArduinoTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1.Item1 as Photodiode, Item1.Item1.Item2 as AsyncPulse, Item1.Item2 as BonsaiTime, Item2 as ArduinoTime)
        -> BehaviorSubject PDLog
        -> WorkflowOutput

    GroupWorkflow IntialiseTrialParams
        IntProperty(Value=0) => #0
        FloatProperty(Value=0) => #1
        FloatProperty(Value=0) => #2
        FloatProperty(Value=0) => #3
        FloatProperty(Value=0) => #4
        FloatProperty(Value=0) => #5
        FloatProperty(Value=0) => #6
        #0, #5, #1, #2, #3, #4, #6 -> Zip => #7
        IntProperty(Value=0) => #8
        IntProperty(Value=0) => #9
        FloatProperty(Value=0) => #10
        FloatProperty(Value=0) => #11
        FloatProperty(Value=0) => #12
        FloatProperty(Value=0) => #13
        FloatProperty(Value=0) => #14
        #8, #9, #10, #11, #12, #13, #14 -> Zip => #15
        FloatProperty(Value=0) => #16
        FloatProperty(Value=0) => #17
        FloatProperty(Value=0) => #18
        #16, #17, #18 -> Zip => #19
        #7, #15, #19 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1.Item1 as Id,
            Item1.Item2 as Duration,
            Item1.Item3 as Size,
            Item1.Item4 as Colour1,
            Item1.Item5 as Colour2,
            Item1.Item6 as numDots1,
            Item1.Item7 as numDots2,

            Item2.Item1 as dotLifeBool,
            Item2.Item2 as dotLifetime,
            Item2.Item3 as Contrast1,
            Item2.Item4 as Contrast2,
            Item2.Item5 as VelX1,
            Item2.Item6 as VelX2,
            Item2.Item7 as VelY1,

            Item3.Item1 as VelY2,
            Item3.Item2 as Coherence1,
            Item3.Item3 as Coherence2)
        -> Skip(Count=1)
        -> BehaviorSubject TrialParams

GroupWorkflow Video => #24
    Bonsai.Vision.CameraCapture => #0
      Index=0
      CaptureProperties
        CapturePropertyAssignment(Property=Fps, Value=30)
        CapturePropertyAssignment(Property=Saturation, Value=0)
        CapturePropertyAssignment(Property=Exposure, Value=-5)
        CapturePropertyAssignment(Property=Gain, Value=0)
        CapturePropertyAssignment(Property=Contrast, Value=100)
        CapturePropertyAssignment(Property=Brightness, Value=0)
        CapturePropertyAssignment(Property=Sharpness, Value=0)
        CapturePropertyAssignment(Property=Gamma, Value=0)
        CapturePropertyAssignment(Property=Backlight, Value=0)
        CapturePropertyAssignment(Property=FrameWidth, Value=2560)
        CapturePropertyAssignment(Property=FrameHeight, Value=1440)
    -> Bonsai.Vision.Flip(Mode=Both) => #1
    -> Disable MemberSelector(Selector=Width)
    #1 -> Disable MemberSelector(Selector=Height)
    #1 -> Disable TimeInterval
    #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=496, Y=0, Width=552, Height=330))
    #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=2272, Y=84, Width=59, Height=70))
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Dsp.Sum
    -> MemberSelector(Selector=Val0)
    -> BehaviorSubject VideoLEDAsync
    Bonsai.Windows.Input.KeyDown(Filter="MButton Back Clear D H L Shift", SuppressRepetitions=false) => #11
    SubscribeSubject BodyVideoName
    -> PropertyMapping(FileName) => #13
    #0, #13 -> Bonsai.Vision.VideoWriter
      FileName=C:\Data\Data\DotMotion_SpeedTuning\20250611\M25065_DotMotion_SpeedTuning_BodyVideo.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    -> ElementIndex
    -> MemberSelector(Selector=Index)
    -> MulticastSubject VideoFrameCount => #17
    #17, #11 -> SubscribeWhen
Bonsai.Windows.Input.KeyDown(Filter="LButton MButton XButton1 Back Tab Clear Return Enter A D E H I L M Shift", SuppressRepetitions=true) => #25
#24, #25 -> SubscribeWhen

Disable GroupWorkflow "Fake Arduino for testing"
    IntProperty(Value=0)
    -> IntProperty(Value=0)
    -> BehaviorSubject WheelInput

    IntProperty(Value=0)
    -> BehaviorSubject LeftLick

    IntProperty(Value=0)
    -> BehaviorSubject RightLick

    IntProperty(Value=0)
    -> BehaviorSubject LastSyncPulseTime

    IntProperty(Value=0)
    -> BehaviorSubject Photodiode

    IntProperty(Value=0)
    -> BehaviorSubject ArduinoTime

    IntProperty(Value=0) => #13
    IntProperty(Value=0) => #14
    #14, #13 -> Zip
    -> BehaviorSubject PDandAsync

    Bonsai.Windows.Input.KeyDown(Filter=Left, SuppressRepetitions=false)
    -> IntProperty(Value=1)
    -> Accumulate
    -> MulticastSubject LeftLick

    Bonsai.Windows.Input.KeyDown(Filter=Right, SuppressRepetitions=false)
    -> IntProperty(Value=1)
    -> Accumulate
    -> MulticastSubject RightLick

    Bonsai.Windows.Input.MouseMove
    -> MemberSelector(Selector=X) => #26
    Timer(DueTime=PT0S, Period=PT0.01S)
    -> IntProperty(Value=10)
    -> Accumulate => #29
    IntProperty(Value=0) => #30
    #26, #30 -> Merge
    -> Divide(Operand=IntProperty(Value=10)) => #32
    #29, #32 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #34
      Expression: new(Item2 as Item1, Item1 as Item2)
    -> MemberSelector(Selector=Item1)
    -> MulticastSubject WheelInput
    #34 -> MemberSelector(Selector=Item2)
    -> MulticastSubject ArduinoTime

GroupWorkflow CalcWheelSpeed
    SubscribeSubject WheelInput => #0
    SubscribeSubject ArduinoTime => #1
    #0, #1 -> Zip => #2
    -> MemberSelector(Selector=Item1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToSingle(it)
    -> Bonsai.Dsp.Difference(Order=1)
    -> Bonsai.Numerics.Abs
    -> Condition IgnoreOverflowTicks => #7
        WorkflowInput Source1
        -> Bonsai.Dsp.Abs
        -> LessThan(Operand=DoubleProperty(Value=512))
        -> WorkflowOutput
    SubscribeSubject cmPerTick => #8
    #7, #8 -> CombineLatest
    -> Multiply => #10
    #2 -> MemberSelector(Selector=Item2)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToSingle(it)
    -> Bonsai.Dsp.Difference(Order=1)
    -> Divide(Operand=DoubleProperty(Value=1000)) => #14
    #10, #14 -> Zip
    -> Divide
    -> BehaviorSubject RawWheelSpeed => #17
    ExternalizedMapping(TimeSpan(DisplayName=RunningAverageTimeWindow)) => #18
    #17, #18 -> WindowTime(TimeSpan=PT0.05S)
    -> SelectMany
        WorkflowInput Source1
        -> Average
        -> WorkflowOutput
    -> Retry
    -> BehaviorSubject MovMeanWheelSpeed => #22
    -> Condition
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=3))
        -> WorkflowOutput
    -> IntProperty(Value=1) => #24
    #22 -> Condition
        WorkflowInput Source1
        -> LessThanOrEqual(Operand=DoubleProperty(Value=3))
        -> WorkflowOutput
    -> IntProperty(Value=0) => #26
    #24, #26 -> Merge
    -> BehaviorSubject CurrentState

    ExternalizedMapping(Value(DisplayName=TicksPerRev))
    -> FloatProperty(Value=4096) => #30
    ExternalizedMapping(Value(DisplayName=WheelDiam))
    -> FloatProperty(Value=19.5) => #32
    FloatProperty(Value=3.14159274) => #33
    #32, #33 -> CombineLatest
    -> Multiply
    -> BehaviorSubject WheelCircumference => #36
    #36, #30 -> CombineLatest
    -> Divide
    -> BehaviorSubject cmPerTick
-> DelaySubscription(DueTime=PT3S)

Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu B P R Alt", SuppressRepetitions=false)
-> StringProperty(Value=r20)
-> Bonsai.IO.SerialStringWrite(PortName=ArduinoSerial, NewLine=\r)

Bonsai.Windows.Input.KeyDown(Filter="MButton Back Clear D H L Alt", SuppressRepetitions=false)
-> StringProperty(Value=l20)
-> Bonsai.IO.SerialStringWrite(PortName=ArduinoSerial, NewLine=\r)

ExternalizedMapping(StimulusID(Category=Filename), MouseID(Category=Filename), SavingDirBase(Category=Filename))
-> GroupWorkflow "Generate File Names"
    ExternalizedMapping(Value(DisplayName=StimulusID))
    -> StringProperty(Value=DotMotion_MotionCoherence) => #1
    ExternalizedMapping(Value(DisplayName=MouseID))
    -> StringProperty(Value=M25066) => #3
    SubscribeSubject DateDir => #4
    ExternalizedMapping(Value(DisplayName=SavingDirBase))
    -> StringProperty(Value=C:\) => #6
    #3, #1, #6, #4 -> Zip
    -> Format(Format={2}\Data\{0}\{3}\{0}_{1}, Selector="Item1,Item2,Item3,Item4")
    -> BehaviorSubject FilenamePrefix

    SubscribeSubject FilenamePrefix => #10
    -> Format(Format={0}_WheelLog.csv, Selector=it)
    -> BehaviorSubject WheelName
    #10 -> Format(Format={0}_Trial.csv, Selector=it)
    -> BehaviorSubject TrialName
    #10 -> Format(Format={0}_Video.csv, Selector=it)
    -> BehaviorSubject VideoCSVName
    #10 -> Format(Format={0}_BodyVideo.avi, Selector=it)
    -> BehaviorSubject BodyVideoName
    #10 -> Format(Format={0}_ArduinoStim.csv, Selector=it)
    -> BehaviorSubject PWMCSVName
    #10 -> Format(Format={0}_PDAsync.csv, Selector=it)
    -> BehaviorSubject PDname

    Bonsai.Scripting.IronPython.PythonSource
      Script:
        from System import DateTime,String

        @returns(String)
        def generate():
          yield (DateTime.Now).ToString("yyyyMMdd")
    -> BehaviorSubject DateDir
