<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:ffmpeg="clr-namespace:Bonsai.FFmpeg;assembly=Bonsai.FFmpeg"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="DisplayDevice" />
        <Property Name="WindowState" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DisplayAndResources</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DisplayDevice" />
              <Property Name="WindowState" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>1800</gl:Width>
                <gl:Height>800</gl:Height>
                <gl:VSync>Off</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Gray</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>false</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Hidden</gl:WindowBorder>
                <gl:WindowState>Fullscreen</gl:WindowState>
                <gl:DisplayDevice>Third</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:TextureResources">
                <gl:Textures>
                  <gl:TextureConfiguration xsi:type="gl:Texture2D">
                    <gl:Name>DynamicVideo</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Nearest</gl:MinFilter>
                    <gl:MagFilter>Nearest</gl:MagFilter>
                  </gl:TextureConfiguration>
                </gl:Textures>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Borders</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Top" Selector="Item1" />
                <Property Name="Bottom" Selector="Item2" />
                <Property Name="Left" Selector="Item3" />
                <Property Name="Right" Selector="Item4" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
              <Left>-120</Left>
              <Right>120</Right>
              <Bottom>-60</Bottom>
              <Top>60</Top>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>DrawStimuli</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
              <FaceSize xsi:nil="true" />
              <ClearColor>Gray</ClearColor>
              <Width xsi:nil="true" />
              <Height xsi:nil="true" />
              <RotationZ>0</RotationZ>
              <RotationY>0</RotationY>
              <RotationX>0</RotationX>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>15</Width>
              <Height>19.5</Height>
              <Rotation>
                <X>0</X>
                <Y>60.000001669652114</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>-12</X>
                <Y>0</Y>
                <Z>-9</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0</X>
              <Y>0</Y>
              <Width>0.334</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateRenderState">
                <gl:RenderState>
                  <gl:StateConfiguration xsi:type="gl:ViewportState">
                    <gl:X>0</gl:X>
                    <gl:Y>0</gl:Y>
                    <gl:Width>0.333</gl:Width>
                    <gl:Height>1</gl:Height>
                  </gl:StateConfiguration>
                </gl:RenderState>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>15</Width>
              <Height>19.5</Height>
              <Rotation>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>0</X>
                <Y>0</Y>
                <Z>-15</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.333</X>
              <Y>0</Y>
              <Width>0.333</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateRenderState">
                <gl:RenderState>
                  <gl:StateConfiguration xsi:type="gl:ViewportState">
                    <gl:X>0.333</gl:X>
                    <gl:Y>0</gl:Y>
                    <gl:Width>0.333</gl:Width>
                    <gl:Height>1</gl:Height>
                  </gl:StateConfiguration>
                </gl:RenderState>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>15</Width>
              <Height>19.5</Height>
              <Rotation>
                <X>0</X>
                <Y>-60.000001669652114</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>12</X>
                <Y>0</Y>
                <Z>-9</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.667</X>
              <Y>0</Y>
              <Width>0.333</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateRenderState">
                <gl:RenderState>
                  <gl:StateConfiguration xsi:type="gl:ViewportState">
                    <gl:X>0.665</gl:X>
                    <gl:Y>0</gl:Y>
                    <gl:Width>0.333</gl:Width>
                    <gl:Height>1</gl:Height>
                  </gl:StateConfiguration>
                </gl:RenderState>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TimeStep.ElapsedRealTime</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Index</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RenderFrameCount</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="5" To="20" Label="Source1" />
            <Edge From="5" To="21" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="10" To="14" Label="Source1" />
            <Edge From="10" To="17" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Borders</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="TopBorder" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>60</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>Top</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="BottomBorder" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>-60</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>Bottom</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="LeftBorder" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>-120</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>Left</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="RightBorder" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>120</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>Right</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>Borders</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="12" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="12" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="12" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source4" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>VarInIt</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed>42</num:Seed>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Random</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Sync</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialProgress</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>SyncPulse</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>QuadState</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>EyeFrameCount</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>VideoFrameCount</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>TrialLogger</Name>
          <Description>Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.</Description>
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        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Stimulus</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SF0.04TF4</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>GratingSpec</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p1:DoubleGratingSpecification">
                            <p1:Trials>
                              <p1:DoubleGratingParams>
                                <p1:angle_g1>0</p1:angle_g1>
                                <p1:angle_g2>120</p1:angle_g2>
                                <p1:contrast_g1>1</p1:contrast_g1>
                                <p1:contrast_g2>0</p1:contrast_g2>
                                <p1:opacity_g1>1</p1:opacity_g1>
                                <p1:opacity_g2>0</p1:opacity_g2>
                                <p1:phase_g1>0</p1:phase_g1>
                                <p1:phase_g2>0</p1:phase_g2>
                                <p1:temporalFrequency>4</p1:temporalFrequency>
                                <p1:spatialFrequency>0.04</p1:spatialFrequency>
                              </p1:DoubleGratingParams>
                              <p1:DoubleGratingParams>
                                <p1:angle_g1>30</p1:angle_g1>
                                <p1:angle_g2>150</p1:angle_g2>
                                <p1:contrast_g1>1</p1:contrast_g1>
                                <p1:contrast_g2>0</p1:contrast_g2>
                                <p1:opacity_g1>1</p1:opacity_g1>
                                <p1:opacity_g2>0</p1:opacity_g2>
                                <p1:phase_g1>0</p1:phase_g1>
                                <p1:phase_g2>0</p1:phase_g2>
                                <p1:temporalFrequency>4</p1:temporalFrequency>
                                <p1:spatialFrequency>0.04</p1:spatialFrequency>
                              </p1:DoubleGratingParams>
                              <p1:DoubleGratingParams>
                                <p1:angle_g1>60</p1:angle_g1>
                                <p1:angle_g2>180</p1:angle_g2>
                                <p1:contrast_g1>1</p1:contrast_g1>
                                <p1:contrast_g2>0</p1:contrast_g2>
                                <p1:opacity_g1>1</p1:opacity_g1>
                                <p1:opacity_g2>0</p1:opacity_g2>
                                <p1:phase_g1>0</p1:phase_g1>
                                <p1:phase_g2>0</p1:phase_g2>
                                <p1:temporalFrequency>4</p1:temporalFrequency>
                                <p1:spatialFrequency>0.04</p1:spatialFrequency>
                              </p1:DoubleGratingParams>
                              <p1:DoubleGratingParams>
                                <p1:angle_g1>90</p1:angle_g1>
                                <p1:angle_g2>210</p1:angle_g2>
                                <p1:contrast_g1>1</p1:contrast_g1>
                                <p1:contrast_g2>0</p1:contrast_g2>
                                <p1:opacity_g1>1</p1:opacity_g1>
                                <p1:opacity_g2>0</p1:opacity_g2>
                                <p1:phase_g1>0</p1:phase_g1>
                                <p1:phase_g2>0</p1:phase_g2>
                                <p1:temporalFrequency>4</p1:temporalFrequency>
                                <p1:spatialFrequency>0.04</p1:spatialFrequency>
                              </p1:DoubleGratingParams>
                              <p1:DoubleGratingParams>
                                <p1:angle_g1>120</p1:angle_g1>
                                <p1:angle_g2>240</p1:angle_g2>
                                <p1:contrast_g1>1</p1:contrast_g1>
                                <p1:contrast_g2>0</p1:contrast_g2>
                                <p1:opacity_g1>1</p1:opacity_g1>
                                <p1:opacity_g2>0</p1:opacity_g2>
                                <p1:phase_g1>0</p1:phase_g1>
                                <p1:phase_g2>0</p1:phase_g2>
                                <p1:temporalFrequency>4</p1:temporalFrequency>
                                <p1:spatialFrequency>0.04</p1:spatialFrequency>
                              </p1:DoubleGratingParams>
                              <p1:DoubleGratingParams>
                                <p1:angle_g1>150</p1:angle_g1>
                                <p1:angle_g2>270</p1:angle_g2>
                                <p1:contrast_g1>1</p1:contrast_g1>
                                <p1:contrast_g2>0</p1:contrast_g2>
                                <p1:opacity_g1>1</p1:opacity_g1>
                                <p1:opacity_g2>0</p1:opacity_g2>
                                <p1:phase_g1>0</p1:phase_g1>
                                <p1:phase_g2>0</p1:phase_g2>
                                <p1:temporalFrequency>4</p1:temporalFrequency>
                                <p1:spatialFrequency>0.04</p1:spatialFrequency>
                              </p1:DoubleGratingParams>
                              <p1:DoubleGratingParams>
                                <p1:angle_g1>180</p1:angle_g1>
                                <p1:angle_g2>300</p1:angle_g2>
                                <p1:contrast_g1>1</p1:contrast_g1>
                                <p1:contrast_g2>0</p1:contrast_g2>
                                <p1:opacity_g1>1</p1:opacity_g1>
                                <p1:opacity_g2>0</p1:opacity_g2>
                                <p1:phase_g1>0</p1:phase_g1>
                                <p1:phase_g2>0</p1:phase_g2>
                                <p1:temporalFrequency>4</p1:temporalFrequency>
                                <p1:spatialFrequency>0.04</p1:spatialFrequency>
                              </p1:DoubleGratingParams>
                              <p1:DoubleGratingParams>
                                <p1:angle_g1>210</p1:angle_g1>
                                <p1:angle_g2>330</p1:angle_g2>
                                <p1:contrast_g1>1</p1:contrast_g1>
                                <p1:contrast_g2>0</p1:contrast_g2>
                                <p1:opacity_g1>1</p1:opacity_g1>
                                <p1:opacity_g2>0</p1:opacity_g2>
                                <p1:phase_g1>0</p1:phase_g1>
                                <p1:phase_g2>0</p1:phase_g2>
                                <p1:temporalFrequency>4</p1:temporalFrequency>
                                <p1:spatialFrequency>0.04</p1:spatialFrequency>
                              </p1:DoubleGratingParams>
                              <p1:DoubleGratingParams>
                                <p1:angle_g1>240</p1:angle_g1>
                                <p1:angle_g2>0</p1:angle_g2>
                                <p1:contrast_g1>1</p1:contrast_g1>
                                <p1:contrast_g2>0</p1:contrast_g2>
                                <p1:opacity_g1>1</p1:opacity_g1>
                                <p1:opacity_g2>0</p1:opacity_g2>
                                <p1:phase_g1>0</p1:phase_g1>
                                <p1:phase_g2>0</p1:phase_g2>
                                <p1:temporalFrequency>4</p1:temporalFrequency>
                                <p1:spatialFrequency>0.04</p1:spatialFrequency>
                              </p1:DoubleGratingParams>
                              <p1:DoubleGratingParams>
                                <p1:angle_g1>270</p1:angle_g1>
                                <p1:angle_g2>30</p1:angle_g2>
                                <p1:contrast_g1>1</p1:contrast_g1>
                                <p1:contrast_g2>0</p1:contrast_g2>
                                <p1:opacity_g1>1</p1:opacity_g1>
                                <p1:opacity_g2>0</p1:opacity_g2>
                                <p1:phase_g1>0</p1:phase_g1>
                                <p1:phase_g2>0</p1:phase_g2>
                                <p1:temporalFrequency>4</p1:temporalFrequency>
                                <p1:spatialFrequency>0.04</p1:spatialFrequency>
                              </p1:DoubleGratingParams>
                              <p1:DoubleGratingParams>
                                <p1:angle_g1>300</p1:angle_g1>
                                <p1:angle_g2>60</p1:angle_g2>
                                <p1:contrast_g1>1</p1:contrast_g1>
                                <p1:contrast_g2>0</p1:contrast_g2>
                                <p1:opacity_g1>1</p1:opacity_g1>
                                <p1:opacity_g2>0</p1:opacity_g2>
                                <p1:phase_g1>0</p1:phase_g1>
                                <p1:phase_g2>0</p1:phase_g2>
                                <p1:temporalFrequency>4</p1:temporalFrequency>
                                <p1:spatialFrequency>0.04</p1:spatialFrequency>
                              </p1:DoubleGratingParams>
                              <p1:DoubleGratingParams>
                                <p1:angle_g1>330</p1:angle_g1>
                                <p1:angle_g2>90</p1:angle_g2>
                                <p1:contrast_g1>1</p1:contrast_g1>
                                <p1:contrast_g2>0</p1:contrast_g2>
                                <p1:opacity_g1>1</p1:opacity_g1>
                                <p1:opacity_g2>0</p1:opacity_g2>
                                <p1:phase_g1>0</p1:phase_g1>
                                <p1:phase_g2>0</p1:phase_g2>
                                <p1:temporalFrequency>4</p1:temporalFrequency>
                                <p1:spatialFrequency>0.04</p1:spatialFrequency>
                              </p1:DoubleGratingParams>
                            </p1:Trials>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>PlaidSpec</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p1:DoubleGratingSpecification">
                            <p1:Trials>
                              <p1:DoubleGratingParams>
                                <p1:angle_g1>0</p1:angle_g1>
                                <p1:angle_g2>120</p1:angle_g2>
                                <p1:contrast_g1>1</p1:contrast_g1>
                                <p1:contrast_g2>1</p1:contrast_g2>
                                <p1:opacity_g1>0.5</p1:opacity_g1>
                                <p1:opacity_g2>0.5</p1:opacity_g2>
                                <p1:phase_g1>0</p1:phase_g1>
                                <p1:phase_g2>0</p1:phase_g2>
                                <p1:temporalFrequency>4</p1:temporalFrequency>
                                <p1:spatialFrequency>0.04</p1:spatialFrequency>
                              </p1:DoubleGratingParams>
                              <p1:DoubleGratingParams>
                                <p1:angle_g1>30</p1:angle_g1>
                                <p1:angle_g2>150</p1:angle_g2>
                                <p1:contrast_g1>1</p1:contrast_g1>
                                <p1:contrast_g2>1</p1:contrast_g2>
                                <p1:opacity_g1>0.5</p1:opacity_g1>
                                <p1:opacity_g2>0.5</p1:opacity_g2>
                                <p1:phase_g1>0</p1:phase_g1>
                                <p1:phase_g2>0</p1:phase_g2>
                                <p1:temporalFrequency>4</p1:temporalFrequency>
                                <p1:spatialFrequency>0.04</p1:spatialFrequency>
                              </p1:DoubleGratingParams>
                              <p1:DoubleGratingParams>
                                <p1:angle_g1>60</p1:angle_g1>
                                <p1:angle_g2>180</p1:angle_g2>
                                <p1:contrast_g1>1</p1:contrast_g1>
                                <p1:contrast_g2>1</p1:contrast_g2>
                                <p1:opacity_g1>0.5</p1:opacity_g1>
                                <p1:opacity_g2>0.5</p1:opacity_g2>
                                <p1:phase_g1>0</p1:phase_g1>
                                <p1:phase_g2>0</p1:phase_g2>
                                <p1:temporalFrequency>4</p1:temporalFrequency>
                                <p1:spatialFrequency>0.04</p1:spatialFrequency>
                              </p1:DoubleGratingParams>
                              <p1:DoubleGratingParams>
                                <p1:angle_g1>90</p1:angle_g1>
                                <p1:angle_g2>210</p1:angle_g2>
                                <p1:contrast_g1>1</p1:contrast_g1>
                                <p1:contrast_g2>1</p1:contrast_g2>
                                <p1:opacity_g1>0.5</p1:opacity_g1>
                                <p1:opacity_g2>0.5</p1:opacity_g2>
                                <p1:phase_g1>0</p1:phase_g1>
                                <p1:phase_g2>0</p1:phase_g2>
                                <p1:temporalFrequency>4</p1:temporalFrequency>
                                <p1:spatialFrequency>0.04</p1:spatialFrequency>
                              </p1:DoubleGratingParams>
                              <p1:DoubleGratingParams>
                                <p1:angle_g1>120</p1:angle_g1>
                                <p1:angle_g2>240</p1:angle_g2>
                                <p1:contrast_g1>1</p1:contrast_g1>
                                <p1:contrast_g2>1</p1:contrast_g2>
                                <p1:opacity_g1>0.5</p1:opacity_g1>
                                <p1:opacity_g2>0.5</p1:opacity_g2>
                                <p1:phase_g1>0</p1:phase_g1>
                                <p1:phase_g2>0</p1:phase_g2>
                                <p1:temporalFrequency>4</p1:temporalFrequency>
                                <p1:spatialFrequency>0.04</p1:spatialFrequency>
                              </p1:DoubleGratingParams>
                              <p1:DoubleGratingParams>
                                <p1:angle_g1>150</p1:angle_g1>
                                <p1:angle_g2>270</p1:angle_g2>
                                <p1:contrast_g1>1</p1:contrast_g1>
                                <p1:contrast_g2>1</p1:contrast_g2>
                                <p1:opacity_g1>0.5</p1:opacity_g1>
                                <p1:opacity_g2>0.5</p1:opacity_g2>
                                <p1:phase_g1>0</p1:phase_g1>
                                <p1:phase_g2>0</p1:phase_g2>
                                <p1:temporalFrequency>4</p1:temporalFrequency>
                                <p1:spatialFrequency>0.04</p1:spatialFrequency>
                              </p1:DoubleGratingParams>
                              <p1:DoubleGratingParams>
                                <p1:angle_g1>180</p1:angle_g1>
                                <p1:angle_g2>300</p1:angle_g2>
                                <p1:contrast_g1>1</p1:contrast_g1>
                                <p1:contrast_g2>1</p1:contrast_g2>
                                <p1:opacity_g1>0.5</p1:opacity_g1>
                                <p1:opacity_g2>0.5</p1:opacity_g2>
                                <p1:phase_g1>0</p1:phase_g1>
                                <p1:phase_g2>0</p1:phase_g2>
                                <p1:temporalFrequency>4</p1:temporalFrequency>
                                <p1:spatialFrequency>0.04</p1:spatialFrequency>
                              </p1:DoubleGratingParams>
                              <p1:DoubleGratingParams>
                                <p1:angle_g1>210</p1:angle_g1>
                                <p1:angle_g2>330</p1:angle_g2>
                                <p1:contrast_g1>1</p1:contrast_g1>
                                <p1:contrast_g2>1</p1:contrast_g2>
                                <p1:opacity_g1>0.5</p1:opacity_g1>
                                <p1:opacity_g2>0.5</p1:opacity_g2>
                                <p1:phase_g1>0</p1:phase_g1>
                                <p1:phase_g2>0</p1:phase_g2>
                                <p1:temporalFrequency>4</p1:temporalFrequency>
                                <p1:spatialFrequency>0.04</p1:spatialFrequency>
                              </p1:DoubleGratingParams>
                              <p1:DoubleGratingParams>
                                <p1:angle_g1>240</p1:angle_g1>
                                <p1:angle_g2>0</p1:angle_g2>
                                <p1:contrast_g1>1</p1:contrast_g1>
                                <p1:contrast_g2>1</p1:contrast_g2>
                                <p1:opacity_g1>0.5</p1:opacity_g1>
                                <p1:opacity_g2>0.5</p1:opacity_g2>
                                <p1:phase_g1>0</p1:phase_g1>
                                <p1:phase_g2>0</p1:phase_g2>
                                <p1:temporalFrequency>4</p1:temporalFrequency>
                                <p1:spatialFrequency>0.04</p1:spatialFrequency>
                              </p1:DoubleGratingParams>
                              <p1:DoubleGratingParams>
                                <p1:angle_g1>270</p1:angle_g1>
                                <p1:angle_g2>30</p1:angle_g2>
                                <p1:contrast_g1>1</p1:contrast_g1>
                                <p1:contrast_g2>1</p1:contrast_g2>
                                <p1:opacity_g1>0.5</p1:opacity_g1>
                                <p1:opacity_g2>0.5</p1:opacity_g2>
                                <p1:phase_g1>0</p1:phase_g1>
                                <p1:phase_g2>0</p1:phase_g2>
                                <p1:temporalFrequency>4</p1:temporalFrequency>
                                <p1:spatialFrequency>0.04</p1:spatialFrequency>
                              </p1:DoubleGratingParams>
                              <p1:DoubleGratingParams>
                                <p1:angle_g1>300</p1:angle_g1>
                                <p1:angle_g2>60</p1:angle_g2>
                                <p1:contrast_g1>1</p1:contrast_g1>
                                <p1:contrast_g2>1</p1:contrast_g2>
                                <p1:opacity_g1>0.5</p1:opacity_g1>
                                <p1:opacity_g2>0.5</p1:opacity_g2>
                                <p1:phase_g1>0</p1:phase_g1>
                                <p1:phase_g2>0</p1:phase_g2>
                                <p1:temporalFrequency>4</p1:temporalFrequency>
                                <p1:spatialFrequency>0.04</p1:spatialFrequency>
                              </p1:DoubleGratingParams>
                              <p1:DoubleGratingParams>
                                <p1:angle_g1>330</p1:angle_g1>
                                <p1:angle_g2>90</p1:angle_g2>
                                <p1:contrast_g1>1</p1:contrast_g1>
                                <p1:contrast_g2>1</p1:contrast_g2>
                                <p1:opacity_g1>0.5</p1:opacity_g1>
                                <p1:opacity_g2>0.5</p1:opacity_g2>
                                <p1:phase_g1>0</p1:phase_g1>
                                <p1:phase_g2>0</p1:phase_g2>
                                <p1:temporalFrequency>4</p1:temporalFrequency>
                                <p1:spatialFrequency>0.04</p1:spatialFrequency>
                              </p1:DoubleGratingParams>
                            </p1:Trials>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>SF0.04TF2</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Random</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:Permutation" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawStimuli</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT0.1S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>QuadState</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawStimuli</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>temporalFrequency</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="TemporalFrequency" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>angle_g1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:DegreeToRadian" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Angle" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>spatialFrequency</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="SpatialFrequency" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>opacity_g1</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Opacity" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>contrast_g1</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Contrast" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>-1</Layer>
                    <Angle>210</Angle>
                    <SpatialFrequency>0.04</SpatialFrequency>
                    <TemporalFrequency>4</TemporalFrequency>
                    <Phase>0</Phase>
                    <SquareWave>false</SquareWave>
                    <Contrast>1</Contrast>
                    <DutyCycle xsi:nil="true" />
                    <Radius>1</Radius>
                    <Aperture>0</Aperture>
                    <Opacity>1</Opacity>
                    <ExtentX>240</ExtentX>
                    <ExtentY>240</ExtentY>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>angle_g2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:DegreeToRadian" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Angle" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>opacity_g2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Opacity" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>contrast_g2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Contrast" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>-1</Layer>
                    <Angle>330</Angle>
                    <SpatialFrequency>0.04</SpatialFrequency>
                    <TemporalFrequency>4</TemporalFrequency>
                    <Phase>0</Phase>
                    <SquareWave>false</SquareWave>
                    <Contrast>0</Contrast>
                    <DutyCycle xsi:nil="true" />
                    <Radius>1</Radius>
                    <Aperture>0</Aperture>
                    <Opacity>0</Opacity>
                    <ExtentX>240</ExtentX>
                    <ExtentY>240</ExtentY>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="DueTime" DisplayName="StimulusDuration" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT0.5S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="ExternalizedMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="20" Label="Source1" />
                  <Edge From="7" To="28" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="8" To="11" Label="Source1" />
                  <Edge From="8" To="14" Label="Source1" />
                  <Edge From="8" To="16" Label="Source1" />
                  <Edge From="8" To="18" Label="Source1" />
                  <Edge From="8" To="21" Label="Source1" />
                  <Edge From="8" To="24" Label="Source1" />
                  <Edge From="8" To="26" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="20" Label="Source2" />
                  <Edge From="10" To="28" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="20" Label="Source3" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="20" Label="Source4" />
                  <Edge From="15" To="28" Label="Source4" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="20" Label="Source5" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source6" />
                  <Edge From="20" To="29" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="28" Label="Source3" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="28" Label="Source5" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source6" />
                  <Edge From="28" To="29" Label="Source2" />
                  <Edge From="29" To="32" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source2" />
                  <Edge From="32" To="34" Label="Source1" />
                  <Edge From="33" To="34" Label="Source2" />
                  <Edge From="34" To="35" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Count" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:RepeatCount">
                <rx:Count>50</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DelaySubscription">
                <rx:DueTime>PT5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>DrawStimuli</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>QuadState</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
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              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="15" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>QuadState</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ColorR" Selector="it" />
          <Property Name="ColorB" Selector="it" />
          <Property Name="ColorG" Selector="it" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
        <ExtentX>5</ExtentX>
        <ExtentY>5</ExtentY>
        <LocationX>-80</LocationX>
        <LocationY>-30</LocationY>
        <Layer>1</Layer>
        <Angle>0</Angle>
        <ColorR>1</ColorR>
        <ColorG>1</ColorG>
        <ColorB>1</ColorB>
        <ColorA>1</ColorA>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Arduino</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Logging</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Video</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="StimulusID" Category="Filename" />
        <Property Name="MouseID" Category="Filename" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Generate File Names</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="StimulusID" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>DotMotion_Dir</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="MouseID" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>test</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_{1}</Format>
              <Selector>Item2,Item1</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>FilenamePrefix</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FilenamePrefix</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_EyeLog.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>EyeName</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_PDAsync.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>PDname</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_WheelLog.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>WheelName</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_Trial.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialName</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_Metadata.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>MetadataName</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="7" To="10" Label="Source1" />
            <Edge From="7" To="12" Label="Source1" />
            <Edge From="7" To="14" Label="Source1" />
            <Edge From="7" To="16" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="7" To="11" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="15" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="18" To="20" Label="Source1" />
      <Edge From="19" To="20" Label="Source2" />
      <Edge From="21" To="22" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>