WorkflowBuilder(Version=2.7.1)
ExternalizedMapping(DisplayDevice, WindowState)
-> GroupWorkflow DisplayAndResources
    ExternalizedMapping(DisplayDevice, WindowState)
    -> Bonsai.Shaders.CreateWindow
      Width=1800
      Height=800
      VSync=Off
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=false
      Location=nil
      WindowBorder=Hidden
      WindowState=Fullscreen
      DisplayDevice=Second
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=DynamicVideo, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Nearest, MagFilter=Nearest)
    -> Bonsai.Resources.LoadResources

    Bonsai.Shaders.RenderFrame => #5
    SubscribeSubject Borders
    -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #7
    #5, #7 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-120, Right=120, Bottom=-60, Top=60)
    -> PublishSubject DrawStimuli
    -> IncludeWorkflow(Path=BonVision:Environment.SphereMapping.bonsai, FaceSize=nil, ClearColor=Gray, Width=nil, Height=nil, RotationZ=0, RotationY=0, RotationX=0) => #10
    -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=60.000001669652114, Z=0), Translation(X=-12, Y=0, Z=-9))
    -> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.334, Height=1)
    -> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=0.333, Height=1)))
    #10 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-15))
    -> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333, Y=0, Width=0.333, Height=1)
    -> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0.333, Y=0, Width=0.333, Height=1)))
    #10 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=-60.000001669652114, Z=0), Translation(X=12, Y=0, Z=-9))
    -> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=LUT_GRB.bmp)
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.667, Y=0, Width=0.333, Height=1)
    -> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0.665, Y=0, Width=0.333, Height=1)))
    #5 -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
    #5 -> ElementIndex
    -> MemberSelector(Selector=Index)
    -> BehaviorSubject RenderFrameCount

GroupWorkflow Borders
    ExternalizedMapping(Value(DisplayName=TopBorder))
    -> FloatProperty(Value=60)
    -> ReplaySubject Top(BufferSize=nil) => #2
    ExternalizedMapping(Value(DisplayName=BottomBorder))
    -> FloatProperty(Value=-60)
    -> ReplaySubject Bottom(BufferSize=nil) => #5
    ExternalizedMapping(Value(DisplayName=LeftBorder))
    -> FloatProperty(Value=-120)
    -> ReplaySubject Left(BufferSize=nil) => #8
    ExternalizedMapping(Value(DisplayName=RightBorder))
    -> FloatProperty(Value=120)
    -> ReplaySubject Right(BufferSize=nil) => #11
    #2, #5, #8, #11 -> Zip
    -> ReplaySubject Borders(BufferSize=nil)

GroupWorkflow VarInIt
    Bonsai.Numerics.CreateRandom(Seed=2)
    -> BehaviorSubject Random

    FloatProperty(Value=0)
    -> PublishSubject Sync

    FloatProperty(Value=1)
    -> BehaviorSubject TrialProgress

    IntProperty(Value=0)
    -> BehaviorSubject SyncPulse

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

    IntProperty(Value=0)
    -> BehaviorSubject EyeFrameCount

    IntProperty(Value=0)
    -> BehaviorSubject VideoFrameCount

Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false) => #4
WorkflowInput Source1 => #5
ExternalizedMapping(Count(DisplayName=nReps), LocationX, StimulusDuration, InterStimulusInterval) => #6
#5, #6 -> GroupWorkflow Stimulus => #7
    WorkflowInput Source1 => #0
    -> Disable GroupWorkflow SF0.04TF4 => #1
        WorkflowInput Source1 => #0
        -> GroupWorkflow GratingSpec => #1
            WorkflowInput Source1
            -> DoubleGratingSpecification
              Trials
                DoubleGratingParams(angle_g1=0, angle_g2=120, contrast_g1=1, contrast_g2=0, opacity_g1=1, opacity_g2=0, phase_g1=0, phase_g2=0, temporalFrequency=4, spatialFrequency=0.04)
                DoubleGratingParams
                  angle_g1=30
                  angle_g2=150
                  contrast_g1=1
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=60
                  angle_g2=180
                  contrast_g1=1
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=90
                  angle_g2=210
                  contrast_g1=1
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=120
                  angle_g2=240
                  contrast_g1=1
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=150
                  angle_g2=270
                  contrast_g1=1
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=180
                  angle_g2=300
                  contrast_g1=1
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=210
                  angle_g2=330
                  contrast_g1=1
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams(angle_g1=240, angle_g2=0, contrast_g1=1, contrast_g2=0, opacity_g1=1, opacity_g2=0, phase_g1=0, phase_g2=0, temporalFrequency=4, spatialFrequency=0.04)
                DoubleGratingParams
                  angle_g1=270
                  angle_g2=30
                  contrast_g1=1
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=300
                  angle_g2=60
                  contrast_g1=1
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=330
                  angle_g2=90
                  contrast_g1=1
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
            -> WorkflowOutput
        #0 -> GroupWorkflow PlaidSpec => #2
            WorkflowInput Source1
            -> DoubleGratingSpecification
              Trials
                DoubleGratingParams
                  angle_g1=0
                  angle_g2=120
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=0.5
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=30
                  angle_g2=150
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=0.5
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=60
                  angle_g2=180
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=0.5
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=90
                  angle_g2=210
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=0.5
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=120
                  angle_g2=240
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=0.5
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=150
                  angle_g2=270
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=0.5
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=180
                  angle_g2=300
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=0.5
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=210
                  angle_g2=330
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=0.5
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=240
                  angle_g2=0
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=0.5
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=270
                  angle_g2=30
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=0.5
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=300
                  angle_g2=60
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=0.5
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=330
                  angle_g2=90
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=0.5
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
            -> WorkflowOutput
        #1, #2 -> Concat
        -> WorkflowOutput
    #0 -> GroupWorkflow SF0.04TF2 => #2
        WorkflowInput Source1 => #0
        -> GroupWorkflow GratingSpec => #1
            WorkflowInput Source1
            -> DoubleGratingSpecification
              Trials
                DoubleGratingParams(angle_g1=0, angle_g2=120, contrast_g1=1, contrast_g2=0, opacity_g1=1, opacity_g2=0, phase_g1=0, phase_g2=0, temporalFrequency=2, spatialFrequency=0.04)
                DoubleGratingParams
                  angle_g1=30
                  angle_g2=150
                  contrast_g1=1
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=60
                  angle_g2=180
                  contrast_g1=1
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=90
                  angle_g2=210
                  contrast_g1=1
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=120
                  angle_g2=240
                  contrast_g1=1
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=150
                  angle_g2=270
                  contrast_g1=1
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=180
                  angle_g2=300
                  contrast_g1=1
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=210
                  angle_g2=330
                  contrast_g1=1
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams(angle_g1=240, angle_g2=0, contrast_g1=1, contrast_g2=0, opacity_g1=1, opacity_g2=0, phase_g1=0, phase_g2=0, temporalFrequency=2, spatialFrequency=0.04)
                DoubleGratingParams
                  angle_g1=270
                  angle_g2=30
                  contrast_g1=1
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=300
                  angle_g2=60
                  contrast_g1=1
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=330
                  angle_g2=90
                  contrast_g1=1
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
            -> WorkflowOutput
        #0 -> Disable GroupWorkflow PlaidSpec => #2
            WorkflowInput Source1
            -> DoubleGratingSpecification
              Trials
                DoubleGratingParams
                  angle_g1=0
                  angle_g2=120
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=30
                  angle_g2=150
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=60
                  angle_g2=180
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=90
                  angle_g2=210
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=120
                  angle_g2=240
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=150
                  angle_g2=270
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=180
                  angle_g2=300
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=210
                  angle_g2=330
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=240
                  angle_g2=0
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=270
                  angle_g2=30
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=300
                  angle_g2=60
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=330
                  angle_g2=90
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
            -> WorkflowOutput

            Disable WorkflowInput Source1
            -> Disable DoubleGratingSpecification
              Trials
                DoubleGratingParams
                  angle_g1=0
                  angle_g2=180
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
            -> Disable WorkflowOutput
        #0 -> GroupWorkflow Blank => #3
            WorkflowInput Source1
            -> DoubleGratingSpecification
              Trials
                DoubleGratingParams(angle_g1=0, angle_g2=0, contrast_g1=0, contrast_g2=0, opacity_g1=0, opacity_g2=0, phase_g1=0, phase_g2=0, temporalFrequency=2, spatialFrequency=0.04)
            -> WorkflowOutput
        #0 -> Disable GroupWorkflow GratingSpec_rep => #4
            WorkflowInput Source1
            -> DoubleGratingSpecification
              Trials
                DoubleGratingParams
                  angle_g1=0
                  angle_g2=120
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=30
                  angle_g2=150
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=60
                  angle_g2=180
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=90
                  angle_g2=210
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=120
                  angle_g2=240
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=150
                  angle_g2=270
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=180
                  angle_g2=300
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=210
                  angle_g2=330
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=240
                  angle_g2=0
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=270
                  angle_g2=30
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=300
                  angle_g2=60
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=330
                  angle_g2=90
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
            -> WorkflowOutput
        #0 -> Disable GroupWorkflow PlaidSpec_Phase90 => #5
            WorkflowInput Source1
            -> DoubleGratingSpecification
              Trials
                DoubleGratingParams
                  angle_g1=0
                  angle_g2=120
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=90
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=30
                  angle_g2=150
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=90
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=60
                  angle_g2=180
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=90
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=90
                  angle_g2=210
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=90
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=120
                  angle_g2=240
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=90
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=150
                  angle_g2=270
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=90
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=180
                  angle_g2=300
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=90
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=210
                  angle_g2=330
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=90
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=240
                  angle_g2=0
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=90
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=270
                  angle_g2=30
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=90
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=300
                  angle_g2=60
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=90
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=330
                  angle_g2=90
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=90
                  temporalFrequency=2
                  spatialFrequency=0.04
            -> WorkflowOutput

            Disable WorkflowInput Source1
            -> Disable DoubleGratingSpecification
              Trials
                DoubleGratingParams
                  angle_g1=0
                  angle_g2=180
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
            -> Disable WorkflowOutput
        #0 -> Disable GroupWorkflow Blank_rep => #6
            WorkflowInput Source1
            -> DoubleGratingSpecification
              Trials
                DoubleGratingParams(angle_g1=0, angle_g2=0, contrast_g1=0, contrast_g2=0, opacity_g1=0, opacity_g2=0, phase_g1=0, phase_g2=0, temporalFrequency=2, spatialFrequency=0.04)
            -> WorkflowOutput
        #1, #2, #3, #4, #5, #6 -> Concat
        -> WorkflowOutput
    #1, #2 -> Disable Concat => #3
    SubscribeSubject Random => #4
    #3, #4 -> Bonsai.Numerics.Permutation => #5
    ExternalizedMapping(Count) => #6
    ExternalizedMapping(LocationX, StimulusDuration, InterStimulusInterval) => #7
    #5, #7 -> CreateObservable
        SubscribeSubject DrawStimuli => #0
        WorkflowInput Source1
        -> MulticastSubject TrialParams => #2
        -> MemberSelector(Selector=temporalFrequency)
        -> PropertyMapping(TemporalFrequency) => #4
        #2 -> MemberSelector(Selector=angle_g1)
        -> Bonsai.Numerics.DegreeToRadian
        -> PropertyMapping(Angle) => #7
        #2 -> MemberSelector(Selector=spatialFrequency)
        -> PropertyMapping(SpatialFrequency) => #9
        #2 -> MemberSelector(Selector=opacity_g1)
        -> PropertyMapping(Opacity) => #11
        #2 -> MemberSelector(Selector=contrast_g1)
        -> PropertyMapping(Contrast) => #13
        #2 -> MemberSelector(Selector=angle_g2)
        -> Bonsai.Numerics.DegreeToRadian
        -> PropertyMapping(Angle) => #16
        #2 -> MemberSelector(Selector=opacity_g2)
        -> PropertyMapping(Opacity) => #18
        #2 -> MemberSelector(Selector=contrast_g2)
        -> PropertyMapping(Contrast) => #20
        #2 -> MemberSelector(Selector=phase_g1.Value)
        -> Bonsai.Numerics.DegreeToRadian
        -> PropertyMapping(Phase) => #23
        #2 -> MemberSelector(Selector=phase_g2.Value)
        -> Bonsai.Numerics.DegreeToRadian
        -> PropertyMapping(Phase) => #26
        SubscribeSubject DrawStimuli
        -> Take(Count=1)
        -> FloatProperty(Value=1) => #29
        ExternalizedMapping(DueTime(DisplayName=StimulusDuration))
        -> Bonsai.Shaders.Timer(DueTime=PT1S) => #31
        -> FloatProperty(Value=0) => #32
        #29, #32 -> Merge
        -> MulticastSubject QuadState
        ExternalizedMapping(DueTime(DisplayName=InterStimulusInterval)) => #35
        ExternalizedMapping(LocationX) => #36
        #0, #4, #7, #9, #11, #13, #23, #36 -> IncludeWorkflow => #37
          Path=BonVision:Primitives.DrawGratings.bonsai
          LocationX=0
          LocationY=0
          Layer=-1
          Angle=150
          SpatialFrequency=0.04
          TemporalFrequency=2
          Phase=0
          SquareWave=false
          Contrast=1
          DutyCycle=nil
          Radius=1
          Aperture=1
          Opacity=1
          ExtentX=240
          ExtentY=240
        #0, #4, #16, #9, #18, #20, #26, #36 -> IncludeWorkflow => #38
          Path=BonVision:Primitives.DrawGratings.bonsai
          LocationX=0
          LocationY=0
          Layer=-1
          Angle=270
          SpatialFrequency=0.04
          TemporalFrequency=2
          Phase=0
          SquareWave=false
          Contrast=0
          DutyCycle=nil
          Radius=1
          Aperture=1
          Opacity=0
          ExtentX=240
          ExtentY=240
        #37, #38 -> Merge => #39
        #39, #31 -> TakeUntil => #40
        #40, #35 -> Bonsai.Shaders.Delay(DueTime=PT1S)
        -> WorkflowOutput
    -> Concat => #9
    #9, #6 -> RepeatCount(Count=25)
    -> DelaySubscription(DueTime=PT5S)

    Disable SubscribeSubject DrawStimuli
    -> Disable IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-120, Right=120, Bottom=90, Top=-30) => #13
    Disable SubscribeSubject QuadState
    -> Disable PropertyMapping(ColorR(Selector=it), ColorB(Selector=it), ColorG(Selector=it)) => #15
    #13, #15 -> Disable IncludeWorkflow
      Path=BonVision:Primitives.DrawQuad.bonsai
      ExtentX=30
      ExtentY=10
      LocationX=121
      LocationY=87
      Layer=1
      Angle=0
      ColorR=0
      ColorG=0
      ColorB=0
      ColorA=1
#7, #4 -> SubscribeWhen

SubscribeSubject DrawStimuli => #9
SubscribeSubject QuadState
-> PropertyMapping(ColorR(Selector=it), ColorB(Selector=it), ColorG(Selector=it)) => #11
#9, #11 -> IncludeWorkflow
  Path=BonVision:Primitives.DrawQuad.bonsai
  ExtentX=5
  ExtentY=5
  LocationX=-80
  LocationY=-32
  Layer=1
  Angle=0
  ColorR=0
  ColorG=0
  ColorB=0
  ColorA=1

GroupWorkflow Arduino
    Bonsai.IO.CreateSerialPort
      Name=ArduinoSerial
      PortName=COM4
      BaudRate=1000000
      Encoding=us-ascii
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    ExternalizedMapping(PortName)
    -> Bonsai.IO.SerialStringRead(PortName=ArduinoSerial, NewLine=\n)
    -> Parse(Pattern="%i,%i,%i,%i,%i,%i")
    -> Retry => #4
    -> MemberSelector(Selector=Item1)
    -> BehaviorSubject WheelInput
    #4 -> MemberSelector(Selector=Item2)
    -> DistinctUntilChanged
    -> BehaviorSubject LeftLick
    #4 -> MemberSelector(Selector=Item3)
    -> DistinctUntilChanged
    -> BehaviorSubject RightLick
    #4 -> MemberSelector(Selector=Item4)
    -> BehaviorSubject LastSyncPulseTime
    #4 -> MemberSelector(Selector=Item5)
    -> BehaviorSubject Photodiode
    #4 -> MemberSelector(Selector=Item6)
    -> BehaviorSubject ArduinoTime

    Bonsai.IO.CreateSerialPort
      Name=ArduinoPD
      PortName=COM5
      BaudRate=250000
      Encoding=us-ascii
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Bonsai.IO.SerialStringRead(PortName=ArduinoPD, NewLine=\n)
    -> Parse(Pattern="%i,%i")
    -> Retry
    -> BehaviorSubject PDandAsync
    -> MemberSelector(Selector=Item1)

GroupWorkflow Logging
    GroupWorkflow WheelLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #0
        ExternalizedMapping(Overwrite) => #0
        ExternalizedMapping(Suffix) => #1
        ExternalizedMapping(Name)
        -> SubscribeSubject WheelLog => #3
        SubscribeSubject WheelName
        -> PropertyMapping(FileName) => #5
        #5, #0, #1, #3 -> Bonsai.IO.CsvWriter
          FileName=C:\\Data\test\20251211\test_DriftingGratings_Direction_WheelLog.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""
    Bonsai.Windows.Input.KeyDown(Filter="MButton Back Clear D H L Shift", SuppressRepetitions=false) => #1
    #0, #1 -> SubscribeWhen
    GroupWorkflow VideoLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #3
        SubscribeSubject VideoLog => #0
        ExternalizedMapping(Overwrite) => #1
        ExternalizedMapping(Suffix) => #2
        SubscribeSubject VideoCSVName
        -> PropertyMapping(FileName) => #4
        #4, #1, #2, #0 -> Bonsai.IO.CsvWriter
          FileName=C:\\Data\test\20251211\test_DriftingGratings_Direction_Video.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""
    #3, #1 -> SubscribeWhen
    GroupWorkflow PhotodiodeLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #5
        ExternalizedMapping(Overwrite) => #0
        ExternalizedMapping(Suffix) => #1
        ExternalizedMapping(Name)
        -> SubscribeSubject PDLog => #3
        SubscribeSubject PDname
        -> PropertyMapping(FileName) => #5
        #5, #0, #1, #3 -> Bonsai.IO.CsvWriter
          FileName=C:\\Data\test\20251211\test_DriftingGratings_Direction_PDAsync.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""
    #5, #1 -> SubscribeWhen
    GroupWorkflow TrialLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #7
        SubscribeSubject TrialParams => #0
        -> MemberSelector(Selector=angle_g1.Value) => #1
        #0 -> MemberSelector(Selector=angle_g2.Value) => #2
        #0 -> MemberSelector(Selector=contrast_g1.Value) => #3
        #0 -> MemberSelector(Selector=contrast_g2.Value) => #4
        #0 -> MemberSelector(Selector=opacity_g1.Value) => #5
        #0 -> MemberSelector(Selector=opacity_g2.Value) => #6
        #1, #2, #3, #4, #5, #6 -> Zip => #7
        #0 -> MemberSelector(Selector=phase_g1.Value) => #8
        #0 -> MemberSelector(Selector=phase_g2.Value) => #9
        #0 -> MemberSelector(Selector=temporalFrequency.Value) => #10
        #0 -> MemberSelector(Selector=spatialFrequency.Value) => #11
        #8, #9, #10, #11 -> Zip => #12
        #7, #12 -> Zip => #13
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #15
        #13, #15 -> Zip => #16
        ExternalizedMapping(Overwrite) => #17
        ExternalizedMapping(Suffix) => #18
        SubscribeSubject ArduinoTime => #19
        #16, #19 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #21
          Expression:
            new(Item1.Item1.Item1.Item1 as Angle_g1,
            Item1.Item1.Item1.Item2 as Angle_g2,
            Item1.Item1.Item1.Item3 as Contrast_g1,
            Item1.Item1.Item1.Item4 as Contrast_g2,
            Item1.Item1.Item1.Item5 as Opacity_g1,
            Item1.Item1.Item1.Item6 as Opacity_g2,

            Item1.Item1.Item2.Item1 as Phase_g1,
            Item1.Item1.Item2.Item2 as Phase_g2,
            Item1.Item1.Item2.Item3 as TemporalFrequency,
            Item1.Item1.Item2.Item4 as SpatialFrequency,

            Item1.Item2 as BonsaiTime,
            Item2 as ArduinoTime)
        SubscribeSubject TrialName
        -> PropertyMapping(FileName) => #23
        #23, #17, #18, #21 -> Bonsai.IO.CsvWriter
          FileName=C:\\Data\test\20251211\test_DriftingGratings_Direction_Trial.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector=""

        DoubleGratingSpecification(Trials="")
        -> BehaviorSubject TrialParams
    #7, #1 -> SubscribeWhen

    GroupWorkflow WheelLogging
        SubscribeSubject WheelInput => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        SubscribeSubject LastSyncPulseTime => #3
        SubscribeSubject ArduinoTime => #4
        #0, #3, #4, #2 -> Zip => #5
        SubscribeSubject RenderFrameCount => #6
        #5, #6 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as Wheel, Item1.Item2 as LastSyncPulseTime, Item1.Item3 as ArduinoTime, Item1.Item4 as BonsaiTime, Item2 as RenderFrameCount)
        -> BehaviorSubject WheelLog
        -> WorkflowOutput

    GroupWorkflow VideoLogging
        SubscribeSubject VideoFrameCount => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        SubscribeSubject ArduinoTime => #3
        SubscribeSubject VideoLEDAsync => #4
        #0, #2, #4 -> Zip => #5
        #5, #3 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as VideoFrameCount, Item1.Item3 as LEDAsync, Item2 as ArduinoTime, Item1.Item2 as BonsaiTime)
        -> BehaviorSubject VideoLog
        -> WorkflowOutput

    GroupWorkflow PhotodiodeLogging
        SubscribeSubject PDandAsync => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        #0, #2 -> Zip => #3
        SubscribeSubject ArduinoTime => #4
        #3, #4 -> WithLatestFrom
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as Photodiode, Item1.Item2 as AsyncPulse, Item2 as BonsaiTime, Item3 as ArduinoTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1.Item1 as Photodiode, Item1.Item1.Item2 as AsyncPulse, Item1.Item2 as BonsaiTime, Item2 as ArduinoTime)
        -> BehaviorSubject PDLog
        -> WorkflowOutput

    GroupWorkflow IntialiseTrialParams
        Disable IntProperty(Value=0) => #0
        Disable FloatProperty(Value=0) => #1
        Disable FloatProperty(Value=0) => #2
        Disable FloatProperty(Value=0) => #3
        Disable FloatProperty(Value=0) => #4
        Disable FloatProperty(Value=0) => #5
        Disable FloatProperty(Value=0) => #6
        #0, #5, #1, #2, #3, #4, #6 -> Disable Zip => #7
        Disable IntProperty(Value=0) => #8
        Disable IntProperty(Value=0) => #9
        Disable FloatProperty(Value=0) => #10
        Disable FloatProperty(Value=0) => #11
        Disable FloatProperty(Value=0) => #12
        Disable FloatProperty(Value=0) => #13
        Disable FloatProperty(Value=0) => #14
        #8, #9, #10, #11, #12, #13, #14 -> Disable Zip => #15
        Disable FloatProperty(Value=0) => #16
        Disable FloatProperty(Value=0) => #17
        Disable FloatProperty(Value=0) => #18
        #16, #17, #18 -> Disable Zip => #19
        #7, #15, #19 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1.Item1 as Id,
            Item1.Item2 as Duration,
            Item1.Item3 as Size,
            Item1.Item4 as Colour1,
            Item1.Item5 as Colour2,
            Item1.Item6 as numDots1,
            Item1.Item7 as numDots2,

            Item2.Item1 as dotLifeBool,
            Item2.Item2 as dotLifetime,
            Item2.Item3 as Contrast1,
            Item2.Item4 as Contrast2,
            Item2.Item5 as VelX1,
            Item2.Item6 as VelX2,
            Item2.Item7 as VelY1,

            Item3.Item1 as VelY2,
            Item3.Item2 as Coherence1,
            Item3.Item3 as Coherence2)
        -> Disable Skip(Count=1)
        -> Disable BehaviorSubject TrialParams

GroupWorkflow Video => #15
    Bonsai.Vision.CameraCapture => #0
      Index=0
      CaptureProperties
        CapturePropertyAssignment(Property=Fps, Value=30)
        CapturePropertyAssignment(Property=Saturation, Value=0)
        CapturePropertyAssignment(Property=Exposure, Value=-5)
        CapturePropertyAssignment(Property=Gain, Value=0)
        CapturePropertyAssignment(Property=Contrast, Value=100)
        CapturePropertyAssignment(Property=Brightness, Value=0)
        CapturePropertyAssignment(Property=Sharpness, Value=0)
        CapturePropertyAssignment(Property=Gamma, Value=0)
        CapturePropertyAssignment(Property=Backlight, Value=0)
        CapturePropertyAssignment(Property=FrameWidth, Value=2560)
        CapturePropertyAssignment(Property=FrameHeight, Value=1440)
    -> Bonsai.Vision.Flip(Mode=Both) => #1
    -> Disable MemberSelector(Selector=Width)
    #1 -> Disable MemberSelector(Selector=Height)
    #1 -> Disable TimeInterval
    #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=752, Y=0, Width=272, Height=186))
    #1 -> Disable Bonsai.Vision.Crop(RegionOfInterest(X=2256, Y=90, Width=72, Height=66))
    -> Bonsai.Vision.Crop(RegionOfInterest(X=1912, Y=54, Width=96, Height=72))
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Dsp.Sum
    -> MemberSelector(Selector=Val0)
    -> BehaviorSubject VideoLEDAsync
    Bonsai.Windows.Input.KeyDown(Filter="MButton Back Clear D H L Shift", SuppressRepetitions=false) => #12
    SubscribeSubject BodyVideoName
    -> PropertyMapping(FileName) => #14
    #0, #14 -> Bonsai.Vision.VideoWriter
      FileName=C:\\Data\M25104\20250922\M25104_DriftingGratingsPlaids_BodyVideo.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    -> ElementIndex
    -> MemberSelector(Selector=Index)
    -> MulticastSubject VideoFrameCount => #18
    #18, #12 -> SubscribeWhen
Bonsai.Windows.Input.KeyDown(Filter="LButton MButton XButton1 Back Tab Clear Return Enter A D E H I L M Shift", SuppressRepetitions=true) => #16
#15, #16 -> SubscribeWhen

ExternalizedMapping(StimulusID(Category=Filename), MouseID(Category=Filename), SavingDirBase(Category=Filename))
-> GroupWorkflow "Generate File Names"
    ExternalizedMapping(Value(DisplayName=StimulusID))
    -> StringProperty(Value=DriftingGratings_Direction) => #1
    ExternalizedMapping(Value(DisplayName=MouseID))
    -> StringProperty(Value=test) => #3
    SubscribeSubject DateDir => #4
    ExternalizedMapping(Value(DisplayName=SavingDirBase))
    -> StringProperty(Value=C:\) => #6
    #3, #1, #6, #4 -> Zip
    -> Format(Format={2}\Data\{0}\{3}\{0}_{1}, Selector="Item1,Item2,Item3,Item4")
    -> BehaviorSubject FilenamePrefix

    SubscribeSubject FilenamePrefix => #10
    -> Format(Format={0}_WheelLog.csv, Selector=it)
    -> BehaviorSubject WheelName
    #10 -> Format(Format={0}_Trial.csv, Selector=it)
    -> BehaviorSubject TrialName
    #10 -> Format(Format={0}_Video.csv, Selector=it)
    -> BehaviorSubject VideoCSVName
    #10 -> Format(Format={0}_BodyVideo.avi, Selector=it)
    -> BehaviorSubject BodyVideoName
    #10 -> Format(Format={0}_ArduinoStim.csv, Selector=it)
    -> BehaviorSubject PWMCSVName
    #10 -> Format(Format={0}_PDAsync.csv, Selector=it)
    -> BehaviorSubject PDname

    Bonsai.Scripting.IronPython.PythonSource
      Script:
        from System import DateTime,String

        @returns(String)
        def generate():
          yield (DateTime.Now).ToString("yyyyMMdd")
    -> BehaviorSubject DateDir
