<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p2="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:ffmpeg="clr-namespace:Bonsai.FFmpeg;assembly=Bonsai.FFmpeg"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>ShiftKey P Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>PauseFlag</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" Category="StimControl" />
        <Property Name="UpdateProbabilityDistsBool" Category="StimControl" />
        <Property Name="scalingFactor" Category="StimControl" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>AdaptiveStimControl</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" Category="StimControl" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>GenStimProbDists</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="FileName" />
                  </Expression>
                  <Expression xsi:type="io:CsvReader">
                    <io:FileName>FlickerFreqs_stimCSVForState.csv</io:FileName>
                    <io:ScanPattern>%f,%f,%f</io:ScanPattern>
                    <io:SkipRows>1</io:SkipRows>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>StimulusValues</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>ProbDist1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item3</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>ProbDist2</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToList" />
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>ProbDistArray</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Count</Selector>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>nStates</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>initCountersSub</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>OriginalProbDistArray</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Length</Selector>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>nStim</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="1" To="8" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="12" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="10" To="22" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="14" To="21" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>InitTrialCounters</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>nStim</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:RepeatCount">
                      <rx:Count>10</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>nStates</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:RepeatCount">
                      <rx:Count>2</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToList" />
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="MemberSelector">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>TrialCounters</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>initCountersSub</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Skip">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>MonitorTrialCountsSub</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="8" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="14" Label="Source1" />
                  <Edge From="12" To="18" Label="Source3" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="13" To="21" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="16" To="18" Label="Source2" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="UpdateProbabilityDistsBool" Category="StimControl" />
              <Property Name="scalingFactor" Category="StimControl" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>UpdateProbabilityDists</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>OriginalProbDistArray</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialCounters</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Skip">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="scalingFactor" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:UpdateProbDistArray">
                      <p1:scalingFactor>1E+21</p1:scalingFactor>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>UpdateProbDistsBool</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>ProbDistArray</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="UpdateProbabilityDistsBool" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>UpdateProbDistsBool</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source2" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="5" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>SimulateState</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>MonitorTrialCounts</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>InitBarGraph</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Timer">
                            <rx:DueTime>PT0S</rx:DueTime>
                            <rx:Period>PT0.1S</rx:Period>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>1</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:Accumulate" />
                        <Expression xsi:type="SubscribeSubject">
                          <Name>nStim</Name>
                        </Expression>
                        <Expression xsi:type="Subtract">
                          <Operand xsi:type="IntProperty">
                            <Value>1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Count" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>9</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Timer">
                            <rx:DueTime>PT0S</rx:DueTime>
                            <rx:Period>PT0.001S</rx:Period>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>nStim</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Count" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>10</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="8" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="7" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="7" To="8" Label="Source2" />
                        <Edge From="8" To="14" Label="Source2" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="13" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source2" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>MonitorTrialCountsSub</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>State1?</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>Item3[Item1][Item2]</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>State0?</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>Item3[Item1][Item2]</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="viz:BarGraphBuilder">
                    <viz:IndexSelector>Item2</viz:IndexSelector>
                    <viz:ValueSelector>Item1</viz:ValueSelector>
                    <viz:BaseAxis>X</viz:BaseAxis>
                    <viz:BarType>Cluster</viz:BarType>
                    <viz:Capacity xsi:nil="true" />
                    <viz:Min xsi:nil="true" />
                    <viz:Max xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="viz:BarGraphBuilder">
                    <viz:IndexSelector>Item2</viz:IndexSelector>
                    <viz:ValueSelector>Item1</viz:ValueSelector>
                    <viz:BaseAxis>X</viz:BaseAxis>
                    <viz:BarType>Cluster</viz:BarType>
                    <viz:Capacity xsi:nil="true" />
                    <viz:Min xsi:nil="true" />
                    <viz:Max xsi:nil="true" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="10" Label="Source2" />
                  <Edge From="0" To="11" Label="Source2" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="6" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="5" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="11" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="6" To="8" Label="Source1" />
                  <Edge From="7" To="9" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="12" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="12" To="15" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Fake Arduino for testing</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CalcWheelSpeed</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>WheelInput</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ArduinoTime</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToSingle(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Difference">
                <dsp:Order>1</dsp:Order>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:Abs" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>IgnoreOverflowTicks</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Abs" />
                  </Expression>
                  <Expression xsi:type="LessThan">
                    <Operand xsi:type="DoubleProperty">
                      <Value>512</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>cmPerTick</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Multiply" />
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToSingle(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Difference">
                <dsp:Order>1</dsp:Order>
              </Combinator>
            </Expression>
            <Expression xsi:type="Divide">
              <Operand xsi:type="DoubleProperty">
                <Value>1000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Divide" />
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RawWheelSpeed</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="TimeSpan" DisplayName="RunningAverageTimeWindow" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WindowTime">
                <rx:TimeSpan>PT0.05S</rx:TimeSpan>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Average" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>MovMeanWheelSpeed</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="DoubleProperty">
                      <Value>3</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="LessThanOrEqual">
                    <Operand xsi:type="DoubleProperty">
                      <Value>3</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CurrentState</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="TicksPerRev" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1024</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="WheelDiam" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>19.5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>3.14159274</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Multiply" />
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>WheelCircumference</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Divide" />
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>cmPerTick</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>CurrentState</Name>
              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="11" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="15" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="19" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="21" To="24" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="26" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source2" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="36" Label="Source2" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="33" Label="Source1" />
            <Edge From="32" To="33" Label="Source2" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="39" To="40" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DelaySubscription">
          <rx:DueTime>PT5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" DisplayName="PWM COM" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:CreateSerialPort">
          <io:Name>ArdPWM</io:Name>
          <io:PortName>COM8</io:PortName>
          <io:BaudRate>115200</io:BaudRate>
          <io:Parity>None</io:Parity>
          <io:ParityReplace>63</io:ParityReplace>
          <io:DataBits>8</io:DataBits>
          <io:StopBits>One</io:StopBits>
          <io:Handshake>None</io:Handshake>
          <io:DiscardNull>false</io:DiscardNull>
          <io:DtrEnable>true</io:DtrEnable>
          <io:RtsEnable>false</io:RtsEnable>
          <io:ReadBufferSize>4096</io:ReadBufferSize>
          <io:WriteBufferSize>2048</io:WriteBufferSize>
          <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="WHEEL COM" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Arduino</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" DisplayName="WHEEL COM" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:CreateSerialPort">
                <io:Name>ArduinoSerial</io:Name>
                <io:PortName>COM5</io:PortName>
                <io:BaudRate>1000000</io:BaudRate>
                <io:Encoding>us-ascii</io:Encoding>
                <io:Parity>None</io:Parity>
                <io:ParityReplace>63</io:ParityReplace>
                <io:DataBits>8</io:DataBits>
                <io:StopBits>One</io:StopBits>
                <io:Handshake>None</io:Handshake>
                <io:DiscardNull>false</io:DiscardNull>
                <io:DtrEnable>true</io:DtrEnable>
                <io:RtsEnable>false</io:RtsEnable>
                <io:ReadBufferSize>4096</io:ReadBufferSize>
                <io:WriteBufferSize>2048</io:WriteBufferSize>
                <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringRead">
                <io:PortName>ArduinoSerial</io:PortName>
                <io:NewLine>\n</io:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Parse">
              <Pattern>%i,%i,%i,%i,%i,%i</Pattern>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Retry" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>WheelInput</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>LeftLick</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item3</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RightLick</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item4</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>LastSyncPulseTime</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item5</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Photodiode</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item6</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ArduinoTime</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Parse">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>PDandAsync</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
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              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="5" To="11" Label="Source1" />
            <Edge From="5" To="14" Label="Source1" />
            <Edge From="5" To="16" Label="Source1" />
            <Edge From="5" To="18" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Logging</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Video</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:CameraCapture">
                <cv:Index>0</cv:Index>
                <cv:CaptureProperties>
                  <cv:CapturePropertyAssignment>
                    <cv:Property>Fps</cv:Property>
                    <cv:Value>30</cv:Value>
                  </cv:CapturePropertyAssignment>
                  <cv:CapturePropertyAssignment>
                    <cv:Property>Saturation</cv:Property>
                    <cv:Value>0</cv:Value>
                  </cv:CapturePropertyAssignment>
                  <cv:CapturePropertyAssignment>
                    <cv:Property>Exposure</cv:Property>
                    <cv:Value>-5</cv:Value>
                  </cv:CapturePropertyAssignment>
                  <cv:CapturePropertyAssignment>
                    <cv:Property>Gain</cv:Property>
                    <cv:Value>0</cv:Value>
                  </cv:CapturePropertyAssignment>
                  <cv:CapturePropertyAssignment>
                    <cv:Property>Contrast</cv:Property>
                    <cv:Value>100</cv:Value>
                  </cv:CapturePropertyAssignment>
                  <cv:CapturePropertyAssignment>
                    <cv:Property>Brightness</cv:Property>
                    <cv:Value>0</cv:Value>
                  </cv:CapturePropertyAssignment>
                  <cv:CapturePropertyAssignment>
                    <cv:Property>Sharpness</cv:Property>
                    <cv:Value>0</cv:Value>
                  </cv:CapturePropertyAssignment>
                  <cv:CapturePropertyAssignment>
                    <cv:Property>Gamma</cv:Property>
                    <cv:Value>0</cv:Value>
                  </cv:CapturePropertyAssignment>
                  <cv:CapturePropertyAssignment>
                    <cv:Property>Backlight</cv:Property>
                    <cv:Value>0</cv:Value>
                  </cv:CapturePropertyAssignment>
                  <cv:CapturePropertyAssignment>
                    <cv:Property>FrameWidth</cv:Property>
                    <cv:Value>2560</cv:Value>
                  </cv:CapturePropertyAssignment>
                  <cv:CapturePropertyAssignment>
                    <cv:Property>FrameHeight</cv:Property>
                    <cv:Value>1440</cv:Value>
                  </cv:CapturePropertyAssignment>
                </cv:CaptureProperties>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Flip">
                <cv:Mode>Both</cv:Mode>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Index</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>VideoFrameCount</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>496</cv:X>
                  <cv:Y>0</cv:Y>
                  <cv:Width>552</cv:Width>
                  <cv:Height>330</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>1968</cv:X>
                  <cv:Y>42</cv:Y>
                  <cv:Width>64</cv:Width>
                  <cv:Height>78</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Grayscale" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Sum" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val0</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>VideoLEDAsync</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FilenamePrefix</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_video.avi</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>M24018_ScreenFlicker_0b_video.avi</cv:FileName>
                <cv:Suffix>Timestamp</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>30</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>MButton Back Clear D H L Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="17" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="1" To="6" Label="Source1" />
            <Edge From="1" To="7" Label="Source1" />
            <Edge From="1" To="8" Label="Source1" />
            <Edge From="1" To="9" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="16" To="20" Label="Source2" />
            <Edge From="17" To="19" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton MButton XButton1 Back Tab Clear Return Enter A D E H I L M Shift</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="StimulusID" Category="Filename" />
        <Property Name="MouseID" Category="Filename" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Generate File Names</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="StimulusID" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>ScreenFlicker_0b</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="MouseID" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>M24018</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_{1}</Format>
              <Selector>Item2,Item1</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>FilenamePrefix</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FilenamePrefix</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_EyeLog.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>EyeName</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_PDAsync.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>PDname</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_WheelLog.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>WheelName</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_Trial.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialName</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_Metadata.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>MetadataName</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="7" To="10" Label="Source1" />
            <Edge From="7" To="12" Label="Source1" />
            <Edge From="7" To="14" Label="Source1" />
            <Edge From="7" To="16" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>VarInIt</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed>42</num:Seed>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Random</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Sync</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialProgress</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>SyncPulse</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>QuadState</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>EyeFrameCount</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TimerExpired</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\Users\saleem_lab\Documents\VisualStimuli_Temp\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RepCounter</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="binFileName" Category="Filename" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>SparseNoise_Log_.bin</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Bin FileName</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>200</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>MousePos</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>VideoFrameCount</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>DurationSingleImage</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ElementIndex" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Index</Selector>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>RenderFrameCount</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ISI" />
        <Property Name="StimulusType" />
        <Property Name="StimDuration" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StimulusFinished</Name>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>CreateTrial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>GetNextStimFrequency</Name>
              <Description />
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>StimulusValues</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>StimIndexArray</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="ExternalizedMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="GroupWorkflow">
                      <Name>CurrentStimFinished</Name>
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="rx:Accumulate" />
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="SubscribeSubject">
                      <Name>TotalStimulusCount</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="PropertyMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="rx:Condition">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="scr:ExpressionTransform">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="scr:ExpressionTransform">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="scr:ExpressionTransform">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="WorkflowOutput" />
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ProbDistArray</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ProbabilityDistributions" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CurrentState</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>EnsureCorrectStateIndex</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>nStates</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="LessThan" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DistributionIndex" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:RandSampleFromIndexedDistribution">
                      <p1:ProbabilityDistributions>
                        <p1:ArrayOfFloat>
                          <p1:float>10</p1:float>
                          <p1:float>10</p1:float>
                          <p1:float>10</p1:float>
                          <p1:float>10</p1:float>
                          <p1:float>10</p1:float>
                          <p1:float>10</p1:float>
                          <p1:float>10</p1:float>
                          <p1:float>10</p1:float>
                          <p1:float>10</p1:float>
                          <p1:float>10</p1:float>
                        </p1:ArrayOfFloat>
                        <p1:ArrayOfFloat>
                          <p1:float>10</p1:float>
                          <p1:float>10</p1:float>
                          <p1:float>10</p1:float>
                          <p1:float>10</p1:float>
                          <p1:float>10</p1:float>
                          <p1:float>10</p1:float>
                          <p1:float>10</p1:float>
                          <p1:float>10</p1:float>
                          <p1:float>10</p1:float>
                          <p1:float>10</p1:float>
                        </p1:ArrayOfFloat>
                      </p1:ProbabilityDistributions>
                      <p1:DistributionIndex>0</p1:DistributionIndex>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>CurrentStimIndex</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusValues</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>Item2[Item1]</scr:Expression>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="14" Label="Source1" />
                  <Edge From="1" To="12" Label="Source1" />
                  <Edge From="2" To="11" Label="Source1" />
                  <Edge From="3" To="5" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="10" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="18" To="25" Label="Source3" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="25" Label="Source2" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="29" Label="Source1" />
                  <Edge From="27" To="30" Label="Source2" />
                  <Edge From="28" To="29" Label="Source2" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="33" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="StimDuration" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>2000</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToString(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="StimulusType" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>f</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item1+","+Item2+","+Item3</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringWrite">
                <io:PortName>ArdPWM</io:PortName>
                <io:NewLine>\r</io:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialParams</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" DisplayName="ISI" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="6" Label="Source3" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="6" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringRead">
          <io:PortName>ArdPWM</io:PortName>
          <io:NewLine>\r</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Parse">
        <Pattern>%i</Pattern>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Retry" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>-1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>StimulusFinished</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="4" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="16" To="18" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="26" To="32" Label="Source2" />
      <Edge From="27" To="29" Label="Source1" />
      <Edge From="28" To="29" Label="Source2" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="38" Label="Source1" />
      <Edge From="37" To="38" Label="Source2" />
      <Edge From="38" To="39" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>