WorkflowBuilder(Version=2.8.1)
GroupWorkflow SetSave
    StringProperty(Value=D:\Data\SS131\)
    -> BehaviorSubject "Saving Dir"

    Bonsai.Scripting.IronPython.PythonSource
      Script:
        from System import DateTime,String

        @returns(String)
        def generate():
          yield (DateTime.Now).ToString("yyyy-MM-dd")
    -> BehaviorSubject DateDir

    SubscribeSubject "Saving Dir" => #4
    SubscribeSubject DateDir => #5
    StringProperty(Value=\Video.avi) => #6
    #4, #5, #6 -> Zip
    -> Format(Format={0}{1}{2}, Selector="Item1,Item2,Item3")
    -> BehaviorSubject VideoPath

    SubscribeSubject "Saving Dir" => #10
    SubscribeSubject DateDir => #11
    StringProperty(Value=\GratingsPlaidsTrialParams.csv) => #12
    #10, #11, #12 -> Zip
    -> Format(Format={0}{1}{2}, Selector="Item1,Item2,Item3")
    -> BehaviorSubject TrialParamsPath

    SubscribeSubject "Saving Dir" => #16
    SubscribeSubject DateDir => #17
    StringProperty(Value=\Log.csv) => #18
    #16, #17, #18 -> Zip
    -> Format(Format={0}{1}{2}, Selector="Item1,Item2,Item3")
    -> BehaviorSubject LogPath

    SubscribeSubject "Saving Dir" => #22
    SubscribeSubject DateDir => #23
    StringProperty(Value=\NiDaqInput.bin) => #24
    #22, #23, #24 -> Zip
    -> Format(Format={0}{1}{2}, Selector="Item1,Item2,Item3")
    -> BehaviorSubject NidaqPath

    SubscribeSubject "Saving Dir" => #28
    SubscribeSubject DateDir => #29
    StringProperty(Value=\VideoBottom.avi) => #30
    #28, #29, #30 -> Zip
    -> Format(Format={0}{1}{2}, Selector="Item1,Item2,Item3")
    -> BehaviorSubject VideoPathBottom

    SubscribeSubject "Saving Dir" => #34
    SubscribeSubject DateDir => #35
    StringProperty(Value=\ArduinoInput.csv) => #36
    #34, #35, #36 -> Zip
    -> Format(Format={0}{1}{2}, Selector="Item1,Item2,Item3")
    -> BehaviorSubject ArduinoInput

Bonsai.IO.Ports.CreateSerialPort
  Name=ArduinoAnalog
  PortName=COM3
  BaudRate=115200
  Encoding=utf-8
  NewLine=\n
  Parity=None
  ParityReplace=63
  DataBits=8
  StopBits=One
  Handshake=XOnXOff
  DiscardNull=true
  DtrEnable=true
  RtsEnable=false
  ReadBufferSize=2048
  WriteBufferSize=2048
  ReceivedBytesThreshold=1

Bonsai.IO.Ports.SerialReadLine(PortName=ArduinoAnalog, NewLine=\n)
-> PublishSubject Arduino

Bonsai.DAQmx.AnalogInput
  SignalSource=""
  SampleRate=1000
  ActiveEdge=Rising
  SampleMode=ContinuousSamples
  BufferSize=1
  SamplesPerChannel=nil
  Channels
    AnalogInputChannelConfiguration(ChannelName=Photodiode, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai3, TerminalConfiguration=Differential, VoltageUnits=Volts)
    AnalogInputChannelConfiguration(ChannelName=FrameClock, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai7, TerminalConfiguration=Differential, VoltageUnits=Volts)
    AnalogInputChannelConfiguration(ChannelName=PockelFeedback, MinimumValue=-5, MaximumValue=5, PhysicalChannel=Dev1/ai5, TerminalConfiguration=Differential, VoltageUnits=Volts)
    AnalogInputChannelConfiguration(ChannelName=Piezo, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai6, TerminalConfiguration=Differential, VoltageUnits=Volts)
    AnalogInputChannelConfiguration(ChannelName=ArduinoSync, MinimumValue=-5, MaximumValue=5, PhysicalChannel=Dev1/ai4, TerminalConfiguration=Rse, VoltageUnits=Volts)
-> PublishSubject NIDAQ

SubscribeSubject Arduino
-> Skip(Count=20)
-> Condition
    WorkflowInput Source1
    -> Bonsai.Scripting.IronPython.PythonTransform
      Script:
        @returns(bool)
        def process(value):
          mylist = value.split("\t")

          if len(mylist) == 6:
            return True
          else:
            return False
    -> WorkflowOutput
-> Parse(Pattern="%I\t%I\t%I\t%I\t%I\t%I,", Separator="") => #9
-> MemberSelector(Selector=Item1) => #10
#9 -> MemberSelector(Selector=Item2) => #11
#9 -> MemberSelector(Selector=Item3) => #12
#9 -> MemberSelector(Selector=Item4) => #13
#9 -> MemberSelector(Selector=Item5) => #14
#9 -> MemberSelector(Selector=Item6) => #15
#10, #11, #12, #13, #14, #15 -> Zip
-> Bonsai.Scripting.Expressions.ExpressionTransform => #17
  Expression: new(Item1 as Wheel1, Item2 as Wheel2, Item3 as Camera, Item4 as Camera2, Item5 as Sync,  Item6 as Time)
SubscribeSubject ArduinoInput
-> PropertyMapping(FileName) => #19
#17, #19 -> Bonsai.IO.CsvWriter(FileName=D:\Data\SS131\2025-02-05\ArduinoInput.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=false)

Bonsai.Shaders.RenderFrame => #21
Bonsai.Shaders.Timer(DueTime=PT10S) => #22
#21, #22 -> SubscribeWhen => #23
SubscribeSubject Borders
-> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #25
#23, #25 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-150, Right=-57, Bottom=-32, Top=48)
-> Disable IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
-> BehaviorSubject DrawStimuli
-> IncludeWorkflow(Path=BonVision:Environment.SphereMapping.bonsai, ClearColor=Gray, Width=nil, Height=nil, RotationZ=0, RotationY=0, RotationX=0, FaceSize=nil)
-> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=37.5, Height=30, Rotation(X=0, Y=103.99999834060421, Z=0), Translation(X=-17.5, Y=4, Z=4.2))
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=1)
#23 -> ElementIndex
-> MemberSelector(Selector=Index)
-> BehaviorSubject RenderFrameCount
#23 -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
#21 -> Sink Metadata
    WorkflowInput Source2
    -> StringProperty(Value=photodiode) => #1
    StringProperty(Value=frameclock) => #2
    StringProperty(Value=pockel) => #3
    StringProperty(Value=piezo) => #4
    StringProperty(Value=sync) => #5
    #1, #2, #3, #4, #5 -> Zip => #6
    SubscribeSubject "Saving Dir" => #7
    SubscribeSubject DateDir => #8
    StringProperty(Value=\nidaqChannels.csv) => #9
    #7, #8, #9 -> Zip
    -> Format(Format={0}{1}{2}, Selector="Item1,Item2,Item3")
    -> PropertyMapping(FileName) => #12
    #6, #12 -> Bonsai.IO.CsvWriter(FileName=D:\Data\SS131\2025-02-05\nidaqChannels.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=false)
    -> WorkflowOutput

    StringProperty(Value=Gratings) => #15
    StringProperty(Value=Ori) => #16
    StringProperty(Value=SFreq) => #17
    StringProperty(Value=TFreq) => #18
    StringProperty(Value=Contrast) => #19
    #15, #16, #17, #18, #19 -> Zip => #20
    SubscribeSubject "Saving Dir" => #21
    SubscribeSubject DateDir => #22
    StringProperty(Value=\props.csv) => #23
    #21, #22, #23 -> Zip
    -> Format(Format={0}{1}{2}, Selector="Item1,Item2,Item3")
    -> PropertyMapping(FileName) => #26
    #20, #26 -> Bonsai.IO.CsvWriter(FileName=D:\Data\SS131\2025-02-05\props.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=false)

    WorkflowInput Source1
    -> StringProperty(Value=rotary1) => #29
    StringProperty(Value=rotary2) => #30
    StringProperty(Value=camera1) => #31
    StringProperty(Value=camera2) => #32
    StringProperty(Value=sync) => #33
    #29, #30, #31, #32, #33 -> Zip => #34
    SubscribeSubject "Saving Dir" => #35
    SubscribeSubject DateDir => #36
    StringProperty(Value=\arduinoChannels.csv) => #37
    #35, #36, #37 -> Zip
    -> Format(Format={0}{1}{2}, Selector="Item1,Item2,Item3")
    -> PropertyMapping(FileName) => #40
    #34, #40 -> Bonsai.IO.CsvWriter(FileName=D:\Data\SS131\2025-02-05\arduinoChannels.csv, Append=false, Overwrite=false, Suffix=FileCount, IncludeHeader=false)
SubscribeSubject LogPath
-> PropertyMapping(FileName) => #38
#38, #21 -> IncludeWorkflow Events(Path=BonVision:Logging.FrameEventLogger.bonsai, Append=false, Overwrite=false, Suffix=FileCount, FileName=D:\Data\SS131\2025-02-05\Log.csv)

Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=21225772, ColorProcessing=NoColorProcessing) => #40
Bonsai.Shaders.Timer(DueTime=PT5S) => #41
#40, #41 -> SubscribeWhen
-> MemberSelector(Selector=Image) => #43
SubscribeSubject VideoPath
-> PropertyMapping(FileName) => #45
#43, #45 -> Bonsai.Vision.VideoWriter
  FileName=D:\Data\SS131\2025-02-05\Video.avi
  Suffix=FileCount
  Buffered=false
  Overwrite=false
  FourCC=FMP4
  FrameRate=50
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
-> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=Video, Selector=nil)

Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=21038392, ColorProcessing=NoColorProcessing) => #48
Bonsai.Shaders.Timer(DueTime=PT5S) => #49
#48, #49 -> SubscribeWhen
-> MemberSelector(Selector=Image) => #51
SubscribeSubject VideoPathBottom
-> PropertyMapping(FileName) => #53
#51, #53 -> Bonsai.Vision.VideoWriter
  FileName=D:\Data\SS131\2025-02-05\VideoBottom.avi
  Suffix=FileCount
  Buffered=false
  Overwrite=false
  FourCC=FMP4
  FrameRate=50
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
-> Timestamp
-> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format="Video,{0}", Selector=Timestamp)

SubscribeSubject NidaqPath
-> PropertyMapping(Path) => #58
SubscribeSubject NIDAQ
-> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=AnalogIn, Selector=nil) => #60
#58, #60 -> Bonsai.Dsp.MatrixWriter(Path=D:\Data\SS131\2025-02-05\NiDaqInput.bin, Suffix=FileCount, Overwrite=false, Layout=RowMajor)
-> Disable IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=NIDAQ, Selector="Rows,Cols,Step")

GroupWorkflow StartAcq
    BooleanProperty(Value=true)
    -> Bonsai.DAQmx.DigitalOutput
      SignalSource=""
      SampleRate=0
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port1/line0))
    -> BooleanProperty(Value=false)
    -> Bonsai.DAQmx.DigitalOutput
      SignalSource=""
      SampleRate=0
      ActiveEdge=Rising
      SampleMode=ContinuousSamples
      BufferSize=1000
      Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port1/line0))
    -> WorkflowOutput
-> Bonsai.Shaders.DelaySubscription(DueTime=PT5S)

SubscribeSubject DrawStimuli => #65
SubscribeSubject QuadState
-> PropertyMapping(ColorR(Selector=it), ColorB(Selector=it), ColorG(Selector=it)) => #67
#65, #67 -> IncludeWorkflow
  Path=BonVision:Primitives.DrawQuad.bonsai
  ExtentX=10
  ExtentY=10
  LocationX=-59
  LocationY=-21
  Layer=1
  Angle=15
  ColorR=0
  ColorG=0
  ColorB=0
  ColorA=1

ExternalizedMapping(StimulusID(Category=Filename), MouseID(Category=Filename))
-> GroupWorkflow "Generate File Names"
    ExternalizedMapping(Value(DisplayName=StimulusID))
    -> StringProperty(Value=DotMotion_SpeedTuning) => #1
    ExternalizedMapping(Value(DisplayName=MouseID))
    -> StringProperty(Value=Edd2pRigTest) => #3
    #1, #3 -> Zip
    -> Format(Format={0}_{1}, Selector="Item2,Item1")
    -> BehaviorSubject FilenamePrefix

    SubscribeSubject FilenamePrefix => #7
    -> Format(Format={0}_EyeLog.csv, Selector=it)
    -> BehaviorSubject EyeName
    #7 -> Format(Format={0}_PDAsync.csv, Selector=it)
    -> BehaviorSubject PDname
    #7 -> Format(Format={0}_WheelLog.csv, Selector=it)
    -> BehaviorSubject WheelName
    #7 -> Format(Format={0}_Trial.csv, Selector=it)
    -> BehaviorSubject TrialName
    #7 -> Format(Format={0}_Metadata.csv, Selector=it)
    -> BehaviorSubject MetadataName

ExternalizedMapping(Value(DisplayName=StimulusLocationX))
-> GroupWorkflow VarInIt
    Bonsai.Numerics.CreateRandom(Seed=42)
    -> BehaviorSubject Random

    FloatProperty(Value=0)
    -> PublishSubject Sync

    FloatProperty(Value=1)
    -> BehaviorSubject TrialProgress

    IntProperty(Value=0)
    -> BehaviorSubject SyncPulse

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

    IntProperty(Value=0)
    -> BehaviorSubject EyeFrameCount

    BooleanProperty(Value=false)
    -> BehaviorSubject TimerExpired

    Disable StringProperty(Value=C:\Users\saleem_lab\Documents\VisualStimuli_Temp\)
    -> Disable BehaviorSubject "Saving Dir"

    FloatProperty(Value=1)
    -> BehaviorSubject RepCounter

    FloatProperty(Value=200)
    -> BehaviorSubject MousePos

    IntProperty(Value=0)
    -> BehaviorSubject VideoFrameCount

    FloatProperty(Value=0.1)
    -> BehaviorSubject DurationSingleImage

    ExternalizedMapping(Value)
    -> FloatProperty(Value=0)
    -> BehaviorSubject StimulusXLoc

GroupWorkflow TrialLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.")
    SubscribeSubject TrialParamsPath
    -> PropertyMapping(FileName) => #1
    ExternalizedMapping(Overwrite) => #2
    ExternalizedMapping(Suffix) => #3
    SubscribeSubject TrialParams => #4
    -> MemberSelector(Selector=angle_g1.Value) => #5
    #4 -> MemberSelector(Selector=angle_g2.Value) => #6
    #4 -> MemberSelector(Selector=contrast_g1.Value) => #7
    #4 -> MemberSelector(Selector=contrast_g2.Value) => #8
    #4 -> MemberSelector(Selector=opacity_g1.Value) => #9
    #4 -> MemberSelector(Selector=opacity_g2.Value) => #10
    #5, #6, #7, #8, #9, #10 -> Zip => #11
    #4 -> MemberSelector(Selector=phase_g1.Value) => #12
    #4 -> MemberSelector(Selector=phase_g2.Value) => #13
    #4 -> MemberSelector(Selector=temporalFrequency.Value) => #14
    #4 -> MemberSelector(Selector=spatialFrequency.Value) => #15
    #12, #13, #14, #15 -> Zip => #16
    #11, #16 -> Zip => #17
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #19
    #17, #19 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #21
      Expression:
        new(Item1.Item1.Item1 as Angle_g1,
        Item1.Item1.Item2 as Angle_g2,
        Item1.Item1.Item3 as Contrast_g1,
        Item1.Item1.Item4 as Contrast_g2,
        Item1.Item1.Item5 as Opacity_g1,
        Item1.Item1.Item6 as Opacity_g2,

        Item1.Item2.Item1 as Phase_g1,
        Item1.Item2.Item2 as Phase_g2,
        Item1.Item2.Item3 as TemporalFrequency,
        Item1.Item2.Item4 as SpatialFrequency,

        Item2 as BonsaiTime)
    #1, #2, #3, #21 -> Bonsai.IO.CsvWriter
      FileName=D:\Data\SS131\2025-02-05\GratingsPlaidsTrialParams.csv
      Delimiter=","
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true
      Selector=""

    DoubleGratingSpecification(Trials="")
    -> BehaviorSubject TrialParams

GroupWorkflow IntialiseTrialParams
    Disable IntProperty(Value=0) => #0
    Disable FloatProperty(Value=0) => #1
    Disable FloatProperty(Value=0) => #2
    Disable FloatProperty(Value=0) => #3
    Disable FloatProperty(Value=0) => #4
    Disable FloatProperty(Value=0) => #5
    Disable FloatProperty(Value=0) => #6
    #0, #1, #2, #3, #4, #5, #6 -> Disable Zip => #7
    Disable IntProperty(Value=0) => #8
    Disable IntProperty(Value=0) => #9
    Disable FloatProperty(Value=0) => #10
    Disable FloatProperty(Value=0) => #11
    Disable FloatProperty(Value=0) => #12
    Disable FloatProperty(Value=0) => #13
    Disable FloatProperty(Value=0) => #14
    #8, #9, #10, #11, #12, #13, #14 -> Disable Zip => #15
    Disable FloatProperty(Value=0) => #16
    Disable FloatProperty(Value=0) => #17
    Disable FloatProperty(Value=0) => #18
    #16, #17, #18 -> Disable Zip => #19
    #7, #15, #19 -> Disable Zip
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1.Item1 as Id,
        Item1.Item2 as Duration,
        Item1.Item3 as Size,
        Item1.Item4 as Colour1,
        Item1.Item5 as Colour2,
        Item1.Item6 as numDots1,
        Item1.Item7 as numDots2,

        Item2.Item1 as dotLifeBool,
        Item2.Item2 as dotLifetime,
        Item2.Item3 as Contrast1,
        Item2.Item4 as Contrast2,
        Item2.Item5 as VelX1,
        Item2.Item6 as VelX2,
        Item2.Item7 as VelY1,

        Item3.Item1 as VelY2,
        Item3.Item2 as Coherence1,
        Item3.Item3 as Coherence2)
    -> Disable Skip(Count=1)
    -> Disable BehaviorSubject TrialParams

Disable GroupWorkflow "Fake Arduino for testing"
    IntProperty(Value=0)
    -> IntProperty(Value=0)
    -> BehaviorSubject WheelInput

    IntProperty(Value=0)
    -> BehaviorSubject LeftLick

    IntProperty(Value=0)
    -> BehaviorSubject RightLick

    IntProperty(Value=0)
    -> BehaviorSubject LastSyncPulseTime

    IntProperty(Value=0)
    -> BehaviorSubject Photodiode

    IntProperty(Value=0)
    -> BehaviorSubject ArduinoTime

    IntProperty(Value=0) => #13
    IntProperty(Value=0) => #14
    #13, #14 -> Zip
    -> BehaviorSubject PDandAsync

    Bonsai.Windows.Input.KeyDown(Filter=Left, SuppressRepetitions=false)
    -> IntProperty(Value=1)
    -> Accumulate
    -> MulticastSubject LeftLick

    Bonsai.Windows.Input.KeyDown(Filter=Right, SuppressRepetitions=false)
    -> IntProperty(Value=1)
    -> Accumulate
    -> MulticastSubject RightLick

    Timer(DueTime=PT0S, Period=PT0.01S)
    -> IntProperty(Value=10)
    -> Accumulate => #27
    Bonsai.Windows.Input.MouseMove
    -> MemberSelector(Selector=X) => #29
    IntProperty(Value=0) => #30
    #29, #30 -> Merge
    -> Divide(Operand=IntProperty(Value=10)) => #32
    #27, #32 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #34
      Expression: new(Item2 as Item1, Item1 as Item2)
    -> MemberSelector(Selector=Item1)
    -> MulticastSubject WheelInput
    #34 -> MemberSelector(Selector=Item2)
    -> MulticastSubject ArduinoTime

GroupWorkflow Borders
    ExternalizedMapping(Value(DisplayName=TopBorder))
    -> FloatProperty(Value=48)
    -> ReplaySubject Top(BufferSize=nil) => #2
    ExternalizedMapping(Value(DisplayName=BottomBorder))
    -> FloatProperty(Value=-32)
    -> ReplaySubject Bottom(BufferSize=nil) => #5
    ExternalizedMapping(Value(DisplayName=LeftBorder))
    -> FloatProperty(Value=-150)
    -> ReplaySubject Left(BufferSize=nil) => #8
    ExternalizedMapping(Value(DisplayName=RightBorder))
    -> FloatProperty(Value=-57)
    -> ReplaySubject Right(BufferSize=nil) => #11
    #2, #5, #8, #11 -> Zip
    -> ReplaySubject Borders(BufferSize=nil)

Disable GroupWorkflow TrialLogger
    GroupWorkflow TrialLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.")
        SubscribeSubject TrialParamsPath
        -> PropertyMapping(FileName) => #1
        ExternalizedMapping(Overwrite) => #2
        ExternalizedMapping(Suffix) => #3
        SubscribeSubject TrialParams => #4
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #6
        #4, #6 -> Zip => #7
        SubscribeSubject ArduinoTime => #8
        #7, #8 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
          Expression:
            new(Item1.Item1.Id as Id,
            Item1.Item1.Duration as Duration,
            Item1.Item1.Size as Size,
            Item1.Item1.Colour1 as Colour1,
            Item1.Item1.Colour2 as Colour2,
            Item1.Item1.numDots1 as numDots1,
            Item1.Item1.numDots2 as numDots2,
            Item1.Item1.dotLifeBool as dotLifeBool,
            Item1.Item1.dotLifetime as dotLifetime,
            Item1.Item1.Contrast1 as Contrast1,
            Item1.Item1.Contrast2 as Contrast2,
            Item1.Item1.VelX1 as VelX1,
            Item1.Item1.VelX2 as VelX2,
            Item1.Item1.Coherence1 as Coherence1,
            Item1.Item1.Coherence1 as Coherence1,
            Item1.Item2 as BonsaiTime,
            Item2 as ArduinoTime)
        #1, #2, #3, #10 -> Bonsai.IO.CsvWriter
          FileName=D:\Data\SS131\2025-02-04\DotMotionTrialParams.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=true
          Selector="Id,Duration,Size,Colour1,Colour2,numDots1,numDots2,dotLifeBool,dotLifetime,Contrast1,Contrast2,VelX1,VelX2,Coherence1,BonsaiTime,ArduinoTime"

        IntProperty(Value=0)
        -> BehaviorSubject ArduinoTime

    GroupWorkflow IntialiseTrialParams
        IntProperty(Value=0) => #0
        FloatProperty(Value=0) => #1
        FloatProperty(Value=0) => #2
        FloatProperty(Value=0) => #3
        FloatProperty(Value=0) => #4
        FloatProperty(Value=0) => #5
        FloatProperty(Value=0) => #6
        #0, #1, #2, #3, #4, #5, #6 -> Zip => #7
        IntProperty(Value=0) => #8
        IntProperty(Value=0) => #9
        FloatProperty(Value=0) => #10
        FloatProperty(Value=0) => #11
        FloatProperty(Value=0) => #12
        FloatProperty(Value=0) => #13
        FloatProperty(Value=0) => #14
        #8, #9, #10, #11, #12, #13, #14 -> Zip => #15
        FloatProperty(Value=0) => #16
        FloatProperty(Value=0) => #17
        FloatProperty(Value=0) => #18
        #16, #17, #18 -> Zip => #19
        #7, #15, #19 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1.Item1 as Id,
            Item1.Item2 as Duration,
            Item1.Item3 as Size,
            Item1.Item4 as Colour1,
            Item1.Item5 as Colour2,
            Item1.Item6 as numDots1,
            Item1.Item7 as numDots2,

            Item2.Item1 as dotLifeBool,
            Item2.Item2 as dotLifetime,
            Item2.Item3 as Contrast1,
            Item2.Item4 as Contrast2,
            Item2.Item5 as VelX1,
            Item2.Item6 as VelX2,
            Item2.Item7 as VelY1,

            Item3.Item1 as VelY2,
            Item3.Item2 as Coherence1,
            Item3.Item3 as Coherence2)
        -> Skip(Count=1)
        -> BehaviorSubject TrialParams

ExternalizedMapping(DisplayDevice, WindowState)
-> GroupWorkflow DisplayAndResources
    ExternalizedMapping(DisplayDevice, WindowState)

    Bonsai.Shaders.CreateWindow
      Width=1280
      Height=1024
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Fixed
      WindowState=Fullscreen
      DisplayDevice=Second
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=DynamicVideo, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Nearest, MagFilter=Nearest)
    -> Bonsai.Resources.LoadResources

Disable WorkflowInput Source1 => #80
Disable ExternalizedMapping(Count) => #81
#80, #81 -> Disable GroupWorkflow StimulusSelection
    WorkflowInput Source1 => #0
    -> GroupWorkflow Blank => #1
        WorkflowInput Source1
        -> MotionCoherenceSpecification
          Trials
            MotionCoherenceParams
              Duration=2
              Size=nil
              dotLifeBool=nil
              dotLifetime=nil
              Colour1=nil
              Colour2=nil
              numDots1=0
              numDots2=0
              Contrast1=nil
              Contrast2=nil
              VelocityX1=nil
              VelocityX2=nil
              VelocityY1=nil
              VelocityY2=nil
              Coherence1=nil
              Coherence2=nil
        -> GroupWorkflow EnsureMotionCoherenceParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=Duration)) => #4
            #3, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #5
            #1 -> MemberSelector(Selector=Value.Size) => #6
            ExternalizedMapping(Value(DisplayName=DotSize)) => #7
            #6, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #8
            #1 -> MemberSelector(Selector=Value.Colour1) => #9
            ExternalizedMapping(Value(DisplayName=Colour1)) => #10
            #9, #10 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #11
            #1 -> MemberSelector(Selector=Value.Colour2) => #12
            ExternalizedMapping(Value(DisplayName=Colour2)) => #13
            #12, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #14
            #1 -> MemberSelector(Selector=Value.numDots1) => #15
            ExternalizedMapping(Value(DisplayName=numDots1)) => #16
            #15, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #17
            #1 -> MemberSelector(Selector=Value.numDots2) => #18
            ExternalizedMapping(Value(DisplayName=numDots2)) => #19
            #18, #19 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
            #2, #5, #8, #11, #14, #17, #20 -> Zip => #21
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #22
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #23
            #22, #23 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #24
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #25
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #26
            #25, #26 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #27
            #1 -> MemberSelector(Selector=Value.Contrast1) => #28
            ExternalizedMapping(Value(DisplayName=Contrast1)) => #29
            #28, #29 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #30
            #1 -> MemberSelector(Selector=Value.Contrast2) => #31
            ExternalizedMapping(Value(DisplayName=Contrast2)) => #32
            #31, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #33
            #24, #27, #30, #33 -> Zip => #34
            #1 -> MemberSelector(Selector=Value.VelocityX1) => #35
            ExternalizedMapping(Value(DisplayName=VelocityX1)) => #36
            #35, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #37
            #1 -> MemberSelector(Selector=Value.VelocityX2) => #38
            ExternalizedMapping(Value(DisplayName=VelocityX2)) => #39
            #38, #39 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #40
            #1 -> MemberSelector(Selector=Value.VelocityY1) => #41
            ExternalizedMapping(Value(DisplayName=VelocityY1)) => #42
            #41, #42 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityY2) => #44
            ExternalizedMapping(Value(DisplayName=VelocityY2)) => #45
            #44, #45 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #46
            #1 -> MemberSelector(Selector=Value.Coherence1) => #47
            ExternalizedMapping(Value(DisplayName=Coherence1)) => #48
            #47, #48 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #1 -> MemberSelector(Selector=Value.Coherence2) => #50
            ExternalizedMapping(Value(DisplayName=Coherence2)) => #51
            #50, #51 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #52
            #37, #40, #43, #46, #49, #52 -> Zip => #53
            #21, #34, #53 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,

                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast1,
                Item2.Item4 as Contrast2,

                Item3.Item1 as VelX1,
                Item3.Item2 as VelX2,
                Item3.Item3 as VelY1,
                Item3.Item4 as VelY2,
                Item3.Item5 as Coherence1,
                Item3.Item6 as Coherence2)
            -> WorkflowOutput
        -> WorkflowOutput
    #0 -> GroupWorkflow "Speed Tuning (move left)" => #2
        WorkflowInput Source1
        -> MotionCoherenceSpecification
          Trials
            MotionCoherenceParams
              Duration=2
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=148
              numDots2=148
              Contrast1=1
              Contrast2=1
              VelocityX1=0
              VelocityX2=0
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=2
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=148
              numDots2=148
              Contrast1=1
              Contrast2=1
              VelocityX1=-16
              VelocityX2=-16
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=2
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=148
              numDots2=148
              Contrast1=1
              Contrast2=1
              VelocityX1=-32
              VelocityX2=-32
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=2
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=148
              numDots2=148
              Contrast1=1
              Contrast2=1
              VelocityX1=-64
              VelocityX2=-64
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=2
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=148
              numDots2=148
              Contrast1=1
              Contrast2=1
              VelocityX1=-128
              VelocityX2=-128
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=2
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=148
              numDots2=148
              Contrast1=1
              Contrast2=1
              VelocityX1=-256
              VelocityX2=-256
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=2
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=148
              numDots2=148
              Contrast1=1
              Contrast2=1
              VelocityX1=-512
              VelocityX2=-512
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
        -> GroupWorkflow EnsureMotionCoherenceParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=Duration)) => #4
            #3, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #5
            #1 -> MemberSelector(Selector=Value.Size) => #6
            ExternalizedMapping(Value(DisplayName=DotSize)) => #7
            #6, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #8
            #1 -> MemberSelector(Selector=Value.Colour1) => #9
            ExternalizedMapping(Value(DisplayName=Colour1)) => #10
            #9, #10 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #11
            #1 -> MemberSelector(Selector=Value.Colour2) => #12
            ExternalizedMapping(Value(DisplayName=Colour2)) => #13
            #12, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #14
            #1 -> MemberSelector(Selector=Value.numDots1) => #15
            ExternalizedMapping(Value(DisplayName=numDots1)) => #16
            #15, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #17
            #1 -> MemberSelector(Selector=Value.numDots2) => #18
            ExternalizedMapping(Value(DisplayName=numDots2)) => #19
            #18, #19 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
            #2, #5, #8, #11, #14, #17, #20 -> Zip => #21
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #22
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #23
            #22, #23 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #24
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #25
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #26
            #25, #26 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #27
            #1 -> MemberSelector(Selector=Value.Contrast1) => #28
            ExternalizedMapping(Value(DisplayName=Contrast1)) => #29
            #28, #29 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #30
            #1 -> MemberSelector(Selector=Value.Contrast2) => #31
            ExternalizedMapping(Value(DisplayName=Contrast2)) => #32
            #31, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #33
            #24, #27, #30, #33 -> Zip => #34
            #1 -> MemberSelector(Selector=Value.VelocityX1) => #35
            ExternalizedMapping(Value(DisplayName=VelocityX1)) => #36
            #35, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #37
            #1 -> MemberSelector(Selector=Value.VelocityX2) => #38
            ExternalizedMapping(Value(DisplayName=VelocityX2)) => #39
            #38, #39 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #40
            #1 -> MemberSelector(Selector=Value.VelocityY1) => #41
            ExternalizedMapping(Value(DisplayName=VelocityY1)) => #42
            #41, #42 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityY2) => #44
            ExternalizedMapping(Value(DisplayName=VelocityY2)) => #45
            #44, #45 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #46
            #1 -> MemberSelector(Selector=Value.Coherence1) => #47
            ExternalizedMapping(Value(DisplayName=Coherence1)) => #48
            #47, #48 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #1 -> MemberSelector(Selector=Value.Coherence2) => #50
            ExternalizedMapping(Value(DisplayName=Coherence2)) => #51
            #50, #51 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #52
            #37, #40, #43, #46, #49, #52 -> Zip => #53
            #21, #34, #53 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,

                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast1,
                Item2.Item4 as Contrast2,

                Item3.Item1 as VelX1,
                Item3.Item2 as VelX2,
                Item3.Item3 as VelY1,
                Item3.Item4 as VelY2,
                Item3.Item5 as Coherence1,
                Item3.Item6 as Coherence2)
            -> WorkflowOutput
        -> WorkflowOutput
    #0 -> Disable GroupWorkflow "Speed Tuning (move right)" => #3
        WorkflowInput Source1
        -> MotionCoherenceSpecification
          Trials
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=0
              VelocityX2=0
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=16
              VelocityX2=16
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=32
              VelocityX2=32
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=64
              VelocityX2=64
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=128
              VelocityX2=128
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=256
              VelocityX2=256
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
        -> GroupWorkflow EnsureMotionCoherenceParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=Duration)) => #4
            #3, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #5
            #1 -> MemberSelector(Selector=Value.Size) => #6
            ExternalizedMapping(Value(DisplayName=DotSize)) => #7
            #6, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #8
            #1 -> MemberSelector(Selector=Value.Colour1) => #9
            ExternalizedMapping(Value(DisplayName=Colour1)) => #10
            #9, #10 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #11
            #1 -> MemberSelector(Selector=Value.Colour2) => #12
            ExternalizedMapping(Value(DisplayName=Colour2)) => #13
            #12, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #14
            #1 -> MemberSelector(Selector=Value.numDots1) => #15
            ExternalizedMapping(Value(DisplayName=numDots1)) => #16
            #15, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #17
            #1 -> MemberSelector(Selector=Value.numDots2) => #18
            ExternalizedMapping(Value(DisplayName=numDots2)) => #19
            #18, #19 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
            #2, #5, #8, #11, #14, #17, #20 -> Zip => #21
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #22
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #23
            #22, #23 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #24
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #25
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #26
            #25, #26 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #27
            #1 -> MemberSelector(Selector=Value.Contrast1) => #28
            ExternalizedMapping(Value(DisplayName=Contrast1)) => #29
            #28, #29 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #30
            #1 -> MemberSelector(Selector=Value.Contrast2) => #31
            ExternalizedMapping(Value(DisplayName=Contrast2)) => #32
            #31, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #33
            #24, #27, #30, #33 -> Zip => #34
            #1 -> MemberSelector(Selector=Value.VelocityX1) => #35
            ExternalizedMapping(Value(DisplayName=VelocityX1)) => #36
            #35, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #37
            #1 -> MemberSelector(Selector=Value.VelocityX2) => #38
            ExternalizedMapping(Value(DisplayName=VelocityX2)) => #39
            #38, #39 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #40
            #1 -> MemberSelector(Selector=Value.VelocityY1) => #41
            ExternalizedMapping(Value(DisplayName=VelocityY1)) => #42
            #41, #42 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityY2) => #44
            ExternalizedMapping(Value(DisplayName=VelocityY2)) => #45
            #44, #45 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #46
            #1 -> MemberSelector(Selector=Value.Coherence1) => #47
            ExternalizedMapping(Value(DisplayName=Coherence1)) => #48
            #47, #48 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #1 -> MemberSelector(Selector=Value.Coherence2) => #50
            ExternalizedMapping(Value(DisplayName=Coherence2)) => #51
            #50, #51 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #52
            #37, #40, #43, #46, #49, #52 -> Zip => #53
            #21, #34, #53 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,

                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast1,
                Item2.Item4 as Contrast2,

                Item3.Item1 as VelX1,
                Item3.Item2 as VelX2,
                Item3.Item3 as VelY1,
                Item3.Item4 as VelY2,
                Item3.Item5 as Coherence1,
                Item3.Item6 as Coherence2)
            -> WorkflowOutput
        -> WorkflowOutput
    #0 -> Disable GroupWorkflow "Direction Tuning (8dirs 32degs)" => #4
        WorkflowInput Source1
        -> MotionCoherenceSpecification
          Trials
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-32
              VelocityX2=-32
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-22.6274
              VelocityX2=-22.6274
              VelocityY1=-22.6274
              VelocityY2=-22.6274
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=0
              VelocityX2=0
              VelocityY1=-32
              VelocityY2=-32
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=22.6274
              VelocityX2=22.6274
              VelocityY1=-22.6274
              VelocityY2=-22.6274
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=32
              VelocityX2=32
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=22.6274
              VelocityX2=22.6274
              VelocityY1=22.6274
              VelocityY2=22.6274
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=0
              VelocityX2=0
              VelocityY1=32
              VelocityY2=32
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-22.6274
              VelocityX2=-22.6274
              VelocityY1=32
              VelocityY2=32
              Coherence1=100
              Coherence2=100
        -> GroupWorkflow EnsureMotionCoherenceParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=Duration)) => #4
            #3, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #5
            #1 -> MemberSelector(Selector=Value.Size) => #6
            ExternalizedMapping(Value(DisplayName=DotSize)) => #7
            #6, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #8
            #1 -> MemberSelector(Selector=Value.Colour1) => #9
            ExternalizedMapping(Value(DisplayName=Colour1)) => #10
            #9, #10 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #11
            #1 -> MemberSelector(Selector=Value.Colour2) => #12
            ExternalizedMapping(Value(DisplayName=Colour2)) => #13
            #12, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #14
            #1 -> MemberSelector(Selector=Value.numDots1) => #15
            ExternalizedMapping(Value(DisplayName=numDots1)) => #16
            #15, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #17
            #1 -> MemberSelector(Selector=Value.numDots2) => #18
            ExternalizedMapping(Value(DisplayName=numDots2)) => #19
            #18, #19 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
            #2, #5, #8, #11, #14, #17, #20 -> Zip => #21
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #22
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #23
            #22, #23 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #24
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #25
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #26
            #25, #26 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #27
            #1 -> MemberSelector(Selector=Value.Contrast1) => #28
            ExternalizedMapping(Value(DisplayName=Contrast1)) => #29
            #28, #29 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #30
            #1 -> MemberSelector(Selector=Value.Contrast2) => #31
            ExternalizedMapping(Value(DisplayName=Contrast2)) => #32
            #31, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #33
            #24, #27, #30, #33 -> Zip => #34
            #1 -> MemberSelector(Selector=Value.VelocityX1) => #35
            ExternalizedMapping(Value(DisplayName=VelocityX1)) => #36
            #35, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #37
            #1 -> MemberSelector(Selector=Value.VelocityX2) => #38
            ExternalizedMapping(Value(DisplayName=VelocityX2)) => #39
            #38, #39 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #40
            #1 -> MemberSelector(Selector=Value.VelocityY1) => #41
            ExternalizedMapping(Value(DisplayName=VelocityY1)) => #42
            #41, #42 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityY2) => #44
            ExternalizedMapping(Value(DisplayName=VelocityY2)) => #45
            #44, #45 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #46
            #1 -> MemberSelector(Selector=Value.Coherence1) => #47
            ExternalizedMapping(Value(DisplayName=Coherence1)) => #48
            #47, #48 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #1 -> MemberSelector(Selector=Value.Coherence2) => #50
            ExternalizedMapping(Value(DisplayName=Coherence2)) => #51
            #50, #51 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #52
            #37, #40, #43, #46, #49, #52 -> Zip => #53
            #21, #34, #53 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,

                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast1,
                Item2.Item4 as Contrast2,

                Item3.Item1 as VelX1,
                Item3.Item2 as VelX2,
                Item3.Item3 as VelY1,
                Item3.Item4 as VelY2,
                Item3.Item5 as Coherence1,
                Item3.Item6 as Coherence2)
            -> WorkflowOutput
        -> WorkflowOutput
    #0 -> Disable GroupWorkflow "Direction Tuning (12 dirs 50degs)" => #5
        WorkflowInput Source1
        -> MotionCoherenceSpecification
          Trials
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=0
              VelocityX2=0
              VelocityY1=50
              VelocityY2=50
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=25
              VelocityX2=25
              VelocityY1=43.3013
              VelocityY2=43.3013
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=43.3013
              VelocityX2=43.3013
              VelocityY1=25
              VelocityY2=25
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=50
              VelocityX2=50
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=43.3013
              VelocityX2=43.3013
              VelocityY1=-25
              VelocityY2=-25
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=25
              VelocityX2=25
              VelocityY1=-43.3013
              VelocityY2=-43.3013
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=0
              VelocityX2=0
              VelocityY1=-50
              VelocityY2=-50
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-25
              VelocityX2=-25
              VelocityY1=-43.3013
              VelocityY2=-43.3013
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-43.3013
              VelocityX2=-43.3013
              VelocityY1=-25
              VelocityY2=-25
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-50
              VelocityX2=-50
              VelocityY1=0
              VelocityY2=0
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-43.3013
              VelocityX2=-43.3013
              VelocityY1=25
              VelocityY2=25
              Coherence1=100
              Coherence2=100
            MotionCoherenceParams
              Duration=1
              Size=2
              dotLifeBool=0
              dotLifetime=1
              Colour1=0
              Colour2=1
              numDots1=573
              numDots2=573
              Contrast1=1
              Contrast2=1
              VelocityX1=-25
              VelocityX2=-25
              VelocityY1=43.3013
              VelocityY2=43.3013
              Coherence1=100
              Coherence2=100
        -> GroupWorkflow EnsureMotionCoherenceParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=Duration)) => #4
            #3, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #5
            #1 -> MemberSelector(Selector=Value.Size) => #6
            ExternalizedMapping(Value(DisplayName=DotSize)) => #7
            #6, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #8
            #1 -> MemberSelector(Selector=Value.Colour1) => #9
            ExternalizedMapping(Value(DisplayName=Colour1)) => #10
            #9, #10 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #11
            #1 -> MemberSelector(Selector=Value.Colour2) => #12
            ExternalizedMapping(Value(DisplayName=Colour2)) => #13
            #12, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #14
            #1 -> MemberSelector(Selector=Value.numDots1) => #15
            ExternalizedMapping(Value(DisplayName=numDots1)) => #16
            #15, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #17
            #1 -> MemberSelector(Selector=Value.numDots2) => #18
            ExternalizedMapping(Value(DisplayName=numDots2)) => #19
            #18, #19 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
            #2, #5, #8, #11, #14, #17, #20 -> Zip => #21
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #22
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #23
            #22, #23 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #24
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #25
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #26
            #25, #26 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #27
            #1 -> MemberSelector(Selector=Value.Contrast1) => #28
            ExternalizedMapping(Value(DisplayName=Contrast1)) => #29
            #28, #29 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #30
            #1 -> MemberSelector(Selector=Value.Contrast2) => #31
            ExternalizedMapping(Value(DisplayName=Contrast2)) => #32
            #31, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #33
            #24, #27, #30, #33 -> Zip => #34
            #1 -> MemberSelector(Selector=Value.VelocityX1) => #35
            ExternalizedMapping(Value(DisplayName=VelocityX1)) => #36
            #35, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #37
            #1 -> MemberSelector(Selector=Value.VelocityX2) => #38
            ExternalizedMapping(Value(DisplayName=VelocityX2)) => #39
            #38, #39 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #40
            #1 -> MemberSelector(Selector=Value.VelocityY1) => #41
            ExternalizedMapping(Value(DisplayName=VelocityY1)) => #42
            #41, #42 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityY2) => #44
            ExternalizedMapping(Value(DisplayName=VelocityY2)) => #45
            #44, #45 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #46
            #1 -> MemberSelector(Selector=Value.Coherence1) => #47
            ExternalizedMapping(Value(DisplayName=Coherence1)) => #48
            #47, #48 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #1 -> MemberSelector(Selector=Value.Coherence2) => #50
            ExternalizedMapping(Value(DisplayName=Coherence2)) => #51
            #50, #51 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #52
            #37, #40, #43, #46, #49, #52 -> Zip => #53
            #21, #34, #53 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,

                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast1,
                Item2.Item4 as Contrast2,

                Item3.Item1 as VelX1,
                Item3.Item2 as VelX2,
                Item3.Item3 as VelY1,
                Item3.Item4 as VelY2,
                Item3.Item5 as Coherence1,
                Item3.Item6 as Coherence2)
            -> WorkflowOutput
        -> WorkflowOutput
    #1, #2, #3, #4, #5 -> Concat => #6
    SubscribeSubject Random => #7
    #6, #7 -> Bonsai.Numerics.Permutation
    -> CreateObservable CreateTrial
        WorkflowInput Source1 => #0
        -> SelectMany DrawStimulus
            SubscribeSubject Borders
            -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #1
            SubscribeSubject Parameters
            -> MemberSelector(Selector=numDots1)
            -> PropertyMapping(numDots) => #4
            IntProperty(Value=10)
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.Seconds)
            -> PropertyMapping(rndseed) => #8
            #1, #4, #8 -> GenerateDotField(numDots=148, left=-150, right=-57, top=48, bottom=-32, rndseed=28) => #9
            SubscribeSubject Parameters
            -> MemberSelector(Selector=dotLifetime) => #11
            Bonsai.Shaders.UpdateFrame
            -> MemberSelector(Selector=TimeStep.ElapsedTime)
            -> Take(Count=1) => #14
            #11, #14 -> Zip
            -> Divide
            -> PropertyMapping(dotLifetime) => #17
            #4, #17 -> GenerateDotLives(dotLifetime=60, numDots=148) => #18
            #9, #18 -> Zip => #19
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelX1) => #21
            #14, #21 -> Zip
            -> Multiply
            -> PropertyMapping(VelocityX) => #24
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelY1) => #26
            #14, #26 -> Zip
            -> Multiply
            -> PropertyMapping(VelocityY) => #29
            SubscribeSubject StimulusXLoc
            -> PropertyMapping(LocationX) => #31
            SubscribeSubject Parameters
            -> PropertyMapping(Diameter(Selector=Size), Coherence(Selector=Coherence1), dotLifetimeBool(Selector=dotLifeBool), ColorA(Selector=Contrast1)) => #33
            #19, #24, #29, #17, #31, #33 -> GroupWorkflow DrawMovingCircleArray-2d(Description="Draws multiple colored circles using the input array as position data.") => #34
                ExternalizedMapping(VelocityX) => #0
                ExternalizedMapping(VelocityY) => #1
                ExternalizedMapping(Coherence) => #2
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #4
                ExternalizedMapping(dotLifetimeBool, dotLifetime) => #5
                WorkflowInput Source1 => #6
                -> MemberSelector(Selector=Item1) => #7
                SubscribeSubject DrawStimuli
                -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #9
                ExternalizedMapping(LocationX) => #10
                ExternalizedMapping(LocationY) => #11
                ExternalizedMapping(Value(DisplayName=Diameter))
                -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=2)
                -> PropertyMapping(ExtentX, ExtentY) => #14
                #9, #10, #11, #14 -> GroupWorkflow Transform => #15
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(X(DisplayName=LocationX)) => #1
                    ExternalizedMapping(Y(DisplayName=LocationY)) => #2
                    #0, #1, #2 -> Bonsai.Shaders.CreateTranslation(X=0, Y=0, Z=0) => #3
                    ExternalizedMapping(X(DisplayName=ExtentX)) => #4
                    ExternalizedMapping(Y(DisplayName=ExtentY)) => #5
                    #3, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=2, Y=2, Z=1) => #6
                    ExternalizedMapping(Angle) => #7
                    #6, #7 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                    -> WorkflowOutput
                ExternalizedMapping(Value(DisplayName=ColorR))
                -> FloatProperty(Value=0)
                -> PropertyMapping(X) => #18
                ExternalizedMapping(Value(DisplayName=ColorG))
                -> FloatProperty(Value=0)
                -> PropertyMapping(Y) => #21
                ExternalizedMapping(Value(DisplayName=ColorB))
                -> FloatProperty(Value=0)
                -> PropertyMapping(Z) => #24
                ExternalizedMapping(Value(DisplayName=ColorA))
                -> FloatProperty(Value=1)
                -> PropertyMapping(W) => #27
                #15, #18, #21, #24, #27 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #29
                #7, #29 -> CombineLatest => #30
                #30, #29 -> Sample
                -> MemberSelector(Selector=Item1) => #32
                #6 -> MemberSelector(Selector=Item2) => #33
                #32, #33 -> CombineLatest => #34
                #0, #1, #2, #4, #5, #34 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=60, left=-150, right=-57, top=48, bottom=-32)
                -> MemberSelector(Selector=Item1)
                -> Bonsai.Shaders.DrawMeshInstanced
                  ShaderName=CircleArray
                  MeshName=Quad
                  Usage=DynamicDraw
                  InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                -> WorkflowOutput
            SubscribeSubject Parameters
            -> MemberSelector(Selector=numDots2)
            -> PropertyMapping(numDots) => #37
            IntProperty(Value=10)
            -> Timestamp
            -> MemberSelector(Selector=Timestamp.TimeOfDay.Seconds)
            -> Add(Operand=IntProperty(Value=99))
            -> PropertyMapping(rndseed) => #42
            #1, #37, #42 -> GenerateDotField(numDots=148, left=-150, right=-57, top=48, bottom=-32, rndseed=127) => #43
            SubscribeSubject Parameters
            -> MemberSelector(Selector=dotLifetime) => #45
            #45, #14 -> Zip
            -> Divide
            -> PropertyMapping(dotLifetime) => #48
            #37, #48 -> GenerateDotLives(dotLifetime=60, numDots=148) => #49
            #43, #49 -> Zip => #50
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelX2) => #52
            #14, #52 -> Zip
            -> Multiply
            -> PropertyMapping(VelocityX) => #55
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelY2) => #57
            #14, #57 -> Zip
            -> Multiply
            -> PropertyMapping(VelocityY) => #60
            SubscribeSubject StimulusXLoc
            -> PropertyMapping(LocationX) => #62
            SubscribeSubject Parameters
            -> PropertyMapping(Diameter(Selector=Size), Coherence(Selector=Coherence2), dotLifetimeBool(Selector=dotLifeBool), ColorA(Selector=Contrast2)) => #64
            #50, #55, #60, #48, #62, #64 -> GroupWorkflow DrawMovingCircleArray-2d(Description="Draws multiple colored circles using the input array as position data.") => #65
                ExternalizedMapping(VelocityX) => #0
                ExternalizedMapping(VelocityY) => #1
                ExternalizedMapping(Coherence) => #2
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #4
                ExternalizedMapping(dotLifetimeBool, dotLifetime) => #5
                WorkflowInput Source1 => #6
                -> MemberSelector(Selector=Item1) => #7
                SubscribeSubject DrawStimuli
                -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #9
                ExternalizedMapping(LocationX) => #10
                ExternalizedMapping(LocationY) => #11
                ExternalizedMapping(Value(DisplayName=Diameter))
                -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=2)
                -> PropertyMapping(ExtentX, ExtentY) => #14
                #9, #10, #11, #14 -> GroupWorkflow Transform => #15
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(X(DisplayName=LocationX)) => #1
                    ExternalizedMapping(Y(DisplayName=LocationY)) => #2
                    #0, #1, #2 -> Bonsai.Shaders.CreateTranslation(X=0, Y=0, Z=0) => #3
                    ExternalizedMapping(X(DisplayName=ExtentX)) => #4
                    ExternalizedMapping(Y(DisplayName=ExtentY)) => #5
                    #3, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=2, Y=2, Z=1) => #6
                    ExternalizedMapping(Angle) => #7
                    #6, #7 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                    -> WorkflowOutput
                ExternalizedMapping(Value(DisplayName=ColorR))
                -> FloatProperty(Value=1)
                -> PropertyMapping(X) => #18
                ExternalizedMapping(Value(DisplayName=ColorG))
                -> FloatProperty(Value=1)
                -> PropertyMapping(Y) => #21
                ExternalizedMapping(Value(DisplayName=ColorB))
                -> FloatProperty(Value=1)
                -> PropertyMapping(Z) => #24
                ExternalizedMapping(Value(DisplayName=ColorA))
                -> FloatProperty(Value=1)
                -> PropertyMapping(W) => #27
                #15, #18, #21, #24, #27 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #29
                #7, #29 -> CombineLatest => #30
                #30, #29 -> Sample
                -> MemberSelector(Selector=Item1) => #32
                #6 -> MemberSelector(Selector=Item2) => #33
                #32, #33 -> CombineLatest => #34
                #0, #1, #2, #4, #5, #34 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=60, left=-150, right=-57, top=48, bottom=-32)
                -> MemberSelector(Selector=Item1)
                -> Bonsai.Shaders.DrawMeshInstanced
                  ShaderName=CircleArray
                  MeshName=Quad
                  Usage=DynamicDraw
                  InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                -> WorkflowOutput
            #34, #65 -> Zip => #66
            Disable Timer(DueTime=PT0.05S, Period=PT0S) => #67
            #66, #67 -> Disable SubscribeWhen => #68
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT2S) => #73
            #68, #73 -> TakeUntil
            -> Last => #75
            ExternalizedMapping(Lower(DisplayName="ISI lower bound"), Upper(DisplayName="ISI upper bound"))
            -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=1, Upper=1)
            -> Bonsai.Numerics.Distributions.Sample
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #80
            #75, #80 -> Bonsai.Shaders.Delay(DueTime=PT1S)
            -> Unit
            -> WorkflowOutput
            #75 -> FloatProperty(Value=0) => #84
            SubscribeSubject DrawStimuli
            -> Take(Count=1)
            -> FloatProperty(Value=1) => #87
            #84, #87 -> Merge
            -> MulticastSubject QuadState
        -> Unit
        -> WorkflowOutput
        #0 -> ReplaySubject Parameters(BufferSize=nil)
        -> MulticastSubject TrialParams
    -> Concat => #10
    ExternalizedMapping(Count) => #11
    #10, #11 -> RepeatCount(Count=30)
    -> Last
    -> Bonsai.Shaders.Delay(DueTime=PT10S)
    -> GroupWorkflow EndAcq => #15
        WorkflowInput Source1
        -> BooleanProperty(Value=true)
        -> Bonsai.DAQmx.DigitalOutput
          SignalSource=""
          SampleRate=0
          ActiveEdge=Rising
          SampleMode=ContinuousSamples
          BufferSize=1000
          Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port2/line6))
        -> Delay(DueTime=PT0.004S)
        -> BooleanProperty(Value=false)
        -> Bonsai.DAQmx.DigitalOutput
          SignalSource=""
          SampleRate=0
          ActiveEdge=Rising
          SampleMode=ContinuousSamples
          BufferSize=1000
          Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port2/line6))
        -> WorkflowOutput
    Bonsai.Shaders.Input.KeyDown(Key=Q, Modifiers=Control)
    -> Take(Count=1)
    -> GroupWorkflow EndAcq => #18
        WorkflowInput Source1
        -> BooleanProperty(Value=true)
        -> Bonsai.DAQmx.DigitalOutput
          SignalSource=""
          SampleRate=0
          ActiveEdge=Rising
          SampleMode=ContinuousSamples
          BufferSize=1000
          Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port2/line6))
        -> Delay(DueTime=PT0.004S)
        -> BooleanProperty(Value=false)
        -> Bonsai.DAQmx.DigitalOutput
          SignalSource=""
          SampleRate=0
          ActiveEdge=Rising
          SampleMode=ContinuousSamples
          BufferSize=1000
          Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port2/line6))
        -> WorkflowOutput
    #15, #18 -> Amb
    -> WorkflowOutput
-> Disable Bonsai.Shaders.DelaySubscription(DueTime=PT10S)

WorkflowInput Source1 => #84
ExternalizedMapping(StimulusDuration, InterStimulusInterval, nReps) => #85
#84, #85 -> GroupWorkflow Stimulus
    WorkflowInput Source1 => #0
    -> Disable GroupWorkflow SF0.04TF4 => #1
        WorkflowInput Source1 => #0
        -> GroupWorkflow GratingSpec => #1
            WorkflowInput Source1
            -> DoubleGratingSpecification
              Trials
                DoubleGratingParams(angle_g1=0, angle_g2=120, contrast_g1=1, contrast_g2=0, opacity_g1=1, opacity_g2=0, phase_g1=0, phase_g2=0, temporalFrequency=4, spatialFrequency=0.04)
                DoubleGratingParams
                  angle_g1=30
                  angle_g2=150
                  contrast_g1=1
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=60
                  angle_g2=180
                  contrast_g1=1
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=90
                  angle_g2=210
                  contrast_g1=1
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=120
                  angle_g2=240
                  contrast_g1=1
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=150
                  angle_g2=270
                  contrast_g1=1
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=180
                  angle_g2=300
                  contrast_g1=1
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=210
                  angle_g2=330
                  contrast_g1=1
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams(angle_g1=240, angle_g2=0, contrast_g1=1, contrast_g2=0, opacity_g1=1, opacity_g2=0, phase_g1=0, phase_g2=0, temporalFrequency=4, spatialFrequency=0.04)
                DoubleGratingParams
                  angle_g1=270
                  angle_g2=30
                  contrast_g1=1
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=300
                  angle_g2=60
                  contrast_g1=1
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=330
                  angle_g2=90
                  contrast_g1=1
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
            -> WorkflowOutput
        #0 -> GroupWorkflow PlaidSpec => #2
            WorkflowInput Source1
            -> DoubleGratingSpecification
              Trials
                DoubleGratingParams
                  angle_g1=0
                  angle_g2=120
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=0.5
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=30
                  angle_g2=150
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=0.5
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=60
                  angle_g2=180
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=0.5
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=90
                  angle_g2=210
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=0.5
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=120
                  angle_g2=240
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=0.5
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=150
                  angle_g2=270
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=0.5
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=180
                  angle_g2=300
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=0.5
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=210
                  angle_g2=330
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=0.5
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=240
                  angle_g2=0
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=0.5
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=270
                  angle_g2=30
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=0.5
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=300
                  angle_g2=60
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=0.5
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=330
                  angle_g2=90
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=0.5
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=4
                  spatialFrequency=0.04
            -> WorkflowOutput
        #1, #2 -> Concat
        -> WorkflowOutput
    #0 -> GroupWorkflow SF0.08TF2 => #2
        WorkflowInput Source1 => #0
        -> GroupWorkflow GratingSpec => #1
            WorkflowInput Source1
            -> DoubleGratingSpecification
              Trials
                DoubleGratingParams
                  angle_g1=0
                  angle_g2=120
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.08
                DoubleGratingParams
                  angle_g1=30
                  angle_g2=150
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.08
                DoubleGratingParams
                  angle_g1=60
                  angle_g2=180
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.08
                DoubleGratingParams
                  angle_g1=90
                  angle_g2=210
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.08
                DoubleGratingParams
                  angle_g1=120
                  angle_g2=240
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.08
                DoubleGratingParams
                  angle_g1=150
                  angle_g2=270
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.08
                DoubleGratingParams
                  angle_g1=180
                  angle_g2=300
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.08
                DoubleGratingParams
                  angle_g1=210
                  angle_g2=330
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.08
                DoubleGratingParams
                  angle_g1=240
                  angle_g2=0
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.08
                DoubleGratingParams
                  angle_g1=270
                  angle_g2=30
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.08
                DoubleGratingParams
                  angle_g1=300
                  angle_g2=60
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.08
                DoubleGratingParams
                  angle_g1=330
                  angle_g2=90
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.08
            -> WorkflowOutput
        #0 -> GroupWorkflow PlaidSpec => #2
            WorkflowInput Source1
            -> DoubleGratingSpecification
              Trials
                DoubleGratingParams
                  angle_g1=0
                  angle_g2=120
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.08
                DoubleGratingParams
                  angle_g1=30
                  angle_g2=150
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.08
                DoubleGratingParams
                  angle_g1=60
                  angle_g2=180
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.08
                DoubleGratingParams
                  angle_g1=90
                  angle_g2=210
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.08
                DoubleGratingParams
                  angle_g1=120
                  angle_g2=240
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.08
                DoubleGratingParams
                  angle_g1=150
                  angle_g2=270
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.08
                DoubleGratingParams
                  angle_g1=180
                  angle_g2=300
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.08
                DoubleGratingParams
                  angle_g1=210
                  angle_g2=330
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.08
                DoubleGratingParams
                  angle_g1=240
                  angle_g2=0
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.08
                DoubleGratingParams
                  angle_g1=270
                  angle_g2=30
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.08
                DoubleGratingParams
                  angle_g1=300
                  angle_g2=60
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.08
                DoubleGratingParams
                  angle_g1=330
                  angle_g2=90
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.08
            -> WorkflowOutput

            Disable WorkflowInput Source1
            -> Disable DoubleGratingSpecification
              Trials
                DoubleGratingParams
                  angle_g1=0
                  angle_g2=180
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
            -> Disable WorkflowOutput
        #0 -> GroupWorkflow Blank => #3
            WorkflowInput Source1
            -> DoubleGratingSpecification
              Trials
                DoubleGratingParams(angle_g1=0, angle_g2=0, contrast_g1=0, contrast_g2=0, opacity_g1=0, opacity_g2=0, phase_g1=0, phase_g2=0, temporalFrequency=2, spatialFrequency=0.08)
            -> WorkflowOutput
        #0 -> Disable GroupWorkflow GratingSpec_rep => #4
            WorkflowInput Source1
            -> DoubleGratingSpecification
              Trials
                DoubleGratingParams
                  angle_g1=0
                  angle_g2=120
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=30
                  angle_g2=150
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=60
                  angle_g2=180
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=90
                  angle_g2=210
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=120
                  angle_g2=240
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=150
                  angle_g2=270
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=180
                  angle_g2=300
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=210
                  angle_g2=330
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=240
                  angle_g2=0
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=270
                  angle_g2=30
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=300
                  angle_g2=60
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=330
                  angle_g2=90
                  contrast_g1=0.5
                  contrast_g2=0
                  opacity_g1=1
                  opacity_g2=0
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
            -> WorkflowOutput
        #0 -> Disable GroupWorkflow PlaidSpec_Phase90 => #5
            WorkflowInput Source1
            -> DoubleGratingSpecification
              Trials
                DoubleGratingParams
                  angle_g1=0
                  angle_g2=120
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=90
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=30
                  angle_g2=150
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=90
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=60
                  angle_g2=180
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=90
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=90
                  angle_g2=210
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=90
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=120
                  angle_g2=240
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=90
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=150
                  angle_g2=270
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=90
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=180
                  angle_g2=300
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=90
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=210
                  angle_g2=330
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=90
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=240
                  angle_g2=0
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=90
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=270
                  angle_g2=30
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=90
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=300
                  angle_g2=60
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=90
                  temporalFrequency=2
                  spatialFrequency=0.04
                DoubleGratingParams
                  angle_g1=330
                  angle_g2=90
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=90
                  temporalFrequency=2
                  spatialFrequency=0.04
            -> WorkflowOutput

            Disable WorkflowInput Source1
            -> Disable DoubleGratingSpecification
              Trials
                DoubleGratingParams
                  angle_g1=0
                  angle_g2=180
                  contrast_g1=1
                  contrast_g2=1
                  opacity_g1=1
                  opacity_g2=0.5
                  phase_g1=0
                  phase_g2=0
                  temporalFrequency=2
                  spatialFrequency=0.04
            -> Disable WorkflowOutput
        #0 -> Disable GroupWorkflow Blank_rep => #6
            WorkflowInput Source1
            -> DoubleGratingSpecification
              Trials
                DoubleGratingParams(angle_g1=0, angle_g2=0, contrast_g1=0, contrast_g2=0, opacity_g1=0, opacity_g2=0, phase_g1=0, phase_g2=0, temporalFrequency=2, spatialFrequency=0.04)
            -> WorkflowOutput
        #1, #2, #3, #4, #5, #6 -> Concat
        -> WorkflowOutput
    #1, #2 -> Disable Concat => #3
    SubscribeSubject Random => #4
    #3, #4 -> Bonsai.Numerics.Permutation => #5
    ExternalizedMapping(StimulusDuration, InterStimulusInterval) => #6
    #5, #6 -> CreateObservable
        SubscribeSubject DrawStimuli
        -> Take(Count=1)
        -> FloatProperty(Value=1) => #2
        -> Bonsai.Shaders.Delay(DueTime=PT2S)
        -> FloatProperty(Value=0) => #4
        #2, #4 -> Merge
        -> MulticastSubject QuadState

        SubscribeSubject DrawStimuli => #7
        WorkflowInput Source1
        -> MulticastSubject TrialParams => #9
        -> MemberSelector(Selector=temporalFrequency)
        -> PropertyMapping(TemporalFrequency) => #11
        #9 -> MemberSelector(Selector=angle_g1)
        -> Bonsai.Numerics.DegreeToRadian
        -> PropertyMapping(Angle) => #14
        #9 -> MemberSelector(Selector=spatialFrequency)
        -> PropertyMapping(SpatialFrequency) => #16
        #9 -> MemberSelector(Selector=opacity_g1)
        -> PropertyMapping(Opacity) => #18
        #9 -> MemberSelector(Selector=contrast_g1)
        -> PropertyMapping(Contrast) => #20
        #9 -> MemberSelector(Selector=phase_g1.Value)
        -> Bonsai.Numerics.DegreeToRadian
        -> PropertyMapping(Phase) => #23
        #7, #11, #14, #16, #18, #20, #23 -> IncludeWorkflow => #24
          Path=BonVision:Primitives.DrawGratings.bonsai
          LocationX=-103.5
          LocationY=8
          Layer=-1
          ExtentX=93
          ExtentY=80
          SpatialFrequency=0.08
          TemporalFrequency=2
          Phase=0
          Angle=300
          SquareWave=false
          Contrast=0.5
          DutyCycle=nil
          Radius=1
          Aperture=1
          Opacity=1
        #9 -> MemberSelector(Selector=angle_g2)
        -> Bonsai.Numerics.DegreeToRadian
        -> PropertyMapping(Angle) => #27
        #9 -> MemberSelector(Selector=opacity_g2)
        -> PropertyMapping(Opacity) => #29
        #9 -> MemberSelector(Selector=contrast_g2)
        -> PropertyMapping(Contrast) => #31
        #9 -> MemberSelector(Selector=phase_g2.Value)
        -> Bonsai.Numerics.DegreeToRadian
        -> PropertyMapping(Phase) => #34
        #7, #11, #27, #16, #29, #31, #34 -> IncludeWorkflow => #35
          Path=BonVision:Primitives.DrawGratings.bonsai
          LocationX=-103.5
          LocationY=8
          Layer=-1
          ExtentX=93
          ExtentY=80
          SpatialFrequency=0.08
          TemporalFrequency=2
          Phase=0
          Angle=60
          SquareWave=false
          Contrast=0
          DutyCycle=nil
          Radius=1
          Aperture=1
          Opacity=0
        #24, #35 -> Merge => #36
        ExternalizedMapping(DueTime(DisplayName=StimulusDuration))
        -> Bonsai.Shaders.Timer(DueTime=PT2S) => #38
        #36, #38 -> TakeUntil => #39
        ExternalizedMapping(DueTime(DisplayName=InterStimulusInterval)) => #40
        #39, #40 -> Bonsai.Shaders.Delay(DueTime=PT2S)
        -> WorkflowOutput
    -> Concat => #8
    ExternalizedMapping(Count(DisplayName=nReps)) => #9
    #8, #9 -> RepeatCount(Count=30)
    -> Last
    -> Bonsai.Shaders.Delay(DueTime=PT10S)
    -> GroupWorkflow EndAcq => #13
        WorkflowInput Source1
        -> BooleanProperty(Value=true)
        -> Bonsai.DAQmx.DigitalOutput
          SignalSource=""
          SampleRate=0
          ActiveEdge=Rising
          SampleMode=ContinuousSamples
          BufferSize=1000
          Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port2/line6))
        -> Delay(DueTime=PT0.004S)
        -> BooleanProperty(Value=false)
        -> Bonsai.DAQmx.DigitalOutput
          SignalSource=""
          SampleRate=0
          ActiveEdge=Rising
          SampleMode=ContinuousSamples
          BufferSize=1000
          Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port2/line6))
        -> WorkflowOutput
    Bonsai.Shaders.Input.KeyDown(Key=Q, Modifiers=Control)
    -> Take(Count=1)
    -> GroupWorkflow EndAcq => #16
        WorkflowInput Source1
        -> BooleanProperty(Value=true)
        -> Bonsai.DAQmx.DigitalOutput
          SignalSource=""
          SampleRate=0
          ActiveEdge=Rising
          SampleMode=ContinuousSamples
          BufferSize=1000
          Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port2/line6))
        -> Delay(DueTime=PT0.004S)
        -> BooleanProperty(Value=false)
        -> Bonsai.DAQmx.DigitalOutput
          SignalSource=""
          SampleRate=0
          ActiveEdge=Rising
          SampleMode=ContinuousSamples
          BufferSize=1000
          Channels(DigitalOutputChannelConfiguration(ChannelName="", Grouping=OneChannelForEachLine, Lines=Dev1/port2/line6))
        -> WorkflowOutput
    #13, #16 -> Amb
    -> WorkflowOutput

    Disable SubscribeSubject DrawStimuli
    -> Disable IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-120, Right=120, Bottom=90, Top=-30) => #20
    Disable SubscribeSubject QuadState
    -> Disable PropertyMapping(ColorR(Selector=it), ColorB(Selector=it), ColorG(Selector=it)) => #22
    #20, #22 -> Disable IncludeWorkflow
      Path=BonVision:Primitives.DrawQuad.bonsai
      ExtentX=30
      ExtentY=10
      LocationX=121
      LocationY=87
      Layer=1
      Angle=0
      ColorR=0
      ColorG=0
      ColorB=0
      ColorA=1
-> Bonsai.Shaders.DelaySubscription(DueTime=PT10S)
