WorkflowBuilder(Version=2.7.1)
ExternalizedMapping(PortName(DisplayName="PWM COM"))
-> Bonsai.IO.CreateSerialPort
  Name=ArdPWM
  PortName=COM8
  BaudRate=115200
  Parity=None
  ParityReplace=63
  DataBits=8
  StopBits=One
  Handshake=None
  DiscardNull=false
  DtrEnable=true
  RtsEnable=false
  ReadBufferSize=4096
  WriteBufferSize=2048
  ReceivedBytesThreshold=1

ExternalizedMapping("WHEEL COM")
-> GroupWorkflow Arduino
    ExternalizedMapping(PortName(DisplayName="WHEEL COM"))
    -> Bonsai.IO.CreateSerialPort
      Name=ArduinoSerial
      PortName=COM5
      BaudRate=1000000
      Encoding=us-ascii
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    ExternalizedMapping(PortName)
    -> Bonsai.IO.SerialStringRead(PortName=ArduinoSerial, NewLine=\n)
    -> Parse(Pattern="%i,%i,%i,%i,%i,%i")
    -> Retry => #5
    -> MemberSelector(Selector=Item1)
    -> BehaviorSubject WheelInput
    #5 -> MemberSelector(Selector=Item2)
    -> DistinctUntilChanged
    -> BehaviorSubject LeftLick
    #5 -> MemberSelector(Selector=Item3)
    -> DistinctUntilChanged
    -> BehaviorSubject RightLick
    #5 -> MemberSelector(Selector=Item4)
    -> BehaviorSubject LastSyncPulseTime
    #5 -> MemberSelector(Selector=Item5)
    -> BehaviorSubject Photodiode
    #5 -> MemberSelector(Selector=Item6)
    -> BehaviorSubject ArduinoTime

    Disable Bonsai.IO.CreateSerialPort
      Name=ArduinoPD
      PortName=COM5
      BaudRate=250000
      Encoding=us-ascii
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    Disable Bonsai.IO.SerialStringRead(PortName=ArduinoPD, NewLine=\n)
    -> Disable Parse(Pattern="%i,%i")
    -> Disable Retry
    -> Disable BehaviorSubject PDandAsync
    -> Disable MemberSelector(Selector=Item1)

Disable GroupWorkflow Logging
    GroupWorkflow WheelLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #0
        ExternalizedMapping(Overwrite) => #0
        ExternalizedMapping(Suffix) => #1
        SubscribeSubject FilenamePrefix => #2
        StringProperty(Value=_Wheel) => #3
        #2, #3 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #8
        ExternalizedMapping(Name)
        -> SubscribeSubject WheelLog => #10
        #8, #0, #1, #10 -> Bonsai.IO.CsvWriter(FileName=eddtest_WhiteNoise_Wheel.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")
    Bonsai.Windows.Input.KeyDown(Filter="MButton Back Clear D H L Shift", SuppressRepetitions=false) => #1
    #0, #1 -> SubscribeWhen
    GroupWorkflow VideoLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #3
        SubscribeSubject VideoLog => #0
        ExternalizedMapping(Overwrite) => #1
        ExternalizedMapping(Suffix) => #2
        SubscribeSubject FilenamePrefix => #3
        StringProperty(Value=_Video) => #4
        #3, #4 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #9
        #9, #1, #2, #0 -> Bonsai.IO.CsvWriter(FileName=eddtest_WhiteNoise_Video.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")
    #3, #1 -> SubscribeWhen
    Disable GroupWorkflow PhotodiodeLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #5
        ExternalizedMapping(Overwrite) => #0
        ExternalizedMapping(Suffix) => #1
        SubscribeSubject FilenamePrefix => #2
        StringProperty(Value=_Photodiode) => #3
        #2, #3 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #8
        ExternalizedMapping(Name)
        -> SubscribeSubject PDLog => #10
        #8, #0, #1, #10 -> Bonsai.IO.CsvWriter(FileName=edd_test_Photodiode.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")
    #5, #1 -> Disable SubscribeWhen
    GroupWorkflow TrialLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #7
        SubscribeSubject TrialParams
        -> Parse(Pattern="%s,%i,%i", Separator="") => #1
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #3
        #1, #3 -> Zip => #4
        ExternalizedMapping(Overwrite) => #5
        ExternalizedMapping(Suffix) => #6
        SubscribeSubject FilenamePrefix => #7
        StringProperty(Value=_TrialParams) => #8
        #7, #8 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> PropertyMapping(FileName) => #13
        SubscribeSubject ArduinoTime => #14
        #4, #14 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #16
          Expression: new(Item1.Item1.Item1 as StimulusType, Item1.Item1.Item2 as StimulusDuration, Item1.Item1.Item3 as UpdateTime, Item2 as ArduinoTime, Item1.Item2 as BonsaiTime)
        #13, #5, #6, #16 -> Bonsai.IO.CsvWriter(FileName=eddtest_WhiteNoise_TrialParams.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true, Selector="")
    #7, #1 -> SubscribeWhen
    GroupWorkflow ArduinoStimLogger => #9
        Bonsai.IO.SerialStringRead(PortName=ArdPWM, NewLine=\r\n)
        -> Disable Format(Format={0};, Selector="") => #1
        SubscribeSubject FilenamePrefix => #2
        StringProperty(Value=_ArduinoStimLog) => #3
        #2, #3 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1+it.Item2+".csv"
        -> PropertyMapping(FileName) => #6
        #6, #1 -> Bonsai.IO.CsvWriter(FileName=eddtest_WhiteNoise_ArduinoStimLog.csv, ListSeparator="", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector=it)
        -> WorkflowOutput
    #9, #1 -> SubscribeWhen

    GroupWorkflow WheelLogging
        SubscribeSubject WheelInput => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        SubscribeSubject LastSyncPulseTime => #3
        SubscribeSubject ArduinoTime => #4
        #0, #3, #4, #2 -> Zip => #5
        SubscribeSubject RenderFrameCount => #6
        #5, #6 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as Wheel, Item1.Item2 as LastSyncPulseTime, Item1.Item3 as ArduinoTime, Item1.Item4 as BonsaiTime, Item2 as RenderFrameCount)
        -> BehaviorSubject WheelLog
        -> WorkflowOutput

        IntProperty(Value=0)
        -> MulticastSubject RenderFrameCount

    GroupWorkflow VideoLogging
        SubscribeSubject VideoFrameCount => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        SubscribeSubject ArduinoTime => #3
        SubscribeSubject VideoLEDAsync => #4
        #0, #2, #4 -> Zip => #5
        #5, #3 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as VideoFrameCount, Item1.Item3 as LEDAsync, Item2 as ArduinoTime, Item1.Item2 as BonsaiTime)
        -> BehaviorSubject VideoLog
        -> WorkflowOutput

    Disable GroupWorkflow PhotodiodeLogging
        SubscribeSubject PDandAsync => #0
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
        #0, #2 -> Zip => #3
        SubscribeSubject ArduinoTime => #4
        #3, #4 -> WithLatestFrom
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1 as Photodiode, Item1.Item2 as AsyncPulse, Item2 as BonsaiTime, Item3 as ArduinoTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1.Item1.Item1 as Photodiode, Item1.Item1.Item2 as AsyncPulse, Item1.Item2 as BonsaiTime, Item2 as ArduinoTime)
        -> BehaviorSubject PDLog
        -> WorkflowOutput

GroupWorkflow Video => #5
    Bonsai.Vision.CameraCapture => #0
      Index=0
      CaptureProperties
        CapturePropertyAssignment(Property=Fps, Value=30)
        CapturePropertyAssignment(Property=Saturation, Value=0)
        CapturePropertyAssignment(Property=Exposure, Value=-5)
        CapturePropertyAssignment(Property=Gain, Value=0)
        CapturePropertyAssignment(Property=Contrast, Value=100)
        CapturePropertyAssignment(Property=Brightness, Value=0)
        CapturePropertyAssignment(Property=Sharpness, Value=0)
        CapturePropertyAssignment(Property=Gamma, Value=0)
        CapturePropertyAssignment(Property=Backlight, Value=0)
        CapturePropertyAssignment(Property=FrameWidth, Value=2560)
        CapturePropertyAssignment(Property=FrameHeight, Value=1440)
    -> Bonsai.Vision.Flip(Mode=Both) => #1
    -> ElementIndex
    -> MemberSelector(Selector=Index)
    -> MulticastSubject VideoFrameCount
    #1 -> Disable MemberSelector(Selector=Width)
    #1 -> Disable MemberSelector(Selector=Height)
    #1 -> Disable TimeInterval
    #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=496, Y=0, Width=552, Height=330))
    #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=1968, Y=42, Width=64, Height=78))
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Dsp.Sum
    -> MemberSelector(Selector=Val0)
    -> BehaviorSubject VideoLEDAsync
    SubscribeSubject FilenamePrefix
    -> Format(Format={0}_video.avi, Selector=it)
    -> PropertyMapping(FileName) => #16
    #0, #16 -> Bonsai.Vision.VideoWriter => #17
      FileName=M24018_ScreenFlicker_0b_video.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    Bonsai.Windows.Input.KeyDown(Filter="MButton Back Clear D H L Shift", SuppressRepetitions=false) => #18
    #17, #18 -> SubscribeWhen => #19
    #19, #16 -> Disable Bonsai.FFmpeg.VideoWriter(FileName=eddTest_SDTraining_video.avi, Suffix=Timestamp, Overwrite=false, FrameRate=30, OutputArguments="-vb 15M -vcodec mpeg4")
Bonsai.Windows.Input.KeyDown(Filter="LButton MButton XButton1 Back Tab Clear Return Enter A D E H I L M Shift", SuppressRepetitions=true) => #6
#5, #6 -> SubscribeWhen

ExternalizedMapping(StimulusID(Category=Filename), MouseID(Category=Filename))
-> GroupWorkflow "Generate File Names"
    ExternalizedMapping(Value(DisplayName=StimulusID))
    -> StringProperty(Value=ScreenFlicker_0b) => #1
    ExternalizedMapping(Value(DisplayName=MouseID))
    -> StringProperty(Value=M24018) => #3
    #1, #3 -> Zip
    -> Format(Format={0}_{1}, Selector="Item2,Item1")
    -> BehaviorSubject FilenamePrefix

    SubscribeSubject FilenamePrefix => #7
    -> Format(Format={0}_EyeLog.csv, Selector=it)
    -> BehaviorSubject EyeName
    #7 -> Format(Format={0}_PDAsync.csv, Selector=it)
    -> BehaviorSubject PDname
    #7 -> Format(Format={0}_WheelLog.csv, Selector=it)
    -> BehaviorSubject WheelName
    #7 -> Format(Format={0}_Trial.csv, Selector=it)
    -> BehaviorSubject TrialName
    #7 -> Format(Format={0}_Metadata.csv, Selector=it)
    -> BehaviorSubject MetadataName

GroupWorkflow VarInIt
    Bonsai.Numerics.CreateRandom(Seed=42)
    -> BehaviorSubject Random

    FloatProperty(Value=0)
    -> PublishSubject Sync

    FloatProperty(Value=1)
    -> BehaviorSubject TrialProgress

    IntProperty(Value=0)
    -> BehaviorSubject SyncPulse

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

    IntProperty(Value=0)
    -> BehaviorSubject EyeFrameCount

    BooleanProperty(Value=false)
    -> BehaviorSubject TimerExpired

    StringProperty(Value=C:\Users\saleem_lab\Documents\VisualStimuli_Temp\)
    -> BehaviorSubject "Saving Dir"

    FloatProperty(Value=1)
    -> BehaviorSubject RepCounter

    ExternalizedMapping(Value(DisplayName=binFileName, Category=Filename))
    -> StringProperty(Value=SparseNoise_Log_.bin)
    -> BehaviorSubject "Bin FileName"

    FloatProperty(Value=200)
    -> BehaviorSubject MousePos

    IntProperty(Value=0)
    -> BehaviorSubject VideoFrameCount

    FloatProperty(Value=0.1)
    -> BehaviorSubject DurationSingleImage

Bonsai.Shaders.RenderFrame
-> ElementIndex
-> MemberSelector(Selector=Index)
-> BehaviorSubject RenderFrameCount

Disable ExternalizedMapping(FileName(DisplayName=StimulusCSV))
-> Disable Bonsai.IO.CsvReader(FileName=BacklightModulationStimuli\StimulusGeneration\flickerFreqCSV.csv, ListSeparator=",", ScanPattern=%f, SkipRows=0)
-> Disable Bonsai.Scripting.Expressions.ExpressionTransform
  Expression: it[0]
-> Disable ToArray => #18
-> Disable MemberSelector(Selector=Length)
-> Disable BehaviorSubject nFreqs => #20
#18 -> Disable BehaviorSubject FreqArray => #21
#20, #21 -> Disable Zip
-> Disable BehaviorSubject StimulusCSVLoaded

Disable Bonsai.Numerics.CreateRandom(Seed=42)
-> Disable BehaviorSubject Random

Disable GroupWorkflow TrialLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.")
    SubscribeSubject TrialParamsPath
    -> PropertyMapping(FileName) => #1
    ExternalizedMapping(Overwrite) => #2
    ExternalizedMapping(Suffix) => #3
    SubscribeSubject TrialParams
    -> Parse(Pattern="%s,%i,%i", Separator="") => #5
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #7
    #5, #7 -> Zip => #8
    SubscribeSubject ArduinoTime => #9
    #8, #9 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #11
      Expression: new(Item1.Item1.Item1 as StimulusType, Item1.Item1.Item2 as StimulusDuration, Item1.Item1.Item3 as UpdateTime, Item2 as ArduinoTime, Item1.Item2 as BonsaiTime)
    #1, #2, #3, #11 -> Bonsai.IO.CsvWriter
      FileName=D:\Data\eddtest321\2025-02-26\DotMotionTrialParams.csv
      Delimiter=","
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true
      Selector=""

    IntProperty(Value=0)
    -> BehaviorSubject ArduinoTime

Disable ExternalizedMapping(Count(DisplayName=nReps))
-> Disable GroupWorkflow GenerateRandomStimOrder
    SubscribeSubject nFreqs
    -> Subtract(Operand=IntProperty(Value=1))
    -> PropertyMapping(RangeMax) => #2
    SubscribeSubject nFreqs
    -> PropertyMapping(Count) => #4
    #2, #4 -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, RangeMin=0, RangeMax=10, Count=11)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
      Expression: Convert.ToInt32(it)
    SubscribeSubject Random => #7
    #6, #7 -> Bonsai.Numerics.Permutation => #8
    ExternalizedMapping(Count) => #9
    #8, #9 -> RepeatCount(Count=50)
    -> ToArray
    -> BehaviorSubject StimIndexArray
    -> MemberSelector(Selector=Length)
    -> BehaviorSubject TotalStimulusCount => #14
    SubscribeSubject StimulusCSVLoaded => #15
    #14, #15 -> SubscribeWhen
    -> WorkflowOutput

ExternalizedMapping(ISI)
-> GroupWorkflow GetNextStimFrequency => #30
    Disable SubscribeSubject FreqArray => #0
    Disable SubscribeSubject StimIndexArray => #1
    Disable IntProperty(Value=0) => #2
    Disable ExternalizedMapping(DueTime(DisplayName=ISI)) => #3
    Disable SubscribeSubject StimEnded => #4
    #3, #4 -> Disable Delay(DueTime=PT2S)
    -> Disable IntProperty(Value=1)
    -> Disable Accumulate => #7
    Disable SubscribeSubject TotalStimulusCount
    -> Disable PropertyMapping(Value) => #9
    #7, #9 -> Disable Condition => #10
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> LessThan(Operand=IntProperty(Value=550))
        -> WorkflowOutput
    #2, #10 -> Disable Merge => #11
    #1, #11 -> Disable CombineLatest
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #13
      Expression: Item1[Item2]
    #0, #13 -> Disable CombineLatest
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Item1[Item2]
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToString(it)
    -> Disable WorkflowOutput

    Bonsai.IO.SerialStringRead(PortName=ArdPWM, NewLine=\r)
    -> Parse(Pattern=%i)
    -> Retry
    -> Condition
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=-1))
        -> WorkflowOutput
    -> BehaviorSubject StimEnded

    ExternalizedMapping(DueTime(DisplayName=ISI)) => #23
    SubscribeSubject StimEnded => #24
    #23, #24 -> Delay(DueTime=PT2S)
    -> Unit => #26
    SubscribeSubject StimulusValues => #27
    SubscribeSubject ProbDistArray
    -> PropertyMapping(ProbabilityDistributions) => #29
    SubscribeSubject CurrentState
    -> Disable Take(Count=1)
    -> Condition EnsureCorrectStateIndex
        WorkflowInput Source1 => #0
        SubscribeSubject nStates => #1
        #0, #1 -> CombineLatest
        -> LessThan
        -> WorkflowOutput
    -> PropertyMapping(DistributionIndex) => #33
    #33, #29, #26 -> RandSampleFromIndexedDistribution
      ProbabilityDistributions
        ArrayOfFloat
          float=14.2857141
          float=14.2857141
          float=14.2857141
          float=0
          float=0
          float=0
          float=14.2857141
          float=14.2857141
          float=14.2857141
          float=14.2857141
        ArrayOfFloat(float=10, float=10, float=10, float=10, float=10, float=10, float=10, float=10, float=10, float=10)
      DistributionIndex=0
    -> BehaviorSubject CurrentStimIndex => #35
    #27, #35 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Item1[Item2]
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToString(it)
    -> WorkflowOutput

    IntProperty(Value=0)
    -> MulticastSubject StimEnded
Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false) => #31
ExternalizedMapping(StateTrackingDuration) => #32
ExternalizedMapping(Value(DisplayName=StimDuration))
-> IntProperty(Value=4000)
-> Bonsai.Scripting.Expressions.ExpressionTransform => #35
  Expression: Convert.ToString(it)
ExternalizedMapping(Value(DisplayName=EnvelopeFrequency))
-> IntProperty(Value=1)
-> Bonsai.Scripting.Expressions.ExpressionTransform => #38
  Expression: Convert.ToString(it)
StringProperty(Value=se) => #39
#39, #35, #30, #38 -> CombineLatest
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression: Item1+","+Item2+","+Item3+","+Item4
-> Bonsai.IO.SerialStringWrite(PortName=ArdPWM, NewLine=\r)
-> BehaviorSubject TrialParams => #43
#43, #32 -> SelectMany
    WorkflowInput Source1 => #0
    ExternalizedMapping(DueTime(DisplayName=StateTrackingDuration)) => #1
    #0, #1 -> Delay(DueTime=PT2S)
    -> GroupWorkflow ClasifyTrialAndUpdateCounters
        SubscribeSubject MovMeanWheelSpeed => #0
        WorkflowInput Source1 => #1
        #0, #1 -> TakeUntil
        -> Average
        -> BehaviorSubject MeanRunSpeed => #4
        -> Condition RunTrial?
            WorkflowInput Source1
            -> GreaterThan(Operand=DoubleProperty(Value=3))
            -> WorkflowOutput
        -> IntProperty(Value=1) => #6
        #4 -> Condition StatTrial?
            WorkflowInput Source1
            -> LessThanOrEqual(Operand=DoubleProperty(Value=3))
            -> WorkflowOutput
        -> IntProperty(Value=0) => #8
        #6, #8 -> Merge
        -> First
        -> BehaviorSubject TrialStateClass
        #0 -> FloatProperty(Value=1)
        -> Accumulate => #13
        #13, #1 -> TakeUntil
        -> Last => #15
        ExternalizedMapping(RunMinPropThresh) => #16
        #0, #16 -> Condition OverRunThresh?
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=RunMinPropThresh)) => #1
            #0, #1 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0.5))
            -> WorkflowOutput
        -> FloatProperty(Value=1)
        -> Accumulate => #19
        ExternalizedMapping(StatMaxPropThresh) => #20
        FloatProperty(Value=0) => #21
        #19, #21 -> Merge => #22
        #22, #1 -> TakeUntil
        -> Last => #24
        #24, #15 -> Zip
        -> Divide
        -> BehaviorSubject RunProp
        #0, #20 -> Condition UnderStatThresh?
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=StatMaxPropThresh)) => #1
            #0, #1 -> LessThanOrEqual(Operand=DoubleProperty(Value=3))
            -> WorkflowOutput
        -> FloatProperty(Value=1)
        -> Accumulate => #30
        #30, #21 -> Merge => #31
        #31, #1 -> TakeUntil
        -> Last => #33
        #33, #15 -> Zip
        -> Divide
        -> BehaviorSubject StatProp

        SubscribeSubject TrialCounters
        -> PropertyMapping(TrialCounterArray) => #38
        SubscribeSubject CurrentStimIndex => #39
        SubscribeSubject TrialStateClass => #40
        #40, #39 -> Zip => #41
        #38, #41 -> IncrementStateDependentTrialCounter
          TrialCounterArray
            ArrayOfInt(int=0, int=0, int=0, int=1, int=1, int=1, int=0, int=0, int=0, int=0)
            ArrayOfInt(int=0, int=0, int=0, int=0, int=0, int=0, int=0, int=0, int=0, int=0)
        -> MulticastSubject TrialCounters => #43
        #40, #39, #43 -> Zip
        -> MulticastSubject MonitorTrialCountsSub
        -> WorkflowOutput
-> Disable Concat
-> Disable Repeat => #46
#46, #31 -> SubscribeWhen

ExternalizedMapping(FileName(Category=StimControl), UpdateProbabilityDistsBool(Category=StimControl), scalingFactor(Category=StimControl))
-> GroupWorkflow AdaptiveStimControl
    ExternalizedMapping(FileName(Category=StimControl))
    -> GroupWorkflow GenStimProbDists
        ExternalizedMapping(FileName)
        -> Bonsai.IO.CsvReader(FileName=FlickerFreqs_stimCSVForState.csv, ScanPattern="%f,%f,%f", SkipRows=1) => #1
        -> MemberSelector(Selector=Item1)
        -> ToArray
        -> BehaviorSubject StimulusValues
        #1 -> MemberSelector(Selector=Item2)
        -> ToArray
        -> BehaviorSubject ProbDist1 => #7
        #1 -> MemberSelector(Selector=Item3)
        -> ToArray
        -> BehaviorSubject ProbDist2 => #10
        -> Delay(DueTime=PT1S) => #11
        #7, #11 -> Merge
        -> ToList
        -> Disable ToArray => #14
        -> BehaviorSubject ProbDistArray
        -> MemberSelector(Selector=Count)
        -> Disable MemberSelector(Selector=Length)
        -> BehaviorSubject nStates
        -> BehaviorSubject initCountersSub
        -> WorkflowOutput
        #14 -> BehaviorSubject OriginalProbDistArray
        #10 -> MemberSelector(Selector=Length)
        -> BehaviorSubject nStim

    GroupWorkflow InitTrialCounters
        IntProperty(Value=0)
        -> Take(Count=1) => #1
        SubscribeSubject nStim
        -> PropertyMapping(Count) => #3
        #1, #3 -> RepeatCount(Count=10)
        -> ToArray => #5
        SubscribeSubject nStates
        -> PropertyMapping(Count) => #7
        #5, #7 -> RepeatCount(Count=2)
        -> ToList
        -> Disable ToArray
        -> Disable MemberSelector(Selector=Count)
        -> BehaviorSubject TrialCounters => #12
        SubscribeSubject initCountersSub => #13
        #12, #13 -> SubscribeWhen
        -> WorkflowOutput
        IntProperty(Value=0) => #16
        IntProperty(Value=0) => #17
        #17, #16, #12 -> Zip
        -> Skip(Count=1)
        -> BehaviorSubject MonitorTrialCountsSub => #20
        #20, #13 -> SubscribeWhen

    ExternalizedMapping(UpdateProbabilityDistsBool(Category=StimControl), scalingFactor(Category=StimControl))
    -> GroupWorkflow UpdateProbabilityDists
        SubscribeSubject OriginalProbDistArray => #0
        SubscribeSubject TrialCounters => #1
        #1, #0 -> CombineLatest
        -> Skip(Count=1) => #3
        ExternalizedMapping(scalingFactor) => #4
        #3, #4 -> UpdateProbDistArray(scalingFactor=1E+21)
        -> Condition
            SubscribeSubject UpdateProbDistsBool
            -> WorkflowOutput
        -> MulticastSubject ProbDistArray
        -> WorkflowOutput

        ExternalizedMapping(Value(DisplayName=UpdateProbabilityDistsBool))
        -> BooleanProperty(Value=true)
        -> BehaviorSubject UpdateProbDistsBool

    Disable GroupWorkflow SimulateState
        Disable Timer(DueTime=PT0S, Period=PT2S)
        -> Disable Bonsai.Numerics.CreateRandom(Seed=nil)
        -> Disable Bonsai.Numerics.Distributions.CreateNormal(Mean=0, StdDev=4)
        -> Disable Bonsai.Numerics.Distributions.Sample
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            it < 0 ? 0 :
            1
        -> Disable BehaviorSubject CurrentState
        -> Disable WorkflowOutput

        Disable ExternalizedMapping(Value(DisplayName=CurrentState))
        -> Disable IntProperty(Value=2)
        -> Disable BehaviorSubject CurrentState

    GroupWorkflow MonitorTrialCounts
        GroupWorkflow InitBarGraph => #0
            IntProperty(Value=0) => #0
            Timer(DueTime=PT0S, Period=PT0.1S)
            -> IntProperty(Value=1)
            -> Accumulate => #3
            SubscribeSubject nStim
            -> Subtract(Operand=IntProperty(Value=1))
            -> PropertyMapping(Count) => #6
            #3, #6 -> Take(Count=9) => #7
            #0, #7 -> Merge => #8
            Timer(DueTime=PT0S, Period=PT0.001S)
            -> IntProperty(Value=0) => #10
            SubscribeSubject nStim
            -> PropertyMapping(Count) => #12
            #10, #12 -> Take(Count=10) => #13
            #13, #8 -> Zip
            -> WorkflowOutput
        SubscribeSubject MonitorTrialCountsSub => #1
        -> Condition State1? => #2
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
          Expression: Item3[Item1][Item2]
        #2 -> MemberSelector(Selector=Item2) => #4
        #3, #4 -> Zip => #5
        #1 -> Condition State0? => #6
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
          Expression: Item3[Item1][Item2]
        #6 -> MemberSelector(Selector=Item2) => #8
        #7, #8 -> Zip => #9
        #9, #0 -> Merge => #10
        #5, #0 -> Merge => #11
        #10, #11 -> CombineLatest => #12
        -> MemberSelector(Selector=Item1)
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Item2, ValueSelector=Item1, BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        #12 -> MemberSelector(Selector=Item2)
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Item2, ValueSelector=Item1, BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)

GroupWorkflow CalcWheelSpeed
    SubscribeSubject WheelInput => #0
    SubscribeSubject ArduinoTime => #1
    #0, #1 -> Zip => #2
    -> MemberSelector(Selector=Item1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToSingle(it)
    -> Bonsai.Dsp.Difference(Order=1)
    -> Bonsai.Numerics.Abs
    -> Condition IgnoreOverflowTicks => #7
        WorkflowInput Source1
        -> Bonsai.Dsp.Abs
        -> LessThan(Operand=DoubleProperty(Value=512))
        -> WorkflowOutput
    SubscribeSubject cmPerTick => #8
    #7, #8 -> CombineLatest
    -> Multiply => #10
    #2 -> MemberSelector(Selector=Item2)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToSingle(it)
    -> Bonsai.Dsp.Difference(Order=1)
    -> Divide(Operand=DoubleProperty(Value=1000)) => #14
    #10, #14 -> Zip
    -> Divide
    -> BehaviorSubject RawWheelSpeed => #17
    ExternalizedMapping(TimeSpan(DisplayName=RunningAverageTimeWindow)) => #18
    #17, #18 -> WindowTime(TimeSpan=PT0.05S)
    -> SelectMany
        WorkflowInput Source1
        -> Average
        -> WorkflowOutput
    -> BehaviorSubject MovMeanWheelSpeed => #21
    -> Condition
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=3))
        -> WorkflowOutput
    -> IntProperty(Value=1) => #23
    #21 -> Condition
        WorkflowInput Source1
        -> LessThanOrEqual(Operand=DoubleProperty(Value=3))
        -> WorkflowOutput
    -> IntProperty(Value=0) => #25
    #23, #25 -> Merge
    -> BehaviorSubject CurrentState

    ExternalizedMapping(Value(DisplayName=TicksPerRev))
    -> FloatProperty(Value=1024) => #29
    ExternalizedMapping(Value(DisplayName=WheelDiam))
    -> FloatProperty(Value=19.5) => #31
    FloatProperty(Value=3.14159274) => #32
    #31, #32 -> CombineLatest
    -> Multiply
    -> BehaviorSubject WheelCircumference => #35
    #35, #29 -> CombineLatest
    -> Divide
    -> BehaviorSubject cmPerTick
-> DelaySubscription(DueTime=PT3S)
