<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p2="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:gli="clr-namespace:Bonsai.Shaders.Input;assembly=Bonsai.Shaders"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>SetSave</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>D:\Data\eddtest321\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="ipy:PythonSource">
              <ipy:Script>from System import DateTime,String

@returns(String)
def generate(): 
  yield (DateTime.Now).ToString("yyyy-MM-dd")</ipy:Script>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\Video.avi</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}{1}{2}</Format>
              <Selector>Item1,Item2,Item3</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>VideoPath</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\Flicker_TrialParams.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}{1}{2}</Format>
              <Selector>Item1,Item2,Item3</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialParamsPath</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\Log.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}{1}{2}</Format>
              <Selector>Item1,Item2,Item3</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>LogPath</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\NiDaqInput.bin</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}{1}{2}</Format>
              <Selector>Item1,Item2,Item3</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>NidaqPath</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\VideoBottom.avi</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}{1}{2}</Format>
              <Selector>Item1,Item2,Item3</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>VideoPathBottom</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\ArduinoInput.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}{1}{2}</Format>
              <Selector>Item1,Item2,Item3</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ArduinoInput</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="7" Label="Source2" />
            <Edge From="6" To="7" Label="Source3" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="13" Label="Source1" />
            <Edge From="11" To="13" Label="Source2" />
            <Edge From="12" To="13" Label="Source3" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="19" Label="Source1" />
            <Edge From="17" To="19" Label="Source2" />
            <Edge From="18" To="19" Label="Source3" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="22" To="25" Label="Source1" />
            <Edge From="23" To="25" Label="Source2" />
            <Edge From="24" To="25" Label="Source3" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="28" To="31" Label="Source1" />
            <Edge From="29" To="31" Label="Source2" />
            <Edge From="30" To="31" Label="Source3" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="34" To="37" Label="Source1" />
            <Edge From="35" To="37" Label="Source2" />
            <Edge From="36" To="37" Label="Source3" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="39" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:CreateSerialPort">
          <port:Name>ArduinoAnalog</port:Name>
          <port:PortName>COM3</port:PortName>
          <port:BaudRate>115200</port:BaudRate>
          <port:Encoding>utf-8</port:Encoding>
          <port:NewLine>\n</port:NewLine>
          <port:Parity>None</port:Parity>
          <port:ParityReplace>63</port:ParityReplace>
          <port:DataBits>8</port:DataBits>
          <port:StopBits>One</port:StopBits>
          <port:Handshake>XOnXOff</port:Handshake>
          <port:DiscardNull>true</port:DiscardNull>
          <port:DtrEnable>true</port:DtrEnable>
          <port:RtsEnable>false</port:RtsEnable>
          <port:ReadBufferSize>2048</port:ReadBufferSize>
          <port:WriteBufferSize>2048</port:WriteBufferSize>
          <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialReadLine">
          <port:PortName>ArduinoAnalog</port:PortName>
          <port:NewLine>\n</port:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Arduino</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:AnalogInput">
          <mx:SignalSource />
          <mx:SampleRate>1000</mx:SampleRate>
          <mx:ActiveEdge>Rising</mx:ActiveEdge>
          <mx:SampleMode>ContinuousSamples</mx:SampleMode>
          <mx:BufferSize>1</mx:BufferSize>
          <mx:SamplesPerChannel xsi:nil="true" />
          <mx:Channels>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>Photodiode</mx:ChannelName>
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai3</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>FrameClock</mx:ChannelName>
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai7</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>PockelFeedback</mx:ChannelName>
              <mx:MinimumValue>-5</mx:MinimumValue>
              <mx:MaximumValue>5</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai5</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>Piezo</mx:ChannelName>
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai6</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>ArduinoSync</mx:ChannelName>
              <mx:MinimumValue>-5</mx:MinimumValue>
              <mx:MaximumValue>5</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai4</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Rse</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>LEDStimON</mx:ChannelName>
              <mx:MinimumValue>0</mx:MinimumValue>
              <mx:MaximumValue>5</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai0</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>LEDStimChange</mx:ChannelName>
              <mx:MinimumValue>0</mx:MinimumValue>
              <mx:MaximumValue>5</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai1</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>NIDAQ</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Arduino</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>20</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>@returns(bool)
def process(value):
  mylist = value.split("\t")

  if len(mylist) == 5:
    return True
  else:
    return False

</ipy:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Parse">
        <Pattern>%i\t%i\t%i\t%i\t%i,</Pattern>
        <Separator />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item3</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item4</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item5</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(Item1 as WheelCount, Item2 as Camera, Item3 as Camera2, Item4 as Sync,  Item5 as Time)</scr:Expression>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ArduinoInput</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\Data\eddtest321\2025-03-26\ArduinoInput.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>FileCount</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>WheelInput</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>ArduinoTime</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT10S</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Borders</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Top" Selector="Item1" />
          <Property Name="Bottom" Selector="Item2" />
          <Property Name="Left" Selector="Item3" />
          <Property Name="Right" Selector="Item4" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-150</Left>
        <Right>-57</Right>
        <Bottom>-32</Bottom>
        <Top>48</Top>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
        <ClearColor>Gray</ClearColor>
        <Width xsi:nil="true" />
        <Height xsi:nil="true" />
        <RotationZ>0</RotationZ>
        <RotationY>0</RotationY>
        <RotationX>0</RotationX>
        <FaceSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
        <Width>37.5</Width>
        <Height>30</Height>
        <Rotation>
          <X>0</X>
          <Y>103.99999834060421</Y>
          <Z>0</Z>
        </Rotation>
        <Translation>
          <X>-17.5</X>
          <Y>4</Y>
          <Z>4.2</Z>
        </Translation>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
        <X>0</X>
        <Y>0</Y>
        <Width>1</Width>
        <Height>1</Height>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ElementIndex" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Index</Selector>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>RenderFrameCount</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>TimeStep.ElapsedRealTime</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>LogPath</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.FrameEventLogger.bonsai">
        <Name>Events</Name>
        <Append>false</Append>
        <Overwrite>false</Overwrite>
        <Suffix>FileCount</Suffix>
        <FileName>D:\Data\eddtest321\2025-03-26\Log.csv</FileName>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Name>Metadata</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source2</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>photodiode</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>frameclock</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>pockel</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>piezo</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>sync</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>ledstimon</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>ledstimchange</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\nidaqChannels.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}{1}{2}</Format>
              <Selector>Item1,Item2,Item3</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>D:\Data\eddtest321\2025-03-26\nidaqChannels.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>FileCount</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Gratings</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Ori</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>SFreq</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>TFreq</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Contrast</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\props.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}{1}{2}</Format>
              <Selector>Item1,Item2,Item3</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>D:\Data\eddtest321\2025-03-26\props.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>FileCount</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>rotary1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>rotary2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>camera1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>camera2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>sync</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Saving Dir</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DateDir</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\arduinoChannels.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}{1}{2}</Format>
              <Selector>Item1,Item2,Item3</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>D:\Data\eddtest321\2025-03-26\arduinoChannels.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>FileCount</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="8" Label="Source1" />
            <Edge From="2" To="8" Label="Source2" />
            <Edge From="3" To="8" Label="Source3" />
            <Edge From="4" To="8" Label="Source4" />
            <Edge From="5" To="8" Label="Source5" />
            <Edge From="6" To="8" Label="Source6" />
            <Edge From="7" To="8" Label="Source7" />
            <Edge From="8" To="15" Label="Source1" />
            <Edge From="9" To="12" Label="Source1" />
            <Edge From="10" To="12" Label="Source2" />
            <Edge From="11" To="12" Label="Source3" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="22" Label="Source1" />
            <Edge From="18" To="22" Label="Source2" />
            <Edge From="19" To="22" Label="Source3" />
            <Edge From="20" To="22" Label="Source4" />
            <Edge From="21" To="22" Label="Source5" />
            <Edge From="22" To="29" Label="Source1" />
            <Edge From="23" To="26" Label="Source1" />
            <Edge From="24" To="26" Label="Source2" />
            <Edge From="25" To="26" Label="Source3" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source2" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="36" Label="Source1" />
            <Edge From="32" To="36" Label="Source2" />
            <Edge From="33" To="36" Label="Source3" />
            <Edge From="34" To="36" Label="Source4" />
            <Edge From="35" To="36" Label="Source5" />
            <Edge From="36" To="43" Label="Source1" />
            <Edge From="37" To="40" Label="Source1" />
            <Edge From="38" To="40" Label="Source2" />
            <Edge From="39" To="40" Label="Source3" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="41" To="42" Label="Source1" />
            <Edge From="42" To="43" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>21225772</spk:SerialNumber>
          <spk:ColorProcessing>NoColorProcessing</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT5S</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoPath</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>D:\Data\eddtest321\2025-03-26\Video.avi</cv:FileName>
          <cv:Suffix>FileCount</cv:Suffix>
          <cv:Buffered>false</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>50</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>Video</Format>
        <Selector xsi:nil="true" />
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>21038392</spk:SerialNumber>
          <spk:ColorProcessing>NoColorProcessing</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT5S</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoPathBottom</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>D:\Data\eddtest321\2025-03-26\VideoBottom.avi</cv:FileName>
          <cv:Suffix>FileCount</cv:Suffix>
          <cv:Buffered>false</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>50</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>Video,{0}</Format>
        <Selector>Timestamp</Selector>
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>NidaqPath</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>NIDAQ</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>AnalogIn</Format>
        <Selector xsi:nil="true" />
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>D:\Data\eddtest321\2025-03-26\NiDaqInput.bin</dsp:Path>
          <dsp:Suffix>FileCount</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>RowMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
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          <Name>Events</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CalcWheelSpeed</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>WheelInput</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ArduinoTime</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToSingle(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Difference">
                <dsp:Order>1</dsp:Order>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:Abs" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>IgnoreOverflowTicks</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Abs" />
                  </Expression>
                  <Expression xsi:type="LessThan">
                    <Operand xsi:type="DoubleProperty">
                      <Value>512</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>cmPerTick</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Multiply" />
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToSingle(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Difference">
                <dsp:Order>1</dsp:Order>
              </Combinator>
            </Expression>
            <Expression xsi:type="Divide">
              <Operand xsi:type="DoubleProperty">
                <Value>1000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Divide" />
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RawWheelSpeed</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="TimeSpan" DisplayName="RunningAverageTimeWindow" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WindowTime">
                <rx:TimeSpan>PT0.05S</rx:TimeSpan>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Average" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>MovMeanWheelSpeed</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="DoubleProperty">
                      <Value>3</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="LessThanOrEqual">
                    <Operand xsi:type="DoubleProperty">
                      <Value>3</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CurrentState</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="WheelDiam" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>19.5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>3.14159274</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Multiply" />
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>WheelCircumference</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="TicksPerRev" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>4096</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Divide" />
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>cmPerTick</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="11" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="15" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="19" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="21" To="24" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="26" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source2" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="31" Label="Source1" />
            <Edge From="30" To="31" Label="Source2" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="36" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source2" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>WheelInput</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>StartAcq</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="mx:DigitalOutput">
                <mx:SignalSource />
                <mx:SampleRate>0</mx:SampleRate>
                <mx:ActiveEdge>Rising</mx:ActiveEdge>
                <mx:SampleMode>ContinuousSamples</mx:SampleMode>
                <mx:BufferSize>1000</mx:BufferSize>
                <mx:Channels>
                  <mx:DigitalOutputChannelConfiguration>
                    <mx:ChannelName />
                    <mx:Grouping>OneChannelForEachLine</mx:Grouping>
                    <mx:Lines>Dev1/port1/line0</mx:Lines>
                  </mx:DigitalOutputChannelConfiguration>
                </mx:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="mx:DigitalOutput">
                <mx:SignalSource />
                <mx:SampleRate>0</mx:SampleRate>
                <mx:ActiveEdge>Rising</mx:ActiveEdge>
                <mx:SampleMode>ContinuousSamples</mx:SampleMode>
                <mx:BufferSize>1000</mx:BufferSize>
                <mx:Channels>
                  <mx:DigitalOutputChannelConfiguration>
                    <mx:ChannelName />
                    <mx:Grouping>OneChannelForEachLine</mx:Grouping>
                    <mx:Lines>Dev1/port1/line0</mx:Lines>
                  </mx:DigitalOutputChannelConfiguration>
                </mx:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:DelaySubscription">
          <gl:DueTime>PT5S</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>QuadState</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ColorR" Selector="it" />
          <Property Name="ColorB" Selector="it" />
          <Property Name="ColorG" Selector="it" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
        <ExtentX>10</ExtentX>
        <ExtentY>10</ExtentY>
        <LocationX>-59</LocationX>
        <LocationY>-21</LocationY>
        <Layer>1</Layer>
        <Angle>15</Angle>
        <ColorR>0</ColorR>
        <ColorG>0</ColorG>
        <ColorB>0</ColorB>
        <ColorA>1</ColorA>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="StimulusID" Category="Filename" />
        <Property Name="MouseID" Category="Filename" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Generate File Names</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="StimulusID" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>SineFlicker</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="MouseID" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Edd2pRigTest</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_{1}</Format>
              <Selector>Item2,Item1</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>FilenamePrefix</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FilenamePrefix</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_EyeLog.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>EyeName</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_PDAsync.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>PDname</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_WheelLog.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>WheelName</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_Trial.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialName</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_Metadata.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>MetadataName</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="7" To="10" Label="Source1" />
            <Edge From="7" To="12" Label="Source1" />
            <Edge From="7" To="14" Label="Source1" />
            <Edge From="7" To="16" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="StimulusLocationX" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>VarInIt</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed>42</num:Seed>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Random</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Sync</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialProgress</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>SyncPulse</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>QuadState</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>EyeFrameCount</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TimerExpired</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>Saving Dir</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RepCounter</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>200</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>MousePos</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>VideoFrameCount</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>DurationSingleImage</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimulusXLoc</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Fake Arduino for testing</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Borders</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="TopBorder" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>48</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>Top</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="BottomBorder" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>-32</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>Bottom</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="LeftBorder" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>-150</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>Left</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="RightBorder" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>-57</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>Right</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>Borders</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="12" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="12" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="12" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source4" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>TrialLogger</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="DisplayDevice" />
        <Property Name="WindowState" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DisplayAndResources</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DisplayDevice" />
              <Property Name="WindowState" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>20</gl:Width>
                <gl:Height>20</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Gray</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Normal</gl:WindowState>
                <gl:DisplayDevice>Second</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:TextureResources">
                <gl:Textures>
                  <gl:TextureConfiguration xsi:type="gl:Texture2D">
                    <gl:Name>DynamicVideo</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Nearest</gl:MinFilter>
                    <gl:MagFilter>Nearest</gl:MagFilter>
                  </gl:TextureConfiguration>
                </gl:Textures>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>TrialLogger</Name>
        <Description>Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialParamsPath</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Overwrite" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Suffix" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialParams</Name>
            </Expression>
            <Expression xsi:type="Parse">
              <Pattern>%s,%i,%f</Pattern>
              <Separator />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp.DateTime.TimeOfDay</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ArduinoTime</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(Item1.Item1.Item1 as StimulusType, Item1.Item1.Item2 as StimulusDuration, Item1.Item1.Item3 as FlckerFrequency, Item2 as ArduinoTime, Item1.Item2 as BonsaiTime)</scr:Expression>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>D:\Data\eddtest321\2025-03-26\DotMotionTrialParams.csv</io:FileName>
              <io:Delimiter>,</io:Delimiter>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
              <io:Selector />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="12" Label="Source1" />
            <Edge From="2" To="12" Label="Source2" />
            <Edge From="3" To="12" Label="Source3" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source4" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="WorkflowInput">
          <Name>Source1</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ExternalizedMapping">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>StimulusSelection</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" DisplayName="PWM COM" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:CreateSerialPort">
          <io:Name>ArdPWM</io:Name>
          <io:PortName>COM4</io:PortName>
          <io:BaudRate>115200</io:BaudRate>
          <io:Parity>None</io:Parity>
          <io:ParityReplace>63</io:ParityReplace>
          <io:DataBits>8</io:DataBits>
          <io:StopBits>One</io:StopBits>
          <io:Handshake>None</io:Handshake>
          <io:DiscardNull>false</io:DiscardNull>
          <io:DtrEnable>true</io:DtrEnable>
          <io:RtsEnable>false</io:RtsEnable>
          <io:ReadBufferSize>4096</io:ReadBufferSize>
          <io:WriteBufferSize>2048</io:WriteBufferSize>
          <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="StimulusCSV" />
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>C:\Users\LABadmin\Documents\GitHub\LEDStimulation\BonsaiCode\StimulusCSVFiles\square05flickerFreqCSV.csv</io:FileName>
        <io:ListSeparator>,</io:ListSeparator>
        <io:ScanPattern>%f</io:ScanPattern>
        <io:SkipRows>0</io:SkipRows>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it[0]</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ToArray" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Length</Selector>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>nFreqs</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>FreqArray</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>StimulusCSVLoaded</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:BehaviorSubject">
          <Name>Random</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Count" DisplayName="nReps" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GenerateRandomStimOrder</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>nFreqs</Name>
            </Expression>
            <Expression xsi:type="Subtract">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="RangeMax" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>nFreqs</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
              <Count>2</Count>
              <RangeMin>0</RangeMin>
              <RangeMax>1</RangeMax>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToInt32(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Random</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:Permutation" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Count" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:RepeatCount">
                <rx:Count>50</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimIndexArray</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Length</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TotalStimulusCount</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StimulusCSVLoaded</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="5" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="16" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="StimulusType" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>f</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="StimDuration" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>10000</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Convert.ToString(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ISI" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GetNextStimFrequency</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>FreqArray</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StimIndexArray</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" DisplayName="ISI" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StimEnded</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="SubscribeSubject">
              <Name>TotalStimulusCount</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="LessThan">
                    <Operand xsi:type="IntProperty">
                      <Value>100</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item1[Item2]</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item1[Item2]</scr:Expression>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToString(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringRead">
                <io:PortName>ArdPWM</io:PortName>
                <io:NewLine>\r</io:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Parse">
              <Pattern>%i</Pattern>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Retry" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>-1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimEnded</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="14" Label="Source1" />
            <Edge From="1" To="12" Label="Source1" />
            <Edge From="2" To="11" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="10" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Item1+","+Item2+","+Item3</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>ArdPWM</io:PortName>
          <io:NewLine>\r</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>TrialParams</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="9" To="12" Label="Source1" />
      <Edge From="9" To="13" Label="Source1" />
      <Edge From="9" To="14" Label="Source1" />
      <Edge From="10" To="15" Label="Source1" />
      <Edge From="10" To="20" Label="Source1" />
      <Edge From="11" To="15" Label="Source2" />
      <Edge From="12" To="15" Label="Source3" />
      <Edge From="13" To="15" Label="Source4" />
      <Edge From="14" To="15" Label="Source5" />
      <Edge From="14" To="21" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="19" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="22" To="24" Label="Source1" />
      <Edge From="22" To="39" Label="Source2" />
      <Edge From="22" To="40" Label="Source1" />
      <Edge From="23" To="24" Label="Source2" />
      <Edge From="24" To="27" Label="Source1" />
      <Edge From="24" To="33" Label="Source1" />
      <Edge From="24" To="36" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source2" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="41" To="43" Label="Source1" />
      <Edge From="42" To="43" Label="Source2" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="47" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source2" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="49" To="51" Label="Source1" />
      <Edge From="50" To="51" Label="Source2" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="52" To="55" Label="Source1" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="54" To="55" Label="Source2" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="56" To="57" Label="Source1" />
      <Edge From="58" To="59" Label="Source1" />
      <Edge From="59" To="62" Label="Source1" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="61" To="62" Label="Source2" />
      <Edge From="62" To="63" Label="Source1" />
      <Edge From="64" To="66" Label="Source1" />
      <Edge From="65" To="66" Label="Source2" />
      <Edge From="67" To="68" Label="Source1" />
      <Edge From="69" To="72" Label="Source1" />
      <Edge From="70" To="71" Label="Source1" />
      <Edge From="71" To="72" Label="Source2" />
      <Edge From="73" To="74" Label="Source1" />
      <Edge From="75" To="76" Label="Source1" />
      <Edge From="80" To="81" Label="Source1" />
      <Edge From="83" To="85" Label="Source1" />
      <Edge From="84" To="85" Label="Source2" />
      <Edge From="85" To="86" Label="Source1" />
      <Edge From="87" To="88" Label="Source1" />
      <Edge From="89" To="90" Label="Source1" />
      <Edge From="90" To="91" Label="Source1" />
      <Edge From="91" To="92" Label="Source1" />
      <Edge From="92" To="93" Label="Source1" />
      <Edge From="92" To="95" Label="Source1" />
      <Edge From="93" To="94" Label="Source1" />
      <Edge From="94" To="96" Label="Source1" />
      <Edge From="95" To="96" Label="Source2" />
      <Edge From="96" To="97" Label="Source1" />
      <Edge From="98" To="99" Label="Source1" />
      <Edge From="100" To="101" Label="Source1" />
      <Edge From="102" To="103" Label="Source1" />
      <Edge From="103" To="109" Label="Source1" />
      <Edge From="104" To="105" Label="Source1" />
      <Edge From="105" To="106" Label="Source1" />
      <Edge From="106" To="109" Label="Source2" />
      <Edge From="107" To="108" Label="Source1" />
      <Edge From="108" To="109" Label="Source3" />
      <Edge From="109" To="110" Label="Source1" />
      <Edge From="110" To="111" Label="Source1" />
      <Edge From="111" To="112" Label="Source1" />
      <Edge From="112" To="114" Label="Source1" />
      <Edge From="113" To="114" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>