<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p2="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Second</gl:DisplayDevice>
          <gl:TargetRenderFrequency>0</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:ShaderResources">
          <gl:Shaders />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:MeshResources">
          <gl:Meshes />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:TextureResources">
          <gl:Textures />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="rx:PublishSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Stimulus</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>ProbDistArray</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ProbabilityDistributions" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT2S</gl:DueTime>
                <gl:Period>PT2S</gl:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="SubscribeSubject">
              <Name>CurrentState</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>EnsureCorrectStateIndex</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>nStates</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="LessThan" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DistributionIndex" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:RandSampleFromIndexedDistribution">
                <p1:ProbabilityDistributions>
                  <p1:ArrayOfFloat>
                    <p1:float>26.7815666</p1:float>
                    <p1:float>26.1618919</p1:float>
                    <p1:float>23.0635166</p1:float>
                    <p1:float>23.9930286</p1:float>
                  </p1:ArrayOfFloat>
                  <p1:ArrayOfFloat>
                    <p1:float>17.0634937</p1:float>
                    <p1:float>26.587307</p1:float>
                    <p1:float>36.11111</p1:float>
                    <p1:float>20.2380924</p1:float>
                  </p1:ArrayOfFloat>
                </p1:ProbabilityDistributions>
                <p1:DistributionIndex>0</p1:DistributionIndex>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it == 0 ? 0 :
it == 1 ? 90 :
it == 2 ? 180 :
it == 3 ? 270 :
360
</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:DegreeToRadian" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawStimuli</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Angle" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:Timer">
                            <gl:DueTime>PT1S</gl:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Angle" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
                          <LocationX>0</LocationX>
                          <LocationY>0</LocationY>
                          <Layer>-1</Layer>
                          <Angle>180</Angle>
                          <SpatialFrequency>5</SpatialFrequency>
                          <TemporalFrequency>4</TemporalFrequency>
                          <Phase>0</Phase>
                          <SquareWave>false</SquareWave>
                          <Contrast>1</Contrast>
                          <DutyCycle xsi:nil="true" />
                          <Radius>1</Radius>
                          <Aperture>0</Aperture>
                          <Opacity>1</Opacity>
                          <ExtentX>1</ExtentX>
                          <ExtentY>1</ExtentY>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:TakeUntil" />
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="GroupWorkflow">
                            <Name>SyncON</Name>
                            <Workflow>
                              <Nodes>
                                <Expression xsi:type="WorkflowInput">
                                  <Name>Source1</Name>
                                </Expression>
                                <Expression xsi:type="Combinator">
                                  <Combinator xsi:type="FloatProperty">
                                    <Value>1</Value>
                                  </Combinator>
                                </Expression>
                                <Expression xsi:type="MulticastSubject">
                                  <Name>Sync</Name>
                                </Expression>
                                <Expression xsi:type="WorkflowOutput" />
                              </Nodes>
                              <Edges>
                                <Edge From="0" To="1" Label="Source1" />
                                <Edge From="1" To="2" Label="Source1" />
                                <Edge From="2" To="3" Label="Source1" />
                              </Edges>
                            </Workflow>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:Delay">
                            <gl:DueTime>PT1S</gl:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Disable">
                          <Builder xsi:type="GroupWorkflow">
                            <Name>SyncOFF</Name>
                            <Workflow>
                              <Nodes>
                                <Expression xsi:type="WorkflowInput">
                                  <Name>Source1</Name>
                                </Expression>
                                <Expression xsi:type="Combinator">
                                  <Combinator xsi:type="FloatProperty">
                                    <Value>0</Value>
                                  </Combinator>
                                </Expression>
                                <Expression xsi:type="MulticastSubject">
                                  <Name>Sync</Name>
                                </Expression>
                                <Expression xsi:type="WorkflowOutput" />
                              </Nodes>
                              <Edges>
                                <Edge From="0" To="1" Label="Source1" />
                                <Edge From="1" To="2" Label="Source1" />
                                <Edge From="2" To="3" Label="Source1" />
                              </Edges>
                            </Workflow>
                          </Builder>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="4" Label="Source2" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialCounters</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="TrialCounterArray" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CurrentState</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:IncrementStateDependentTrialCounter">
                <p1:TrialCounterArray>
                  <p1:ArrayOfInt>
                    <p1:int>317</p1:int>
                    <p1:int>319</p1:int>
                    <p1:int>329</p1:int>
                    <p1:int>326</p1:int>
                  </p1:ArrayOfInt>
                  <p1:ArrayOfInt>
                    <p1:int>34</p1:int>
                    <p1:int>31</p1:int>
                    <p1:int>28</p1:int>
                    <p1:int>33</p1:int>
                  </p1:ArrayOfInt>
                </p1:TrialCounterArray>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TrialCounters</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it[1][2]</scr:Expression>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>MonitorTrialCounts</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>InitBarGraph</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Timer">
                            <rx:DueTime>PT0S</rx:DueTime>
                            <rx:Period>PT0.1S</rx:Period>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>1</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:Accumulate" />
                        <Expression xsi:type="SubscribeSubject">
                          <Name>nStim</Name>
                        </Expression>
                        <Expression xsi:type="Subtract">
                          <Operand xsi:type="IntProperty">
                            <Value>1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Count" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>3</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Timer">
                            <rx:DueTime>PT0S</rx:DueTime>
                            <rx:Period>PT0.001S</rx:Period>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>nStim</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Count" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>4</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="8" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="7" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="7" To="8" Label="Source2" />
                        <Edge From="8" To="14" Label="Source2" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="13" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source2" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source2</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source3</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>State0?</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>Item3[Item1][Item2]</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>State1?</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item1</Selector>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>Item3[Item1][Item2]</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="9" Label="Source2" />
                  <Edge From="0" To="14" Label="Source2" />
                  <Edge From="1" To="4" Label="Source3" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="4" To="10" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="8" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="15" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="10" To="12" Label="Source1" />
                  <Edge From="11" To="13" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="viz:BarGraphBuilder">
              <viz:IndexSelector>Item2</viz:IndexSelector>
              <viz:ValueSelector>Item1</viz:ValueSelector>
              <viz:BaseAxis>X</viz:BaseAxis>
              <viz:BarType>Cluster</viz:BarType>
              <viz:Capacity xsi:nil="true" />
              <viz:Min xsi:nil="true" />
              <viz:Max xsi:nil="true" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="viz:BarGraphBuilder">
              <viz:IndexSelector>Item2</viz:IndexSelector>
              <viz:ValueSelector>Item1</viz:ValueSelector>
              <viz:BaseAxis>X</viz:BaseAxis>
              <viz:BarType>Cluster</viz:BarType>
              <viz:Capacity xsi:nil="true" />
              <viz:Min xsi:nil="true" />
              <viz:Max xsi:nil="true" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="7" Label="Source3" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="7" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="7" To="19" Label="Source2" />
            <Edge From="7" To="18" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="20" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="19" To="23" Label="Source1" />
            <Edge From="19" To="24" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="20" To="25" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="25" Label="Source2" />
            <Edge From="24" To="25" Label="Source3" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="25" To="28" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GenStimProbDists</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="FloatProperty">
                  <Value>25</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="FloatProperty">
                  <Value>25</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="FloatProperty">
                  <Value>25</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="FloatProperty">
                  <Value>25</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Merge" />
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="FloatProperty">
                  <Value>100</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="FloatProperty">
                  <Value>0</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="FloatProperty">
                  <Value>0</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Merge" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
                <Property Name="Value" DisplayName="nStim" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="IntProperty">
                  <Value>4</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>nStim</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="Count" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Take">
                  <rx:Count>4</rx:Count>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:ToList" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:ToArray" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>ProbDist1</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Take">
                  <rx:Count>4</rx:Count>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:ToList" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:ToArray" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>ProbDist2</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Delay">
                  <rx:DueTime>PT1S</rx:DueTime>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Merge" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:ToList" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:ToArray" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>ProbDistArray</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>Count</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>Length</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>nStates</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>initCountersSub</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="WorkflowOutput" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>OriginalProbDistArray</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="io:CsvReader">
              <io:FileName>Example_SDstim_ori.csv</io:FileName>
              <io:ScanPattern>%f,%f,%f</io:ScanPattern>
              <io:SkipRows>1</io:SkipRows>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ProbDist1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item3</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ProbDist2</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToList" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:ToArray" />
              </Builder>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ProbDistArray</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Count</Selector>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>Length</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>nStates</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>initCountersSub</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>OriginalProbDistArray</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Length</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>nStim</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source4" />
            <Edge From="1" To="4" Label="Source3" />
            <Edge From="2" To="4" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="14" Label="Source1" />
            <Edge From="5" To="9" Label="Source4" />
            <Edge From="6" To="9" Label="Source3" />
            <Edge From="7" To="9" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="18" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="13" To="18" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="23" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source2" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="25" To="32" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="33" To="35" Label="Source1" />
            <Edge From="33" To="38" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="42" Label="Source1" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="40" To="52" Label="Source1" />
            <Edge From="41" To="42" Label="Source2" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="44" To="45" Label="Source1" />
            <Edge From="44" To="51" Label="Source1" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="46" To="47" Label="Source1" />
            <Edge From="47" To="48" Label="Source1" />
            <Edge From="48" To="49" Label="Source1" />
            <Edge From="49" To="50" Label="Source1" />
            <Edge From="52" To="53" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitTrialCounters</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>nStim</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:RepeatCount">
                <rx:Count>4</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:ToList" />
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>nStates</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:RepeatCount">
                <rx:Count>2</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToList" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:ToArray" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>Count</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialCounters</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>initCountersSub</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="15" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="UpdateProbabilityDistsBool" />
        <Property Name="scalingFactor" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>UpdateProbabilityDists</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>OriginalProbDistArray</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialCounters</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="scalingFactor" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:UpdateProbDistArray">
                <p1:scalingFactor>4</p1:scalingFactor>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>UpdateProbDistsBool</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ProbDistArray</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="UpdateProbabilityDistsBool" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>UpdateProbDistsBool</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SimulateState</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT2S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateNormal">
                <p2:Mean>0</p2:Mean>
                <p2:StdDev>4</p2:StdDev>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:Sample" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it &lt; 0 ? 0 :
1
</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CurrentState</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
                <Property Name="Value" DisplayName="CurrentState" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="IntProperty">
                  <Value>2</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject">
                <Name>CurrentState</Name>
              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>