<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT1S</rx:DueTime>
          <rx:Period>PT0.2S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialCounters</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="TrialCounterArray" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="CurrentState" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="DistributionIndex" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ProbDistArray</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ProbabilityDistributions" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:RandSampleFromIndexedDistribution">
          <p1:ProbabilityDistributions>
            <p1:ArrayOfFloat>
              <p1:float>20</p1:float>
              <p1:float>20</p1:float>
              <p1:float>20</p1:float>
              <p1:float>20</p1:float>
              <p1:float>20</p1:float>
            </p1:ArrayOfFloat>
            <p1:ArrayOfFloat>
              <p1:float>0</p1:float>
              <p1:float>0</p1:float>
              <p1:float>100</p1:float>
              <p1:float>0</p1:float>
              <p1:float>0</p1:float>
            </p1:ArrayOfFloat>
          </p1:ProbabilityDistributions>
          <p1:DistributionIndex>0</p1:DistributionIndex>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:IncrementStateDependentTrialCounter">
          <p1:TrialCounterArray>
            <p1:ArrayOfInt>
              <p1:int>2</p1:int>
              <p1:int>1</p1:int>
              <p1:int>2</p1:int>
              <p1:int>3</p1:int>
              <p1:int>0</p1:int>
            </p1:ArrayOfInt>
            <p1:ArrayOfInt>
              <p1:int>0</p1:int>
              <p1:int>0</p1:int>
              <p1:int>0</p1:int>
              <p1:int>0</p1:int>
              <p1:int>0</p1:int>
            </p1:ArrayOfInt>
          </p1:TrialCounterArray>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>TrialCounters</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it[1][2]</scr:Expression>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>MonitorTrialCounts</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>InitBarGraph</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT0S</rx:DueTime>
                      <rx:Period>PT0.1S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Accumulate" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>nStim</Name>
                  </Expression>
                  <Expression xsi:type="Subtract">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>4</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT0S</rx:DueTime>
                      <rx:Period>PT0.001S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>nStim</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>5</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="8" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="7" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="14" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="13" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source2</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source3</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>State0?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item3[Item1][Item2]</scr:Expression>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>State1?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item3[Item1][Item2]</scr:Expression>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="9" Label="Source2" />
            <Edge From="0" To="14" Label="Source2" />
            <Edge From="1" To="4" Label="Source3" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="4" To="10" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="15" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="13" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="viz:BarGraphBuilder">
        <viz:IndexSelector>Item2</viz:IndexSelector>
        <viz:ValueSelector>Item1</viz:ValueSelector>
        <viz:BaseAxis>X</viz:BaseAxis>
        <viz:BarType>Cluster</viz:BarType>
        <viz:Capacity xsi:nil="true" />
        <viz:Min xsi:nil="true" />
        <viz:Max xsi:nil="true" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="viz:BarGraphBuilder">
        <viz:IndexSelector>Item2</viz:IndexSelector>
        <viz:ValueSelector>Item1</viz:ValueSelector>
        <viz:BaseAxis>X</viz:BaseAxis>
        <viz:BarType>Cluster</viz:BarType>
        <viz:Capacity xsi:nil="true" />
        <viz:Min xsi:nil="true" />
        <viz:Max xsi:nil="true" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GenStimProbDists</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>20</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>20</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>20</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>20</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>20</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>100</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="nStim" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>nStim</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>5</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:ToList" />
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ProbDist1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>5</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:ToList" />
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ProbDist2</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToList" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:ToArray" />
              </Builder>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ProbDistArray</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Count</Selector>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>Length</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>nStates</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>initCountersSub</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>OriginalProbDistArray</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="5" Label="Source5" />
            <Edge From="1" To="5" Label="Source4" />
            <Edge From="2" To="5" Label="Source3" />
            <Edge From="3" To="5" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="16" Label="Source1" />
            <Edge From="6" To="11" Label="Source5" />
            <Edge From="7" To="11" Label="Source4" />
            <Edge From="8" To="11" Label="Source3" />
            <Edge From="9" To="11" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="20" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="15" To="20" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="25" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="27" To="34" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitTrialCounters</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>nStim</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:RepeatCount">
                <rx:Count>5</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:ToList" />
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>nStates</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:RepeatCount">
                <rx:Count>2</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToList" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:ToArray" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>Count</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialCounters</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>initCountersSub</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="15" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>OriginalProbDistArray</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialCounters</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="scalingFactor" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:UpdateProbDistArray">
          <p1:scalingFactor>2</p1:scalingFactor>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DelaySubscription">
          <rx:DueTime>PT10S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>ProbDistArray</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="9" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="12" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="10" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="9" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source3" />
      <Edge From="9" To="11" Label="Source2" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="11" To="15" Label="Source1" />
      <Edge From="11" To="16" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="12" To="17" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="17" Label="Source2" />
      <Edge From="16" To="17" Label="Source3" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="17" To="20" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="24" To="26" Label="Source2" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="28" Label="Source1" />
      <Edge From="27" To="28" Label="Source2" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>